"macro heterodosy3D"
"***************************************************************"
"heterodosy3D -							" 
"	This is an apptype macro for dosy3D experiments		"
"	Changes here will be reflected in all experiments	"
"		with this apptype				"
"	All apptype macros have 4 sections 			"
"	  (setup, acquistion, process, display)			"
"	Changes over these default values should be done using	"
"	pslabel_setup or wrtp feature				"
"	This macro is typically called by cpsetup		"
"***************************************************************"

"**********************************************"
IF ($1 = 'setup') THEN

	"The following are REQUIRED modules for dosy2D"
  module('combine','presat wet gradient cpmg par2D heterodosy3D',newmodules):newmodules
  module($1)

"**********************************************"
ELSEIF ($1 = 'acquisition') THEN

if ($# < 2) then $2='' endif
if ($2 = $0 or $2 = 'hetero2D') then $update=1 else $update=0 endif

    "Protect sw,sw1 and sw2 if oldapptype=apptype or when oldapptype='hetero2D'"
if $update=1 then Plock('obsSW f1SW f2SW'):$dum endif 

seqfil=seqfil
if tn=dn then dn='C13' endif
if (tn <> 'H1') and (tn <> 'F19') then dn='H1' endif
if (numrfch > 2) then
   if (dn2=dn) or (dn2='') then
        if (dn='N15') then dn2='C13' else dn2='N15' endif
   endif
endif
refsource1='dfrq'

pw(90)
dm='nnn' dmm='ccg' d2=0
if (dn='H1') then dmm='ccw' endif
                "Decoupler is safely turned OFF"
                "Individual experiments should turn them ON via"
                "rtx or wrtp"
setdecpars

  " If any character in the satmode parameter is set to y "
  " satmode parameter is reset to yy (double character).  "
  " They should be corrected to appropriate multicharacter value"
  " by wrtp or pslabel_setup macro "

" strstr(wet,'y'):$iswet "
" if ($iswet) then wet='y' else wet='n' endif "
strstr(satmode,'y'):$issatmode
if ($issatmode) then satmode='yy' else satmode='nn' endif

  sspul=PFGflg
  ss=32 ni=128 pw=pw90
  at=0.15
  if (np > 4096) then np=4096 endif
  sw=sw
        "If needed, phase will be reset by rtx or pslabel_setup macro"
  phase=1

  exists('prgpwr','parameter'):$e
  if $e then
    prgpwr=tpwr-8
  endif

if (dn='C13') then
  setsw1(dn,160,-10)
elseif (dn='N15') then
  setN15sw('sw1')
elseif (dn='H1') then
    setsw1(dn,10,0)
else
    setsw1(dn,100,-100)
endif
j1xh=146
jnxh=8
if (dn='N15') then j1xh=90 endif

" --- setup array or check for gradient min or max values --- "
  exists('gzlvl1_inc','parameter'):$e3
  if not $e3 then create('gzlvl1_inc','real') gzlvl1_inc=15 endif

  exists('gzlvl1_max','parameter'):$e5
  if not $e5 then create('gzlvl1_max','real') endif
  setlimit('gzlvl1_max',32767.0,-32767.0,1.0) gzlvl1_max=32500

  exists('gzlvl1_min','parameter'):$e4
  if not $e4 then create('gzlvl1_min','real') endif
  setlimit('gzlvl1_min',32767.0,-32767.0,1.0) gzlvl1_min=0.04*gzlvl1_max

  exists('gzlvl_max','parameter'):$ex
    if $ex>0 then
          gzlvl_max=32767
          setlimit('gzlvl_max',32767.0,-32767.0,1.0)
    endif

  exists('gzlvlhs','parameter'):$ex
    if $ex>0 then
          gzlvlhs=6000
          setlimit('gzlvlhs',32767.0,-32767.0,1.0)
    endif

" --- adjust for performa I --- "
  $ss=''
  substr(gradtype,3,1):$ss
  if $ss='l'
  then
    setlimit('gzlvl1',2047.0,-2047.0,1.0)
    setlimit('gzlvl1_min',2047.0,-2047.0,1.0)
    setlimit('gzlvl1_max',2047.0,-2047.0,1.0)
    setlimit('gzlvlhs',2047.0,-2047.0,1.0)
    gzlvl1_max=2047  gzlvl1_min=0.04*gzlvl1_max
    exists('gzlvl_max','parameter'):$ex
    if $ex>0 then
          gzlvl_max=2047
          setlimit('gzlvl_max',2047.0,-2047.0,1.0)
    endif
    exists('gzlvl2','parameter'):$ex
    if $ex>0 then
      setlimit('gzlvl2',2047.0,-2047.0,1.0)
    endif
    exists('gzlvl3','parameter'):$ex
    if $ex>0 then
      setlimit('gzlvl3',2047.0,-2047.0,1.0)
    endif
  endif

   fixgrd(10):gzlvlE
   gtE=0.0015
   EDratio=sfrq/dfrq
   if (tn = 'H1') then
        getparam('gHratio',dn):EDratio
   elseif (dn = 'H1') then
        $EDratio=1/EDratio
        getparam('gHratio',dn):$EDratio
        EDratio=1/$EDratio
   endif

  exists('kappa','parameter'):$ex
  if $ex then
     gzlvl1_max=gzlvl1_max/(1+kappa)
     gzlvl1_min=0.04*gzlvl1_max/(1+kappa)
  endif
  exists('tweek','parameter'):$ex
  if $ex then
     gzlvl1_max=gzlvl1_max/(1+tweek)
     gzlvl1_min=0.04*gzlvl1_max/(1+tweek)
  endif

fixgrd(12):gzlvlhs hsgt=.002
gt1=0.002
setrc
setup_dosy('panelread')

"****************************************************************************"

        "--------------------------------------------------"
        "   Module specific parameter setup   "
if (apptype = $0) then module($1) endif
        "--------------------------------------------------"

"**********************************************"
ELSEIF ($1 = 'process') THEN
        "--------------------------------------------------"
        "   Module specific parameter setup   "
if (apptype = $0) then module($1) endif
        "--------------------------------------------------"

    module('add','parlp parlp1 parlp2','basic')

"**********************************************"
ELSEIF ($1 = 'display') THEN
        "--------------------------------------------------"
        "   Module specific parameter setup   "
if (apptype = $0) then module($1) endif
        "--------------------------------------------------"
plt2Darg
full
if (wc > wc2) then wc=wc2 else wc2=wc endif
ai th=2 vs2d=200
intmod='off'

ENDIF
"**********************************************"

