 Dbppste - Bipolar gradient pulses stimulated echo sequence
	ref : J. Magn. Reson. Ser. A, 115, 260-264 (1995).

parameters:
	delflag   - 'y' runs the Dbppste sequence
                    'n' runs the normal s2pul sequence
        del       -  the actual diffusion delay
        gt1       - total diffusion-encoding pulse width
        gzlvl1    - diffusion-encoding pulse strength
        gstab     - gradient stabilization delay (~0.0002-0.0003 sec)
        satmode   - 'y' turns on presaturation during d1 
                      and/or during the diffusion delay
        satfrq    - presaturation frequency
        satdly    - saturation delay (part of d1)
        satpwr    - saturation power
        wet       - flag for optional wet solvent suppression
	alt_grd   - flag to invert gradient sign on alternating scans
			(default = 'n')
       lkgate_flg - flag to gate the lock sampling off  during  
                              gradient pulses
        sspul     - flag for a GRD-90-GRD homospoil block
        gzlvlhs   - gradient level for sspul
        hsgt      - gradient duration for sspul
        ncomp     - determines the number of components to be used in fitting
                        the signal decay in DOSY when dosyproc='discrete'.
        nugflag   - 'n' uses simple mono- or multi-exponential fitting to
                        estimate diffusion coefficients
                    'y' uses a modified Stejskal-Tanner equation in which the
                        exponent is replaced by a power series
     nugcal_[1-5] - a 5 membered parameter array summarising the results of a
                        calibration of non-uniform field gradients. Used if
                        nugcal is set to 'y'
                        requires a preliminary NUG-calibration by the 
                        Doneshot_nugmap sequence
        dosyproc  - 'discrete' - invokes monoexponential fitting with dosyfit if 
                        ncomp=1, and multiexponential fitting with the external
                        programme SPLMOD if ncomp>1.
                    'continuous' invokes processing with the external programme
                        CONTIN and gives a continuous distribution
                        in the diffusion domain.
     dosypypoints - 'n' divides the spectrum into individual peaks, creating one 
                        cross-peak for each individual peak found in the 1D spectrum
                    'y' performs a diffusion fit for every point in the displayed
                        region of the spectrum that lies above the threshold th
           probe_ - stores the probe name used for the dosy experiment
