 Dbppste_ghsqcse 
	Sensitivity enhanced phase sensitive gradient selected HSQC
         with a bppste diffusion filter
Literature reference:
	S. Rajagopalan, C. Chow, V. Vinodhkumar, C. G. Fry and S. Cavagnero:
          J. Biomol. NMR. 29. 505-516 2004.

Parameters:
        d1      - relaxation delay
        pw      - 90 degrees 1H pulse
        tpwr    - 1H pulse power
        pwx i   - 90degrees X pulse
        pwxlvl  - X pulse power level
        j1xh    - 1JXH in Hz (140 for 1H-13C)
        xhn     - '2','1' or '3' flag for signal selection in reverse INEPT
                   sensitivity enhancement factors for different
                   X-multiplicities against normal gHSQC:
	            '1': CH(enh):2.0     CH2(enh):1.0     CH3(enh):1.0
                    '2': CH(enh):1.71    CH2(enh):1.41    CH3(enh):1.21 best for all
                    '3': CH(enh):1.5     CH2(enh):1.37    CH3(enh):1.25
        sspul   - flag for a GRD-90-GRD homospoil block
        gzlvlhs - gradient level for sspul
        hsgt    - gradient duration for sspul
        gtE     - gradient time for coherence selection in seconds
        gzlvlE  - gradient amplitude for coherence selection
        EDratio - Encode/Decode ratio
        gstab   - delay for stability (~ 0.0003 seconds)
        edit    - 'y' makes multiplicity selection (CH & CH3 same sign
                         CH2s opposite sign)
        f1180   - flag to set inital delay for t1 for phase (-90,180)
        satmode - 'y' or 'n' turns presat on or off
        satfrq  - transmitter frequency for presat
        satpwr  - transmitter power for presat
        satdly  - duration of presaturation in seconds
        wet     - flag for optional wet solvent suppression
        del     - diffusion delay
        gzlvl1  - gradient level for diffusion
        gt1     - gradient duration for gzlvl1
        alt_grd - flag to invert diffusion gradient sign on alternating scans
                        (default = 'n')
     lkgate_flg - flag to gate the lock sampling off  during
                              gradient pulses
        nugflag - 'n' uses simple mono- or multi-exponential fitting to
                        estimate diffusion coefficients
                  'y' uses a modified Stejskal-Tanner equation in which the
                        exponent is replaced by a power series
   nugcal_[1-5] - a 5 membered parameter array summarising the results of a
                      calibration of non-uniform field gradients. Used if
                      nugcal is set to 'y'
                      requires a preliminary NUG-calibration by the 
                      Doneshot_nugmap sequence
     dosy3Dproc - 'y' calls dosy with 3D option for phase sensitive 
                        experiments (phase=1,2; set automatically)
         probe_ - stores the probe name used for the dosy experiment

Run the phase sensive 2D HSQC spectra in the same experiment.
  set array as: array='gzlvl1,phase'

peter sandor 25. nov. 2005 
