    Dcosyidosy.c - pulsed field gradient COSY (magnitude mode) 
	with coherence transfer pathway selection pulses 
	separated by delay del to give diffusion encoding 
	with full gcosy sensitivity 
 
    Nilsson M, Gil AM, Delgadillo I, Morris GA. Chem. Commun. 2005 1737-1739. 
	 
Parameters: 
	del - the actual diffusion delay. 
	gt1 - total diffusion-encoding pulse width. 
     gzlvl1 - gradient amplitude (-32768 to +32768) 
     gzlvl2 - gradient amplitude for coherence selection (-32768 to +32768) 
	gt2 - gradient duration for coherence selection in seconds (0.001) 
      gstab - optional delay for stability 
  alt_grd   - flag to invert gradient sign on alternating scans
                        (default = 'n')
 lkgate_flg - flag to gate the lock sampling off during    
                              gradient pulses
       del2 - delay parameter that can shift the convection compensation
                    sequence elements off the center of the pulse sequence
                    allowing to run a velocity profile
                    can also be negative but in absolute value cannot exceed
                    del/2 minus the gradient and gradient-stabilization delays
                    (default value for diffusion measurements is zero)
    satmode - 'yn' turns on presaturation during satdly
	      'yy' turns on presaturation during satdly and del
	      the presauration happens at the transmitter position
	      (set tof right if presat option is used)
     satdly - presatutation delay (part of d1) 
     satpwr - presaturation power 
        wet - flag for optional wet solvent suppression
      sspul - flag for a GRD-90-GRD homospoil block
    gzlvlhs - gradient level for sspul
       hsgt - gradient duration for sspul
      phase - 1 (selects echo N-type coherence selection; default) 
              2 (selects antiecho P-type coherence selection)  
   convcomp - 'y': selects convection compensated cosyidosy
              'n': normal cosyidosy
  nugflag   - 'n' uses simple mono- or multi-exponential fitting to
                  estimate diffusion coefficients
              'y' uses a modified Stejskal-Tanner equation in which the
                  exponent is replaced by a power series
nugcal_[1-5] - 5 membered parameter array summarising the results of a
                  calibration of non-uniform field gradients. Used if
                  nugcal is set to 'y'
                  requires a preliminary NUG-calibration by the 
                  Deoneshot_nugmap sequence
 dosy3Dproc - 'ntype' calls dosy with 3D option with N-type selection
              'ptype' calls dosy with 3D option with P-type selection 
     probe_ - stores the probe name used for the dosy experiment
