Dgcstecosy.c - diffusion ordered- pulsed field gradient COSY (magnitude mode)
			with the option of double quantum filtering

Ref: JMR, 123 (Series A) 88-91 (1996).

Parameters:
        delflag - 'y' runs the Dgcstecosy sequence
                  'n' runs the normal gcosy sequence
	del     - the actual diffusion delay
	gt1	- total diffusion encoding pulse width
	gzlvl1	- diffusion encoding pulse strength
        gstab   - gradient stabilization time (~0.0002-0.0003 sec)
	tweek   - tuning factor to limit eddy currents, 
                   ( can be set from 0 to 1, usually set to 0.0 )
	gzlvl2  - gradient power for pathway selection
	gt2     - gradient duration for pathway selection
        sspul   - flag for a GRD-90-GRD homospoil block
        gzlvlhs - gradient level for sspul
        satmode - 'yn' turns on presaturation during satdly
                  'yy' turns on presaturation during satdly and del
                  the presauration happens at the transmitter position
                  (set tof right if presat option is used)
         satdly - presatutation delay (part of d1)
         satpwr - presaturation power
            wet - flag for optional wet solvent suppression
        hsgt    - gradient duration for sspul
        alt_grd - flag to invert gradient sign on alternating scans
                        (default = 'n')
     lkgate_flg - flag to gate the lock sampling off during    
                              gradient pulses
	qlvl    - quantum filter level (1=single quantum, 2=double quantum)

      nugflag   - 'n' uses simple mono- or multi-exponential fitting to
                        estimate diffusion coefficients
                 'y' uses a modified Stejskal-Tanner equation in which the
                        exponent is replaced by a power series
   nugcal_[1-5] - a 5 membered parameter array summarising the results of a
                      calibration of non-uniform field gradients. Used if
                      nugcal is set to 'y'
                      requires a preliminary NUG-calibration by the 
                      Deoneshot_nugmap sequence
     dosy3Dproc - 'ntype' calls dosy with 3D option with N-type selection
         probe_ - stores the probe name used for the dosy experiment
