Dgcstehmqc.c - Diffusion ordered - Pulsed Field Gradient HMQC
                    AV version: uses four gradients - all set separately

Ref: H. Barjat, G. A. Morris and A. Swanson: JMR, 131, 131-138 (1998)

Parameters:
	del       - the actual diffusion delay
	gt1	  - total diffusion encoding pulse width
	gzlvl1	  - diffusion encoding pulse strength
	gtE	  - coherence pathway selection gradient length in HMQC
	gzlvlE	  - gradient power for gtE
	gstab	  - gradient stabilization time (~0.2-0.3 ms)
        sspul     - flag for a GRD-90-GRD homospoil block
        gzlvlhs   - gradient level for sspul
        hsgt      - gradient duration for sspul
        alt_grd   - flag to invert gradient sign on alternating scans
                        (default = 'n')
       lkgate_flg - flag to gate the lock sampling off during    
                              gradient pulses
	pwx	  - 90 deg. X-pulse
	pwxlvl	  - power level for pwx
	j1xh	  - one-bond H-X coupling constant
        jnxh      - multiple-bond H-X coupling constant (for mbond='y')
	mbond	  - flag to select multiple-bond correlations (HMBC)
	c180	  - flag to make the 180 deg. X-pulse a composite pulse
        satmode   - presaturation flag
                        'yn' activates presatr during satdly
                        'yy' activates presat during satdly and del
        satfrq    - saturation frequency
        satdly    - saturation delay
        satpwr    - saturation power
        wet       - flag for optional wet solvent suppression

        nugflag   - 'n' uses simple mono- or multi-exponential fitting to
                              estimate diffusion coefficients
                    'y' uses a modified Stejskal-Tanner equation in which the
                        exponent is replaced by a power series
     nugcal_[1-5] - a 5 membered parameter array summarising the results of a
                        calibration of non-uniform field gradients. Used if
                        nugcal is set to 'y'
                        requires a preliminary NUG-calibration by the 
                        Deoneshot_nugmap sequence
       dosy3Dproc - 'ntype' calls dosy with 3D option with N-type selection
           probe_ - stores the probe name used for the dosy experiment
