Dgcstehmqc_ps.c - Diffusion ordered - HMQC
        phase sensitive version using States-Haberkorn (phase=1,2) 
        acqisition. No gradient selection is used for the HMQC step
        Use it for one-bond X-H correlations

  Parameters:
	del       - the actual diffusion delay
	gt1	  - total diffusion encoding pulse width
	gzlvl1	  - diffusion encoding pulse strength
        gstab     - gradient stabilizarion delay
	pwx	  - 90 deg. X-pulse
	pwxlvl	  - power level for pwx
	j1xh	  - one-bond H-X coupling constant
	c180	  - flag to make the 180 deg. X-pulse a composite pulse
        satmode   - flag for optional solvent presaturation
                    'ynn' - does presat during satdly
                    'yyn' - does presat during satdly and the diffusion delay
        satdly    - presaturation delay before the sequence (part of d1)
        satpwr    - saturation power level
        satfrq    - saturation frequency
        wet       - flag for optional wet solvent suppression
        alt_grd   - alternate gradient sign(s) for odd scans
       lkgate_flg - flag to gate the lock sampling off during 
                              gradient pulses
        sspul     - flag for a GRD-90-GRD homospoil block
        gzlvlhs   - gradient level for sspul
        hsgt      - gradient duration for sspul
        phase     - 1,2 for States-Haberkorn acquisition
        nugflag   - 'n' uses simple mono- or multi-exponential fitting to
                              estimate diffusion coefficients
                    'y' uses a modified Stejskal-Tanner equation in which the
                        exponent is replaced by a power series
     nugcal_[1-5] - a 5 membered parameter array summarising the results of a
                        calibration of non-uniform field gradients. Used if
                        nugcal is set to 'y'
                        requires a preliminary NUG-calibration by the 
                        Doneshot_nugmap sequence
       dosy3Dproc - 'y' calls dosy with 3D option for phase sensitive 
                        experiments (phase=1,2; set automatically)
           probe_ - stores the probe name used for the dosy experiment

Run the phase sensive 2D HMQC spectra in the same experiment.
Set the array as follows:
	array='gzlvl1,phase'
