*******************************************************************************
dosyfit	(C)	fits 2D or 3D DOSY data to obtain diffusion coefficients,
                amplitudes and statistics
*******************************************************************************
NAME
	dosyfit (C)

SYNOPSIS
	dosfit
	dosyfit('version')
	dosyfit('3D')
	dosyfit('3D', avgnoise)

DESCRIPTION
	dosyfit performs monoexponential least squares fitting on signal
intensities from 2D and 3D datasets, summarising the results in various files.

OPTIONS
	dosyfit takes 0, 1, or 2 arguments: 'version' returns the version 
number of the software, '3D' invokes processing of cross-peak volumes stored
in the files peaks.bin.<n> rather than peak heights stored in the
file dosy_in. In the case of 3D processing, the parameter avgnoise allows
correction for the average baseplane noise in absolute value data.

FILES
	curexp+'/dosy/dosy_in'
	curexp+'/diffusion_display.inp'
	curexp+'/dosy/diffusion_display_3D.inp' 
	curexp+'/dosy/diffusion_spectrum
	curexp+'/dosy/fit_errors' 
	curexp+'/dosy/general_dosy_stats'
	curexp+'/peaks.bin'
	curexp+'/peaks.bin.<n>'

SEE ALSO
	ddif
	dosy

COPYRIGHT
	Copyright (c) 2009 
