*******************************************************************************
nugcal (P)	  a parameter array containing calibration information from 
		  calibration of non-uniform field gradients
*******************************************************************************
NAME
	nugcal (P)

SYNOPSIS
	nugcal is an array with elements gcal,c1,c2,c3,c4	

DESCRIPTION 
	nugcal is a parameter array summarising the results of a
calibration of non-uniform field gradients. The first value is the gradient
calibration value gcal used; c1-c4 are the coefficients of a fourth order
power series in the exponent of the Stejskal-Tanner equation. 

	nugcal is a global parameter specific for a a given probe and pulse
sequence. The parameter nugcal_ is a local copy that is set when a dosy experiment
is run, to ensure that the correct parameters are available for subsequent
processing if nugflag='y'.

OPTIONS

FILES

SEE ALSO
	dosy
	nugcalib
	nugflag

COPYRIGHT
	 (c) 2009 


