"macro combds"
" ******************************************************"
" combds(spectrum,red,green,blue) - show spectrum associated with a cell "
" ******************************************************"
 vp=15 full sp=0 wp=10p
  select($1)  $vs=vs 
  dss($1,'dodc') dscale dpir

 numreg:$imax
if $2<=$imax then
  getreg($2):$f2,$f1
  cr=$f1 delta=$f1-$f2
  vp=75
  $hzcm=wp/wc
  $end=wcmax-(delta/$hzcm)*2-1
  sc=$end wc=2*delta/$hzcm
  sp=cr-delta wp=delta
  vsadj vs=vs/3
  dssn($1) dscale
endif

if $3<=$imax then
  getreg($3):$f2,$f1
  cr=$f1 delta=$f1-$f2
  $end=(delta/$hzcm)*2-1
  sc=sc-15-$end wc=2*delta/$hzcm
  sp=cr-delta wp=delta
  vsadj vs=vs/3
  dssn($1) dscale
endif

if $4<=$imax then
  getreg($4):$f2,$f1
  cr=$f1 delta=$f1-$f2
  $end=(delta/$hzcm)*2-1
  sc=sc-5-$end wc=2*delta/$hzcm
  sp=cr-delta wp=delta
  vsadj vs=vs/3
  dssn($1) dscale
endif

vs=$vs
