"macro dsvast"

$gluename=''
$numcols=0

if $# > 0 then if typeof('$1') then $gluename=$1 else $numcols=$1 endif
  if $#>1 then $numcols=$2 endif 
endif


" find glue file in userdir, then in systemdir"

if ($gluename <> '') then
	$gluefile=userdir+'/templates/glue/'+$gluename
        exists($gluefile,'file'):$e
  if ($e < 0.5) then
	$gluefile=systemdir+'/templates/glue/'+$gluename   
  endif
endif

if $gluename='' then $order=glueorderarray $numscans=size('glueorderarray') 
else
  exists($gluefile,'file'):$e
  if $e then
   lookup('file',$gluefile)
   lookup('read'):$numscans
   if $numscans > 96 then
     write('line3','glue file has error, > 96')
     abort
   endif

   $order=0
   $i=1
   repeat
   lookup('read'):$num
   $order[$i]=$num
   $i=$i+1
   until $i > $numscans
  else write('line3','Order file does not exist') endif
endif

"determine modulo number, if possible"
"if $numscans <= 12 then $numcols=$numscans endif "
if $numscans <= 12 then $numcols=1 endif
if $numcols=0 then
  $i=1
  $incr=$order[2]-$order[1]
  repeat
  $diff=$order[$i+1]-$order[$i]
  if $diff=$incr then $done=(1=0) else $done=(1=1) endif
  $i=$i+1
  until $done or $i>=$numscans

  if $i < $numscans then $numcols=$i-1 else $numcols=8 endif
endif
  

   
$glueorderarraysize=size('glueorderarray')
$inverseorder=0
$i=1
repeat
  $j=1
  repeat
    $match=glueorderarray[$j]=$order[$i]
    if $match then $inverseorder[$i]=$j   endif
    $j=$j+1
  until (($match) or ($j>$glueorderarraysize))
  $i=$i+1
until $i > $numscans 
write('graphics',0,0,''):$htchar
clear(2)
$vp=vp
$numrows=trunc($numscans/$numcols+.99)
$vpinc=wc2max/$numrows
$scinc=wcmax/$numcols
vp=wc2max-$vpinc
wc=0.95*wcmax/$numcols
sc=wcmax-wc
$i=1
$scol='H','G','F','E','D','C','B','A'
$srow=''
repeat
  dssn($inverseorder[$i])
  $loc=$order[$i]
  $row=trunc(($loc+7)/8)
  format($row,1,0):$srow
  $col= $loc - ($row-1)*8
  $lab=$scol[$col]+$srow
  write('graphics',wcmax-sc-wc,vp-$htchar,$lab)
  if $i mod $numcols = 0 then sc=wcmax-wc vp=vp-$vpinc else sc=sc-$scinc endif
  $i=$i+1
until $i >$numscans
if $numcols=1 then vp=vp + $vpinc dscale endif
vp=$vp
 
