"macro parvast"
if traymax=96 or traymax=768 then

exists('startwell','parameter'):$e2
if not $e2 then
   create('startwell','integer')
endif
setgroup('startwell','display')

exists('endwell','parameter'):$e3
if not $e3 then
   create('endwell','integer')
endif
setgroup('endwell','display')

exists('startshift','parameter'):$e4
if not $e4 then
    create('startshift','real')
endif
setgroup('startshift','display')

exists('endshift','parameter'):$e5
if not $e5 then
    create('endshift','real')
endif
setgroup('endshift','display')

exists('lcdisplay','parameter'):$e6
if not $e6 then
    create('lcdisplay','string')
endif

exists('ni','parameter'):$e1
if not $e1 then
   par2D
   fn1=2 sw1=1
   ni=1
   setgroup('ni','processing')
   exists('ni','parameter','processed'):$e2
   if $e2 then
     setvalue('ni',1,'processed')
   endif
endif

exists('plateglue','parameter'):$e1
if not $e1 then
   create('plateglue','string')
endif
setgroup('plateglue','display')

endif
