"macro read_plateglue"

if $#>0 then
    if typeof('$1') then
      $gluename=$1
      $gluename?
    else
      write('error','plate name needs to be a string')
    endif
endif
$plateglue=userdir+'/templates/glue/'+$gluename
$plateglue?

exists($plateglue,'file'):$e1
if not $e1 then
    write('error','Plate glue file, %s, not found',$plglue)
    return
endif

$loco=''
$numb=0
lookup('file',$plateglue)
lookup('read'):$num
$num?

$count=1
$rack=vrack
$zone=vzone
repeat
    lookup('read'):$loco
    $loco?

    if $count=1 then
       getsqdata($rack,$zone,'',$loco,pslabel)
    else
       getsqdata($rack,$zone,'',$loco,pslabel,'','append')
    endif

    $count=$count+1
until $count>$num
