"macro Mimage_format"
"*******************************************************************"
"                                                                   "
"   Mimage_format - to format images for processing                 "
"                                                                   "
"*******************************************************************"

exists('fidformat','parameter'):$e
  if ($e <> 0) then
     if (fidformat = 'flashc(\'ms\',ns)' )then
       flashc('ms',ns)
       return
     elseif (fidformat = 'rarec' )then
       rarec
       return   
     elseif (fidformat = 'flashc(\'mi\',ns)' )then
       flashc('mi',ns)
       return
     endif
  endif
if (seqfil='gems') or (seqfil='Sgems') then 
  if (seqcon = 'nccnn') then
     flashc('ms',ns)
  endif
endif
if (seqfil='angio') then 
  if (seqcon = 'nccnn') then
     flashc('mi',ns)
  endif
endif
if (seqfil='gemssat') or (seqfil='gemspi') then 
  if (seqcon = 'nccnn') then
     flashc('ms',ns)
  endif
endif
if (seqfil='gess')  then 
  if (seqcon = 'nccnn') or (seqcon = 'nscnn') then
     flashc('ms',ns)
  endif
endif
if (seqfil = 'fsems') or (seqfil = 'fsemsdw') then rarec endif

"****************************************************************************"
"                      Modification History				     "
"001219(ss) Bug fixed: flashc for angio, multi slice			     "
"000120(ss) parameter fidformat checked for formatting			     "
"									     "
"****************************************************************************"
