"macro Mmarkvoxel"
" Mmarkvoxel - Voxel planning panel "

graphis:$displaymode

"Set up for voxel planning"
if ($displaymode = 'dconi') then
  if (crmode = 'c') then
    menu('voxel_plan') dconi('restart') dconi('toggle')
  else
    menu('voxel_plan') dconi('restart') 
  endif
else
    menu('voxel_plan') dconi('again') 
endif

"clear markers and exit"
if ($1 = 'reset') then
  voxmark('reset') dconi('again')
  abort
endif

$size = size('t_mark')
if ($size > 1  and  $size mod 4 <> 0) then
  write('error','%s',
      'WARNING: Inconsistent voxel mark information, please clear first')
else
  voxmark dconi('restart')
  drawvox voxplan
endif
