"macro Mprescan_power"

"***************************************************************"
" Mprescan_power                                                "
"                                                               "
"***************************************************************"

"** Retrieve standard SEMS parameters *********************"

sems
"** transverse avoids RF inhomogeneity at edges"
orient='trans'

"** initialize resto and rfcoil"
ldrf
imprep

if (tpwr2 < 5) then tpwr2=5 endif
tpwrcal(tpwr2-5,tpwr2+5)
   
if (tr < 2) then tr=2 endif 
ss = 2

wexp = 'Mupdatepulsecal Mprescan'
prescan[1] = 2
au

