"macro Mprofile3d"

"***************************************************************"
"                                                               "
" Mprofile3d - Collects and displays a profile                    "
"                                                               "
"***************************************************************"

"** initialize some parameters "
exists('nv','parameter'):$ex
if ($ex) then 
	exists('nv_1','parameter'):$e
	if ($e = 0) then 
		create('nv_1','integer') 
	endif
	nv_1 = nv
	nv = 0 
endif
exists('nv2','parameter'):$ex
if ($ex) then 
	exists('nv_2','parameter'):$e
	if ($e = 0) then 
		create('nv_2','integer') 
	endif
	nv_2 = nv2
	nv2 = 0 
endif

ldrf
"imprep"   "**** cannot use imprep!!!! ****"

wexp = 'av ft f full vp=0 vsadj nv=nv_1 nv2=nv_2 ds dscale'

au

