"macro _orient"
" @(#)_orient	8.1 4/16/93   Spectroscopy Imaging Systems"
"**********************************************************"
"  _orient: Macro to set Euler angles from entry of orient "
"                parameter.                                "
"**********************************************************"



"-- Constants ---------------------------------------------"
$prog = '_orient: '
$bit16 = 32767


"-- Case 1:  Transverse plane -----------------------------"
if (orient='trans') then psi=0 phi=0 theta=0 endif


"-- Case 2:  Coronal plane --------------------------------"
if (orient = 'cor') then
    psi = 0
    phi = 0
    theta = 90
endif


"-- Case 3:  Sagittal plane -------------------------------"
if (orient = 'sag') then
    psi=90
    phi=0
    theta=90
endif

if (orient = '3orthogonal') then
    array=''
    psi=0,0,90
    phi=0,0,0
    theta=0,90,90
endif
if (orient = 'sag90') then
    psi=90
    phi=90
    theta=90
endif
if (orient = 'cor90') then
    psi=0
    phi=90
    theta=90
endif
if (orient = 'trans90') then
    psi=0
    phi=90
    theta=0
endif

"-- Case 4:  Oblique plane --------------------------------"
if (gradstepsz < $bit16) and (orient = 'oblique') then
    write('error',$prog+'Oblique planes not supported with 12 bit DACs')
    abort
endif
