"macro checkprofile"



//checkprofile macro uses profile flags and sw to check for residual profile parameters
//it will be used only if profile mode was used and some residual parameters were left hanging
create('profile_combo','flag','current','n')
create('profile_ovs','flag','current','n')
create('profile_vox','flag','current','n')
create('specnt','integer','current',4)
create('specsw','real','current',4000)
create('specgain','real','current',2)
create('specnp','real','current',4096)
create('specws','flag','current','y')
create('specwsrf','flag','current','n')
create('arraySave','string','current','')

if (profile_ovs='y' or profile_vox='y' or profile_combo='y' or sw>90000) then 

write('line3','turning off profile option...') 
profile_ovs='n'
profile_vox='n'
profile_combo='n'
write('line3','resetting parameters back to spec..') 
sw=specsw
np=specnp
nt=specnt
wsrf=specwsrf
ws=specws 
gain=specgain
array=arraySave

endif

