"macro crushpars"
$params = 'crush','crushro'
$params = $params,'crushir','crushmt','crushfs','crushsat','crushtag'
$params = $params,'spoil'

$n = size('$params')

$inx = 1
repeat
  "Check & create amplitude parameter"
  $var = 'g' + $params[$inx]
  exists($var,'parameter'):$ex
  if ($ex = 0) then
    create($var)
    {$var} = 1 "default to 1G/cm"
    {$var} = 'n'    "but set it to 'off'"
  endif

  "Check & create duration parameter"
  $var = 't' + $params[$inx]
  exists($var,'parameter'):$ex
  if ($ex = 0) then
    create($var,'delay')
    {$var} = 0.001  "default to 1ms"
    {$var} = 'n'    "but set it to 'off'"
  endif
  
  $inx = $inx + 1
until $inx > $n


