"macro decctool"
" ******************************************************"
" *** decctool - Used to start up decctool from Vnmr ***"
" *** and establish connection between decctool and  ***"
" *** Vnmr.					     ***"
" ******************************************************"
$e=0
exists('enabled','parameter','global'):$e
if ($e<0.5) then
   create('enabled','flag','global')
   setgroup('enabled','processing','global')
   setenumeral('enabled',2,'n','y','global')
endif
if (size('enabled')<>52) then
   $i=1
   while ($i<53) do
      enabled[$i]='n'
      $i=$i+1
   endwhile
endif
exists('o_enabled','parameter','global'):$e
if ($e<0.5) then
   create('o_enabled','flag','global')
   setgroup('o_enabled','processing','global')
   setenumeral('o_enabled',2,'n','y','global')
endif
if (size('o_enabled')<>52) then
   $i=1
   while ($i<53) do
      o_enabled[$i]='n'
      $i=$i+1
   endwhile
endif
exists('taus','parameter','global'):$e
if ($e<0.5) then
   create('taus','real','global')
   setgroup('taus','processing','global')
endif
if (size('taus')<>52) then
   array('taus',52,0.001,0.0)
endif
exists('o_taus','parameter','global'):$e
if ($e<0.5) then
   create('o_taus','real','global')
   setgroup('o_taus','processing','global')
endif
if (size('o_taus')<>52) then
   array('o_taus',52,0.001,0.0)
endif
exists('ampls','parameter','global'):$e
if ($e<0.5) then
   create('ampls','real','global')
   setgroup('ampls','processing','global')
endif
if (size('ampls')<>52) then
   array('ampls',52,0.001,0.0)
endif
exists('o_ampls','parameter','global'):$e
if ($e<0.5) then
   create('o_ampls','real','global')
   setgroup('o_ampls','processing','global')
endif
if (size('o_ampls')<>52) then
   array('o_ampls',52,0.001,0.0)
endif
exists('limits','parameter','global'):$e
if ($e<0.5) then
   create('limits','real','global')
   setgroup('limits','processing','global')
endif
if (size('limits')<>8) then
   array('limits',8,0.001,0.0)
endif
exists('o_limits','parameter','global'):$e
if ($e<0.5) then
   create('o_limits','real','global')
   setgroup('o_limits','processing','global')
endif
if (size('o_limits')<>8) then
   array('o_limits',8,0.001,0.0)
endif
exists('scales','parameter','global'):$e
if ($e<0.5) then
   create('scales','real','global')
   setgroup('scales','processing','global')
endif
if (size('scales')<>10) then
   array('scales',10,0.001,0.0)
endif
exists('o_scales','parameter','global'):$e
if ($e<0.5) then
   create('o_scales','real','global')
   setgroup('o_scales','processing','global')
endif
if (size('o_scales')<>10) then
   array('o_scales',10,0.001,0.0)
endif
exists('deccflag','parameter','global'):$e
if ($e<0.5) then
   create('deccflag','real','global')
   setgroup('deccflag','processing','global')
endif
if (size('deccflag')<>10) then
   array('deccflag',10,0.001,0.0)
endif
deccflag[1]=1
deccflag[3]=1
deccflag[5]=1
deccflag[7]=1

exists('deccpurgemsg','parameter','global'):$e
if ($e<0.5) then
   create('deccpurgemsg','string','global')
   setgroup('deccpurgemsg','processing','global')
endif
exists('decctool_fln','parameter','global'):$e
if ($e<0.5) then
   create('decctool_fln','string','global')
   setgroup('decctool_fln','processing','global')
endif
exists('deccorig_fln','parameter','global'):$e
if ($e<0.5) then
   create('deccorig_fln','string','global')
   setgroup('deccorig_fln','processing','global')
endif

decc_load('.'+sysgcoil)

vnmrjcmd('popup','mode:modeless','file:decctool.xml','rebuild:yes','location:topMenuBar','help:/vnmr/jhelp/dialog/decctool.html','title:DeccTool')

