"macro diff_jones30"
zero_gf

// Use temporary variables $dro, $dpe, $dsl to avoid
// errors about unequal array sizes for dro, dpe, dsl

// Start with a b=0
$dro = 0
$dpe = 0
$dsl = 0

$dro = $dro, 1,     0.166,-0.110, 0.901,-0.169,-0.815
$dro = $dro, 0.656, 0.582, 0.900, 0.693, 0.357, 0.543
$dro = $dro,-0.525,-0.639,-0.330,-0.524, 0.609, 0.220
$dro = $dro,-0.004,-0.511, 0.414,-0.679, 0.884, 0.262
$dro = $dro, 0.088, 0.294, 0.887, 0.257, 0.086, 0.863

$dpe = $dpe, 0,     0.986, 0.664,-0.419,-0.601,-0.386
$dpe = $dpe, 0.366, 0.800, 0.259,-0.698,-0.924,-0.488
$dpe = $dpe,-0.396, 0.689,-0.013,-0.783,-0.065,-0.233
$dpe = $dpe,-0.910, 0.627, 0.737, 0.139,-0.296, 0.432
$dpe = $dpe, 0.185,-0.907,-0.089,-0.443, 0.867, 0.504

$dsl = $dsl, 0,     0,     0.740,-0.110, 0.781, 0.433
$dsl = $dsl, 0.660, 0.143, 0.350, 0.178,-0.140,-0.683
$dsl = $dsl, 0.753, 0.341,-0.944, 0.335,-0.791,-0.947
$dsl = $dsl,-0.415,-0.589, 0.535,-0.721, 0.362, 0.863
$dsl = $dsl,-0.979, 0.302,-0.453, 0.859,-0.491,-0.025

dro = $dro
dpe = $dpe
dsl = $dsl

set_gf_array

create('nbval','real','current',0)
create('nbzero','real','current',0)
create('nbdirs','real','current',0)
create('dstart','real','current',0)
nbval=1
nbzero=1
nbdirs=30
