"macro epirs"
"***********************************************************************"
" epirs - macro to reverse the data in every other spectrum in the	"
"	datafile.  It is assumed a ft1d has been run.			"
"       odd or even echoes can be chosen, default is odd"
" Usage: epirs(<'o'><'e'>)"

"***********************************************************************"

"echoes 1,2,...nv"
$i=1

if($# > 0) then
  if($1 = 'o') then
    $i =1
  elseif ($1 = 'e') then
    $i = 2
  endif
endif
while ($i <= nv) do
  rsapply($i)
  $i = $i + 2
endwhile

"************************************************************************"
"                     Modification History"

" 990423 - odd,even echoes can be reversed"

"************************************************************************"

