"macro fm_shimall"
"MACRO FOR FULLY AUTOMATED FASTMAP SHIMMING PROCEDURE"

$flag=0

if r1=1 then
  $flag=1
  fm_calcshim(1) 
  fm_showmap 
  fm_setshims 
  fm_dacload
  fm_setmap(1)
  epi='y'
  tau=0.0055
endif

if r1=2 then
  $flag=1
  fm_calcshim(1) 
  fm_showmap 
  fm_setshims 
  fm_dacload
  fm_setmap(2)
endif

if r1=3 then
  $flag=1
  fm_calcshim(2) 
  fm_showmap 
  fm_setshims 
  fm_dacload
  tr=1 
  fm_setmap(2)
  au
endif

if r1=4 then
  $flag=1
  fm_calcshim(2) 
  fm_showmap 
  fm_setshims 
  fm_dacload 
  write('line3','AUTOMATED SHIMMING WAS PERFORMED')
  abort
endif

if ($flag=0) then
  r1=r1+1
  write('line3','ERROR, SHIMMING ABORTED!')
  abort
endif

r1=r1+1
dg
au
