"macro im2D"
"********************************************************************
"
"
" NAME:
"    im2D
"
" DESCRIPTION:
"    Setup and processing for 2D imaging sequences
"
"**********************************************************"
" Parse input                                              "
"**********************************************************"
"Default options"
$action = 'prep'
$action2     = ''
if ($# > 0) then
  $action = $1
endif
if ($# > 1) then
  $action2 = $2
endif

exists('recon','parameter'):$exrecon
if ($exrecon) then $recon = recon else $recon = 'internal' endif

"**********************************************************"
" Setup                                                    "
"**********************************************************"
if ($action = 'prep') then

  if ($action2 = 'shim') then 
    im2D('prep','profile') 
    return 
  endif

  ldrf     "Set resto = H1offset"
  setgro   "Set readout gradient and bandwidth"
  calcdim  "Set array & arraydim parameters"

  seqcon('pe'):$pe  "is seqcon c or s for phase encode?"

  if ($pe = 'c') then ss=0 else ss=ssc endif

  "Set up real-time recon (for VnmrJ) if compressed in PE"
  wnt = ''  "default"
  if ($action2 = '') then
    on('execprocess'):$proc
    if ($proc = 1 ) then
      if ($pe = 'c') then
        if (arraydim > 1) then
          if ($recon = 'internal') OR ($recon = '') then   "use internal recon_all"        
            wnt = 'aipDeleteData recon_all wnt=`recon_all(\'acq\')`'
          endif
        endif
      endif
    endif
  endif
      
  if ($action2 = 'profile') then
    profile = 'y'
    sl=1 ec=1 rc=1 slices='single'
    wexp    = 'im2D(`proc`,`profile`)'
    wdone   = ''
    werr    = ''
  else
    profile = 'n' 
    exists('slprofile','parameter'):$ex
    if ($ex > 0) then
      slprofile='n'
    else
      create('slprofile','flag')
    endif

  endif "profile prep"

  setloop                           // update nf, nfmod and ni

  aipXrecon('getnvols'):volumes     // set the number of data volumes

 "Execute any sequence specific preparation"
  execseq('prep')

endif

"**********************************************************"
" Processing & Display                                     "
"**********************************************************"
if ($action = 'proc') then

  if ($action2 = 'profile') then
    cf=1 vp=0
    aipXrecon('nrcvrs'):$nr
    if ($recon = 'internal') OR ($recon = '') then   "use internal ft"
      lp=np*90
      if (arraydim = $nr) then
        av ft('nf',1) f full vsadj dscale 
        if (ne > 1) then dssh(1,ne,1) endif
      else
        av ft f full vsadj dscale dssh(1,arraydim,$nr)
      endif
    else  "external recon"
      lp=0
      im2Dxrecon('reconprofile')
    endif
    return
  endif "profile proc"

  if (wnt = '') then  "not real-time recon"
    aipDeleteData
    aipSplitWindow(aipWindowSplit[1], aipWindowSplit[2])
    if ($recon = 'internal') OR ($recon = 'off') OR ($recon = '') then   "use internal recon_all"
      recon_all
    else  "external recon"
      im2Dxrecon('recon')
    endif
  else
    wnt=''
    setvalue('wnt','','processed') "otherwise <Reprocess> wont work"
  endif

  $vp = ''
  xm1('vp'):$vp
  "Review VP"
  if ($vp = 'review') then
    aipData='reprocessed'
  endif
 
  execseq('proc')  "Execute any sequence specific processing"


"**********************************************************"
" Gain                                                     "
"**********************************************************"
elseif ($action = 'prescan') then              // Enter through execprescan
  im2D('gain','init')
elseif ($action = 'gain') then
  $gainstart = 0                               // Set low gain to acquire data
  $gainfraction = Prescan_GainScale/100        // fraction of ADC to fill
  $gainmax = 40
  $paramfile = curexp+'/tempparams'            // store some parameters to be reset after prescan
  $paramlist = 'nt,ssc,ss,array,arraydim'

  if ($action2 = 'init') then                  // initialize params and acquire data
    im2D('prep','profile')                     // set up for profile
    nfmod = nf
    writeparam($paramfile,$paramlist)          // back up parameters to be reset after processing
    nt = 1
    $tr = tr
    exists('trseg','parameter'):$ex
    if ($ex) then max(tr,trseg):$tr endif        // for segmented sequences, use trseg instead of tr
    $ss = 1/(2*$tr) + 2                          // estimate ss based on TR
    $seqcon = ''
    substr(seqcon,3,1):$seqcon
    if ($seqcon = 'c') then ssc = $ss else ss = $ss endif
    gain = $gainstart
    wnt = ''
    wdone = ''
    werr = ''
    wexp = 'im2D(\'gain\',\'proc\')'
    au

  elseif ($action2 = 'proc') then              // process gain scan when complete
    cf='n'                                     // cf=n tells fidmax to look at entire data block
    fidmaxarray:$fidmax                        // find highest data value
    $factor = $gainfraction*32767/$fidmax
    ln($factor):$ln
    $gain = 20*$ln/2.303                       // calculate gain change based on fidmax and gainfraction
    gain = $gain + $gainstart                  // set computed gain, then reset gain params
    if (gain > $gainmax) then
      gain = $gainmax
    endif
    readparam($paramfile,$paramlist)           // restore original parameter values
    cf = 1
    prep
    write('line3','Gain set to %d',gain)
  endif
endif
