"macro imconn"
" Ancestry: imconn	8.1 4/16/93   Spectroscopy Imaging Systems"
"***************************************************************"
" imconn:                                                       "
"                                                               "      
" Display grayscale image without erasing the screen.           "
" Optional argument specifies a phasefile to be retrieved       "
" before display.                                               "
" Usage:  imconn<(phasefile_name)>                              "
"***************************************************************"
if ($# = 1) then
  rtphf($1)
endif
dconn('gray','linear')
