"macro initparimage"
"***************************************************************"
" initparimage                                                  "
"                                                               "
" Initialize imaging-type parameters for a selection of pulse   "
" sequences.                                                    "
"                                                               "
" Usage:  initparimage('sequence_name')                         "
"***************************************************************"

$prog = 'initparimage: '                      "program ID"

if ($# <> 1) then
  write('error',$prog+'Usage: initparimage(sequence name)')
  abort
endif


if ($1 = 'steam') then

  pardg('steam')
  nD = 1
  nt = 8
  sw = 4000
  np = 4096
  seqcon = 'nnnnn'
  nv = 0
  nv2 = 0
  plist = 'p1','p2','p3'
  pwrlist = 'tpwr1','tpwr2','tpwr3'
  patlist = 'p1pat','p2pat','p3pat'
  fliplist = 90,90,90
  sslist = 'gvox1','gvox2','gvox3'
  pss = 0
  p1pat = 'sinc'
  p2pat = 'sinc'
  p3pat = 'sinc'
  tr = 1
  te = .03
  tm = .08


else if ($1 = 'isis') then

  pardg('isis')
  nD = 1
  nt = 8
  sw = 4000
  np = 4096
  seqcon = 'nnnnn'
  nv = 0
  nv2 = 0
  plist = 'p1','p2','p3','p4'
  pwrlist = 'tpwr1','tpwr2','tpwr3','tpwr4'
  patlist = 'p1pat','p2pat','p3pat','p4pat'
  fliplist = 180,180,180,90
  sslist = 'gvox1','gvox2','gvox3','n'
  pss = 0
  p1pat = 'sech180'
  p2pat = 'sech180'
  p3pat = 'sech180'
  p4pat = 'square'
  p1 = 4000
  p2 = 4000
  p3 = 4000
  p4 = 4000
  tr = 4
  tm = .08
  vox1 = 10
  vox2 = 10
  vox3 = 10


else if ($1 = 'mems') then

  pardg('mems')
  nD = 2
  nt = 1
  sw = 50000
  np = 512
  seqcon = 'ccsnn'
  nv = 256
  nv2 = 0
  plist = 'p1','p2'
  pwrlist = 'tpwr1','tpwr2'
  patlist = 'p1pat','p2pat'
  fliplist = 90,180
  sslist = 'gss','gss'
  orient='sag'
  p1 = 4000
  p2 = 4000
  p1pat = 'sinc'
  p2pat = 'sinc'
  lro = 10
  lpe = 10
  pss = 0
  thk = 2
  ne = 4
  gcrush = 2
  tcrush = 0.002
  tspoil=0.001
  tr = 1
  te = .02
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100


else if ($1 = 'flash3d') then

  pardg('flash3d')
  nD = 3
  nt = 1
  sw = 50000
  np = 512
  seqcon = 'nscsn'
  nv = 128
  nv2 = 128
  plist = 'p1'
  pwrlist = 'tpwr1'
  patlist = 'p1pat'
  fliplist = 10
  sslist = 'n'
  p1=50
  p1pat='square'
  orient='sag'
  p1 = 50
  p1pat = 'square'
  lro = 10
  lpe = 10
  lpe2 = 10
  pss = 0
  tspoil=0.001
  tr = .1
  te = .01
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100


else if ($1 = 'flash') then

  pardg('flash')
  nD = 2
  nt = 1
  sw = 50000
  np = 512
  seqcon = 'nscnn'
  nv = 128
  nv2 = 0
  plist = 'p1'
  pwrlist = 'tpwr1'
  patlist = 'p1pat'
  fliplist = 30
  sslist = 'gss'
  p1 = 2000
  p1pat = 'gauss'
  orient='sag'
  lro = 10
  lpe = 10
  pss = 0
  thk = 2
  tspoil=0.001
  tr = .1
  te = .01
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100


else if ($1 = 'sems') then

  pardg('sems')
  nD = 2
  nt = 1
  sw = 50000
  np = 512
  seqcon = 'ncsnn'
  nv = 256
  nv2 = 0
  plist = 'p1','p2'
  pwrlist = 'tpwr1','tpwr2'
  patlist = 'p1pat','p2pat'
  fliplist = 90,180
  sslist = 'gss','gss'
  orient='sag'
  p1 = 4000
  p2 = 4000
  p1pat = 'sinc'
  p2pat = 'sinc'
  lro = 10
  lpe = 10
  pss = 0
  thk = 2
  tspoil=0.001
  tr = 1
  te = .03
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100


else if ($1 = 'sediff') then

  pardg('sediff')
  nD = 2
  nt = 1
  sw = 50000
  np = 512
  seqcon = 'nssnn'
  nv = 256
  nv2 = 0
  plist = 'p1','p2'
  pwrlist = 'tpwr1','tpwr2'
  patlist = 'p1pat','p2pat'
  fliplist = 90,180
  sslist = 'gss','gss'
  orient='sag'
  p1 = 4000
  p2 = 4000
  p1pat = 'sinc'
  p2pat = 'sinc'
  lro = 10
  lpe = 10
  pss = 0
  thk = 2
  tspoil=0.001
  tdelta=.01
  tDELTA=.04
  tr=1
  te=.07
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100

else if ($1 = 'bp2d') then

  pardg('bp2d')
  nD = 2
  nt = 1
  sw = 50000
  np = 256
  seqcon = 'nssnn'
  nv = 128
  nv2 = 0
  plist = 'p1','p2'
  pwrlist = 'tpwr1','tpwr2'
  patlist = 'p1pat','p2pat'
  fliplist = 90,180
  sslist = 'gss','gss'
  orient='sag'
  p1 = 4000
  p2 = 4000
  p1pat = 'sinc'
  p2pat = 'sinc'
  lro = 10
  lpe = 0
  pss = 0
  thk = 2
  tspoil=0.001
  tr = 1
  te = .03
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100
  "backproj special parameters"
  phi2 = 180
  theta2 = 0

else if ($1 = 'bp3d') then

  pardg('bp3d')
  nD = 3
  nt = 1
  sw = 50000
  np = 256
  seqcon = 'nsssn'
  nv = 64
  nv2 = 64
  plist = 'p1','p2'
  pwrlist = 'tpwr1','tpwr2'
  patlist = 'p1pat','p2pat'
  fliplist = 90,180
  sslist = 'n','n'
  p1=50
  p1pat='square'
  orient='sag'
  p2 = 50
  p2pat = 'square'
  lro = 10
  lpe = 0
  lpe2 = 0
  pss = 0
  tspoil=0
  tr = .1
  te = .01
  sc = 50
  wc = 100
  sc2 = 20
  wc2 = 100
  "backproj special parameters"
  sw2 = 20000
  phi2 = 180
  theta2 = 180


else
  write('error',$prog+'Unrecognized sequence name')

endif endif endif endif endif endif endif endif endif
flush
dg
