"macro seqcon"
"seqcon:   turn seqcon string into an array of characters"
"          If a string is given as argument, identifying the 
"          dimension to be interrogated, only the character"
"	   for that dimension is returned"

"Usage:    seqcon:$strarr"
"          seqcon(n):$ch"
"Examples: seqcon('echo'):$ch"
"          seqcon('slice'):$ch"
"          seqcon('pe'):$ch"
"          seqcon('pe2'):$ch"
"          seqcon('pe3'):$ch"

$seqcon = ''
strparse(seqcon):$seqcon

if ($# < 1) then
  return($seqcon)
else
  $dim = $1

  if ($dim = 'echo')      then $n = 1
  elseif ($dim = 'slice') then $n = 2
  elseif ($dim = 'pe')    then $n = 3
  elseif ($dim = 'pe2')   then $n = 4
  elseif ($dim = 'pe3')   then $n = 5
  else
    write('error','seqcon: unrecognized argument')
    return
  endif

  return($seqcon[$n])
endif

