"macro snn"
" snn - define noise region for snr measurement in an image"

" Details: display the image, e.g. dconi"
"          specify a box and place it in the noise region"
"          sns will display the snr = sns/snr"
"          previously determined sns value is used for signal value"
"          if the noise region is not specified, move the box to"
"          the noise region and type snn"

" Author: S. Sukumar, Varian, Palo Alto, CA, USA"

exists('snn', 'parameter'):$ex
if($ex = 0) then
   create('snn')
endif
mark:$a,$b      "mark: => ht, integral, f1, f2"
snn = $b
exists('snn', 'parameter'):$ex
if($ex > 0) then
  if(snn = 0) then
    write('line3','noise value: %5.2f',snn)
    abort
  else
   write('line3','SNR value: \(%5.2f/%5.2f\) = %5.2f',sns,snn,sns/snn)
  endif
else
    write('line 3','noise value: %5.2f',snn)
endif
dconi('again') dconi('toggle')

