"macro strparse"
"strparse: turn a string into an array of characters"
"          If an integer n is given as argument"
"          only the n'th character is returned"

"Usage:    strparse($string):$strarray "
"          strparse($string,n):$ch"
"Example:  strparse(seqcon):$seqcon"

$string = ''
$n = 1

if ($# > 0) then $string = $1 endif
if ($# > 1) then $n      = $2 endif

if ($string = '') then return($string) endif

length($string):$strlen
$strarr = ''
$i = 1
repeat
  substr($string,$i,1):$strarr[$i]
  $i = $i + 1
until ($i > $strlen)

if ($# < 2) then
  return($strarr)
else
  return($strarr[$n])
endif

