"macro techron"
"  Setup Sequence for Imaging - Techron matching" 
""
if seqfil <> 'center' then
rtp(systemdir+'/parlib/techron')
endif
eddysend('techron')
clear
write('error','Please wait for setup to finish')
write('alpha','        Techron setup ')
write('alpha',' ')
write('alpha','  gro and eccTool gain control amplitude')
write('alpha','  gro = %f ',gro)
write('alpha','  at = %f is gradient duration',at)
write('alpha','  rep time is at + 2*d1 = %f',at+2*d1)
write('alpha','  duty cycle = %f ',(100.0*at)/(at+2*d1))
write('alpha','  gradient id = %s  change orient to change',orient)
write('alpha','  TYPE go to start')
write('alpha','  test is infinite loop type aa to abort')
