"macro StartLcnmrMsRun"
//this is so that one button can start any lcnmr/ms run

lcRunActive = 1
cplcsq('BackupCursq','clear')
if (lcexp='enterA') then

   lcgo
   vnmrjcmd('setpage','LC/MS')
   vnmrjcmd('setpage','LC/MS','Analyte Elution')

elseif (lcexp='stop') or (lcexp='enter') then

   lcInjectAndGo
   vnmrjcmd('setpage','LC/MS')
   vnmrjcmd('setpage','LC/MS','Stop Flow Interact')

else
// lcexp='iso', 'scout', 'analyte', 'lcalone', etc.

   lcInjectAndGo

   if (lcexp='analyte') then
          vnmrjcmd('setpage','LC/MS')
          vnmrjcmd('setpage','LC/MS','Analyte Collection')
   endif

endif
