"macro msSendAnalogOut"
/*-*- Mode: MAGICAL -*-*/
"macro msSendAnalogOut"

if (msSelection = '0') then
    return
endif

if ($# > 0) then
    $file=$1
else
    $file='tstSend'
endif
$path=msCommPath[1]+'/'+$file
write('reset',$path)
write('file',$path,'dlg info')
write('file',$path,'analog out')
write('file',$path,msAnalogOutInUse[1])
write('file',$path,msAnalogOutType[1])
write('file',$path,msAnalogOutMass[1])
write('file',$path,msAnalogOutExpr[1])
write('file',$path,msAnalogOutGain[1])
write('file',$path,msAnalogOutInUse[2])
write('file',$path,msAnalogOutType[2])
write('file',$path,msAnalogOutMass[2])
write('file',$path,msAnalogOutExpr[2])
write('file',$path,msAnalogOutGain[2])
pmlcmd('filex '+msCommPath[1]+' '+msCommPath[2]+' '+$file)
