*******************************************************************************
dLCNMR - displays all forms of LC-NMR data
*******************************************************************************

This macro is executed with a button on the LC-NMR display pane (labeled spare).

Displays on-flow and stopped-flow 1D LC-NMR data.  With on-flow data,
dconi is used to display the NMR data with the time-aligned LC detector
trace(s) along the left side. In the stopped-flow mode, dLC displays the 1D
NMR data for each stop code at a position that it is time-aligned with the
relevant LC peak.  If arguments are supplied, dLCNMR passes the supplied
arguments to dconi and forces a contour plot display.  With no arguments,
or when activated by the "Display LC & NMR" button, the dconi display
uses the dconi parameter to determine the default display mode.  The
"Contour" check-box can be used to select the contour map (dpcon) display
mode instead of the default color intensity map (dconi) display.

Example:  dLCNMR(<number of contours>,<contour spacing>) 

See related Files:
dLC
plLC
dLCNMR
plLCNMR

