*************************************************************
wetgcosy - macro for creating wetgcosy parameters from a WET parameter set
        (see the dglc parameter screen)
*************************************************************

  wet - a y/n flag determining whether the WET element is used
        (which uses pwwet, wetpwr, wetshape, gtw, gzlvlw, and gswet).
  wetpwr - the power level for the WET element.
  pwwet - the pw90 pulse width at wetpwr.
  wetshape - the pulse shape used during the wet element.
  gtw - the duration of the spoiling gradient (in sec).
  gzlvlw - the amplitude of the gtw gradient. 
  gswet - the recovery time following each gradient (try 0.002).

  c13wet - a y/n flag controlling the selective 13C decoupling used during WET
        (which uses dorwet, dpwrwet, and dmfwet; hardcoded to be WALTZ).
  dofwet - the 13C decoupler offset used during WET.
  dpwrwet - the decoupler power level for c13wet.
  dmfwet - the dmf value used for c13wet.

  dz - the delay following the wet element to allow longitudinal recovery
        (like a T1IR or WEFT inversion recovering through zero).
  composit - a y/n flag determining whether a composite read pulse is used.

*****************************************************************
*	gcosy:  sets up a gcosy parameter set.
*	Syntax:	gcosy  (no arguments)	
*****************************************************************
   Description:	This macro converts a 1D-s2pul parameter set into a parameter
		set ready to run a Pulsed Field Gradient AV COSY experiment.	

    Parameters:	
        gzlvl1 = gradient amplitude (-32768 to +32768; use 3000)
        gt1 = gradient duration in seconds (0.002)
        grise = gradient rise and fall time (in seconds; 0.00001)
        qlvl = 1 (quantum selection level)
        gstab = optional delay for stability
        phase = 1 (selects echo N-type coherence selection; default)
              = 2 (selects antiecho P-type coherence selection)

        process N-type data with wft2d(1,0,0,1)
        process P-type data with wft2d(1,0,0,-1)
                   the ('t2dc') argument to wft2d may be useful

Note: the wetgcosy pulse sequence is not supplied with Mercury or GEMINI 2000.
