"macro mkampargs"
exists('amptables','parameter','global'):$e
if ($e < 0.5) then
  create('amptables','integer','global')
  setprotect('amptables','set',256,'global')
  amptables=0
endif

on('usrgain'):$e
if $e <0 then
  create('usrgain')
endif

on('ddrfw1'):$e
if $e <0 then
  create('ddrfw1')
  ddrfw1=1.0
endif

exists('pwrtables','parameter','global'):$e
if $e < 0.5 then
  create('pwrtables','integer','global')
endif

exists('tpwr1','parameter'):$e
if ($e < 0.5) then
  create('tpwr1')
  setlimit('tpwr1',63,-37,0.5)
  tpwr1=63
endif

exists('tpwr2','parameter'):$e
if ($e < 0.5) then
  create('tpwr2')
  setlimit('tpwr2',63,-37,0.5)
  tpwr2=20
endif

exists('tpwr3','parameter'):$e
if ($e < 0.5) then
  create('tpwr3')
  setlimit('tpwr3',63,-37,0.5)
  tpwr3=-37
endif


$reset=0
exists('ampargs','parameter'):$e
if ($e < 0.5) then
  create('ampargs','integer')
  setprotect('ampargs','set',256)
  ampargs=0
  $reset=1
endif

if((size('ampargs')<>11) or $reset=1) then
  ampargs[1]=0  // user/system scope
  ampargs[2]=1  // rfchannel (default=rf1)
  ampargs[3]=1  // fit method
  ampargs[4]=1  // plot type
  ampargs[5]=0  // high power amp tables
  ampargs[6]=0  // target mode
  ampargs[7]=1  // iteration option
  ampargs[8]=0  // plot options
  ampargs[9]=0  // run options (0=calibrate, 1=validate, 2=test)
  ampargs[10]=0 // loopback mode (0=xmtr only, 1=amp)
  ampargs[11]=0 // iteration count
endif



