"macro AT32"
"AT32" "C13 Decoupling using Built-in Phase Modulators"

if (at_c13tests='n') then ATnext return endif  "optional skipping"

if (at_cycletest='yy') then ATnext return endif  "no need to repeat "

if ($#=0) then
   ATrtp('standard')  
   dn='C13' 
   at_currenttest='Decouplingprofiles'
   lb='n' sb=at/4 s1 av



   "proper sfrq/dfrq for on-resonance HDO/13CH3OD is 3.97675 at 20C"
   "observed 13C shift is 0.01675 ppm per degree"

   $dfrqcorrect=sfrq/3.9767612
   dof=($dfrqcorrect-dfrq)*1e6
   dof=dof+(temp-20)*(0.01675*dfrq)   "correct for temperature change"

   wnt=''
   wexp='AT32(`PART1`)'
   ATcycle au
 
elseif ($1='PART1') then

   wft f sp=2.4p wp=2p vsadj
   text('Phase Modulator Decoupling Profiles')
   lb=10 sb=-.07 gf='n' sbs='n'

   ln(150.0/at_pwx90Lowpower):$ln
   dpwr=at_pwx90Lowpowerlvl-20.0*$ln*0.43429
   $dpwr=dpwr+0.5
   dpwr=trunc($dpwr)
   dmf=1e6/150.0

   dmm='ccm','ccx','ccw','ccg' dm='nny' 
   dres=90,90,90,1 
   array('dof',41,dof-80*dfrq,4*dfrq)
   array='(dmm,dres),dof'
   wnt='ATdmms'
   wexp='AT32(`PART2`)'
   ATcycle au

elseif ($1='PART2') then
   wft
   ATsvf
   ATpldecs

ATnext
endif
