"macro AT33"
"AT33" "C13 Adiabatic Decoupling using Waveform Generators"

if (at_c13tests='n') then ATnext return endif  "optional skipping"

if (at_cycletest='yy') then ATnext return endif  "no need to repeat "

if ($#=0) then
   ATrtp('standard')  
   dn='C13' 
   at_currenttest='adiabaticsprofile'
   lb='n' sb=at/4 s1 av



   "proper sfrq/dfrq for on-resonance HDO/13CH3OD is 3.97675 at 20C"
   "observed 13C shift is 0.01675 ppm per degree"

   $dfrqcorrect=sfrq/3.9767612
   dof=($dfrqcorrect-dfrq)*1e6
   dof=dof+(temp-20)*(0.01675*dfrq)   "correct for temperature change"

   wnt=''
   wexp='AT33(`PART1`)'
   ATcycle au
 
elseif ($1='PART1') then

   wft f vsadj sp=2.8p wp=.8p vsadj
   lb=10 sb=-.07 gf='n' sbs='n'

   opx('ATwurst.DEC')
   setwave('WURST2 14000')
   pboxpar('$1 adb', '2.0')   "add 2dB for better intensities"
   cpx(at_pwx90Lowpower,at_pwx90Lowpowerlvl)

   pbox_pwr('ATwurst.DEC'):dpwr
   pbox_dmf('ATwurst.DEC'):dmf
 
   opx('ATstud.DEC')
   pboxpar('$1 adb', '2.0')   "add 2dB for better intensities"
   setwave('SECH 14000')
   cpx(at_pwx90Lowpower,at_pwx90Lowpowerlvl)

   pbox_pwr('ATstud.DEC'):dpwr[2]

   
   array('dof',41,dof-80*dfrq,4*dfrq)
   text('C13 Adiabatic Decoupling Profiles')
   vp=0 
   dm='nny' dmm='ccp' dres=9.0 dseq='ATwurst','ATstud'
   array='(dpwr,dseq),dof'
   wnt='ATadiab'
   dtext 
   wexp='AT33(`PART2`)'
   ATcycle
   au

elseif ($1='PART2') then
   wft
   ATsvf
   ATpldecs

ATnext
endif
