"macro AT33a"
"AT33a" "C13 Adiabatic Decoupling using Waveform Generators (Channel 3)"

if (at_c13tests='n') then ATnext return endif  "optional skipping"

if (at_cycletest='yy') then ATnext return endif  "no need to repeat "

if ($#=0) then
   ATrtp('standard')  
   dn='C13' 
   create('rfchannel','string')
   if (numrfch>4) then rfchannel='13245' endif
   if (numrfch=4) then rfchannel='1324' endif
   if (numrfch=3) then rfchannel='132' endif
   if (numrfch<3) then ATnext return endif   "no 3rd channel to test"
   at_currenttest='adiabaticsprofile_ch3'
   lb='n' sb=at/4 s1 av



   "proper sfrq/dfrq for on-resonance HDO/13CH3OD is 3.97675 at 20C"
   "observed 13C shift is 0.01675 ppm per degree"

   $dfrqcorrect=sfrq/3.9767612
   dof=($dfrqcorrect-dfrq)*1e6
   dof=dof+(temp-20)*(0.01675*dfrq)   "correct for temperature change"

   wnt=''
   wexp='AT33a(`PART1`)'
   ATcycle au
 
elseif ($1='PART1') then

   wft f vsadj sp=2.8p wp=.8p vsadj
   lb=10 sb=-.07 gf='n' sbs='n'

   opx('ATwurst_ch3.DEC')
   setwave('WURST2 14000')
   pboxpar('$1 adb', '2.0')   "add 2dB for better intensities"
   cpx(at_pwx90Lowpower_ch3,at_pwx90Lowpowerlvl_ch3)

   pbox_pwr('ATwurst_ch3.DEC'):dpwr
   pbox_dmf('ATwurst_ch3.DEC'):dmf
 
   opx('ATstud_ch3.DEC')
   pboxpar('$1 adb', '2.0')   "add 2dB for better intensities"
   setwave('SECH 14000')
   cpx(at_pwx90Lowpower_ch3,at_pwx90Lowpowerlvl_ch3)

   pbox_pwr('ATstud_ch3.DEC'):dpwr[2]

   
   array('dof',41,dof-80*dfrq,4*dfrq)
   text('C13 Adiabatic Decoupling Profiles Using Channel 3')
   vp=0 
   dm='nny' dmm='ccp' dres=9.0 dseq='ATwurst_ch3','ATstud_ch3'
   array='(dpwr,dseq),dof'
   wnt='ATadiab'
   dtext 
   wexp='AT33a(`PART2`)'
   ATcycle
   au

elseif ($1='PART2') then
   wft
   ATsvf
   ATpldecs

ATnext
endif
