"macro AT340a"
"AT340a" "N15 Decoupling Heating Test Using Channel 2 "  

if (at_n15tests='n') then ATnext return endif  "optional skipping"

if ($#=0) then
   ATrtp('standard')
   text('N15 Decoupling Heating Test Using Channel 2')
   at_currenttest='Decoupler_heating_n15_ch2' 
   dn='N15'
   nt=1 f full 
   wnt=''
   wexp='AT340a(`PART1`)'
   ATcycle
   au

elseif ($1='PART1') then


 wft av f  
 lb='n' sb=.205 at=.8 
 sp=2.5p wp=0.8p vsadj th=40 nll
 getll(1):$int,cr  sp=cr-0.02p wp=.1p
 d1=1.5-at-0.07 ss=1 wp=wp/2
 vp=0 wc=80 sc=0 fn=2*np axis='h' 
 create('scalesw','real') scalesw=100/(1.11696*sfrq)
 vo=1 th=10

 at=.41 d2=.075 d1=.646 sb=.102 fn='n'
 lb='n' 
 ss=2
 dn='N15' 

   "proper sfrq/dfrq for on-resonance HDO/CH3CN15 is 9.8666 at 20C"
   "observed methyl shift is 0.01675 ppm per degree"

   $dfrqcorrect=sfrq/9.8666
   dof=dof+($dfrqcorrect-dfrq)*1e6
   dof=dof+(temp-20)*(0.01675*dfrq)   "correct for temperature change"


 $pwx=1e6/(4.0*2000)  "2 kHz Field at 600MHz"
 ln($pwx/at_n15pwx90Lowpowera):$ln
 dpwr=at_n15pwx90Lowpowerlvla-20.0*$ln*0.43429
 dpwr=trunc(dpwr)
 dmf=1e6/$pwx

 dmm='ccc' 
 if ((sfrq>198) and (sfrq< 298)) then   " reduced power for lower fields"
  dpwr=dpwr-10 dmf=dmf/3
 endif
 if ((sfrq>298) and (sfrq< 398)) then
  dpwr=dpwr-6 dmf=dmf/2
 endif
 if ((sfrq>398) and (sfrq< 498)) then
  dpwr=dpwr-4 dmf=dmf/(3*1.12)
 endif
 if ((sfrq>498) and (sfrq< 598)) then
  dpwr=dpwr-2 dmf=dmf/(1.12*1.12)
 endif
 
 r1=1 repeat
  dm[r1]='nyn'
  r1=r1+1
 until r1>100
 r1=101 repeat
  dm[r1]='nnn' r1=r1+1
 until r1>200
 text('Test of 15N Decoupler Heating \\ One spectrum every 1.5 seconds with 75 msec\\15N decoupling for first 100 spectra and no decoupling in last 100 spectra\\Scale in Degrees Centigrade\\Using Channel 2 for 15N RF')
 
 
 wnt='ATdec_heat'
 wexp='AT340a(`PART2`)' 
 ATcycle dtext au

elseif ($1='PART2') then
  wft

 select(arraydim/2) peak:$ht,r3
 if r3<0 then r3=0 endif
 r3=trunc(100*r3*scalesw)/100
 ATrecord('N15DEC_HEATING_ch2','N15 Decoupler Heating Test (Channel 2)','Temp_Rise',r3,' RF Field(Hz)',trunc(dmf/4))
 write('file',autotestdir+'/REPORT','Temp Rise in Channel 2 N15 Dec Heating Test= %1.1f using RF Field = %4.0f Hz',r3,trunc(dmf/4))

 if (at_plotauto='y') then
  if (at_printparams='y') then
   dn2='' pap(0,wc2max-40) ATpltext 
   pps(180,0,wcmax-180,90)
   ATpage 
  endif
  pltext(0,wc2max-5)
  ATpltext
  r1 sc=sc+30 plww(1,100) pscale
  write('plotter',wcmax-sc,vp,'<--Time =  0.0 sec')
  write('plotter',wcmax-sc,vp+99,'<--Time =  150 sec')
  write('plotter',wcmax-sc-wc,wc2max-55,'Heating:  15N Decoupling')
  write('plotter',wcmax-sc-wc,wc2max-60,'First 100 Spectra')
  write('plotter',0,wc2max-45,'Maximum Heating From 15N Decoupling = %2.1f Degrees',r3)
  write('plotter',0,wc2max-47,'RF Power Level For 15N Decoupling = %2.0f ',dpwr)
  write('plotter',0,wc2max-49,'RF Field Strength of 15N Decoupling = %4.0f Hz',trunc(dmf/4))
  r2  sc=sc+60 plww(101,200) pscale
  write('plotter',wcmax-sc,vp,'<--Time =  151.5 sec')
  write('plotter',wcmax-sc,vp+99,'<--Time =  300 sec')
  write('plotter',wcmax-sc-wc,wc2max-55,'Cooling: No 15N Decoupling')
  write('plotter',wcmax-sc-wc,wc2max-60,'Last 100 Spectra')
  ATpage 
 endif

 ATsvf

ATnext
endif
