"macro ATadiab3"
 vp=0 
 write('plotter',0,-2,'WURST40 Modulation (50ppm)')
 write('plotter',0,8,'WURST2 Modulation (50ppm)')
 write('plotter',0,18,'WURST40 Modulation (80ppm)')
 write('plotter',0,28,'WURST2 Modulation (80ppm)')
 write('plotter',0,38,'WURST40 Modulation (110ppm)')
 write('plotter',0,48,'WURST2 Modulation (110ppm)')
 write('plotter',0,58,'WURST40 Modulation (140ppm)')
 write('plotter',0,68,'WURST2 Modulation (140ppm)')
 pl(1,41)
 vp=10 pl(42,82) vp=20 pl(83,123) vp=30 pl(124,164)
 vp=40 pl(165,205) vp=50 pl(206,246) vp=60 pl(247,287)
 vp=70 pl(288,328)


 exists('scalesw','parameter'):$e
 if $e=0 then create('scalesw','real') endif
 $sfrq=sfrq
 scalesw=((dof[41]-dof[1])/dfrq)/(sw/$sfrq)
 f full crl rfl=sw/2 rfp=0 axis='p' vp=0 pscale
 write('plotter',wcmax/2-12,-4,'C13 Offset Range (ppm)')

 pap ATpltext(wcmax-80,wc2max-10) ATpage
