"macro ATc78"
"ATc78" "Gradient Echo Stability (10G/cm z-axis) "

if (at_gradtests='n') then ATnext return endif  "optional skipping"


   substr(pfgon,3,1):$zon
   if ($zon)='n' then
     write('line3','Z-axis is disabled. Re-set "pfgon". Gradient test skipped ') 
     ATnext return
   endif

if ($#=0) then
   ATrtp('standard')
    exists('sysgcoil','parameter','systemglobal'):$present
    if $present=1 then
       at_sysgcoil=sysgcoil
       sysgcoil='' gcoil=''
    endif          "memorize existing sysgcoil value (restored at end by ATnext)"

   text('Gradient Echo Stability using\\ a 10G/cm 1msec Z-axis Gradient')
   at_currenttest='gecho10_zc'
   array('nt',20,1,0)
   seqfil='ATgecho' gt1=.001 gzlvl1=10/at_gzcal
   vchannelmap='0','z'
   gt2=.001 gzlvl2=-gzlvl1
   d2=.0005 d3=.0005 
   gradaxis='z'
    exists('gradientshaping','parameter','global'):$e
    if ($e=1 and gradientshaping='y') then
      shaped='s' else shaped='n'
    endif
   tpwr=at_tpwr pw90=at_pw90 pw(90)
   wnt='ATwft select(1) ph sp=3.8p wp=2p vsadj dssh dtext'
   wexp='ATc78(`PART1`)'
   ATcycle
   au
   write('line3','Gradient Echo Stability using a 10G/cm Z-axis Gradient')
   dps
elseif ($1='PART1') then

   ATsvf
   ATplot:$avht,$stddev
   $avht=trunc(10*$avht)/10
   $stddev=trunc(1000*$stddev)/1000
   if shaped='s' then
    ATrecord('ZECHOSTAB10cs','Gradient Echo Stability using a 10G/cm Z Autoshaped Gradient Pulse','stability',100-$stddev,'height',$avht,'std_dev.',$stddev)
    write('file',autotestdir+'/REPORT','Gradient Echo Stability (cryo,10G/cm Autoshaped Z) =  %3.3f ',100-$stddev)
   else
    ATrecord('ZECHOSTAB10c','Gradient Echo Stability using a 10G/cm Z Gradient Pulse','stability',100-$stddev,'height',$avht,'std_dev.',$stddev)
    write('file',autotestdir+'/REPORT','Gradient Echo Stability (cryo,10G/cm Z) =  %3.3f ',100-$stddev)
   endif
   exists('sysgcoil','parameter','systemglobal'):$present
   if $present=1 then  sysgcoil=at_sysgcoil gcoil=sysgcoil endif "restore sysgcoil value"
ATnext
endif
