"macro ATc81"
"ATc81" "Field Recovery Stability (x-axis) "

if (at_gradtests='n') then ATnext return endif  "optional skipping"


   substr(pfgon,1,1):$xon
   if ($xon)='n' then
     write('line3','X-axis is disabled. Re-set "pfgon". Gradient Tests Skipped') 
     ATnext return
   endif

if ($#=0) then
   ATrtp('standard')
    exists('sysgcoil','parameter','systemglobal'):$present
    if $present=1 then
       at_sysgcoil=sysgcoil
       sysgcoil='' gcoil=''
    endif          "memorize existing sysgcoil value (restored at end by ATnext)"

   text('Field Recovery Stability following\\ a 1msec 10G/cm X-axis Gradient')
   at_currenttest='grecstab_x_c'
   array('nt',20,1,0)
   seqfil='ATg2pul' gt1=.001 gzlvl1=10/at_gxcal
   vchannelmap='0','x'
   d2=.0001 shaped='n' gradaxis='x'
   tpwr=at_tpwr pw90=at_pw90 pw(90)
   rof1=.5
   sp=3.5p wp=2p
   wnt='ATwft select(1) av vsadj dssh dtext'
   wexp='ATc81(`PART1`)'
   ATcycle
   au
   write('line3','Field Recovery Stability following a 1msec 10G/cm X-axis Gradient')
   dps
elseif ($1='PART1') then

   ATsvf
   ATplot:$avht,$stddev
   $avht=trunc(10*$avht)/10
   $stddev=trunc(1000*$stddev)/1000
   ATrecord('XRECOVSTABc','Field Recovery Stability 100usec after a 10G/cm X Gradient Pulse','stability',100-$stddev,'height',$avht,'std_dev.',$stddev)
   write('file',autotestdir+'/REPORT','X-axis Recovery Stability =  %3.3f ',100-$stddev)

   exists('sysgcoil','parameter','systemglobal'):$present
   if $present=1 then  sysgcoil=at_sysgcoil gcoil=sysgcoil endif "restore sysgcoil value"
ATnext
endif
