"macro ATc97"
"ATc97" "Gradient Echo Stability (10G/cm y-axis) "

if (at_gradtests='n') then ATnext return endif  "optional skipping"


   substr(pfgon,2,1):$yon
   if ($yon)='n' then
     write('line3','Y-axis is disabled. Re-set "pfgon". Gradient Tests Skipped') 
     ATnext return
   endif

if ($#=0) then
   ATrtp('standard')
    exists('sysgcoil','parameter','systemglobal'):$present
    if $present=1 then
       at_sysgcoil=sysgcoil
       sysgcoil='' gcoil=''
    endif          "memorize existing sysgcoil value (restored at end by ATnext)"

   text('Gradient Echo Stability using\\ a 10G/cm 1msec Y-axis Gradient')
   at_currenttest='gecho10_y_c'
   array('nt',20,1,0)
   seqfil='ATgecho' gt1=.001 gzlvl1=10/at_gycal
   vchannelmap='0','y'
   gt2=.001 gzlvl2=-gzlvl1
   d2=.0005 d3=.0005 shaped='n' gradaxis='y'
   tpwr=at_tpwr pw90=at_pw90 pw(90)
   sp=3.8p wp=2p
   wnt='ATwft select(1) av vsadj dssh dtext'
   wexp='ATc97(`PART1`)'
   ATcycle
   au
   write('line3','Gradient Echo Stability using a 10G/cm Y-axis Gradient')
   dps
elseif ($1='PART1') then

   ATsvf
   ATplot:$avht,$stddev
   $avht=trunc(10*$avht)/10
   $stddev=trunc(1000*$stddev)/1000
   ATrecord('YECHOSTAB10c','Gradient Echo Stability using a 10G/cm Y Gradient Pulse','stability',100-$stddev,'height',$avht,'std_dev.',$stddev)
   write('file',autotestdir+'/REPORT','Gradient Echo Stability (cryo,10G/cm Y)=  %3.3f ',100-$stddev)

   exists('sysgcoil','parameter','systemglobal'):$present
   if $present=1 then  sysgcoil=at_sysgcoil gcoil=sysgcoil endif "restore sysgcoil value"
ATnext
endif
