"macro ATplregr"
" ATplregr(x,y) - store <and plot> regression results <at position x,y> "
  
 if ($#>0) then
  $x=$1 $y=$2
 else
  $x=wcmax-90 $y=wc2max-10
 endif
if (at_plotauto='y') then
 write('plotter',$x,$y,''):$ys      "get the height of characters in $ys"
 $y = $y - $ys                      "position $y at bottom of the character"
 
 $ok = 1
 $t=''
 lookup('file',curexp+'/analyze.list')
 repeat
    lookup('readline'):$t,$ok
    if ($ok = 1) then
      if $y<(wc2+5) then
       $y=$2 $x=$x+80
       $y=$y - $ys 
       echo('reset',$x,$y)
      endif
       echo($x,$y)
       write('plotter',$x,$y,'%s',$t)
       $y = $y - $ys
    endif
 until ($ok = 0)
endif
