"macro BP12"
" BP12 "
wft
setref f full
ph
BPaph
f full vsadj(80) ds dscale
write('plotter',50,wc2max-5,'Optimized HN(CO)CA First Increment')
wc=0.7*wc vp=0

pl pscale pap
pps(120,90,wcmax-120,wc2max-90)
BPpage
BPprotref1(56,'dfrq')
BPprotref2(120,'dfrq2')
if BPBioNMR then
  ss=16 wexp='' wnt='' BPsvp('ghn_co_caP')
else
  ss=16 wexp='' wnt='' BPsvp('ghn_co_ca')
endif
BPsvf(userdir+'/AutoTripRes/ghn_co_ca_1D')
$nt=nt $tpwrsf=tpwrsf
if BPBioNMR then
  gcbca_co_nhP
else
  gcbca_co_nh
endif
nt=$nt  ss=4
r4=$tpwrsf
av
wnt='wft setref sp=6p wp=4p select(1) vsadj(30) dssh' wexp='BP12a'
if BPBioNMR then
  write('line3','Delay at start normal. Shapes re-created for each array value')
endif
array('phi7cal',18,0,10)  au
