"macro BP12a"
" BP12a "
$bestone=1 $counter=1
select(1) vsadj(20) $best=20
av
repeat
  select($counter)
  peak:$ht
  if $ht>$best then $best=$ht $bestone=$counter endif
  $counter=$counter+1
until $counter>arraydim
ph
$phi7cal_best=phi7cal[$bestone]
r5=$phi7cal_best
BPaph($bestone)
select($bestone)
peak:$int if $int<0 then rp=rp+180 endif
vsadj(50)
s1
BPsvf(userdir+'/AutoTripRes/gcbca_co_nh_phi7cal')
dssh('dodc') pl('all','dodc') pap BPpage

$phi7cal='' format($phi7cal_best,4,1):$phi7cal
BPsetparams('phi7cal',$phi7cal,'C13')
seqfil='gcbca_co_nhP'
dof=dof+(174-46)*dfrq


wnt=''
wexp='BP12b'  au
