"macro BPH2updatepw90"
   $dpwr3D='' format(dpwr3,2,0):$dpwr3D
   BPsetparams('dpwr3D',$dpwr3D,'H2')
   $dmf3D='' format(dmf3,5,1):$dmf3D
   BPsetparams('dmf3D',$dmf3D,'H2')
   $dof3D='' format(dof3,5,1):$dof3D
   BPsetparams('dof3D',$dof3D,'H2')

"Biopack power limits are active if BPpwrlimits=1 "
exists('BPpwrlimits','parameter','global'):$e
if ($e>0) then
 $BPpwrlimits='' format(BPpwrlimits,1,0):$BPpwrlimits
 BPsetparams('BPpwrlimits',$BPpwrlimits,'H1')
endif
exists('BPdpwr3max','parameter','global'):$e
if ($e>0) then
 $BPdpwr3max='' format(BPdpwr3max,2,0):$BPdpwr3max
 BPsetparams('BPdpwr3max',$BPdpwr3max,'H2')
endif

"System power limits"
exists('maxattench3','parameter','global'):$e1
if ($e1>0) then
 $maxattench3='' format(maxattench3,2,0):$maxattench3
 BPsetparams('maxattench3',$maxattench3,'N15')
endif

exists('maxattench4','parameter','global'):$e1
if ($e1>0) then
 $maxattench4='' format(maxattench4,2,0):$maxattench4
 BPsetparams('maxattench4',$maxattench4,'H2')
endif
banner('H2 Probefile Parameters Updated')
