"macro BPSSrestore"
"BPSSrestore	this macro is used to restore the experimental parameters "
"		to their original value if the BPSSshim macro is aborted  "
"		Marco Tonelli @NMRFAM"


if ss=32767 then

"restore ss"
  ss=A A=0

"restore ni, ni2 and ni3 values"
  exists('ni','parameter'):$e
  if ($e>0.5) then
    if (r5<>41600)  then ni=r5  r5=0 endif
  endif
  exists('ni2','parameter'):$e
  if ($e>0.5) then
    if (r6<>201201) then ni2=r6 r6=0 endif
  endif
  exists('ni3','parameter'):$e
  if ($e>0.5) then
    if (r7<>120895) then ni3=r7 r7=0 endif
  endif

"turn gradients back on"
  exists('gradientdisable','parameter','global'):$e
  if $e=1 then
   gradientdisable='n'
  else
   pfgon=spinsys
  endif

endif
