"macro BP_NLSstop"
"BP_NLSstop"
"this macro is used to revert back to base sequence"

 length(seqfil):$size
 substr(seqfil,$size-1,2):$lasttwo   "_S if already set"
 substr(seqfil,1,$size-2):$baseseq   "parent sequence"
 if $lasttwo='_S' then
  SPARSE='n' 
  seqfil=$baseseq
  seqfil?
  write('line3','Re-setting SPARSE to %s',SPARSE)
  write('line3','Re-setting seqfil to parent value %s',seqfil)
  return
 endif

 length(seqfil):$size
 substr(seqfil,$size-3,4):$lastfour   "_TAB if already set"
 substr(seqfil,1,$size-4):$baseseq   "parent sequence"
 if $lastfour='_TAB' then
  seqfil=$baseseq
  seqfil?
  write('line3','Re-setting seqfil to parent value %s',seqfil)
  return
 endif

