"macro BP_PRangles_all"
"This is the PR angles file that contains common arrays to be used in the PR."
"The naming is always PR_anglesY_X where X is the number of planes including"
"the orthogonals.  Y is one of the two series, depending on the experiment."
"The angle combinations were generated with Brian Coggins pr-angle program."
"If you want to add more, make sure to put the 3 orthogonal combinations first."
"GAM- 072505"

PR_skipPlanes='n'

"check for parameters"
exists('PR_niN','parameter','current'):$e
 if ($e=0) then create('PR_niN','real','current') endif
exists('PR_ni2','parameter','current'):$e
 if ($e=0) then create('PR_ni2','real','current') endif
exists('PR_ni3','parameter','current'):$e
 if ($e=0) then create('PR_ni3','real','current') endif
exists('PR_ntN','parameter','current'):$e
 if ($e=0) then create('PR_ntN','real','current') endif
exists('PR_ntorthog1','parameter','current'):$e
 if ($e=0) then create('PR_ntorthog1','real','current') endif
exists('PR_ntorthog2','parameter','current'):$e
 if ($e=0) then create('PR_ntorthog2','real','current') endif
exists('PR_ntTILT','parameter','current'):$e
 if ($e=0) then create('PR_ntTILT','real','current') endif
PR_ntN=4 PR_ntorthog1=4 PR_ntorthog2=4 PR_ntTILT=4

"check for proper directories for svfdir and samplename"
exists('svfdir','parameter','current'):$e
 if ($e=1) then destroy('svfdir','current') endif
exists('svfdir','parameter','global'):$e
 if ($e=0) then create('svfdir','string','global') endif
exists('samplename','parameter','current'):$e
 if ($e=1) then destroy('samplename','current') endif
exists('samplename','parameter','global'):$e
 if ($e=0) then create('samplename','string','global') endif

"Just check to see if the first one exists, if not create and define all"
exists('PR_angles1_10','parameter','current'):$e
if ($e=0) then 

create('PR_angles1_10', 'real', 'current')
create('PR_angles2_10', 'real', 'current')
create('PR_angles1_12', 'real', 'current')
create('PR_angles2_12', 'real', 'current')
create('PR_angles1_20', 'real', 'current')
create('PR_angles2_20', 'real', 'current')
create('PR_angles1_30', 'real', 'current')
create('PR_angles2_30', 'real', 'current')
create('PR_angles1_40', 'real', 'current')
create('PR_angles2_40', 'real', 'current')
create('PR_angles1_6', 'real', 'current')
create('PR_angles2_6', 'real', 'current')
create('PR_angles1_8', 'real', 'current')
create('PR_angles2_8', 'real', 'current')


PR_angles1_10 = 0.000, 90.000, 90.000, 76.286, 76.284, 54.669, 46.168, 78.561, 46.164, 19.617
PR_angles2_10 = 90.000, 0.000, 90.000, 76.253, 19.614, 54.769, 78.593, 46.125, 46.078, 76.268
PR_angles1_12 = 0.000, 90.000, 90.000, 37.614, 59.509, 80.101, 16.655, 79.437, 59.469, 57.446, 37.599, 80.083
PR_angles2_12 = 90.000, 0.000, 90.000, 55.342, 33.379, 18.448, 78.304, 46.023, 77.673, 53.379, 77.189, 74.676
PR_angles1_20 = 0.000, 90.000, 90.000, 64.620, 26.905, 81.962, 65.097, 40.104, 80.075, 65.481, 58.928, 81.886, 49.014, 45.551, 63.028, 81.234, 28.110, 81.695, 12.324, 44.564
PR_angles2_20 = 90.000, 0.000, 90.000, 81.582, 81.612, 28.364, 51.367, 67.013, 64.041, 35.982, 67.056, 46.655, 51.295, 81.842, 28.340, 12.452, 63.964, 80.973, 80.949, 46.589
PR_angles1_30 = 0.000, 90.000, 90.000, 69.955, 10.058, 67.791, 81.992, 24.219, 55.224, 38.378, 52.428, 54.871, 83.221, 68.396, 19.909, 54.223, 82.333, 42.163, 82.410, 67.758, 32.341, 82.404, 44.733, 82.656, 57.215, 82.881, 66.776, 41.968, 29.860, 68.784
PR_angles2_30 = 90.000, 0.000, 90.000, 21.459, 83.936, 56.526, 83.941, 83.419, 69.305, 83.160, 83.161, 43.533, 9.609, 31.380, 71.511, 55.775, 46.290, 69.302, 58.780, 43.535, 58.775, 33.878, 46.287, 21.460, 33.876, 71.520, 83.422, 56.522, 70.023, 70.030
PR_angles1_40 = 0.000, 90.000, 90.000, 51.990, 8.392, 18.311, 69.306, 76.266, 41.077, 62.806, 27.964, 32.102, 61.834, 83.943, 53.272, 65.802, 63.990, 50.605, 84.236, 73.681, 73.393, 73.118, 74.615, 18.690, 58.266, 84.344, 84.177, 51.027, 56.336, 84.916, 40.084, 84.525, 43.834, 28.693, 84.302, 31.179, 39.549, 62.046, 45.169, 72.215
PR_angles2_40 = 90.000, 0.000, 90.000, 73.112, 83.983, 84.174, 84.902, 76.151, 53.472, 39.555, 74.698, 58.442, 50.553, 8.396, 41.262, 28.842, 73.634, 61.841, 84.205, 63.832, 39.908, 51.812, 27.820, 72.300, 32.272, 56.129, 18.242, 51.093, 84.341, 69.119, 73.423, 31.024, 84.310, 66.021, 43.636, 84.552, 62.887, 61.982, 45.364, 18.769
PR_angles1_6 = 0.000, 90.000, 90.000, 69.490, 69.457, 29.728
PR_angles2_6 = 90.000, 0.000, 90.000, 69.457, 29.728, 69.490
PR_angles1_8 = 0.000, 90.000, 90.000, 74.032, 74.396, 44.131, 25.905, 67.120
PR_angles2_8 = 90.000, 0.000, 90.000, 43.684, 74.335, 73.648, 67.858, 26.519

endif

exists('PR_angles1_100','parameter','current'):$e
if ($e=0) then

create('PR_angles1_100', 'real', 'current')
create('PR_angles2_100', 'real', 'current')

PR_angles1_100 = 90.000, 0.000,90.000,66.842,53.077,73.311,52.893,24.546,20.078,31.855,80.128,81.451,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48.416
PR_angles2_100 = 90.000,90.000, 0.000,30.927,41.561,51.485,52.074,86.506,70.190,63.932,53.426,83.997,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65.534

endif
