"macro BP_PRgetpars"
"BP_PRgetpars: a macro to get a parameter set in order to get time of exp"
  $file='' $file=$1
  length($file):$size
  if $size>4 then
    $t=''
    substr($file,$size-3,4):$t
    if $t<>'.par' then
      $file=$file+'.par'
    endif
  else
    $file=$file+'.par'
  endif

  $fpath=userdir+'/parlib/'+$file
  exists($fpath,'file'):$e
  if $e<0.5 then
    $fpath=systemdir+'/parlib/'+$file
    exists($fpath,'file'):$f
    if $f<0.5 then
      write('error','%s: could not find \'%s\'',$0,$fpath)
      return
    endif
  endif

exists('prescan','parameter'):$e if($e>0.5) then destroy('prescan') fixpar endif

  rtp($fpath)

  BPupdate_from_probefile    "gets common calibrations from probefile"
