"macro BPauto1d"
"BPauto1d(mode,<'BioNMR'> If argument is BioNMR, *P.c sequences used"
$usestd=0
$usethese=0
$calibrateH=0
$needinput=1
if ($#>0) then
  if $1=1 then $usestd=1 endif
  if $1=2 then $usethese=1 endif
  if $1=3 then $calibrateH=1 endif
  if ($#>1) then
    if ($#>2) then BPBioNMR=0 endif   "vnmr6.1 sets for BioNMR version"
    if ($2=0) then $needinput=0 endif   "vnmrj version"
  endif
endif

if (BPplot='file') then
 BPplotdir=userdir+'/AutoTripRes1D'
endif

exists('dofidsave','parameter'):$e
if $e then dofidsave='n' endif


$date=''
BPgetdate:$date
if ((BPBioNMR) and (BPplot<>'file')) then   "BioNMR selected"
  printon man('proteinpreface2P') printoff
else
  printon man('proteinpreface2') printoff
endif
$temp=temp

  $dir=userdir+'/AutoTripRes1D'
  $dir2=userdir+'/BioPack.dir/backups'
  exists($dir,'file'):$e
  if ($e=1) then
    exists(userdir+'/BioPack.dir/backups','directory'):$e
    if not($e) then
      shell('mkdir -p ' + $dir2):$dum 
    endif
    mv($dir,$dir2+'/AutoTripRes1D_'+$date)
  endif
  mkdir(userdir+'/AutoTripRes1D')

$tof=tof $pw=pw
if $needinput=1 then
  shell('pwd'):$dummy
  input('Do you want to use Current Calibrations? y or n  '):$yesno
  if $yesno='n' then
    shell('pwd'):$dummy
    input('Do you want Automatic 1H pw90 Calibration? y or n  '):$yesno1
    if $yesno1='n' then
      shell('pwd'):$dummy
      input('Enter r the Power Level Desired for Protons:  '):tpwr
      shell('pwd'):$dummy
      input('Enter the Proton PW90 at this Power:  '):pw90
      shell('pwd'):$dummy
      input('Values will overwrite Current Calibrations. ok? y or n  '):$yn
      if $yn='n' then
        write('line3','Operation Aborted. Auto1D uses Stored or Updated Calibrations Only')
        abort
      else
        BPbiopack1Dvj			"updates probe file"
        water 
        temp=$temp 
        lb=3 nt=4 f vp=0 full
        wexp='BPauto1d2' au
        return
      endif
    else
      BPauto1da return 
    endif
  else
        $temp=temp 
        water 
        temp=$temp 
        lb=3 nt=4 f vp=0 full
        wexp='BPauto1d2' au
        return
  endif
else
  if $usestd=1 then  BPauto1d1 return endif
  if $usethese=1 then
    BPbiopack1Dvj      "updates probefile "
    BPauto1d1 return
  endif
  if $calibrateH=1 then BPauto1da return endif
endif
