"macro BPauto1d5"
" BPauto1d5 "
ssfilter=100 wft f full select(1)
setref wc=.7*wc  lp=0 vp=0 vo=30 ho=0
BPaph2(1) vsadj(30)
ds pl pscale pap dscale
$count=2
repeat
  select($count)
  BPaph2($count)
  vp=vp+vo
  dssn($count,$count) pl($count)
  $count=$count+1
until $count>5
select(6) BPaph2(6)
vp=vp+vo dssn(6,6) pl(6)
vp=0
write('graphics',80,vp+10,'All Carbons')
write('graphics',80,vp+10+vo,'Aliphatic Carbons Only')
write('graphics',80,vp+10+2.0*vo,'Aliphatic CH2 Carbons Only')
write('graphics',80,vp+10+3.0*vo,'Alpha Carbons Optimized')
write('graphics',80,vp+10+4.0*vo,'Alpha CH2 Carbons Optimized')
write('graphics',80,vp+10+5.0*vo,'Aromatic Carbons Only')
write('plotter',140,vp+10,'All Carbons')
write('plotter',140,vp+10+vo,'Aliphatic Carbons Only')
write('plotter',140,vp+10+2.0*vo,'Aliphatic CH2 Carbons Only')
write('plotter',140,vp+10+3.0*vo,'Alpha Carbons Optimized')
write('plotter',140,vp+10+4.0*vo,'Alpha CH2 Carbons Optimized')
write('plotter',140,vp+10+5.0*vo,'Aromatic Carbons Only')
BPpage
BPsvf(userdir+'/AutoTripRes1D/gChsqc_1Ds')
$temp=temp $nt=nt 
if BPBioNMR then
  ghn_coP
else
  ghn_co
endif
ss=4 temp=$temp nt=$nt  wexp='BPauto1d6' au
