"macro BPautopresat"
"BPautopresat(<anything (for vnmrj)>)"
BPgettemp:$temp
if ($#=0) then
  water
  shell('pwd'):$dummy
  input('Use PW90 from Standard Parameter Set? y or n  '):$std
  if ($std='n') then
    shell('pwd'):$dummy
    input('Enter H1 Power Level  '):tpwr
    shell('pwd'):$dummy
    input('Enter H1 pw90  '):$pw pw=$pw pw90=pw
  endif
endif
ssfilter='n' watergate='n' jumpret='n' shaped='n' wet='n'
gain=10 temp=$temp write('line3','finding water frequency')
ss=2 nt=1 satpwr=satpwr+6
p1=0 presat='y'
array('tof',21,tof+8,-0.8) satfrq=tof
av array='(satfrq,tof)' da wnt='wft f full select(1) vsadj dssh'
dps write('line3','finding final water frequency')
wexp='BPautopresatproc1' au
