"macro BPautowater"
" BPautowater "
if ($#=0) then
  if (presat='y') then BPautopresat endif
  if (shaped='y') then BPautoshaped endif
  if ((watergate='y') and (flagsoft='y')) then BPautowatergate(0) endif
  if ((watergate='y') and (flag3919='y') ) then BPautowatergate(1) endif
  if ((watergate='y') and (flagW5='y')) then BPautowatergate(2) endif
  if (jumpret='y') then BPautojumpret endif
  if (wet='y') then BPautoWet endif
else
  if (presat='y') then BPautopresat(1) endif
  if (shaped='y') then BPautoshaped(1) endif
  if ((watergate='y') and (flagsoft='y')) then BPautowatergate(0,1) endif
  if ((watergate='y') and (flag3919='y') ) then BPautowatergate(1,1) endif
  if ((watergate='y') and (flagW5='y')) then BPautowatergate(2,1) endif
  if (jumpret='y') then BPautojumpret(1) endif
  if (wet='y') then BPautoWet(1) endif
endif
