"macro BPautowatergateproc9"
"BPautowatergateproc9"
$bestone=1
BPprotref(4.66)
av $counter=1
wft('all') sp=4.5p wp=.8p full
select(1) vsadj(50) $best=50 $highest=50
repeat
  select($counter)
  peak:$ht
  if $ht<$best then $best=$ht $bestone=$counter endif
  if $ht>$highest then $highest=$ht endif
  $counter=$counter+1
until $counter>arraydim
tpwrsf_u=tpwrsf_u[$bestone]
write('line3','best tpwrsf_u value is %4.0f ',tpwrsf_u)
$pwHs='' format(flippw,5,1):$pwHs
BPsetparams('pwHs',$pwHs,'H1')
BPsetparams('flippw',$pwHs,'H1')
$tpwrsf_d='' format(tpwrsf_d,5,1):$tpwrsf_d
BPsetparams('tpwrsf_d',$tpwrsf_d,'H1')
$tpwrsf_u='' format(tpwrsf_u,5,1):$tpwrsf_u
BPsetparams('tpwrsf_u',$tpwrsf_u,'H1')
$wtgpwr='' format(flippwr,5,1):$wtgpwr
BPsetparams('wtgpwr',$wtgpwr,'H1')

$phincr1='' format(phincr1,2,1):$phincr1
BPsetparams('phincr1',$phincr1,'H1')
$phincr2='' format(phincr2,2,1):$phincr2
BPsetparams('phincr2',$phincr2,'H1')
$p180='' format(p180,2,1):$p180
BPsetparams('p180',$p180,'H1')

select($bestone) vp=0 vsadj(150)
ph BPprotref(4.66) f full ds dscale
wexp='wft gain=`y` wexp=``' wnt='' nt=16 getparam('BPgain','H1'):gain au
write('line3','Collecting Optimized Spectrum ' )
text('Optimized Watergate Spectrum')
beepon
