"macro BPddec3_cal"
"BPddec3_cal:" 
"      Calibrates 2H pw90 using channel 3. The 2H rf is routed"   
"      to 2H Automation Relay which sends it to the diplexer box and"
"      then to lock BNC on the probe. Thus the calibration is valid for 2H "
"      pw90 or decoupling rf field when using channel 3 for 2H"
"      Use BPddec3_cal for channel 3 calibrations and BPddeclkdec_cal for lock/decoupler calibrations"

"      IMPORTANT: ampmode must be 'p' for the amplifier used for 2H."


"  Either of two methods must be used for this test to run properly "

"  Method #1: Disable Relay
"  In order to use this test, the cable connected to port 14 "
"  on the Magnet Relay Driver Board in the magnet leg has to be disconnected. "
"  This cable drives the Deuterium Automation Relay (K5020) at the back of the "
"  magnet leg (look for the label on the driver cable). The cable connection "
"  is made on a small circuit board mounted next to the manual sample eject "
"  control. This permits the 2H pulse to be delivered by the 2H decoupler, even "
"  when using tn=lk for 2H observe. Otherwise, the relay switches to route the "
"  first broadband amplifier to the lowband module for low band observe. "

"  Method #2: Re-route Decoupler RF (assumes channel 3 decoupler cable is at relay K5022"
"  Move the Decoupler cable from the top of relay K5022 at the back of the magnet "
"  leg to the bottom position of relay K5022. This will permit the RF to proceed to
"  the lock diplexer box when tn=lk"

"  In either case remember to restore the cable to normal position after the test"

if ($#=0) then

   if (BPplot='file') then
    BPplotdir=userdir+'/AutoTripRes'
   endif

  exists('dofidsave','parameter'):$e
   if $e then dofidsave='n' endif

 
   water
   presat='y' satmode='nnn' watergate='n' jumpret='n' wet='n' shaped='n'
   ssfilter='n' nt=1
   $date=''
   BPgetdate:$date

  $dir=userdir+'/AutoTripRes'
  $dir2=userdir+'/BioPack.dir/backups'
  exists($dir,'file'):$e
  if ($e=1) then
    exists(userdir+'/BioPack.dir/backups','directory'):$e
    if not($e) then
        shell('mkdir -p ' +$dir2):$dum
    endif
    mv($dir,$dir2+'/AutoTripRes_'+$date)
  endif
  mkdir($dir)
           
   $vtset=''
   shell('showstat > ',curexp+'/stat'):$dummy
   lookup('file',curexp+'/stat','VT','active:','read'):$vtset,$ret
   delete(curexp+'/stat')
   if $ret then
     format($vtset,0,1):temp
   endif
   setfrq 
   text('Finding 2H pulse power on channel 3\\ for pw90~150usec ')
   r5=lockpower
   gain=10 sw=4000 np=8192
   if (sfrq>601) then pw=200 else pw=125 endif
   tn='lk' sethw('lock','off'):$xxx
   seqfil='ddec'
   exists('ampmode','parameter'):$e
   if $e=0 then create('ampmode','string') endif
   exists('rfchannel','parameter'):$e
   if $e=0 then create('rfchannel','string') endif
   if numrfch=5 then rfchannel='13245' ampmode='dddpd' endif
   if numrfch=4 then rfchannel='1324' ampmode='dddp' endif
   if numrfch=3 then rfchannel='132' ampmode='ddp' endif
   if numrfch<3 then 
    write('line3','Incorrect Test: There are fewer than 3 channels')
    banner('Incorrect test: There are fewer than 3 channels')
    return
   endif 
   r4=z0 lockpower=0
   sethw('nowait','lockpower',lockpower):$x
   dn='H2' dof=0
   tpwr=40  rof2=300
   wnt='' av
   wexp='BPddec3_cal(`PART1`)'
   au

elseif ($1='PART1') then

   wft f  vsadj(100) ds peak:$ht,cr movetof
   dof=tof

   exists('maxattench3','parameter','global'):$e
   if $e=1 then
    if maxattench3<50 then
     banner('2H Maximum Power Limit Too Low, Reset>50')
     return
    endif
    array('tpwr',maxattench3-29,30,1)
   else
    array('tpwr',30,30,1)
   endif

   "d1=6*d1   account for 2H relaxation ~6x longer than 1H"
   wnt='wft crl rfl=sw/2 rfp=0 dssh sp=-200 wp=400 select(1) vsadj(10)  BPfind2Hpwr' 
   write('line3','Determining est. of 2H pw90 power using Channel 3 ')
   vp=0 
   wexp='BPddec3_cal(`PART2`)'
   au

elseif ($1='PART2') then
   wft
   BPsvf(userdir+'/AutoTripRes/ddec3_1')
      pap
      pps(120,90,wcmax-120,90)
      pl('all') BPpage
   BPfind2Hpw90:$best tpwr=tpwr[$best]
   select($best)  vsadj(80) vp=80
   write('line3','finding first est. of 2H pw360 using Channel 3')
   text('Finding est. of 2H pw360 using Channel 3')
   array('pw',16,3.0*pw,0.1*pw)
   wnt='wft crl rfl=sw/2 rfp=0 sp=-200 wp=400 select(1) dssh  BPfind2Hpwr' 
   wexp='BPddec3_cal(`PART3`)'
   au

elseif ($1='PART3') then
   wft
   write('line3','calculating first estimate of pw360  using Channel 3')
   BPsvf(userdir+'/AutoTripRes/ddec3_2')
      pap
      pps(120,0,wcmax-120,90)
      pl('all') BPpage
   BP2Hpw90cal('pw'):pw
   write('line3','finding second estimate of 2H pw360 using channel 3 ')
   array('pw',10,3.8*pw,0.04*pw)
   wexp='BPddec3_cal(`PART4`)'
   au

elseif ($1='PART4') then
   sethw('z0',r4):$x
   wft
   write('line3','calculating final estimate of H2 pw360 using Channel 3')
   text('2H pw360 using Channel 3')
   seqfil='water'
   BPsvf(userdir+'/AutoTripRes/ddec3_3')
      pap
      pl('all') BPpage
   sethw('lockpower',r5):$xx
   BP2Hpw90cal('pw'):pw 
   pw=pw  "force 0.1usec stepsize"
   write('line3','H2pw90 (CH3) = %2.2f at power = %2.0f',pw,tpwr)

   pw=trunc(10*pw + 0.5)/10

   $pwD='' format(pw,3,1):$pwD
   $pwDlvl='' format(tpwr,2,0):$pwDlvl

   BPsetparams('pw90',$pwD,'H2')
   BPsetparams('pwD',$pwD,'H2')
   BPsetparams('pwx',$pwD,'H2')
   BPsetparams('pwxlvl',$pwDlvl,'H2')
   BPsetparams('tpwr',$pwDlvl,'H2')
   BPsetparams('pwDlvl',$pwDlvl,'H2')
   dmf=1e6/pw 
   dmfadj
   tn='H1' sethw('lock','on'):$xxx

  if (sfrq>601) then   "700/750/800/900 probes have different design" 
   ln(500.0/pw):$ln  "set pw90 for decoupling to 500usec (0.5kHz)"
   tpwr=tpwr-20.0*$ln*0.43429
   tpwr=tpwr+0.5
   tpwr=trunc(tpwr)
   dmf=1e6/500.0
   dmfadj
  else
   ln(250.0/pw):$ln  "set pw90 for decoupling to 250usec (1kHz)"
   $tpwr=tpwr-20.0*$ln*0.43429
   tpwr=$tpwr+0.5
   tpwr=trunc(tpwr)
   dmf=1e6/250.0
   dmfadj
  endif

" if BPpwrlimits, limit dpwr3 to BPdpwr3max and adjust dmf3 "
"                       here, tpwr will be used as dpwr3     "
  if BPpwrlimits=1 then
   if BPdpwr3max<tpwr then
    ln(10):$ln10
    $exp=$ln10/20*(tpwr-BPdpwr3max)
    exp($exp):$factor
    dmf=dmf/$factor
    dmfadj
    tpwr=BPdpwr3max
   endif
  endif

   dof=dof-2*dfrq   "set 2H frequency to ~2.5ppm"

   $dpwr3D='' format(tpwr,2,0):$dpwr3D
   BPsetparams('dpwr3D',$dpwr3D,'H2')
   $dmf3D='' format(dmf,5,1):$dmf3D
   BPsetparams('dmf3D',$dmf3D,'H2')
   $dof3D='' format(dof,5,1):$dof3D
   BPsetparams('dof3D',$dof3D,'H2')

 banner('2H AutoCalibrate and Probefile Update Finished\\Remember to Re-Cable Relay')
endif
