"macro BPdimension"
"BPdimension - sets the parameter dimension based on seqfil"


 substr(seqfil,1,1):$first1 
 substr(seqfil,1,2):$first2 
 substr(seqfil,1,3):$first3
 substr(seqfil,1,4):$first4
 substr(seqfil,1,5):$first5
 substr(seqfil,1,6):$first6
 substr(seqfil,1,7):$first7
 substr(seqfil,1,8):$first8
 substr(seqfil,1,10):$first10
 substr(seqfil,1,11):$first11
 substr(seqfil,1,15):$first15

"One Dimension"
if $first4='ddec' or $first8='rna_ddec' then dimension='H2' endif

if seqfil='C13observe' or seqfil='C13spinecho' then dimension='C13' endif

"Two Dimensions"
  if $first1='T' then dimension='C13 H1' endif

  if seqfil='gCfhsqc' or seqfil='gCfhsqcA' or seqfil='gChmqc' or seqfil='gChmbc' or
     seqfil='gChsqc'  or seqfil='gChsqcA'  or seqfil='CTgChmqc' or seqfil='cleanHMBC' or
     seqfil='sofastCmhmqc' or seqfil='rna_CTgChmqcA' or seqfil='rna_CTgChmqc' or
     seqfil='sofastgChmqc' or seqfil='rna_gChsqcA'   or seqfil='rna_gChsqc' or
     seqfil='rna_gChsqc_CCdec' or  seqfil='rna_gChmqc' or seqfil='rna_gCtrosyA' or
     seqfil='rna_gCtrosy' or seqfil='hbcbcgdedeheA' or seqfil='hbcbcgcdhdA' then dimension='C13 H1'
  endif

  if $first4='best' then 
     dimension='C13 N15 H1'
     if seqfil='best_NhsqcP' then dimension='N15 H1' endif
  endif

  if seqfil='C13dqcosy' or seqfil='C13gcosy' or $first7='cocaco_' or
     seqfil='CCtocsyCA' or seqfil='caco_sqapA'
     then dimension='C13 C13' endif

  if seqfil='gCLNfhsqcA' or seqfil='gCLNfhsqc' then dimension='N15 H1' endif

  if seqfil='gNCm_trosyhsqc' then dimension='C13/N15 H1' endif
  if seqfil='gNCm_hsqc' then dimension='C13 H1' endif

  if $first3='gNN' or $first5='gNnoe' or $first3='gNT' or $first6='gNhsqc' or
     $first8='gNfhsqcc' or $first6='gNcpmg' or $first8='rna_WGgN' or
     $first5='sea_g' or $first10='Cafiltered' or $first4='CPMG' or
     $first6='COfilt' or $first5='rna_A' or $first5='rna_G' or
     $first6='rna_CU' or $first5='rna_f' or $first7='sofastN' or $first6='gNhmqc' or
     seqfil='gNtrosyS3' or seqfil='best_NhsqcP' or seqfil='sSCT_CCR' or
     seqfil='crinept' or seqfil='hadamac'
     then dimension='N15 H1' 
  endif

  if $first5='rna_A'  or $first5='rna_G' 
     then dimension='H1 C13 H1' endif

  if seqfil='rna_HNNcosy' or seqfil='rna_HNNcosyA'
     then dimension='H1 C13 H1' endif

  if seqfil='rna_HPcosyHCP' then dimension='P31 H1' endif
  if $first6='rna_CU' then dimension='C13 N15 H1' endif

  if $first2='tn' or $first6='rna_tn' or $first7='rna_wet' or $first1='w' or
     $first2='qw' or $first2='SS' or $first6='rna_SS' or $first1='z' or $first5='rna_z' or
     $first8='dpfgse_n' or $first8='dpfgse_T' or $first8='dpfgse_t' or $first15='dpfgse_satxfer' or seqfil='rna_jr'
     then dimension='H1 H1' 
  endif
     
  if seqfil='gmacosy' or seqfil='rna_WGnoesy' or seqfil='rna_wnoesy' or seqfil='rna_11noesy' 
     or seqfil='CNfilnoesy' or seqfil='CNfiltocsy'
     then dimension='H1 H1'
  endif
     

  if seqfil='water' or seqfil='wlogsy_noe' or $first8='dpfgse_w' or
     seqfil='dpfgse_noepump' or seqfil='soggy' or seqfil='satxfer1D' or
     seqfil='cyclenoef' or seqfil='flipback_cal' or seqfil='cleanex-pm' or
     $first2='NH'
     then dimension='H1'
  endif

"Three Dimensions"

  if $first3='ghn' then
   if seqfil='ghncn' or seqfil='ghnn' or seqfil='ghnnA' then
    dimension='N15 N15 H1'
   elseif seqfil='ghnha' or seqfil='ghnhb' then
    dimension='H1 N15 H1'
   elseif seqfil='ghn_Jcoca_2DS3' or seqfil='ghn_Jnca_2DS3' or seqfil='ghn_Jnco_2DS3' then
    dimension='N15 H1'
   elseif seqfil='ghn_co_noe' or seqfil='ghn_co_noeA' then
    dimension='H1 C13 H1'
   else
    dimension='C13 N15 H1'
   endif
  endif

  if $first2='gc' then
   if seqfil='gcacb_tocsy_cmhmA' or seqfil='gcacb_tocsy_cmhm_sqA' then
    dimension='C13 C13 H1'
   elseif seqfil='gc_tocsy_nch2A'  then
    dimension='N15 C13 H1'
   else
    dimension='C13 N15 H1'
   endif
  endif

  if $first3='JIT' then dimension='C13 N15 H1' endif

  if $first5='ghca_' then 
    if seqfil='ghca_co_n' or seqfil='ghca_co_nA' or seqfil='ghca_nA'
     then dimension='N15 C13 H1'
    else
     dimension='C13 C13 H1' 
    endif
  endif

  if $first7='gnoesyC' or $first7='gtocsyC' or $first7='groesyC' or $first11='rna_gnoesyC'
     or seqfil='gnoesyChsqc_wg' or $first7='noesyCA'
     then dimension='H1 C13 H1' endif

  if seqfil='gnoesyCNhsqc' or seqfil='gnoesyCNhsqcA' then dimension='H1 C13/N15 H1' endif

  if seqfil='gChsqcnoesy' or seqfil='gChsqcnoesyA' or seqfil='gChsqctocsy' or seqfil='gChsqctocsyA' or
     seqfil='gCNfilnoesyChsqc' or seqfil='gCNfilnoesyChsqcA' or
     $first8='rna_hcch' or $first4='ghcc' or $first5='hcch_' 
     then dimension='H1 C13 H1'
  endif   

  if seqfil='ihca_co_nhP' or seqfil='hbcbcaconnhA' or seqfil='rna_CUhnccch' or
     seqfil='rna_CUhnccch_CCdec' 
     then dimension='C13 N15 H1' endif

  if seqfil='gNhsqcnoesy' or seqfil='gNhsqcnoesyA' or seqfil='gNhsqctocsy' or seqfil='gNhsqctocsyA' or
     seqfil='noesyCA' or seqfil='gCNfilnoesyNhsqc' or seqfil='gCNfilnoesyNhsqcA' or
     seqfil='rna_gnoesyNhsqcA' or seqfil='rna_gnoesyNhsqc' or seqfil='gnoesyNfhsqcA' or
     seqfil='rna_gnoesyNfhsqc' or seqfil='gnoesyNfhsqc' or seqfil='gnoesyNhsqcA' or
     seqfil='gnoesyNhsqc' or seqfil='gnoesyNhsqc_CN' or seqfil='gnoesyNhsqc_CNfilt' or
     seqfil='gnoesyNhsqc_NN' or seqfil='gnoesyNhsqcSM' or seqfil='groesyNhsqcSM' or
     seqfil='ghbha_co_nh' or seqfil='ghbha_co_nhA' or seqfil='ghc_co_nhA' or
     seqfil='ghc_co_nhP' or seqfil='ghc_co_nh'
     then dimension='H1 N15 H1'
  endif   

  if seqfil='hacahbA' or seqfil='rna_hmqc_tocsy'
     then dimension='C13 H1 H1'
  endif

  if seqfil='gLRCC' or seqfil='hbcbcacocaha' or seqfil='cch_tocsyA' or
     seqfil='methylnoesyA' or seqfil='rna_cchcosy_CCdec' or
     seqfil='rna_cchtocsy_CCdec' or seqfil='hbcbcacocahaA' 
     then dimension='C13 C13 H1'
  endif

  if seqfil='gNhsqcnoesyNhsqc3D' 
     then dimension='N15 N15 H1'
  endif

  if seqfil='rna_HCN' or seqfil='rna_mqHCNA' or seqfil='rna_mqHCN' or
     seqfil='gh2cnA' or seqfil='gLRCH' 
     then dimension='N15 C13 H1'
  endif

  if seqfil='rna_HCP' then dimension = 'P31 C13 H1' endif

  if seqfil='cbcacoA' or seqfil='cbcaco_IPAP_A' then dimension='C13 C13 C13' endif

"Four Dimensions"

  if seqfil='CN4Dnoesy_trosyA' then dimension='H1 N15 N15 H1' endif
  if seqfil='gNhsqcnoesyNhsqc' then dimension='N15 N15 H1 H1' endif
  if seqfil='gNhsqcnoesyNhsqcA' then dimension='N15 N15 H1 H1' endif
  if seqfil='gChmqcnoesyNhsqc' then dimension='H1 C13 N15 H1' endif
  if seqfil='gNhmqcnoesyNhsqc' then dimension='H1 N15 N15 H1' endif
  if seqfil='gNhmqctocsynoesyNhsqc' then dimension='H1 N15 H1 H1' endif
  if seqfil='gNhsqctocsynoesyNhsqc' then dimension='N15 N15 H1 H1' endif
  if seqfil='gNhsqctocsynoesyNhsqcA' then dimension='N15 N15 H1 H1' endif
  if seqfil='NN4Dnoesy_trosyA' then dimension='H1 N15 N15 H1' endif
  if seqfil='ghncoca_sim_trosy_4DA' then dimension='C13 C13 N15 H1' endif
  if seqfil='ghncoca_seq_trosy_4DA' then dimension='C13 C13 N15 H1' endif
  if seqfil='ghncaco_trosy_4DA' then dimension='C13 C13 N15 H1' endif
  if seqfil='ghcch_tocsy_cmhm1' then dimension='H1 C13 C13 H1' endif
  if seqfil='ghcch_tocsy_cmhm2' then dimension='H1 C13 C13 H1' endif
  if seqfil='ghcch_tocsy_cmhm3' then dimension='H1 C13 C13 H1' endif
  if seqfil='ghcch_tocsy_cmhm4' then dimension='H1 C13 C13 H1' endif
  if (seqfil='hmcmcbcaA' or seqfil='hmcmcgcbcaA' or seqfil='hmcmcgcbcacoA') then dimension='C13 C13 H1' endif
  if $first2='PR' then
      if seqfil='PR42_diag_gChsqcnoesyChsqc' or seqfil='PR42_gChsqcnoesyChsqc'
             then dimension='H1/C13 C13 H1'
      elseif seqfil='PR42_gChmqcnoesyNhsqcA' or seqfil='PR42_gha_caco_nhP' or
             seqfil='PR42_ghacannP' or $first4='PR43'
             then dimension='H1/C13 N15 H1'
     else
              dimension='C13/C13 N15 H1'
     endif
  endif

