"macro BPglobalpar"
" BPglobalpar "

exists('BPsvfdir','parameter','global'):$e
if not($e) then
  create('BPsvfdir','string','global')
  BPsvfdir=svfdir
endif

exists('BPclassic','parameter','global'):$e
if not($e) then
  create('BPclassic','flag','global')
  BPclassic='y'
endif

exists('owner','parameter','global'):$e
if not($e) then
  create('owner','string','global')
endif

exists('BP2Dplot','parameter','global'):$e
if not($e) then
  create('BP2Dplot','integer','global')
  BP2Dplot=0
endif

exists('PP2Dplot','parameter','global'):$e
if $e then
  destroy('PP2Dplot','global')
endif

exists('BPautonoisecheck','parameter','global'):$e
if not($e) then
  create('BPautonoisecheck','integer','global')
  BPautonoisecheck=0
endif

exists('BPBioNMR','parameter','global'):$e
if not($e) then
  create('BPBioNMR','integer','global')
  BPBioNMR=0
endif
exists('PPBioNMR','parameter','global'):$e
if $e then
  destroy('PPBioNMR','global')
endif

exists('BPdeuterated','parameter','global'):$e
if not($e) then
  create('BPdeuterated','integer','global')
  BPdeuterated=0
endif
exists('PPdeuterated','parameter','global'):$e
if $e then
  destroy('PPdeuterated','global')
endif

exists('BPpwrlimits','parameter','global'):$e
if not($e) then
  create('BPpwrlimits','real','global')
  BPpwrlimits=0
  exists('BPcryogenic','parameter','global'):$e
  if $e then
    BPpwrlimits=BPcryogenic
    destroy('BPcryogenic','global')
  endif
else
  exists('BPcryogenic','parameter','global'):$e
  if $e then
    destroy('BPcryogenic','global')
  endif
endif

exists('PPmaxgenic','parameter','global'):$e
if $e then
  destroy('PPmaxgenic','global')
endif

exists('BPdpwr3max','parameter','global'):$e
if not($e) then
  create('BPdpwr3max','real','global')
endif
if BPdpwr3max=0 then BPdpwr3max=50 endif

exists('BPdpwr4max','parameter','global'):$e
if not($e) then
  create('BPdpwr4max','real','global')
endif
if BPdpwr4max=0 then BPdpwr4max=50 endif

exists('BPdpwr2max','parameter','global'):$e
if not($e) then
  create('BPdpwr2max','real','global')
endif
if BPdpwr2max=0 then BPdpwr2max=50 endif

exists('BPtpwrmax','parameter','global'):$e
if not($e) then
  create('BPtpwrmax','real','global')
endif
if BPtpwrmax=0 then BPtpwrmax=60 endif

exists('BPminpwC','parameter','global'):$e
if not($e) then
  create('BPminpwC','pulse','global')
  BPminpwC=12.0
endif
exists('PPminpwC','parameter','global'):$e
if $e then
  destroy('PPminpwC','global')
endif

exists('BPdpwrmax','parameter','global'):$e
if not($e) then
  create('BPdpwrmax','real','global')
endif
if BPdpwrmax=0 then BPdpwrmax=50 endif

exists('BPtpwrspinlock','parameter','global'):$e
if not($e) then
  create('BPtpwrspinlock','real','global')
endif
if BPtpwrspinlock=0 then BPtpwrspinlock=10p endif

exists('BPdpwrspinlock','parameter','global'):$e
if not($e) then
  create('BPdpwrspinlock','real','global')
endif
if BPdpwrspinlock=0 then BPdpwrspinlock=80*dfrq endif

exists('PPtpwrmax','parameter','global'):$e
if $e then
  destroy('PPtpwrmax','global')
endif

exists('PPphi7cal','parameter','global'):$e
if $e then
  destroy('PPphi7cal','global')
endif

exists('BP1Hspinlock','parameter','global'):$e
if not($e) then
  create('BP1Hspinlock','real','global')
endif
if BP1Hspinlock=0 then BP1Hspinlock=10p endif

exists('BPspinlock','parameter','global'):$e
if not($e) then
  create('BPspinlock','real','global')
endif
if BPspinlock=0 then BPspinlock=10p endif

exists('BPplot','parameter','global'):$e
if not($e) then
  create('BPplot','string','global')
  setenumeral('BPplot',5,'plot','on','off','file','','global')
  BPplot='file'
endif

exists('BPplotdir','parameter','global'):$e
if not($e) then
  create('BPplotdir','string','global')
  BPplotdir=''
endif

exists('investigator','parameter','global'):$e
if not($e) then
  create('investigator','string','global')
  investigator=owner
endif
BPfixsaveglobal('investigator')

exists('notebook','parameter','global'):$e
if not($e) then
  create('notebook','string','global')
  notebook=''
endif
BPfixsaveglobal('notebook')

exists('page','parameter','global'):$e
if not($e) then
  create('page','string','global')
  page=''
endif
BPfixsaveglobal('page')

exists('study','parameter','global'):$e
if not($e) then
  create('study','string','global')
  study=''
endif
BPfixsaveglobal('study')

exists('samplename_global','parameter','global'):$e
if not($e) then
  create('samplename_global','string','global')
  samplename_global=''
endif
BPfixsaveglobal('samplename_global')

exists('operator','parameter','global'):$e
if not($e) then
  create('operator','string','global')
  operator=owner
endif
BPfixsaveglobal('operator')

exists('BPquick','parameter','global'):$e
if not($e) then
  create('BPquick','real','global')
  BPquick=0.0
endif

exists('BPinstall','parameter','global'):$e
if not($e) then
  create('BPinstall','real','global')
  BPinstall=0.0
endif

exists('BPbasic','parameter','global'):$e
if not($e) then
  create('BPbasic','real','global')
  BPbasic=1.0
endif

exists('bioref','parameter','global'):$e
if not($e) then
  create('bioref','flag','global')
  setenumeral('bioref',2,'n','y','global')
  setvalue('bioref','y','global')
endif
exists('setfrqCmd','maclib'):$e
if($e) then
  setfrqCmd('setRefstd','Bio')
endif

exists('PRskipF2','parameter','global'):$e          " skip F2 (N-15) plane "
if not $e then
  create('PRskipF2','flag','global')
  PRskipF2 = 'n'
endif

exists('PRnpr','parameter','global'):$e    " maximum # of tilted planes "
if not $e then
  create('PRnpr','integer','global')
  setprotect('PRnpr','on',256,'global')
  PRnpr = 1,1,1,1,1,1,1,1,1,1,1,1
else
  setprotect('PRnpr','on',256,'global')
endif

exists('PRnexp','parameter','global'):$e   " maximum # of PR experiments "
if not $e then
  create('PRnexp','integer','global')
  PRnexp = 3
endif

exists('PRbpa','parameter','global'):$e    " use best proj angle "
if not $e then
  create('PRbpa','flag','global')
  setprotect('PRbpa','on',256,'global')
  PRbpa = 'y','y','y','y','y','y','y','y','y','y','y','y'
else
  setprotect('PRbpa','on',256,'global')
endif

exists('PRvarsw1','parameter','global'):$e " use variable sw1 "
if not $e then
  create('PRvarsw1','flag','global')
  setprotect('PRvarsw1','on',256,'global')
  PRvarsw1 = 'n','n','n','n','n','n','n','n','n','n','n','n'
else
  setprotect('PRvarsw1','on',256,'global')
endif

exists('PRcnt','parameter','global'):$e  " counter for tilted experiments "
if not $e then
  create('PRcnt','integer','global')
  PRcnt = 0
endif

exists('PRn','parameter','global'):$e     "Experiment counter "
if not $e then
  create('PRn','real','global')
  PRn = 1
endif

exists('PRsp','parameter','global'):$e     "H-1 display limits"
if not $e then
  create('PRsp','frequency','global')
  PRsp = 6.0*sfrq    " in ppm "
endif

exists('PRwp','parameter','global'):$e     "H-1 display limits"
if not $e then
  create('PRwp','frequency','global')
  PRwp = 6.0*sfrq    " in ppm "
endif

exists('PRrp','parameter','global'):$e     "PR rp"
if not $e then
  create('PRrp','real','global')
  PRrp=0.0
endif

exists('PRlp','parameter','global'):$e     "PR lp"
if not $e then
  create('PRlp','real','global')
  PRlp=0.0   " in ppm "
endif

exists('PRdir','parameter','global'):$e  
if not $e then
  create('PRdir','string','global')
  PRdir = ''
endif

exists('PRsetlim','parameter','global'):$e  
if not $e then
  create('PRsetlim','flag','global')
  PRsetlim = 'n'
endif

exists('PRthr','parameter','global'):$e
if not $e then
  create('PRthr','real','global')
  setprotect('PRthr','on',256,'global')
  PRthr=0.0,0.0,0.0,0.0,0.0,0.0,0.0,0.0,0.0,0.0,0.0,0.0
else
  setprotect('PRthr','on',256,'global')
endif

exists('PRpos','parameter','global'):$e
if not $e then
  create('PRpos','flag','global')
  setprotect('PRpos','on',256,'global')
  PRpos='y','y','y','y','y','y','y','y','y','y','y','y'
else
  setprotect('PRpos','on',256,'global')
endif

exists('PRnpeaks','parameter','global'):$e
if not $e then
  create('PRnpeaks','integer','global')
  setprotect('PRnpeaks','on',256,'global')
  PRnpeaks=100,100,100,100,100,100,100,100,100,100,100,100
else
  setprotect('PRnpeaks','on',256,'global')
endif

exists('PRppeaks','parameter','global'):$e
if not $e then
  create('PRppeaks','integer','global')
  setprotect('PRppeaks','on',256,'global')
  PRppeaks=0
else
  setprotect('PRppeaks','on',256,'global')
endif

exists('PRexp','parameter','global'):$e
if not $e then
  create('PRexp','string','global')
endif
setprotect('PRexp','on',256,'global')
PRexp='gNhsqc','ghn_co','ghn_ca','ghn_co','ghn_co','ghn_co','ghn_co','ghn_co','ghn_co','ghn_co','ghn_co','ghn_co'
  
exists('PRsw','parameter','global'):$e
if not $e then
  create('PRsw','real','global')
  setprotect('PRsw','on',256,'global')
  PRsw=12500.0,12500.0,12500.0,12500.0,12500.0,12500.0,12500.0,12500.0,12500.0,12500.0,12500.0,12500.0
else
  setprotect('PRsw','on',256,'global')
endif

exists('PRsw1','parameter','global'):$e
if not $e then
  create('PRsw1','real','global')
  setprotect('PRsw1','on',256,'global')
  PRsw1=2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0
else
  setprotect('PRsw1','on',256,'global')
endif

exists('PRsw2','parameter','global'):$e
if not $e then
  create('PRsw2','real','global')
  setprotect('PRsw2','on',256,'global')
  PRsw2=2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0,2500.0
else
  setprotect('PRsw2','on',256,'global')
endif


exists('PRni','parameter','global'):$e
if not $e then
  create('PRni','integer','global')
  setprotect('PRni','on',256,'global')
  PRni=0,0,0,0,0,0,0,0,0,0,0,0
else
  setprotect('PRni','on',256,'global')
endif

exists('PRniTilt','parameter','global'):$e
if not $e then
  create('PRniTilt','integer','global')
  setprotect('PRniTilt','on',256,'global')
  PRniTilt=0,0,0,0,0,0,0,0,0,0,0,0
else
  setprotect('PRniTilt','on',256,'global')
endif

exists('PRni2','parameter','global'):$e
if not $e then
  create('PRni2','integer','global')
  setprotect('PRni2','on',256,'global')
  PRni2=0,0,0,0,0,0,0,0,0,0,0,0
else
  setprotect('PRni2','on',256,'global')
endif

exists('PRnt','parameter','global'):$e
if not $e then
  create('PRnt','integer','global')
  setprotect('PRnt','on',256,'global')
  PRnt=0,0,0,0,0,0,0,0,0,0,0,0
else
  setprotect('PRnt','on',256,'global')
endif

exists('PRpage','parameter','global'):$e
if not $e then
  create('PRpage','integer','global')
  setprotect('PRpage','on',1,'global')
  PRpage=1
else
  setprotect('PRpage','on',1,'global')
endif

exists('PRd1','parameter','global'):$e
if not $e then
  create('PRd1','real','global')
  setprotect('PRd1','on',256,'global')
  PRd1=1.0
else
  setprotect('PRd1','on',256,'global')
endif

"set values into spinlock parameters"
if (h1freq=900) then
  BPspinlock=8000 BPdpwrspinlock=8000
endif
if (h1freq=800) then
  BPspinlock=8000 BPdpwrspinlock=8000
endif
if (h1freq=750) then
  BPspinlock=8000 BPdpwrspinlock=8000
endif
if (h1freq=700) then
  BPspinlock=7500 BPdpwrspinlock=7500
endif
if (h1freq=600) then
  BPspinlock=7000 BPdpwrspinlock=7000
endif
if (h1freq=500) then
  BPspinlock=6000 BPdpwrspinlock=6000
endif
if (h1freq=400) then
  BPspinlock=5000 BPdpwrspinlock=5000
endif
if (h1freq=300) then
  BPspinlock=4000 BPdpwrspinlock=4000
endif
