"macro BPmake180CO"

"For version 5.1 software"

"Calculates the following shaped SLP pulse and stores it in your shapelib:"
"Carrier on Cb, 180 degree pulse on CO 128ppm away, null at Ca at 10ppm."

"The carrier should be set to 46ppm."

"The fine attenuator setting must be set in the pulse sequence during the"
" pulse."

$pwC7 = 80.5*600.0/sfrq
$steps7 = $pwC7*5.0   $steps7 = 2.0*trunc($steps7/2.0) + 1.0
$pwC7 = ($steps7 + 1.0)/5.0  
$rf7 = 1023.0
BPmakesinc($steps7, $rf7)
$stps7 = ''     format($steps7,0,0):$stps7     $shape7 = 'sincs' + $stps7
$freq7 = dfrq*128.0      BPconvolute($shape7,'offC7',$pwC7,$freq7)
BPmoveshape('offC7.RF')
shell('rm -f',userdir+'/shapelib/'+$shape7+'.RF'):$dum
write('line3','The SLP pulse "shapelib/offC7.RF" has been created')
