"macro BPmakecosinemodulate"
"BPmakecosinemodulate	Youlin Xia,HKUST Apr. 1999"
"  modified by GG May 2002 to use BPconvolute"

"Calculates the following shaped SLP pulse and stores it in your shapelib:"
"Carrier on H2O, 180 degree pulse on NH 4.0ppm away, null at H2O."

"The carrier should be set to 4.7ppm."

"The fine attenuator setting must be set in the pulse sequence during the"
" pulse."

$pw_shpss = 500*500/sfrq
$steps = 500*500.11/sfrq   $steps = trunc($steps+0.5)  
$pw_shpss = $steps
$rf = 1023.0
BPmakehard($steps, $rf)
$stps = ''     format($steps,0,0):$stps     $shape = 'hard' + $stps
$newshape = 'NH180'     $freq = sfrq*4.0     
BPconvolute($shape,$newshape,$pw_shpss,$freq,-$freq)
BPmoveshape('NH180.RF')
write('line3','The SLP pulse, %s.RF, has been created in your shapelib',$newshape)

