"macro BPparCS"
"parCS - add parameters for Compressive Sensing options, EK, Oxford 17/02/2011 "

$curdir=''

exists('BP_sparse_advanced','parameter'):$e
  if $e=0 then create('BP_sparse_advanced','string')
   BP_sparse_advanced='n'
  endif

exists('SPARSE','parameter'):$e 
if not ($e) then 
  create('SPARSE','flag') 
  SPARSE='n'  
endif

exists('BP_SPARSEproc','parameter'):$e 
if not ($e) then 
  create('BP_SPARSEproc','string') 
  setgroup('BP_SPARSEproc','processing')
  BP_SPARSEproc='CLEAN'  " flag for CLEAN processing "
endif

$procdir=''
$procdir = curexp+'/procdir' 
exists($procdir,'file'):$e 
if ($e) then 
  shell('rm -r '+$procdir)
endif

$sch=''
$sch = curexp+'/sampling.sch' 
exists($sch,'file'):$e 
if ($e) then 
  rm($sch)
endif

$sch=''
$sch = curexp+'/acqfil/sampling.sch' 
exists($sch,'file'):$e 
if ($e) then 
  rm($sch)
endif

return (1)


