"macro BPsetddrtc"
" BPsetddrtc- macro to set ddrtc for sequences"
" that do not use rof2 at end of sequence"
" ddrtc is typically near rof2+alfa if rof2 is used"
" therefore, ddrtc is set to alfa"

$SE=''
exists('SE','parameter'):$e
if $e=1 then $SE=SE else $SE='n' endif 

if (Console='vnmrs') then
 substr(seqfil,1,2):$first2 
 substr(seqfil,1,3):$first3
 substr(seqfil,1,4):$first4
 substr(seqfil,1,5):$first5
 substr(seqfil,1,8):$first8
 substr(seqfil,1,14):$first14
 if ($#>0) then
  $e=0
  if (((seqfil='gChsqc') or (seqfil='gChsqcA') and $SE='n'))
   then $e=1 endif
  if $first2='gc' then  $e=1 endif
  if $first3='JIT' then  $e=1 endif
  if $first3='ghn' then  $e=1 endif
  if $first4='gChm' then  $e=1 endif
  if $first2='gN' then  $e=1 endif
  if $first4='best' then  $e=1 endif
  if $first5='ghcch' then  $e=1 endif
  if seqfil='gnoesyChsqcSE' then  $e=1 endif
  if seqfil='gnoesyChsqc_wg' then  $e=1 endif
  if seqfil='rna_gCtrosy' then  $e=1 endif
  if seqfil='rna_HNNcosy' then  $e=1 endif
  if seqfil='rna_HCN' then  $e=1 endif
  if seqfil='rna_HCP' then  $e=1 endif
  if seqfil='crinept' then  $e=1 endif
  if $e=1 then
    return(0)
  else
    return(1)
  endif
 else
  if $first2='gc' then  ddrtc=alfa ddrpm='e' endif
  if (($first2='PR') and (seqfil<>'PR42_gChsqcnoesyChsqc')) then  ddrtc=alfa ddrpm='e' endif
  if $first3='ghn' then ddrtc=alfa ddrpm='e' endif
  if $first3='JIT' then  ddrtc=alfa ddrpm='e' endif
  if $first4='gChm' then  ddrtc=alfa ddrpm='e' endif
  if $first4='gCPM' then  ddrtc=alfa ddrpm='e' endif
  if $first2='gN' then ddrtc=alfa ddrpm='e' endif
  if $first4='best' then ddrtc=alfa ddrpm='e'  endif
  if $first5='ghcch' then  ddrtc=alfa ddrpm='e' endif
  if ((seqfil='gChsqc') or (seqfil='gChsqcA') or (seqfil='gChsqcP')) then
    if $SE='y' then
      ddrtc=alfa ddrpm='e'
    else
      getparam('ddrtc','H1'):ddrtc
    endif
  endif
  if seqfil='wgcosy' then ddrtc=alfa ddrpm='e' endif
  if seqfil='wgnoesy' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gnoesyChsqcSE' then ddrtc=alfa ddrpm='e' endif
  if seqfil='groesyChsqcSM' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gnoesyChsqcSM' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gtocsyChsqcSM' then ddrtc=alfa ddrpm='e' endif
  if seqfil='groesyNhsqcSM' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gnoesyNhsqcSM' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gtocsyNhsqcSM' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gnoesyNhsqc' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gtocsyChsqc_wg' then ddrtc=alfa ddrpm='e' endif
  if seqfil='rna_gCtrosy' then ddrtc=alfa ddrpm='e' endif
  if seqfil='rna_HNNcosy' then ddrtc=alfa ddrpm='e' endif
  if seqfil='rna_HCN' then ddrtc=alfa ddrpm='e' endif
  if seqfil='rna_HCP' then ddrtc=alfa ddrpm='e' endif
  if seqfil='rna_11echo' then ddrtc=alfa ddrpm='e' endif
  if seqfil='crinept' then ddrtc=alfa ddrpm='e' endif
  if seqfil='sofastNhmqc' then ddrtc=alfa ddrpm='e' endif
  if seqfil='C13observe' then ddrtc=alfa ddrpm='e' endif
  if seqfil='CNfilnoesy' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gCNfilnoesyNfhsqcA' then ddrtc=alfa ddrpm='e' endif
  if seqfil='gCNfilnoesyChsqcSE' then ddrtc=alfa ddrpm='e' endif
  if seqfil='STS_SOFAST' then ddrtc=alfa ddrpm='e' endif
  if seqfil='sSCT_CCR' then ddrtc=alfa ddrpm='e' endif
  if seqfil='ihca_co_nhP' then ddrtc=alfa ddrpm='e' endif
  if seqfil='COfiltered_TROSYnietl_sCT' then ddrtc=alfa ddrpm='e' endif
  if seqfil='Cafiltered_TROSYnietl_sCT' then ddrtc=alfa ddrpm='e' endif
 endif
else
 return(0)
endif
