"macro BPsetlimits"
"BPsetlimits- a macro to take probefile values"
"and update global values (displayed in Globals&Probefile page)   "
"this only happens if the parameter exists in the probefile"
"if the parameter exists in the probefile but is not a global"
"it is created first before getting updated"

BPcheckprobefile('gradientshaping','H1'):$e
if ($e=1) then
 exists('gradientshaping','parameter','global'):$e
 if ($e=0) then
  create('gradientshaping','flag','global')
 endif
 getparam('gradientshaping','H1'):gradientshaping
endif

BPcheckprobefile('gradientdisable','H1'):$e
if ($e=1) then
 exists('gradientdisable','parameter','global'):$e
 if ($e=0) then
  create('gradientdisable','flag','global')
 endif
 getparam('gradientdisable','H1'):gradientdisable
endif

BPcheckprobefile('BPquick','H1'):$e
if ($e=1) then
 exists('BPquick','parameter','global'):$e
 if ($e=0) then
  create('BPquick','real','global')
 endif
 getparam('BPquick','H1'):BPquick
endif

BPcheckprobefile('BPbasic','H1'):$e
if ($e=1) then
 exists('BPbasic','parameter','global'):$e
 if ($e=0) then
  create('BPbasic','real','global')
 endif
 getparam('BPbasic','H1'):BPbasic
endif

BPcheckprobefile('qcomp','H1'):$e
if ($e=1) then
 exists('qcomp','parameter','global'):$e
 if ($e=0) then
  create('qcomp','flag','global')
 endif
 getparam('qcomp','H1'):qcomp
endif

"Biopack power limits are active if BPpwrlimits=1 "
BPcheckprobefile('BPpwrlimits','H1'):$e
if ($e=1) then
 exists('BPpwrlimits','parameter','global'):$e
 if ($e=0) then
  create('BPpwrlimits','real','global')
 endif
 getparam('BPpwrlimits','H1'):BPpwrlimits
endif

"1H and 13C spinlock upper limits if BPpwrlimits=1 "
BPcheckprobefile('BPtpwrspinlock','H1'):$e
if ($e=1) then
 exists('BPtpwrspinlock','parameter','global'):$e
 if ($e=0) then
  create('BPtpwrspinlock','real','global')
 endif
 getparam('BPtpwrspinlock','H1'):BPtpwrspinlock
endif

BPcheckprobefile('BPdpwrspinlock','C13'):$e
if ($e=1) then
 exists('BPdpwrspinlock','parameter','global'):$e
 if ($e=0) then
  create('BPdpwrspinlock','real','global')
 endif
 getparam('BPdpwrspinlock','C13'):BPdpwrspinlock
endif

"default values for 13C and 1H spinlock fields"
BPcheckprobefile('BPspinlock','C13'):$e
if ($e=1) then
 exists('BPspinlock','parameter','global'):$e
 if ($e=0) then
  create('BPspinlock','real','global')
 endif
 getparam('BPspinlock','C13'):BPspinlock
endif

BPcheckprobefile('BP1Hspinlock','H1'):$e
if ($e=1) then
 exists('BP1Hspinlock','parameter','global'):$e
 if ($e=0) then
  create('BP1Hspinlock','real','global')
 endif
 getparam('BP1Hspinlock','H1'):BP1Hspinlock
endif

"1H and 13C decoupling power upper limits if BPpwrlimits=1 "
BPcheckprobefile('BPtpwrmax','H1'):$e
if ($e=1) then
 exists('BPtpwrmax','parameter','global'):$e
 if ($e=0) then
  create('BPtpwrmax','real','global')
 endif
 getparam('BPtpwrmax','H1'):BPtpwrmax
endif

BPcheckprobefile('BPdpwrmax','C13'):$e
if ($e=1) then
 exists('BPdpwrmax','parameter','global'):$e
 if ($e=0) then
  create('BPdpwrmax','real','global')
 endif
 getparam('BPdpwrmax','C13'):BPdpwrmax
endif

BPcheckprobefile('BPdpwr2max','N15'):$e
if ($e=1) then
 exists('BPdpwr2max','parameter','global'):$e
 if ($e=0) then
  create('BPdpwr2max','real','global')
 endif
 getparam('BPdpwr2max','N15'):BPdpwr2max
endif

BPcheckprobefile('BPdpwr3max','H2'):$e
if ($e=1) then
 exists('BPdpwr3max','parameter','global'):$e
 if ($e=0) then
  create('BPdpwr3max','real','global')
 endif
 getparam('BPdpwr3max','H2'):BPdpwr3max
endif

BPcheckprobefile('BPdpwr4max','H2'):$e
if ($e=1) then
 exists('BPdpwr4max','parameter','global'):$e
 if ($e=0) then
  create('BPdpwr4max','real','global')
 endif
 getparam('BPdpwr4max','H2'):BPdpwr4max
endif

"System power limits"
BPcheckprobefile('maxattench1','H1'):$e
if ($e=1) then
 exists('maxattench1','parameter','global'):$e
 if ($e=0) then
  create('maxattench1','real','global')
 endif
 getparam('maxattench1','H1'):maxattench1
endif

BPcheckprobefile('maxattench2','C13'):$e
if ($e=1) then
 exists('maxattench2','parameter','global'):$e
 if ($e=0) then
  create('maxattench2','real','global')
 endif
 getparam('maxattench2','C13'):maxattench2
endif

BPcheckprobefile('maxattench3','N15'):$e
if ($e=1) then
 exists('maxattench3','parameter','global'):$e
 if ($e=0) then
  create('maxattench3','real','global')
 endif
 getparam('maxattench3','N15'):maxattench3
endif

BPcheckprobefile('maxattench4','H2'):$e
if ($e=1) then
 exists('maxattench4','parameter','global'):$e
 if ($e=0) then
  create('maxattench4','real','global')
 endif
 getparam('maxattench4','H2'):maxattench4
endif

BPcheckprobefile('maxattench5','H2'):$e
if ($e=1) then
 exists('maxattench5','parameter','global'):$e
 if ($e=0) then
  create('maxattench5','real','global')
 endif
 getparam('maxattench5','H2'):maxattench5
endif

BPlimitupdate    "will add and update missing globals into new"
                 "probefile in case /vnmr or vnmr1 probefile is missing"
                 "parameters"
