"macro BPsetwurstparams"
"BPsetwurstparams"
" gets values of parameters from *.DEC files"

if ($#>0) then
  BPpboxget($1):dseq,$dmmy,dpwr,$dmmy,dres,dmf
  return
endif

if (seqfil='PR42_gChsqcnoesyChsqc') then
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='methylnoesyA') then
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='hbcbcgcdceheA') or (seqfil='hbcbcgcdhdA')) then
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='hbcbcacocahaA') or (seqfil='hacahbA') or (seqfil='noesyCA')) then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='noesyCA_500') or (seqfil='noesyCA_600')
   or (seqfil='noesyCA_750') or (seqfil='noesyCA_800')) then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='noesyNCA_500') or (seqfil='noesyNCA_600')
   or (seqfil='noesyNCA_750') or (seqfil='noesyNCA_800')) then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif

if ((seqfil='gChsqc') or (seqfil='gChsqcP') or (seqfil='gChsqcA')) then
 if arom='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
    dpwr=$dpwr
 endif
 if alphaC='y' then 
   BPpboxget('wurst50.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
    dpwr=$dpwr
 endif
 if allC='y' then 
   BPpboxget('wurst140.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
    dpwr=$dpwr
 endif
 if aliph='y' then 
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
    dpwr=$dpwr
 endif
endif
if (seqfil='gChmqc') then
 if arom='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
 if aliph='y' then 
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
endif
if ((seqfil='gCfhsqc') or (seqfil='gCfhsqcA') or (seqfil='CNnoesy_interintraA')) then
   BPpboxget('wurst140.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='CTgChmqc') then
 if arom='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
 if aliph='y' then 
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
 if allC='y' then 
   BPpboxget('wurst140.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
endif
if ((seqfil='ghca_co') or (seqfil='ghca_co_n') or (seqfil='ghca_nA'))  then
   BPpboxget('wurst50.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='ghca_coA') or (seqfil='ghca_co_nA'))  then
   BPpboxget('wurst50.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='ghn_ca') then
   BPpboxget('cocbdec.DEC'):Cbdseq,$dmmy,Cbdpwr,$dmmy,Cbdres,Cbdmf
endif
if (seqfil='ghnca_Jhan_3D') then
   BPpboxget('codec2.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='gChmqcnoesyNhsqc') then
   BPpboxget('codec.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='PR42_gChmqcnoesyNhsqc') then
   BPpboxget('codec.DEC'):codecseq,$dmmy,copwr,copwrf,cores,codmf
endif
if (seqfil='PR43_ghc_co_nhP') then
   BPpboxget('cb43dec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR43_intra_gc_c_nhP') then
   BPpboxget('cb43dec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_ghn_co_caA') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_ghn_ca_coA') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_ghn_ca_coA_TROSY') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_sim_ghn_co_caA') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_sim_ghn_co_caA_TROSY') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_ghn_co_caA_TROSY') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_ghacanhP') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='PR42_gha_caco_nhP') then
   BPpboxget('cbdec.DEC'):cbdecseq,$dmmy,cbpwr,$dmmy,cbres,cbdmf
endif
if (seqfil='gNhmqcnoesyNhsqc') then
   BPpboxget('cocadec.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='gnoesyChsqcA') or (seqfil='gnoesyCNhsqcA') or
    (seqfil='gChsqcnoesyA') or (seqfil='gNhsqctocsyA') or (seqfil='gnoesyChmqc') or
    (seqfil='gnoesyChsqcSE') or (seqfil='gnoesyChsqcSM') or
    (seqfil='gtocsyChsqcSE') or (seqfil='gtocsyChsqcSM') or
    (seqfil='gChsqctocsyA') or (seqfil='gtocsyChsqcA')) then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='gnoesyChsqc') or (seqfil='gnoesyCNhsqc') or (seqfil='gLRCC') or
    (seqfil='gChsqcnoesy') or (seqfil='gLRCH') or
    (seqfil='gnoesyChsqc_CC') or (seqfil='gnoesyChsqc_NC') or
    (seqfil='gNhsqctocsy') or (seqfil='gNhsqctocsyA') or
    (seqfil='gNhsqcnoesy') or (seqfil='gNhsqcnoesyA') or
    (seqfil='rna_hmqc_tocsy') or
    (seqfil='gChsqctocsy') or (seqfil='gtocsyChsqc')) then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='ghcch_tocsy') or (seqfil='ghcch_tocsySP') or (seqfil='hcch_tocsy') or (seqfil='hcch_tocsySP') then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='hcch_tocsyA') or (seqfil='hcch_cosyA') or (seqfil='hcch_cosy')) then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='tnnoesy') or (seqfil='SSnoesy') or
    (seqfil='tntocsy') or (seqfil='tnroesy') or
    (seqfil='qwnoesy') or (seqfil='qwnoesyA') or
    (seqfil='tndqcosy') or (seqfil='tnmqcosy')) then 
   BPpboxget('wurst140.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='wgnoesy') or (seqfil='zdipsitocsy') or
    (seqfil='wroesy') or (seqfil='wnoesy') or
    (seqfil='qwnoesy') or (seqfil='wgtocsy') or (seqfil='water')) then 
   BPpboxget('wurst140.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='hcch_tocsyP') then
   BPpboxget('cctocsy.DEC'):mixpat,pwmix,mixpwr,mixpwrf,mixres,mixdmf
endif
if (seqfil='ghn_coca_cb') then
   BPpboxget('CgCO1.RF'):$dmmyshp,pwCgCO,pwCgCO_lvl
endif

if ((seqfil='rna_gChsqc') or (seqfil='rna_gCtrosy')) then
 if aromatic='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
 if allC='y' then 
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif endif endif
if (seqfil='rna_gCtrosy') then
   if (aromatic_C5='y') then 
    BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
   endif
endif
if ((seqfil='rna_gnoesyChsqc') or (seqfil='rna_gnoesyChsqcA')) then
   BPpboxget('wurst140.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='rna_hcch_tocsy') then
 if AH2H8='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif endif
if ((seqfil='rna_gChmqc') or (seqfil='rna_hcch_cosy')) then
 if aromatic='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif endif
if ((seqfil='rna_Ahnctocsyc') or (seqfil='rna_HCN') or (seqfil='rna_HCP'))  then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='rna_CUhnccch') or (seqfil='rna_Ghnctocsyc'))  then
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='rna_ghcch_tocsy')  then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
 if ((seqfil='rna_tnnoesy') or (seqfil='rna_wetnoesy') or (seqfil='rna_wettntocsy') or (seqfil='tnroesy') or (seqfil='rna_tndqcosy') or (seqfil='rna_wroesy') or (seqfil='tnmqcosy')) then 
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
 if ((seqfil='wgnoesy') or (seqfil='rna_WGnoesy') or (seqfil='wnoesy') or (seqfil='qwnoesy') or (seqfil='wgtocsy') or (seqfil='rna_water')) then 
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif

