"macro BPupdate_zqshape"
if ((seqfil='dpfgse_tocsy') or (seqfil='dpfgse_tocsyCN') or (seqfil='dpfgse_satxfer_tocsy')) then
 opx('W20_50msec.RF')     
 $bw=100p
 $width=''
 format($bw,6,0):$width
 $wave='cawurst-20 '+$width+'/0.05'
 setwave($wave)
 pbox_rst
 cpx(pw*compH,tpwr)
 BPpboxget('W20_50msec.RF'):zqshape1,zqpw1,zqpwr1

 opx('W20_30msec.RF')     
 $bw=100p
 $width=''
 format($bw,6,0):$width
 $wave='cawurst-20 '+$width+'/0.03'
 setwave($wave)
 pbox_rst
 cpx(pw*compH,tpwr)
 BPpboxget('W20_30msec.RF'):zqshape2,zqpw2,zqpwr2
else
 opx('W20_50msec.RF')     
 $bw=100p
 $width=''
 format($bw,6,0):$width
 $wave='cawurst-20 '+$width+'/0.05'
 setwave($wave)
 pbox_rst
 cpx(pw*compH,tpwr)
 BPpboxget('W20_50msec.RF'):zqshape,zqpw,zqpwr
endif
