"macro Cafiltered_TROSYnietl_sCT"

BPrtppar('Cafiltered_TROSYnietl_sCT')


 getparam('tpwrsf_d','H1'):tpwrsf_d 
 getparam('tpwrsf_n','H1'):tpwrsf_n 
 getparam('NHgrad1_time','N15'):gt1 
 getparam('NHgrad1_lvl','N15'):gzlvl1 
 getparam('NHgrad2_lvl','N15'):gzlvl2 
 getparam('NHgstab','N15'):gstab
 getparam('swN','N15'):sw1 
 dm2='nnn' 
 dpwr=0
 
 getparam('gt5','N15'):gt5
 getparam('gt0','N15'):gt0
 getparam('gzlvl5','N15'):gzlvl5
 getparam('gzlvl0','N15'):gzlvl0


opx('Ca_reburp_180.RF')                           
setwave('reburp 50p -118p')
pbox_rst
pboxpar('refofs', '174p')
pboxpar('sfrq', dfrq)
cpx(pwC*compC,pwClvl)
BPpboxget('Ca_reburp_180.RF'):$shname2,pwC3,Ca180power
BPmoveshape('Ca_reburp_180.RF')

opx('Ca_eburp1_90.RF')                          
setwave('eburp1 50p -118p')
pbox_rst
pboxpar('refofs', '174p')
pboxpar('sfrq', dfrq)
cpx(pwC*compC,pwClvl)
BPpboxget('Ca_eburp1_90.RF'):$shname2,pwC6,Ca90power
BPmoveshape('Ca_eburp1_90.RF')

Cfilter='n'
BPprotref1(120.0,'dfrq2')
axis='p2'
wnt='' wexp='' spin='n'
ni=1 phase=1
