"macro dpfgse_water"
"************************************************************************"
" dpfgse_water - convert parameter set to PFG-echo water suppression experiment "
"************************************************************************"
BPrtppar('dpfgse_water')
substr(gradtype,3,1):$ss
if $ss='l' then
  setlimit('gzlvl0',2047.0,-2047.0,1.0) gzlvl0=900
  setlimit('gzlvl2',2047.0,-2047.0,1.0) gzlvl2=1600
endif
BPupdate_wrefshape BPupdate_wselshape BPupdate_flipshape
BPpboxget('wurst140.DEC'):dseq,$dmmy,dpwr,$dmmy,dres,dmf
BPpboxget('wurst40N.DEC'):dseq2,$dmmy,dpwr2,$dmmy,dres2,dmf2

np=16384 sb=-at sbs=sb fn=32k d1=1.5
ss=4 dg dps
