"macro gLRCC"

BPrtppar('gLRCC')

sw1=66*dfrq sw2=40*dfrq dof=dof-(174-35)*dfrq
 getparam('CHgrad1_time','C13'):gt1 
 getparam('CHgrad1_lvl','C13'):gzlvl1 
 getparam('CHgrad2_lvl','C13'):gzlvl2 
 getparam('NHgstab','N15'):gstab
 dm2='nnn' 
if (numrfch>3) then

 getparam('dof3D','H2'):dof3
 getparam('dmm3D','H2'):dmm3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3

else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
reffrq=sfrq-(sw/2-rfl+rfp)/1e6
BPsetwurstparams dmm='ccp'
BPcheckdpwr
wnt='' wexp='' spin='n'
ni=1 phase=1 ni2=1 phase2=1
