"macro ghNcaNH_A"

BPrtppar('ghNcaNH_A')  

setfrq BPsetampmode
if (numrfch>3) then
 getparam('dof3D','H2'):dof3
 getparam('dmm3D','H2'):dmm3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3
else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
	
 dof=dof-(174-56)*dfrq
// coherence selection
  getparam('NHgrad1_time','N15'):gt4 
  gt6=gt4*0.1
  getparam('NHgrad1_lvl','N15'):$gN1
  getparam('NHgrad2_lvl','N15'):$gN2

// Note  gzlvl6=-$gN2/$gN1*gzlvl4*gt4/gt6*0.1
  gzlvl4=$gN1
  gzlvl6=-$gN2
  write('error',' Double-Check/Calibrate coherence decoding gradient gzlvl6!!!..' )
        
// Typical sw1=30*sfrq/8  e.g. 3000 Hz at 800 MHz
  getparam('swN','N15'):sw1
  sw2=sw1 
  dm2='nnn'
  dn3='H2' dm3='nyn'

//setup 1D

  ni=0    phase=1  nt=4 ss=4 ni2=0 phase2=1 ni3=0 phase2=1 phase3=1
  exp_mode='t'
  axis='p22'
  wnt='' wexp='' spin='n'
  ddrtc=alfa

