"macro ghc_co_nhP"

BPrtppar('ghc_co_nhP')
setfrq
BPsetampmode
if (numrfch>3) then
 getparam('dof3D','H2'):dof3
 getparam('dmm3D','H2'):dmm3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3
else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
reffrq=sfrq-(sw/2-rfl+rfp)/1e6

getparam('waltzB1','H1'):waltzB1
 getparam('NHgrad1_time','N15'):gt1 
 getparam('NHgrad1_lvl','N15'):gzlvl1 
 getparam('NHgrad2_lvl','N15'):gzlvl2 
 getparam('NHgstab','N15'):gstab
 getparam('swN','N15'):sw2 
 getparam('spinlock','C13'):spinlock
 getparam('phi7calP','C13'):phi7cal
 dm2='nny' 
 sw1=sw
 
 getparam('gt5','N15'):gt5
 getparam('gzlvl5','N15'):gzlvl5

BPmake180Ca
BPmake90CO_Ca
BPmake90CO
BPmake180CO
spin='n' ni=0  ni2=0 phase=1 phase2=1
