"macro ghca_co_canh"

BPrtppar('ghca_co_canh')

setfrq BPsetampmode
if (numrfch>3) then
 getparam('dof3D','H2'):dof3
 getparam('dmm3D','H2'):dmm3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3
else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
reffrq=sfrq-(sw/2-rfl+rfp)/1e6
 getparam('NHNHgrad1_time','N15'):gt1 
 getparam('NHgrad1_lvl','N15'):gzlvl1 
 getparam('NHgrad2_lvl','N15'):gzlvl2 
 getparam('NHgstab','N15'):gstab
 getparam('swN','N15'):sw2 
 getparam('swCO','C13'):sw1 
 getparam('phi_Ca','C13'):phi_Ca 
 getparam('phi_CO','C13'):phi_CO 
 dm2='nny' 
 
 getparam('gt5','N15'):gt5
 getparam('gzlvl5','N15'):gzlvl5


 getparam('waltzB1','H1'):waltzB1 
pwCO90 = 88.8*600.0/sfrq
$pw = pwCO90*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwCO90 = ($pw + 1.0)/5.0
pwCO180 = 80.5*600.0/sfrq
$pw = pwCO180*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwCO180 = ($pw + 1.0)/5.0
pwCab180 = 72*600.0/sfrq
$pw = pwCab180*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwCab180 = ($pw + 1.0)/5.0

pwCa90 = 1.0e6*sqrt(15.0)/(4.0*118.0*dfrq)
$pw = pwCa90*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwCa90 = ($pw + 1.0)/5.0
pwCa180 = 80.5*600/sfrq
$pw = pwCa180*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwCa180 = ($pw + 1.0)/5.0
BPmake90Ca_CO     "recalculate shape"
BPmake90CO_CO
BPmake180Cab_CO
BPmake180Ca_COs
BPmake180CO_CO
spin='n' ni=0  ni2=0 phase=1 phase2=1
