"macro ghca_nA"

BPrtppar('ghca_nA')
setfrq BPsetampmode
if (numrfch>3) then
 getparam('dof3D','H2'):dof3
 getparam('dmm3D','H2'):dmm3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3
else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
reffrq=sfrq-(sw/2-rfl+rfp)/1e6
 getparam('CHgrad1_time','C13'):gt1 
 getparam('CHgrad1_lvl','C13'):gzlvl1 
 getparam('CHgrad2_lvl','C13'):gzlvl2 
 getparam('NHgstab','N15'):gstab
 getparam('swN','N15'):sw1 
 sw2=30*dfrq dm='nny' 
 BPsetwurstparams
 dof=dof-(174-56)*dfrq
 getparam('waltzB1','H1'):waltzB1 

 
 getparam('gt0','N15'):gt0
 getparam('gzlvl0','N15'):gzlvl0
 getparam('gt5','N15'):gt5
 getparam('gzlvl5','N15'):gzlvl5

if dmm<>'ccp' then
  dpwr=pwClvl-15 dmf=1e6/(2*2*1.4*pwC*compC)
  BPcheckdpwr
endif

pwC9 = 80.5*600.0/sfrq
$pw = pwC9*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwC9 = ($pw + 1.0)/5.0
pwC9a = pwC9
BPmake90CO_Ca
BPmake180CO_Ca
spin='n' ni=0  ni2=0 phase=1 phase2=1
