"macro gnoesyChsqcA"

BPrtppar('gnoesyChsqc')
BP_Aseq
 getparam('dmf30','C13'):dmf30 
 getparam('rf30','C13'):rf30
 getparam('dmf80','C13'):dmf80 
 getparam('rf80','C13'):rf80
 getparam('NHgstab','N15'):gstab
getparam('dmm2NH','N15'):$mode
substr($mode,3,1):$mode
dm2='nnnn' dmm2='ccc'+$mode
dof=dof-(174-43)*dfrq
sw2=80*dfrq
BPsetwurstparams
if dmm<>'cccp' then
  dpwr=pwClvl-15 dmf=1e6/(2*2*1.4*pwC*compC)
  BPcheckdpwr
endif
 getparam('pwC3db','C13'):pwClw

 pwNlw=1.4*(compN*pwN)
 CNrefoc='n' COrefoc='n'

BPmake180COa
pwC10 = 80.5*600.0/sfrq
$pw = pwC10*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwC10 = ($pw + 1.0)/5.0
spin='n' ni=0  ni2=0 phase=1 phase2=1
 
