"macro gnoesyChsqc_BB"
"gnoesyChsqc_BB macro for BioPack, ET June 2011, Varian/Agilent"

        BPrtppar('gnoesyChsqc_BB')
        getparam('NHgstab','N15'):gstab
        getparam('CHgrad1_lvl','C13'):gzlvl3
        getparam('CHgrad2_lvl','C13'):gzlvl9

	dm2='nnnn'
        ddrtc=alfa
         sw1=13.0*sfrq  //ppm for the time being

	sw2=35*dfrq                    //fold aromatics

	//dof=dof-(174-57)*dfrq

	getparam('dofCO','C13'):$dofCO
	dof=    $dofCO-(174-57)*dfrq
	
        exists('dof_dec','parameter'):$e
        if $e=0 then create('dof_dec','frequency')	 endif

        dof_dec=$dofCO-(174-80)*dfrq //keep decoupling in the middle of CH3-Aro region


	ni=0    phase=1  nt=4 ss=4 ni2=0 phase2=1 
        refocCO='y' refocN15='y'
        f1180='y' rp1=45 lp1=-180 fpmult1=1.0

        f2180='n'
        SE='y'   f2coef = '1 0 -1 0 0 1 0 1' 
        exists('gradalt','parameter'):$e
        if $e=1 then gradalt=1 endif
        gradalt=1
        ssfilter='n'
//generate BIP pulse

	BPmakeBIP(C180shape,pwClvl,pwC):pwC180  pwC180lvl=pwClvl
//CO decoupling pulse:
	getparam('dofCO','C13'):$dofCO
	$freq=$dofCO+2*dfrq-dof $offset='' format($freq,9,1):$offset
	$bw='' format(30*dfrq,9,1):$bw //setup 40ppm inversion on 13C CO
	$wave1=''

	COshape='CO_offAli_noe'
	        pbox_rst opx(COshape+'.RF')
		pboxpar('stepsize', '1.0') pboxpar('attn','i') 
	        $wave1 = 'iburp2 '+ $bw + $offset+' 0 0 180 '
	        setwave($wave1)
		cpx(pwC,pwClvl)   
		pboxget(COshape+'.RF'):n1,pwCO,pwCOlvl 

//generate decoupling:

//generating 13C WURST decoupling apttern and setting power levels
	dseq='Cdec_Ali_Aro_noe'

 	pbox_rst opx(dseq+'.DEC')
	pboxpar('stepsize', '2.0') 
        pboxpar('adb', '2.0') 
        $bw='' format(180*dfrq,9,1):$bw

	setwave('WURST40 ' +$bw +'/0.0008' )   
	cpx(pwC,pwClvl)   
	pboxget(dseq+'.DEC'):dseq,r1,dpwr,r2,dres,dmf
	dpwr=dpwr+1
  
//ZQF filter
//generating 13C CO pulse shapes and setting power levels

	$shape='H_zqf'

	$freq=0 $offset='' format($freq,9,1):$offset

	$bw='' format(80000,9,1):$bw //setup 60kHz pulse
        $pwzqf='' format(0.008,9,1):$pwzqf //setup 60kHz pulse
	$wave1=''
	        pbox_rst opx($shape+'.RF')
		pboxpar('stepsize', '1.0') pboxpar('attn','i') 
	        $wave1 = 'chirp '+ $bw+'/0.008' + $offset+' 0 0 180 '
	        setwave($wave1)
		cpx(pw,tpwr)   
		pboxget($shape+'.RF'):shp_zqf,pw_zqf,tpwr_zqf 
write('line3','MAKE SURE gzlvl9 IS ADJUSTED FOR MAX INTENSITY\n')
