"macro gnoesyChsqc_wg"

BPrtppar('gnoesyChsqc_wg')

 getparam('dmf30','C13'):dmf30 
 getparam('rf30','C13'):rf30
 getparam('dmf80','C13'):dmf80 
 getparam('rf80','C13'):rf80
 getparam('dmf140','C13'):dmf140
 getparam('rf140','C13'):rf140
getparam('dmm2NH','N15'):$mode
substr($mode,3,1):$mode
dm2='nnnn' dm2='nnnn'
dmm2='ccc'+$mode
dof=dof-(174-35)*dfrq
BPsetwurstparams
if dmm<>'cccp' then
  dpwr=pwClvl-15 dmf=1e6/(2*2*1.4*pwC*compC)
  BPcheckdpwr
endif

 getparam('pwC3db','C13'):pwClw

 pwNlw=1.4*(compN*pwN)
 CNrefoc='n' COrefoc='n'
 
 getparam('gt5','N15'):gt5
 getparam('gt0','N15'):gt0
 getparam('gzlvl5','N15'):gzlvl5
 getparam('gzlvl0','N15'):gzlvl0
 getparam('NHgstab','N15'):gstab
 gt5 = 500e-6 gzlvl5=15000
 tofwg = tof
 tauwg=100e-6
pwC10 = 80.5*600.0/sfrq
$pw = pwC10*5.0   $pw = 2.0*trunc($pw/2.0) + 1.0   pwC10 = ($pw + 1.0)/5.0
BPmake180COa
ddrtc=alfa spin='n' ni=0  ni2=0 phase=1 phase2=1
 
