"macro methylnoesyA"

BPrtppar('methylnoesyA')

setfrq BPsetampmode
if (numrfch>3) then
 getparam('dof3D','H2'):dof3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3
 dn3='H2' dmm3='ccc'
else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
reffrq=sfrq-(sw/2-rfl+rfp)/1e6
 getparam('NHgstab','N15'):gstab
 dof=dof-(174-19.6)*dfrq
 BPsetwurstparams
 dm='nny' dm2='nnn'
 if dmm<>'ccp' then
  dpwr=pwClvl-15 dmf=1e6/(2*2*1.4*pwC*compC)
  BPcheckdpwr
 endif

spin='n' ni=0  ni2=0 phase=1 phase2=1
