"macro rna_auto1d3"
ssfilter=100 wft ph BPaph0
crl setref
text('Water Suppression Experiment\\Optimized for RNA in H2O\\Jump-Return')
atext('with 100 Hz Solvent Filter')
write('plotter',100,wc2max,'Jump-Return Spectrum')
full sp=-10p wp=30p vsadj pl pscale pap BPpage
BPsvf(userdir+'/AutoRNA_1D/water_jumpreturn')
$gain=gain
rna_gChsqc
gain=$gain+12
sw=10*sfrq np=1024 
ss=4 nt=16 ni=0 phase=1
dmm='ccp' dres=9.0
dm='nny' allC='y' ribose='n' aromatic='n' BPsetwurstparams
$dmfallC=dmf $dseqallC=dseq $dpwrallC=dpwr
dm='nny' allC='n' ribose='y' aromatic='n' BPsetwurstparams
$dmfribose=dmf $dseqribose=dseq $dpwrribose=dpwr
dm='nny' allC='n' ribose='n' aromatic='y' BPsetwurstparams
$dmfarom=dmf $dseqarom=dseq $dpwrarom=dpwr
wnt='wft setref select(1) vsadj(40) f full dssa' wexp='rna_autocal8c'
    allC='y','n','n'
  ribose='n','y','n'
aromatic='n','n','y'
dmf=$dmfallC,$dmfribose,$dmfarom
dpwr=$dpwrallC,$dpwrribose,$dpwrarom
dseq='wurst110','wurst80','wurst40'

array='(allC,ribose,aromatic,dmf,dpwr,dseq)'
wexp='rna_auto1d4' au
