"macro rna_gCtrosyA"
"rna_gCtrosyA macro for BioPack, July 2002"

BPrtppar('rna_gCtrosy')
BP_Aseq setfrq BPsetampmode
if (numrfch>3) then
 getparam('dof3D','H2'):dof3
 getparam('dmm3D','H2'):dmm3
 getparam('dmf3D','H2'):dmf3
 getparam('dpwr3D','H2'):dpwr3
 getparam('dres3D','H2'):dres3
 getparam('dseq3D','H2'):dseq3
else
  exists('ampmode','parameter'):$e
  if ($e=1) then destroy('ampmode') endif
endif
reffrq=sfrq-(sw/2-rfl+rfp)/1e6
dof=dof-(174-110)*dfrq
dof2=dof2+80*dfrq2
getparam('CHgrad1_time','C13'):gt1 
getparam('CHgrad1_lvl','C13'):gzlvl1 
getparam('CHgrad2_lvl','C13'):gzlvl2 
N15refoc='y' aromatic='y' ribose='n' wet='y'
CT='y' CTdelay=1/70
dm='nny' dm2='nnn'
S3='y'
getparam('NHgstab','N15'):grecov
getparam('wetpwr','H1'):wetpwr
getparam('wetshape','H1'):wetshape
getparam('wetpw','H1'):wetpw
BPsetwurstparams

dof=dof-(174-110)*dfrq
dof2=dof2+80*dfrq2
wnt='' wexp='' spin='n'
ni=0 phase=1
man('rna_gCtrosy')
 
