"macro rna_setwurstparams"
"rna_BPsetwurstparams"
" gets values of parameters from *.DEC files"

if ((seqfil='rna_gChsqc') or (seqfil='rna_gCtrosy')) then
 if aromatic='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
 if allC='y' then 
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif endif endif
if (seqfil='rna_gnoesyChsqc') then
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='rna_hcch_tocsy') then
 if AH2H8='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif endif
if ((seqfil='rna_gChmqc') or (seqfil='rna_hcch_cosy')) then
 if aromatic='y' then 
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 else
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif endif
if ((seqfil='rna_Ahnctocsyc') or (seqfil='rna_mqHCN'))  then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if ((seqfil='rna_CUhnccch') or (seqfil='rna_Ghnctocsyc'))  then
   BPpboxget('wurst40.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
if (seqfil='rna_ghcch_tocsy')  then
   BPpboxget('wurst80.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
endif
 if ((seqfil='rna_tnnoesy') or (seqfil='rna_wetnoesy') or (seqfil='rna_wettntocsy') or (seqfil='tnroesy') or (seqfil='rna_tndqcosy') or (seqfil='rna_wroesy') or (seqfil='tnmqcosy')) then 
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif
 if ((seqfil='wgnoesy') or (seqfil='rna_WGnoesy') or (seqfil='wnoesy') or (seqfil='qwnoesy') or (seqfil='wgtocsy') or (seqfil='rna_water')) then 
   BPpboxget('wurst110.DEC'):dseq,$dmmy,$dpwr,$dmmy,dres,dmf
   dpwr=$dpwr
 endif

