"macro sofastNhmqcHT"

"sofastNhmqcHT macro for BioPack, March 2006"

BPrtppar('sofastNhmqcHT')

getparam('NHgstab','N15'):gstab
getparam('swN','N15'):sw1
dm2='nny' 
dpwr=0 

opx('hn_excit140.RF')               " 140 degree selective pulse "
setwave('pc9f 4.0p 8.0p n n 140')
pbox_rst
pboxpar('refofs', '4.77p')
pboxpar('sfrq', sfrq)
cpx(pw*compH,tpwr)
BPpboxget('hn_excit140.RF'):shname1,shpw1,shlvl1
BPmoveshape('hn_excit140.RF')

opx('hn_refoc.RF')                               " refocussing pulse "
setwave('reburp 4.0p 8.0p')
pbox_rst
pboxpar('refofs', '4.77p')
pboxpar('sfrq', sfrq)
cpx(pw*compH,tpwr)
BPpboxget('hn_refoc.RF'):shname2,shpw2,shlvl2
BPmoveshape('hn_refoc.RF')

wnt='' wexp='' spin='n'
proc1='ht' ni=1 phase=1
man('sofastNhmqcHT')


