No Plots
********************
No processing or plotting of the 2D data is performed following acquisition

With Plots
********************
Processing and plotting of the 2D data is performed following acquisition

Deuterated Protein-No Plots
********************
No processing or plotting of the 2D data is performed following acquisition
CH-detected 2D experiments are skipped assuming a lack of aliphatic protons.

Deuterated Protein-With Plots
********************
Processing and plotting of the 2D data is performed following acquisition
CH-detected 2D experiments are skipped assuming a lack of aliphatic protons.




