 PR42_diag_gChsqcnoesyChsqc

   for methyl_NOE_diagonal peaks
    (modified from Ron Venter's PR42_ChsqcNOEChsqc_DIAG.c, GG Varian)

Ref: (4,2)D Projection-Reconstruction Experiemnts for Protein Backbone
Assignment:  Application to Human Carbonic Anhydrase II and Calbindin
D28K.  Venters, R.A., Coggins, B.E., Kojetin, D., Cavanagh, J. and
Zhou, P. JACS 127(24), 8785-8795 (2005)

To obtain reconstruction software package, please visit
http://zhoulab.biochem.duke.edu/software/pr-calc

   aliphatic CH3 (J~128Hz):       lambda = 0.83ms;  tauCH = 1.95 ms

    f1coef='' for 1H
    f1coef='1 0 -1 0 0 -1 0 -1' for carbon

    phase controls:

    phase1=1,2 controls "cos and sin of 1H"
    phase2=1 ++ for cm1/cm2
           2 -- for cm1/cm2
           3 -+ for cm1/cm2
           4 +- for cm1/cm2
