 best_hnco_jnhP.c

   BEST-HNCO 1H-15N-13CO experiment             
 Measurement of coupling constants J(H-N)      
 in peptide planes                          
 using Accordion-type scaling   

 Measure 15N-1H couplings along F1 (C13 axis)
 Divide measured couplings by "scale1" which
 is displayed in the Text Output panel when
 doing "dps" or "go" to get correct coupling

 See R.M.Rasia, E. Lescop, J.F. Palatnik,
 J Boisbouvier and B. Brutscher, J. Biomol. NMR,
 51, 369-378(2011)
 
 Coupling patterns are clearly resolved by 
 running a 3D experiment and using the N15
 dimension to separate the C13 planes.


This experiment Correlates C'(i) with  N(i+1), NH(i+1).

set f2coef='1 0 -1 0 0 1 0 1' for SE_flg='y'
and f2coef='' for SE_flg='n' for Vnmr/VnmrJ processing

 BEST experiments are based on the longitudinal relaxation
 enhancement provided by minimal perturbation of aliphatic proton
 polarization. All HN pulses are band-selective EBURP2/time
 -reversed EBURP2/PC9/time-reversed PC9/REBURP. The recycle delay
 can be adjusted for optimal pulsing regime (d1~0.4-0.5s) or for
 fast pulsing regime (d1~0.1-0.4s). For fast pulsing regime,
 care should be taken relative to the probe used: low power 15N
 decoupling (GARP/WURST) and short acquisition times should be
 used. 

 The coherence pathway is conserved with standard hard pulse-based
 experiments. Standard features include maintaining the 13C
 carrier in the CO region throughout using off-res SLP pulses;
 square pulses on Ca/Cb with first null at 13CO; one lobe sinc
 pulses on 13CO with first null at Ca. Carbon carrier frequency
 dof should be set to the center of carbonyl frequency. Uses
 constant time evolution for the 15N shifts and real time
 evolution for 13C.

 No 1H decoupling sequence is applied during N->CO/CA transfer.
 180° BIP pulses (shname1="BIP_720_50_20_360", shpw1=8*pw at
 tpwr) are used to refocus NyHz coherence to Nx.

 Gradient sensitivity-enhanced (SE_flg='y', f2coef='1 0 -1 0 0
 1 0 1' ) and non sensitivity-enhanced (SE_flg='n', f2coef='1 0 0
 0 0 0 -1 0' ) versions are available.

 The flags f1180/f2180 should be set to 'y' if t1/t2 is to be
 started at half dwell time. This will give 90, -180 phasing in
 f1/f2. If they are set to 'n' the phasing should be 0,0 and will
 still give a flat baseline.

 phase = 1,2 and phase2 = 1,2 for States-TPPI acquisition
 in t1 [C13]  and States-TPPI acquisition/ EchoAntiecho in t2
 [N15].

 Original best_hncoP.c sequence contributed by 
		* Schanda, Paul
		* Lescop, Ewen
		* Van Melckebeke, Hélène
		* Brutscher, Bernhard

Institut de Biologie Structurale, Laboratoire de RMN, 41, 
rue Jules Horowitz, 38027 Grenoble Cedex 1 FRANCE

see: - Schanda, P., Van Melckebeke, H. and Brutscher, B.,
       JACS,128,9042-9043(2006)
