 gCLNfhsqcA   

   minimum step cycling is 2
   program written by Susumu Mori and Chitrananda Abeygunawardana,Johns Hopkins
   modified for 3rd Channel operation BKJ 970430 
   TROSY option is included. When TROSY is selected use nt=8 (NM, Palo Alto)
   CLEANEX-PM  included by Igor Goljer  09-08-2002
   mix   : mixing time for exchange
   pw180 : 180 degree pulse for CLEANEX-PM mixing time should be 85 us
   gztm  : gradient level used for mixing to suppress radiation dumping
   only the above three variables need to be created to do CLEANEX-PM
   H2Osinc pulse used for selective excitation of water
   
   Modified CLEANEX-FHSQC sequence is written by T.-L. Hwang, based on the original
FHSQC sequence by S. Mori, etc.

Automated Pbox shaped pulse creation

reference:

"Accurate quantitation of water-amide proton exchange rates using the
Phase-Modulated CLEAN chemical EXchange (CLEANEX-PM) approach
with a Fast-HSQC (FHSQC) detection scheme"
T.-L. Hwang, P. C. M. van Zijl, and S. Mori,
J. Biomol. NMR, v11, p221-226 (1998)


"Application of Phase-Modulated CLEAN chemical EXchange Spectroscopy
(CLEANEX-PM) to detect water-protein proton exchange and intermolecular NOEs"
T.-L. Hwang, S. Mori, A. J. Shaka, and P. C. M. van Zijl
J. Am. Chem. Soc. v114, p3157-3158 (1997)


"Multiple-pulse mixing sequences that selectively enhance chemical exchange
or cross relaxation peaks in high-resolution NMR spectra"
T.-L. Hwang and A. J. Shaka
J. Magn. Reson.  v.135, p280-287 (1998)


   the TROSY phase cycle corrected to pick the correct component and to use the 
   sensitivity enhanced version. The minimum phase cycle for TROSY reduced to 4 steps.
   Corrected the d2 timing in the TROSY version. Added soft watergate option via
   wtg3919 flag.   
   
   Use f1coef = '1 0 -1 0 0 1 0 1' for TROSY
   E.K., 17.05.2002.



Signal response may be sensitive to 1H calibration. Set mix to ~.15 and  pw180~85. Then array
compH around nominal value for best s/n.



