 gChmbc - Gradient Selected aboslute value HMBC

	Features included:
		F1 Axial Displacement
		Randomization of Magnetization prior to relaxation delay
			with G-90-G 
			[selected by sspul flag]
		J-filter to suppress one-bond correlations
				
	Paramters:
		sspul :		y - selects magnetization randomization option
		gzlvl0:		Homospoil gradient level (DAC units)
		gt0	:	Homospoil gradient time
		gzlvl7	:	encoding Gradient level
		gt7	:	encoding gradient time
		gzlvl8	:	decoding Gradient level
		gt8	:	decoding gradient time
		gstab	:	recovery delay
		jch	:	One-bond XH coupling constant
		jnch	:	multiple bond XH coupling constant
		pwClvl  :	X-nucleus pulse power
		pwC	:	X-nucleus 90 deg pulse width
              satmode   :       flag for presat at tof frequency for satdly

