  ghn_co_hbA

   3D HN(CO)HB experiment for the measurement of CO-HB coupling constant.

    REF:  Stephan Grzesiek, Mitsuhiko Ikura, G. Marius Clore,
          Angela M. Gronenborn, and Ad Bax, JMR, 96, 215 - 221 (1992).

          Ad Bax, Geerten W. Vuister, Stephan Grzesiek, 
          Frank Delaglio, Andy C. Wang, Rolf Tschudin, Guang Zhu, 
          Methods in Enzymology, 239, 79-105 (1994).

    Written by 
    Weixing Zhang
    St. Jude Children's Research Hospital
    Memphis, TN 38105
    Modified to use gradient selection. 
    
    Uses three channels:
        1)  HN  (t3)             -carrier at 4.7 ppm (tof)
            NB  (t1, ni)
        2)  CO  (ref_flg=y,t1)   -carrier at 175 ppm (dof)
        3)  15N (t2, ni2)        -carrier at 118 ppm (dof2)

    mag_flg = y    using magic angle pulsed field gradient
    mag_flg = n    using z-axis gradient only

    ref_flg = y    recording 2D HN-CO (t1) or 3D HNCO reference spectrum.
            = n    recording 3D spectrum with CO-HB coupling present.

    Modified for automatic shaped pulse creation using Pbox (EK, Aug 2002)
