
    3D HCCH-TOCSY utilising gradients but not coherence gradients.


    Correlates the sidechain aliphatic 13C resonances of a given amino acid.
    Uses isotropic 13C mixing.

    Standard features include maintaining the 13C carrier in the CaCb region
    throughout using off-res SLP pulses; full power square pulses on 13C 
    initially when 13CO excitation is irrelevant; square pulses on the Ca and
    CaCb with first null at 13CO; one lobe sinc pulses on 13CO with first null
    at Ca; optional 2H decoupling when CaCb magnetization is transverse and 
    during 1H shift evolution for 4 channel spectrometers.  
 
    pulse sequence: Bax, Clore and Gronenborn, JMR 88, 425 (1990)
                    Kay, Xu, Muhandiram and Forman-Kay, JMR B101, 333 (1993)
    SLP pulses:     J Magn. Reson. 96, 94-102 (1992)

    Derived from gc_co_nh.c written by Robin Bendall, Varian, March 94 and 95
    based on hcchtocsy_3c_pfg_500.c written by Lewis Kay, Sept and Dec 92.  
    Revised and improved to a standard format by MRB, BKJ and GG for the 
    BioPack, January 1997. Increased and scaled spinlock field (GG).



        	  CHOICE OF DECOUPLING AND 2D MODES

    	Set dm = 'nny', dmm = 'ccg' (or 'ccw', or 'ccp') for 13C decoupling.
	Set dm3 = 'nnn' for no 2H decoupling, or
		  'nyn'  and dmm3 = 'cwc' for 2H decoupling. 
  
    Must set phase = 1,2 and phase2 = 1,2 for States-TPPI acquisition in
    t1 [1H]  and t2 [13C].
    
    The flag f1180/f2180 should be set to 'y' if t1 is to be started at
    halfdwell time. This will give -90, 180 phasing in f1/f2. If it is set to
    'n' the phasing should be 0,0 and will still give a perfect baseline.  Thus,
    set f1180 = 'n' for (0,0) in 1H and f2180 = 'n' for (0,0) in 13C.





          	  DETAILED INSTRUCTIONS FOR USE OF hcch_tocsy


    1. Obtain a printout of the Philosopy behind the BioPack development,
       and General Instructions using the macro: 
                                      "printon man('BioPack') printoff".
       These Detailed Instructions for hcch_tocsy may be printed using:
                                      "printon man('hcch_tocsy') printoff".
             
    2. Apply the setup macro "hcch_tocsy".  This loads the relevant parameter
       set and also sets ni=ni2=0 and phase=phase2=1 ready for a 1D spectral
       check.

    3. The parameter ncyc corresponds to the number of cycles of DIPSI-3 mixing.
       Use ncyc = 2 or 3 usually.  This corresponds to a total mixing time of
       (2 or 3)*7.8*600/sfrq ms.  The DIPSI rf field of 9 kHz for a 600Mhz 
       spectrometer, which is scaled against field strength, is sufficient to
       cover 14.4 kHz of spectral width (96 ppm at any field strength) and is 
       more than adequate for the CC J's.  However, change the
       number 9000 in the pulse sequence code calculation of p_d if a different 
       rf strength is required.

    4. Centre H1 frequency on H2O (4.7ppm), C13 frequency on 35ppm, and N15 
       frequency on the amide region (120 ppm).  The C13 frequency remains at 
       35ppm, in the aliphatic region throughout the sequence.

    5. The 90 degree carbon pulse following the DIPSI mixing is phase cycled
       when nt=8 to eliminate z magnetization.  However this should be removed 
       anyway by the 90/gradient pair, so 4 transients should suffice if 
       sufficient S/N is available.

    6. The flag H2Opurge = 'y' is provided to bring H2O and other H1 z 
       magnetization to the xy plane for gradient suppression.

    7. taua (1.7 ms), taub (0.42 ms) and tauc (1 ms) were determined for
       alphalytic protease and are listed in dg2 for possible readjustment by
       the user.

    8. If 2H decoupling is used, the 2H lock signal may become unstable because
       of 2H saturation.  Check that a 1D spectrum is stable/reproducible as 
       when 2H decoupling is not used.  You might also check this for d2 and d3
       equal to values achieved at say 75% of their maximum.  Remember to return
       d2=d3=0 before starting a 2D/3D experiment.

