/* rna_WGnoesy 

	       NOESY experiment with water suppression by gradient echo. 
               Either TPPI or the hypercomplex method can be used to achieve
               F1 quadrature in a phase-sensitive presentation.  No
               attempt is made to suppress J-cross peaks in this pulse
               sequence. F1 axial peaks are shifted by States TPPI method.

               ech dast feb.93  gg palo alto jan 95
               added flipback 16 april 95
               added gradients in t1 to eliminated radiation damping effects
                (gzlvl3 can be set very low, gzlvl3=50 suggested)
               (following suggestion of V.Sklenar, JMR, 114, 132(1995) )

               set hst=0 and gt1=mix to enhance water exchange crosspeaks by
               preventing radiation damping during mix. Phase of flipback
               pulse is currently only optimal for the case of radiation
               damping during mix, so set flipback='n' for enhancing
               water exchange crosspeaks. With proper phase cycling of the
               flipback pulse, it could be used. Again, set gzlvl1=50.
               5jan96 GG

               vary finepwrf around the value 2048 to optimized suppression
        @@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@
        @                                                      @
        @   Rewritten for RnaPack by Peter Lukavsky (10/98).   @
        @                                                      @
        @@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@

