 rna-wroesy - transverse cross-relaxation experiment in rotating frame
            with PRESAT, 3919-WATERGATE, or WET water suppression

   	ref:  Shaka, et. al., JACS, 114, 3157 (1992).

	Features included:
		States-TPPI in F1
                Z-Filter option for zero-quantum suppression
		Solvent suppression during relaxation delay (Presat/WET)
		Solvent suppression prior to detection (Watergate/WET)
                45degree phase-shift before t1 to minimize effect of rad. damp.
                 if neither wet nor presat used in relaxation delay
		
	Paramters:
		sspul :		y - selects magnetization randomization
                wet     :       yn- wet suppression at end of d1
                                ny- wet suppression just before acquisition
                                yy- wet suppression in both periods
                wetpwr  :       power level for wet pulse
                wetpw   :       pulse wideth of wet pulse 
                wetshape:       shapelib file for wet pulse
                gswet   :       field recovery delay after wet pulse
                gtw     :       gradient duration in wet sequence
                gzlvlw  :       gradient strength in wet sequence
                flag3919:       y - selects 3919-watergate
                d3      :       interpulse delay in 3919-watergate
                tau     :       spinecho delay in 3919-watergate
		satmode	:	y - selects presaturation during relax
					delay
		satfrq	:	presaturation frequency
		satdly	:	presaturation delay
		satpwr	:	presaturation power
		mix	:	ROESY spinlock mixing time
                strength:       spin-lock field strength (in Hz)
		slpwr	:	spin-lock power level
                                 (derived from "strength")
		slpw	:	90 deg pulse width for spinlock
		d1	:	relaxation delay
		d2	:	Evolution delay

