wgcosy - watergate(3919) Phase-sensitive COSY
        Features included:
                States-TPPI in F1
                Randomization of Magnetization prior to relaxation delay
                        with G-90-G
                        [selected by sspul flag]
                watergate-3919 watersuppression activated by watergate flag.
                Initial water flipback with watergate.

        Paramters:
                sspul   :       y - selects magnetization randomization option
               watergate:       y - selects 3919 watergate
                gzlvl0  :       Homospoil gradient level (DAC units)
                gt0     :       Homospoil gradient time
                gzlvl3  :       watergate gradient level
                gt3     :       watergate gradient time
                gstab   :       Recovery delay
                pw      :       First and second pulse widths
                d1      :       relaxation delay
                d2      :       Evolution delay

