wgdqfcosy - Gradient DQ selected Phase-sensitive DQFCOSY
        Features included:
                States-TPPI in F1
                Randomization of Magnetization prior to relaxation delay
                        with G-90-G
                        [selected by sspul flag]
                watergate-3919 watersuppression

        Paramters:
                sspul   :       y - selects magnetization randomization option
               watergate:       y - selects 3919 watergate
                gzlvl0  :       Homospoil gradient level (DAC units)
                gt0     :       Homospoil gradient time
                gzlvl1  :       Encoding gradient level
                gt1     :       Encoding gradient time
                gzlvl2  :       Decoding gradient level
                gt2     :       Decoding gradient time
                gzlvl3  :       Watergate gradient level
                gt3     :       Watergate gradient time
                gstab   :       Recovery delay
                pw      :       First and second pulse widths
                d1      :       relaxation delay
                d2      :       Evolution delay

