"macro ahX_pars"
// Set the Sequence Name

seqfil = 'ahX'    
layout = seqfil

// Make Additional Standard Parameters

//label1d
paramgroup('clearparamsinit')
paramgroup('params','',                                      'BPautonoisecheck','real',0.0,
                                                             'BPclassic','string','n',
                                                             'alpHspinal','phase',10.0,
                                                             'roff','frequency',0.0,
                                                             'axis','channel','p') 
paramgroup('params','',                                      'frHX','channel','dec',
                                                             'toHX','channel','obs')
paramgroup('params','',                                      'chHtppm','channel','dec',
                                                             'chHspinal','channel','dec')  
                                                             
// Make ap and dg Displays for Standard Parameters

paramgroup('dgapinit')
paramgroup('apstring','SAMPLE','','',                        'date','string','',
                                                             'file','string','')
paramgroup('dgapstring','ACQUISTION','','',                  'sw','frequency',0,
                                                             'at','delay',0, 
                                                             'np','integer',0, 
                                                             'd1','delay',0,
                                                             'nt','integer',0,
                                                             'ct','integer',0,
                                                             'bs','integer',0,
                                                             'ss','integer',0,
                                                             'rd','pulse',0, 
                                                             'ad','pulse',0,
                                                             'ddrtc','pulse',0,
                                                             'rof3(rof3)','pulse',0,
                                                             'gain','integer',0,
                                                             'roff','frequency',0,
                                                             'temp','amplitude',0,
                                                             'srate','amplitude',0)                                                             
paramgroup('dgapstring','cpHX','','',                        'shHX','string','c',
                                                             'chHX','string','fr',
                                                             'aHhx','amplitude',2000.0,
                                                             'aXhx','amplitude',2000.0,
                                                             'bHX','real',1.0e-6,
                                                             'dHX','amplitude',0.0,
                                                             'tHX','time',1000.0,
                                                             'ofHX','frequency',0.0)
paramgroup('dgapstring','tppmH','(Hseq=\'tppm\')','',        'aHtppm','amplitude',2000.0,
                                                             'pwHtppm','pulse',8.0,
                                                             'phHtppm','phase',10.0)
paramgroup('dgapstring','spinalH','(Hseq=\'spinal\')','',    'aHspinal','amplitude',2000.0,
                                                             'pwHspinal','pulse',8.0,
                                                             'phHspinal','phase',10.0,
                                                             'alpHspinal','amplitude',5.0)
                                                             
// Make New Parameters with/without dg/ap Display         
                                                             
paramgroup('params','',                                      'Yseq','string','tppm',
                                                             'chYtppm','channel','dec2',
                                                             'chYspinal','channel','dec2',
                                                             'chYwaltz','channel','dec2',
                                                             'ddec2','string','n')
paramgroup('all','tppmY','(Yseq=\'tppm\' and ddec2=\'y\')','', 
                                                             'aYtppm','amplitude',2000.0,
                                                             'pwYtppm','pulse',8.0,
                                                             'phYtppm','phase',10.0)
paramgroup('all','spinalY','(Yseq=\'spinal\' and ddec2=\'y\')','',           
                                                             'aYspinal','amplitude',2000.0,
                                                             'pwYspinal','pulse',8.0,
                                                             'phYspinal','phase',10.0,
                                                             'alpYspinal','amplitude',5.0)
paramgroup('all','waltzY','(Yseq=\'waltz\' and ddec2=\'y\')','',             
                                                             'aYwaltz','amplitude',2000.0,
                                                             'pwYwaltz','pulse',8.0)
paramgroup('params','',                                      'ctd','string','y')
paramgroup('all','CONSTANT DECOUPLE','(ctd=\'y\')','',       'tRFmax','time',5000.0)
paramgroup('all','STANDARD DECOUPLE','(ctd=\'n\')','')
paramgroup('params','',                                      'pseq','string','one',
                                                             'chXshp1','channel','obs')
paramgroup('all','SOFT ECHO',
                 '(pseq=\'five\' or pseq=\'seven\')','',     'wvXshp1','string','rsnob',                              
                                                             'aXshp1','amplitude',2000.0,
                                                             'dbXshp1','scaler',54.0,
                                                             'pwXshp1','pulse',100.0,
                                                             'stXshp1','scaler',0.5,
                                                             'ofXshp1','frequency',0.0,
                                                             'phXshp1','phase',0.0)
paramgroup('all','HARD ECHO',
                 '(pseq=\'four\' or pseq=\'six\')','',       'aXecho','amplitude',2000.0,
                                                             'pwXecho','pulse',8.0,
                                                             'tECHO','time',3000.0,
                                                             'tECHOmaxret','time',0.0)
paramgroup('dgapstring','FLAGS','','',                       'pseq','string','',
                                                             'ddec2','string','',
                                                             'ctd','string','')

// Make the dg2 Display Directly

setprotect('dg2','clear',4)
$dg2 = '1:OBSERVE:tn,sfrq:6,tof:1,tpwr:1,aX90:3,pwX90:1;'
$dg2=$dg2+'1:1D Acquisition:sw:1,np:0,at:7;'
$dg2=$dg2+'2:DECOUPLE:dn,dfrq:6,dof:1,dpwr:1,aH90:3,pwH90:1;'
$dg2=$dg2+'3:DECOUPLE2:dn2,dfrq2:6,dof2:1,dpwr2:1,aY90:3,pwY90:1;'
$dg2=$dg2+'4:DECOUPLE3:dn3,dfrq3:6,dof3:1,dpwr3:1,aZ90:3,pwZ90:1;'
dg2 = $dg2
setprotect('dg2','on',4)

// Call a Reset Macro

destroy('wrtp')
paramgroup('params','','wrtp','string','reset_ahX')
reset_ahYXX

write('line3','Macro %s is complete\n',$0)


                                              
