"macro cppwXfixprobe"
// cppwXfixprobe - A macro to propagate X pulsewidth calibrations from the 
//                 named region to all regions with the same nucleus.

//             Argument 1 is the action:
//                        'fix' reads X pulsewidth information and propagates it 
//                              to all other regions with the same nucleus.  

//             Argument 2 is the nucleus, 'C13' or 'N15'.

//             Argument 3 is the region:
//                   'alpha' (13C alpha carbons or glycine methylene), code 'HCa'
//                   'carbonyl' (13C carbonyl), code 'HCO
//                   'amide'(15N amide), code 'HNai'
//                   'amine' (15N glycine, code 'HNam'

//             Also: For calibration with the 13C offset at opposite ppm set:
//                   'alpha' (13C alpha carbons or glycine methylene), code 'sHCa'
//                   'carbonyl' (13C carbonyl), code 'sHCO

//             Argument 4 is a label: 
//                        '' is forced as the default, not used in this macro. 
//             
//             Argument 5 is a numeral:
//                        usually 0 or 1 if present, but not used.
//

// Fix X Parameters in the Probe File

if (($#>0) and ($1='fix')) then 

// Set AhX

   AhX

// Set the X Region

   $reg='' $pwr='' $nuc='' $4=''
   $macroname = $0 + '(\'region\',$2,$3,$4,0):$reg,$pwr,$nuc'
   exec($macroname)
   $pwr=''

// Set Array Containing Region Codes

   if ($nuc='N15') then 
      $regout[1]='HNai'
      $regout[2]='HNam'
      $indexmax=2
   endif

   if ($nuc='C13') then 
      $regout[1]='HCa'
      $regout[2]='HCO'
      $regout[3]='sHCa'
      $regout[4]='sHCO'
      $indexmax=4
   endif

// Get X Pulsewidth Parameters from the Named Region 

   probeparamgroup('getlocal',$reg,$nuc,'','dbX90'):$tpwr
   probeparamgroup('getlocal',$reg,$nuc,'','aX90','pwX90','pwX180','R','F'):
                                        $aX90,$pwX90,$pwX180,$R,$F

// Save X Pulsewidth Parameters to All Regions with the Same Nucleus

   $index=1.0
   repeat
      probeparamgroup('setlocal',$regout[$index],$nuc,'','dbX90',$tpwr)
      probeparamgroup('setlocal',$regout[$index],$nuc,'','aX90',$aX90,
                                                'pwX90',$pwX90,
                                                'pwX180',$pwX180,
                                                'R',$R,
                                                'F',$F)
      $index=$index+1.0
   until ($index>$indexmax)
endif

//-------------------
// The Region Macro
//-------------------

if (($# > 0) and ($1 = 'region')) then
   $nuc=$2
   $reg=''
   $pwr=$4
   if (($# > 4) and ($5 = 1)) then 
      if ($2='C13') then 
         tn='C13' dn='H1' dn2='N15' dn3=''   
         wc = 200 sc =10
         ad=4.0 rd=4.0 ddrtc=8.0 rp=0 lp=0 d1=2.0 nt=1 ss=2 bs=4
         sw=100000.0 at=0.01 fn=16.0*np sb=at/2.0 sb='y' sbs='n' lb=50 gain=30
         ofHX=0.0
         if ($3='alpha') then
            d1=2.0 nt=1
            setref(tn) setoffset('C13',63):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=35p wp=50p
            $reg='HCa'
         elseif ($3='salpha') then
            d1=2.0 nt=1
            setref(tn) setoffset('C13',175):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=35p wp=50p
            $reg='sHCa'
         elseif ($3='carbonyl') then 
            d1=2.0 nt=1
            setref(tn) setoffset('C13',175):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=165p wp=20p
            $reg='HCO'
         elseif ($3='scarbonyl') then 
            d1=2.0 nt=1
            setref(tn) setoffset('C13',63):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=165p wp=20p
            $reg='sHCO'
         elseif ($3='adam') then 
            d1=2.0 nt=1.0
            setref(tn) setoffset('C13',33.3):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=28p wp=20p
            $reg='HC'
         endif
      elseif ($2='N15') then 
         tn='N15' dn='H1' dn2='C13'  dn3=''   
         wc = 200 sc =10
         ad=16.0 rd=4.0 ddrtc=20.0 rp=0 lp=0 ss=2 bs=4
         sw=100000.0 at=0.01 fn=16.0*np sb=at/2.0 sb='y' sbs='n' lb=0  lb='n' gain=30  
         ofHX=0.0
         if ($3='amide') then
            d1=2.0 nt=4
            setref(tn) setoffset('N15',115):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=90p wp=50p
            $reg='HNai'
         elseif ($3='amine') then
            d1=2.0 nt=1 
            setref(tn) setoffset('N15',35):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=15p wp=40p
            $reg='HNam'
         elseif ($3='amino') then 
            d1=2.0 nt=1
            setref(tn) setoffset('N15',35):$tof tof=0.1*trunc($tof/0.1 + 0.5) sp=15p wp=40p
            $reg='HN'
         endif         
      endif
      probeparamgroup('setlocal',$reg,$nuc,'','ofX90',tof)
   else
      if ($2='C13') then 
         if ($3='alpha') then
            $reg='HCa'
         elseif ($3='salpha') then
            $reg='sHCa'
         elseif ($3='carbonyl') then 
            $reg='HCO'
         elseif ($3='scarbonyl') then 
            $reg='sHCO'
         elseif ($3='adam') then 
            $reg='HC'
         endif
      elseif ($2='N15') then 
         if ($3='amide') then
            $reg='HNai'
         elseif ($3='amine') then 
            $reg='HNam'
         elseif ($3='amino') then 
            $reg='HN'
         endif
      endif
   endif
   return($reg,$pwr,$nuc)
endif


