"macro AutoAddCAL"
"*************************************************************"
"AutoAddCAL - macro to add experiment into a calibration chain"
"*************************************************************"

$explist=''
$explistsize=size('explist')
$expt=0
$expexist=0

if (explist = '') then
 explist=$1
else
  repeat
   $explist=explist[$expt+1]
   if ($explist = $1) then
    $expexist = 1
   endif
   $expt=$expt+1
  until $expt = $explistsize

  if ($expexist > 0) then
   explist=explist
  else
   explist=explist,$1 
  endif
endif

$hobs='n' $gcal='n' $cdec='n' $cgrad='n' $hdec='n' $cobs='n' $gmap='n' $hobsifc='n' $cdecifc='n' $gcalifc='n' $cgradifc='n' $cghmqcifc='n' $cghsqcifc='n' $nobs='n' $ndec='n' $ngrad='n'

$explistsize=size('explist')
$expt=0
repeat
 if explist[$expt+1] = 'Hobs' then $hobs='y' endif
 if explist[$expt+1] = 'gcal' then $gcal='y' endif
 if explist[$expt+1] = 'Cdec' then $cdec='y' endif
 if explist[$expt+1] = 'Cgrad' then $cgrad='y' endif
 if explist[$expt+1] = 'Cobs' then $cobs='y' endif
 if explist[$expt+1] = 'Ndec' then $ndec='y' endif
 if explist[$expt+1] = 'Ngrad' then $ngrad='y' endif
 if explist[$expt+1] = 'Nobs' then $nobs='y' endif
 if explist[$expt+1] = 'Hdec' then $hdec='y' endif 
 if explist[$expt+1] = 'gmap' then $gmap='y' endif
 if explist[$expt+1] = 'HobsIFC' then $hobsifc='y' endif
 if explist[$expt+1] = 'CdecIFC' then $cdecifc='y' endif
 if explist[$expt+1] = 'gcalIFC' then $gcalifc='y' endif
 if explist[$expt+1] = 'CgradIFC' then $cgradifc='y' endif
 if explist[$expt+1] = 'CghmqcIFC' then $cghmqcifc='y' endif
 if explist[$expt+1] = 'CghsqcIFC' then $cghsqcifc='y' endif
 $expt = $expt+1
until $expt = $explistsize

explist=''
if $hobs='y' then explist='Hobs' endif
if $cdec='y' then
 if explist='' then explist='Cdec' else explist=explist,'Cdec' endif
endif
if $ndec='y' then
 if explist='' then explist='Ndec' else explist=explist,'Ndec' endif
endif
if $gcal='y' then
 if explist='' then explist='gcal' else explist=explist,'gcal' endif
endif
if $cgrad='y' then
 if explist='' then explist='Cgrad' else explist=explist,'Cgrad' endif
endif
if $ngrad='y' then
 if explist='' then explist='Ngrad' else explist=explist,'Ngrad' endif
endif
if $gmap='y' then
 if explist='' then explist='gmap' else explist=explist,'gmap' endif
endif
if $cobs='y' then
 if explist='' then explist='Cobs' else explist=explist,'Cobs' endif
endif
if $nobs='y' then
 if explist='' then explist='Nobs' else explist=explist,'Nobs' endif
endif
if $hdec='y' then
 if explist='' then explist='Hdec' else explist=explist,'Hdec' endif
endif
if $hobsifc='y' then
 if explist='' then explist='HobsIFC' else explist=explist,'HobsIFC' endif
endif
if $cdecifc='y' then
 if explist='' then explist='CdecIFC' else explist=explist,'CdecIFC' endif
endif
if $gcalifc='y' then
 if explist='' then explist='gcalIFC' else explist=explist,'gcalIFC' endif
endif
if $cgradifc='y' then
 if explist='' then explist='CgradIFC' else explist=explist,'CgradIFC' endif
endif
if $cghmqcifc='y' then
 if explist='' then explist='CghmqcIFC' else explist=explist,'CghmqcIFC' endif
endif
if $cghsqcifc='y' then
 if explist='' then explist='CghsqcIFC' else explist=explist,'CghsqcIFC' endif
endif
