"macro Autoplot3D"

 getdim:$dim
  if ($dim > 2) then

  plane='f1f3' trace='f1' dproj nm2d f full
  write('plotter',wcmax/2-20,wc2max*0.8,'F1F3 projection')
  plot2D('resize','pos',20,1.5,'notop','noside')
  ppa page
  plane='f2f3' trace='f2' dproj nm2d f full
  write('plotter',wcmax/2-20,wc2max*0.8,'F2F3 projection')
  plot2D('resize','pos',20,1.5,'notop','noside')
  ppa page
  plane='f1f2' trace='f1' dproj nm2d f full
  write('plotter',wcmax/2-20,wc2max*0.8,'F1F2 projection')
  plot2D('resize','pos',20,1.5,'notop','noside')
  ppa page

  plane='f1f3' trace='f1' dproj nm2d f full
  ho=-1 vo=1
  wc=wcmax-30-fn2/2
  wc2=wc2max-fn2/2
  sc2=10 sc=fn2/2 - 15
  plot3D(1,fn2/2,2,20,1.5)
  ppa page

  endif

