"macro CSpars"
// initialize schedule and profile builder parameters

exists('CSdomain','parameter'):$e 
if not ($e) then 
  create('CSdomain','integer') 
  CSdomain=1  " sampling domain "
endif

exists('CSprofile','parameter'):$e 
if not ($e) then 
  create('CSprofile','string')
  setprotect('CSprofile','set',256) 
  CSprofile='','',''  " active profiles "
endif

exists('CSprosize','parameter'):$e 
if not ($e) then 
  create('CSprosize','integer')
  setprotect('CSprosize','set',256) 
  CSprosize=0,0,0  " active profiles "
endif

exists('CSshape','parameter'):$e 
if not ($e) then 
  create('CSshape','string') 
  CSshape='gexp'  
endif

exists('CSseed','parameter'):$e 
if not ($e) then 
  create('CSseed','integer') 
  CSseed = 169  " noise seed "
endif

exists('CSshowpro','parameter'):$e 
if not ($e) then 
  create('CSshowpro','flag') 
  CSshowpro='y'  " auto show profile "
endif

exists('CSshowsch','parameter'):$e 
if not ($e) then 
  create('CSshowsch','flag') 
  CSshowsch='y' " auto show schedule "
endif

exists('CSwt','parameter'):$e 
if not ($e) then 
  create('CSwt','flag') 
  CSwt='n'  " CS weighting active "
endif

exists('CSinp','parameter'):$e 
if not ($e) then 
  create('CSinp','string') 
  CSinp=''  " Pbox input file "
endif

exists('CSwp','parameter'):$e 
if not ($e) then 
  create('CSwp','integer') 
  setgroup('CSwp','processing')
  CSwp=0  " region of interest "
endif

