"macro Dch_adiabatic_module"
"Dch_adiabatic_module - This is a setup macro for Dch_adiabatic module"

$module='Dch_adiabatic'

/*
  $module='' $s2='' $ret=0
  strstr($0,'_module'):$ret,$module,$s2
*/

"*******************************************************"
IF ($1 = 'setup') THEN

  if ($# < 2) then $2='' endif
  if ($# < 3) then $3='' endif
  module('genericadd',$module,$2,$3)

  "The previous line is a loop-back call to module macro"
  "  - since the module macro called this macro "
  "   This is deliberate to allow for module specific "
  "   customized options in the lines below"
  "****Add here any module specific setup options***"
 
"*******************************************************"
ELSEIF ($1 = 'acquisition') THEN

   module('isthere',$module):$argex
   if ($argex=0) then return endif
  "****Add here any module specific acquisition options ***"
        "Setup Dch_adiabatic parameters"

   setpwx180ad(dn,'make')
   jemult=1 tauC=0
   isrfwg('dn'):$rfwg
   if (dn='C13') and (mult=2) and ($rfwg=0) then
	jemult=3
   endif


"*******************************************************"
ELSEIF ($1 = 'process') THEN

   module('isthere',$module):$argex
   if ($argex=0) then return endif
  "****Add here any module specific process options ***"

"*******************************************************"
ELSEIF ($1 = 'display') THEN

   module('isthere',$module):$argex
   if ($argex=0) then return endif
  "****Add here any module specific display options ***"

"*******************************************************"
ENDIF
