"macro HTchoice"

// HTchoice - macro for selecting the mode of the Hadamard excitation.
// The menu item sets httype, which chooses the excitation mode:
//   inversion, refocusing, excitation, DPFGSE.
// Other parameters associated with httype are also set:
//   gradient levels, gradient lengths, and shaped pulses.

// gt1 gzlvl1 always the same
if httype='i' then      // inversion
  pshape='gaus180'
  gt1=0.001
  gt2=0.0005
  fixgrd(5):gzlvl1
  fixgrd(6):gzlvl2
elseif httype='r' then  // refocusing
  pshape='rsnob'
  gt1=0.001
  gt2=0.0005
  fixgrd(5):gzlvl1
  fixgrd(6):gzlvl2
elseif httype='e' then  // excitation
  pshape='gaus90'
  gt1=0.001
  gt2=0.0
  fixgrd(5):gzlvl1
  gzlvl2=0
elseif httype='d' then  // DPFGSE
  pshape='gaus180r'
  gt1=0.001
  gt2=0.0005
  fixgrd(5):gzlvl1
  fixgrd(6):gzlvl2
endif
dps
