"macro NUSsimulate"
"NUSsimulate"

exists('ni','parameter'):$e
if not ($e) then
    write('error','Data not suitable for NUS simulation')
    return
endif
//exists('sampling','parameter'):$e
//if not ($e) then
    exists('ni2','parameter'):$ni2ex
    if ($ni2ex) then module('add','par3D') else module('add','par2D') endif
//endif
exists('CSreconmethod','parameter'):$e
if not ($e) then
    create('CSreconmethod','string')
    CSreconmethod='CLEAN'
endif
exists('NUSsimulateflg','parameter'):$e
if not ($e) then
    create('NUSsimulateflg','string')
    NUSsimulateflg='y'
endif
exists('NUSsimulatedone','parameter'):$e
if not ($e) then
    create('NUSsimulatedone','string')
    setgroup('NUSsimulatedone','processing')
    NUSsimulatedone='n'
endif

vnmrjcmd('popup', 'mode:modeless', 'rebuild:yes', 'file:NUSsimulate.xml', 'location:topToolBar', 'title:NUS Simulate')
