"macro SetUpwet1D"
if ($# < 1) then $arg='findfrq' else $arg=$1 endif
if ($arg='findfrq') and (wetfly='y') and (Console<>'mercury') then
        $arg='tunecf'
endif

   flush
   $curexplist=explist
   wet1Dproc($arg,'nogo')
   $explist=''

   $head='' $next=''
   strstr(wexp,'wet1Dproc'):$is,$head,$next
   seqfil=seqfil
   if ($is=1) then
     $md=archivedir+'/'+sample+'/dirinfo/macdir'
     cpexplist('read',$md):$explist
	explist=pslabel+'scout','SetUp',$explist
	write('file',$md+'/alias','SetUp: SetUpwet1D%s',$next)
     cpexplist('write',$md)
     explist=$curexplist
   endif
   wexp='chempackQ'
   wdone=''

