"macro aippars"

exists('aipLayoutPolicy','parameter','global'):$e
if (not $e) then
    create('aipLayoutPolicy','real','global')
    aipLayoutPolicy=2
endif
setgroup('aipLayoutPolicy','processing','global')
setprotect('aipLayoutPolicy','set',32768,'global')

exists('aipStatUserVar','parameter','global'):$e
if (not $e) then
    create('aipStatUserVar','string','global')
    aipStatUserVar=''
endif
setgroup('aipStatUserVar','processing','global')
setprotect('aipStatUserVar','set',32768,'global')

exists('aipVsHistFile','parameter','global'):$e
if (not $e) then
    create('aipVsHistFile','string','global')
    aipVsHistFile=''
endif
setgroup('aipVsHistFile','processing','global')
setprotect('aipVsHistFile','set',32768,'global')

exists('aipVsFunctionFile','parameter','global'):$e
if (not $e) then
    create('aipVsFunctionFile','string','global')
    aipVsFunctionFile='/tmp/VjCltFunction'
endif
setgroup('aipVsFunctionFile','processing','global')
setprotect('aipVsFunctionFile','set',32768,'global')

exists('aipVsFunction','parameter','global'):$e
if (not $e) then
    create('aipVsFunction','string','global')
    aipVsFunction=''
endif
setgroup('aipVsFunction','processing','global')
setprotect('aipVsFunction','set',32768,'global')

exists('aipWriteFmtConvert','parameter','global'):$e
if (not $e) then
    create('aipWriteFmtConvert','string','global')
    aipWriteFmtConvert='FDF'
endif
setgroup('aipWriteFmtConvert','processing','global')
setprotect('aipWriteFmtConvert','set',32768,'global')

exists('aipProfileLengthMsg','parameter','global'):$e
if (not $e) then
    create('aipProfileLengthMsg','string','global')
    aipProfileLengthMsg=''
endif
setgroup('aipProfileLengthMsg','processing','global')
setprotect('aipProfileLengthMsg','set',32768,'global')

exists('aipProfileFile','parameter','global'):$e
if (not $e) then
    create('aipProfileFile','string','global')
    aipProfileFile=''
endif
setgroup('aipProfileFile','processing','global')
setprotect('aipProfileFile','set',32768,'global')

exists('aipProfileMaxMsg','parameter','global'):$e
if (not $e) then
    create('aipProfileMaxMsg','string','global')
    aipProfileMaxMsg=''
endif
setgroup('aipProfileMaxMsg','processing','global')
setprotect('aipProfileMaxMsg','set',32768,'global')

exists('aipPointIntensityMsg','parameter','global'):$e
if (not $e) then
    create('aipPointIntensityMsg','string','global')
    aipPointIntensityMsg=''
endif
setgroup('aipPointIntensityMsg','processing','global')
setprotect('aipPointIntensityMsg','set',32768,'global')

exists('aipPointLabCoordsMsg','parameter','global'):$e
if (not $e) then
    create('aipPointLabCoordsMsg','string','global')
    aipPointLabCoordsMsg=''
endif
setgroup('aipPointLabCoordsMsg','processing','global')
setprotect('aipPointLabCoordsMsg','set',32768,'global')

exists('aipPointSeparationMsg','parameter','global'):$e
if (not $e) then
    create('aipPointSeparationMsg','string','global')
    aipPointSeparationMsg=''
endif
setgroup('aipPointSeparationMsg','processing','global')
setprotect('aipPointSeparationMsg','set',32768,'global')

exists('aipPointProjSeparationMsg','parameter','global'):$e
if (not $e) then
    create('aipPointProjSeparationMsg','string','global')
    aipPointProjSeparationMsg=''
endif
setgroup('aipPointProjSeparationMsg','processing','global')
setprotect('aipPointProjSeparationMsg','set',32768,'global')

exists('aipPointSeparationMsg','parameter','global'):$e
if (not $e) then
    create('aipPointSeparationMsg','string','global')
    aipPointSeparationMsg=''
endif
setgroup('aipPointSeparationMsg','processing','global')
setprotect('aipPointSeparationMsg','set',32768,'global')

exists('aipPointProjSeparationMsg','parameter','global'):$e
if (not $e) then
    create('aipPointProjSeparationMsg','string','global')
    aipPointProjSeparationMsg=''
endif
setgroup('aipPointProjSeparationMsg','processing','global')
setprotect('aipPointProjSeparationMsg','set',32768,'global')

exists('aipProfileDataCoordsStartMsg','parameter','global'):$e
if (not $e) then
    create('aipProfileDataCoordsStartMsg','string','global')
    aipProfileDataCoordsStartMsg=''
endif
setgroup('aipProfileDataCoordsStartMsg','processing','global')
setprotect('aipProfileDataCoordsStartMsg','set',32768,'global')

exists('aipProfileDataCoordsEndMsg','parameter','global'):$e
if (not $e) then
    create('aipProfileDataCoordsEndMsg','string','global')
    aipProfileDataCoordsEndMsg=''
endif
setgroup('aipProfileDataCoordsEndMsg','processing','global')
setprotect('aipProfileDataCoordsEndMsg','set',32768,'global')

exists('aipStatMinMsg','parameter','global'):$e
if (not $e) then
    create('aipStatMinMsg','string','global')
    aipStatMinMsg=''
endif
setgroup('aipStatMinMsg','processing','global')
setprotect('aipStatMinMsg','set',32768,'global')

exists('aipStatMaxMsg','parameter','global'):$e
if (not $e) then
    create('aipStatMaxMsg','string','global')
    aipStatMaxMsg=''
endif
setgroup('aipStatMaxMsg','processing','global')
setprotect('aipStatMaxMsg','set',32768,'global')

exists('aipStatAreaMsg','parameter','global'):$e
if (not $e) then
    create('aipStatAreaMsg','string','global')
    aipStatAreaMsg=''
endif
setgroup('aipStatAreaMsg','processing','global')
setprotect('aipStatAreaMsg','set',32768,'global')

exists('aipStatMeanMsg','parameter','global'):$e
if (not $e) then
    create('aipStatMeanMsg','string','global')
    aipStatMeanMsg=''
endif
setgroup('aipStatMeanMsg','processing','global')
setprotect('aipStatMeanMsg','set',32768,'global')

exists('aipStatMedianMsg','parameter','global'):$e
if (not $e) then
    create('aipStatMedianMsg','string','global')
    aipStatMedianMsg=''
endif
setgroup('aipStatMedianMsg','processing','global')
setprotect('aipStatMedianMsg','set',32768,'global')

exists('aipStatSdvMsg','parameter','global'):$e
if (not $e) then
    create('aipStatSdvMsg','string','global')
    aipStatSdvMsg=''
endif
setgroup('aipStatSdvMsg','processing','global')
setprotect('aipStatSdvMsg','set',32768,'global')

exists('aipStatVolumeMsg','parameter','global'):$e
if (not $e) then
    create('aipStatVolumeMsg','string','global')
    aipStatVolumeMsg=''
endif
setgroup('aipStatVolumeMsg','processing','global')
setprotect('aipStatVolumeMsg','set',32768,'global')

exists('aipStatClipped','parameter','global'):$e
if (not $e) then
    create('aipStatClipped','string','global')
    aipStatClipped=''
endif
setgroup('aipStatClipped','processing','global')
setprotect('aipStatClipped','set',32768,'global')

exists('aipStatGraphFile','parameter','global'):$e
if (not $e) then
    create('aipStatGraphFile','string','global')
    aipStatGraphFile=''
endif
setgroup('aipStatGraphFile','processing','global')
setprotect('aipStatGraphFile','set',32768,'global')

exists('aipFrameDefaultMax','parameter','global'):$e
if (not $e) then
    create('aipFrameDefaultMax','real','global')
    aipFrameDefaultMax=3
endif
setgroup('aipFrameDefaultMax','processing','global')
setprotect('aipFrameDefaultMax','set',32768,'global')

exists('aipVsBind','parameter','global'):$e
if (not $e) then
    create('aipVsBind','real','global')
    aipVsBind=0
endif
setgroup('aipVsBind','processing','global')
setprotect('aipVsBind','set',32768,'global')

exists('aipVsMode','parameter','global'):$e
if (not $e) then
    create('aipVsMode','string','global')
    aipVsMode='individual'
endif
setenumeral('aipVsMode',8,'individual','none','uniform','selected frames', 'displayed','header','operate','groups','global')
setgroup('aipVsMode','processing','global')
setprotect('aipVsMode','set',32768,'global')

exists('aipZoomBind','parameter','global'):$e
if (not $e) then
    create('aipZoomBind','real','global')
    aipZoomBind=0
endif
setgroup('aipZoomBind','processing','global')
setprotect('aipZoomBind','set',32768,'global')

exists('aipZoomBindMode','parameter','global'):$e
if (not $e) then
    create('aipZoomBindMode','real','global')
    aipZoomBindMode=0
endif
setgroup('aipZoomBindMode','processing','global')
setprotect('aipZoomBindMode','set',32768,'global')

exists('aipZoomBindOnDrag','parameter','global'):$e
if (not $e) then
    create('aipZoomBindOnDrag','real','global')
    aipZoomBindOnDrag=0
endif
setgroup('aipZoomBindOnDrag','processing','global')
setprotect('aipZoomBindOnDrag','set',32768,'global')

exists('aipFrameDefaultMax','parameter','global'):$e
if (not $e) then
    create('aipFrameDefaultMax','real','global')
    aipFrameDefaultMax=3
endif
setgroup('aipFrameDefaultMax','processing','global')
setprotect('aipFrameDefaultMax','set',32768,'global')

exists('aipPrintScale','parameter','global'):$e
if (not $e) then
    create('aipPrintScale','real','global')
    aipPrintScale=100
endif
setgroup('aipPrintScale','processing','global')
setprotect('aipPrintScale','set',32768,'global')

exists('aipInfoUpdateOnMove','parameter','global'):$e
if (not $e) then
    create('aipInfoUpdateOnMove','real','global')
    aipInfoUpdateOnMove=0
endif
setgroup('aipInfoUpdateOnMove','processing','global')
setprotect('aipInfoUpdateOnMove','set',32768,'global')

exists('aipProfileMIP','parameter','global'):$e
if (not $e) then
    create('aipProfileMIP','real','global')
    aipProfileMIP=0
endif
setgroup('aipProfileMIP','processing','global')
setprotect('aipProfileMIP','set',32768,'global')

exists('aipZoomFactor','parameter','global'):$e
if (not $e) then
    create('aipZoomFactor','real','global')
    aipZoomFactor=1.41421356
endif
setgroup('aipZoomFactor','processing','global')
setprotect('aipZoomFactor','set',32768,'global')

exists('aipInfoUpdateOnMove','parameter','global'):$e
if (not $e) then
    create('aipInfoUpdateOnMove','real','global')
    aipInfoUpdateOnMove=0
endif
setgroup('aipInfoUpdateOnMove','processing','global')
setprotect('aipInfoUpdateOnMove','set',32768,'global')

exists('aipRoiMaxActiveSlaves','parameter','global'):$e
if (not $e) then
    create('aipRoiMaxActiveSlaves','real','global')
    aipRoiMaxActiveSlaves=-1
endif
setgroup('aipRoiMaxActiveSlaves','processing','global')
setprotect('aipRoiMaxActiveSlaves','set',32768,'global')

exists('aipRoiSelectOnCreation','parameter','global'):$e
if (not $e) then
    create('aipRoiSelectOnCreation','real','global')
    aipRoiSelectOnCreation=1
endif
setgroup('aipRoiSelectOnCreation','processing','global')
setprotect('aipRoiSelectOnCreation','set',32768,'global')

exists('aipStatNumBins','parameter','global'):$e
if (not $e) then
    create('aipStatNumBins','real','global')
    aipStatNumBins=100
endif
setgroup('aipStatNumBins','processing','global')
setprotect('aipStatNumBins','set',32768,'global')

exists('aipStatHistRangeType','parameter','global'):$e
if (not $e) then
    create('aipStatHistRangeType','real','global')
    aipStatHistRangeType=0
endif
setgroup('aipStatHistRangeType','processing','global')
setprotect('aipStatHistRangeType','set',32768,'global')

exists('aipStatUpdateOnMove','parameter','global'):$e
if (not $e) then
    create('aipStatUpdateOnMove','real','global')
    aipStatUpdateOnMove=0
endif
setgroup('aipStatUpdateOnMove','processing','global')
setprotect('aipStatUpdateOnMove','set',32768,'global')

exists('aipStatHistRangeType','parameter','global'):$e
if (not $e) then
    create('aipStatHistRangeType','real','global')
    aipStatHistRangeType=0
endif
setgroup('aipStatHistRangeType','processing','global')
setprotect('aipStatHistRangeType','set',32768,'global')

exists('aipStatCursMin','parameter','global'):$e
if (not $e) then
    create('aipStatCursMin','real','global')
    aipStatCursMin=0
endif
setgroup('aipStatCursMin','processing','global')
setprotect('aipStatCursMin','set',32768,'global')

exists('aipStatCursMax','parameter','global'):$e
if (not $e) then
    create('aipStatCursMax','real','global')
    aipStatCursMax=1
endif
setgroup('aipStatCursMax','processing','global')
setprotect('aipStatCursMax','set',32768,'global')

exists('aipStatHistMin','parameter','global'):$e
if (not $e) then
    create('aipStatHistMin','real','global')
    aipStatHistMin=0
endif
setgroup('aipStatHistMin','processing','global')
setprotect('aipStatHistMin','set',32768,'global')

exists('aipStatHistMax','parameter','global'):$e
if (not $e) then
    create('aipStatHistMax','real','global')
    aipStatHistMax=1
endif
setgroup('aipStatHistMax','processing','global')
setprotect('aipStatHistMax','set',32768,'global')

exists('aipStatNumBins','parameter','global'):$e
if (not $e) then
    create('aipStatNumBins','real','global')
    aipStatNumBins=100
endif
setgroup('aipStatNumBins','processing','global')
setprotect('aipStatNumBins','set',32768,'global')

exists('aipStatOrdinate','parameter','global'):$e
if (not $e) then
    create('aipStatOrdinate','real','global')
    aipStatOrdinate=0
endif
setgroup('aipStatOrdinate','processing','global')
setprotect('aipStatOrdinate','set',32768,'global')

exists('aipStatAbscissa','parameter','global'):$e
if (not $e) then
    create('aipStatAbscissa','real','global')
    aipStatAbscissa=0
endif
setgroup('aipStatAbscissa','processing','global')
setprotect('aipStatAbscissa','set',32768,'global')

exists('aipStatCursMin','parameter','global'):$e
if (not $e) then
    create('aipStatCursMin','real','global')
    aipStatCursMin=0
endif
setgroup('aipStatCursMin','processing','global')
setprotect('aipStatCursMin','set',32768,'global')

exists('aipStatCursMax','parameter','global'):$e
if (not $e) then
    create('aipStatCursMax','real','global')
    aipStatCursMax=0
endif
setgroup('aipStatCursMax','processing','global')
setprotect('aipStatCursMax','set',32768,'global')

exists('aipVsDataMin','parameter','global'):$e
if (not $e) then
    create('aipVsDataMin','real','global')
    aipVsDataMin=0
endif
setgroup('aipVsDataMin','processing','global')
setprotect('aipVsDataMin','set',32768,'global')

exists('aipVsDataMax','parameter','global'):$e
if (not $e) then
    create('aipVsDataMax','real','global')
    aipVsDataMax=0.01
endif
setgroup('aipVsDataMax','processing','global')
setprotect('aipVsDataMax','set',32768,'global')

exists('aipVsTailPercentile','parameter','global'):$e
if (not $e) then
    create('aipVsTailPercentile','real','global')
    aipVsTailPercentile=0.1
endif
setgroup('aipVsTailPercentile','processing','global')

exists('aipWriteFmtBits','parameter','global'):$e
if (not $e) then
    create('aipWriteFmtBits','real','global')
    aipWriteFmtBits=32
endif
setgroup('aipWriteFmtBits','processing','global')
setprotect('aipWriteFmtBits','set',32768,'global')

exists('aipWriteFmtFloat','parameter','global'):$e
if (not $e) then
    create('aipWriteFmtFloat','real','global')
    aipWriteFmtFloat=1
endif
setgroup('aipWriteFmtFloat','processing','global')
setprotect('aipWriteFmtFloat','set',32768,'global')

exists('aipMode','parameter','global'):$e
if (not $e) then
    create('aipMode','real','global')
    aipMode=0
endif
setgroup('aipMode','processing','global')
setprotect('aipMode','set',32768,'global')

exists('aipProfileMIP','parameter','global'):$e
if (not $e) then
    create('aipProfileMIP','real','global')
    aipProfileMIP=0
endif
setgroup('aipProfileMIP','processing','global')
setprotect('aipProfileMIP','set',32768,'global')

exists('aipMovieRate','parameter','global'):$e
if $e<0.5 then
  create('aipMovieRate', 'integer','global')
  aipMovieRate=2
endif
setgroup('aipMovieRate','processing','global')
setprotect('aipMovieRate','set',32768,'global')

exists('aipMselect','parameter','global'):$e
if $e<0.5 then
  create('aipMselect','string','global')
endif
setgroup('aipMselect','processing','global')
setprotect('aipMselect','set',32768,'global')

exists('aip2JExp','parameter','global'):$e
if $e<0.5 then
  create('aip2JExp','string','global')
endif
setgroup('aip2JExp','processing','global')
setprotect('aip2JExp','set',32768,'global')

exists('aip2CExp','parameter','global'):$e
if $e<0.5 then
  create('aip2CExp','string','global')
endif
setgroup('aip2CExp','processing','global')
setprotect('aip2CExp','set',32768,'global')

exists('aip2JCaret','parameter','global'):$e
if $e<0.5 then
  create('aip2JCaret','integer','global')
endif
setgroup('aip2JCaret','processing','global')
setprotect('aip2JCaret','set',32768,'global')

exists('aip2CCaret','parameter','global'):$e
if $e<0.5 then
  create('aip2CCaret','integer','global')
endif
setgroup('aip2CCaret','processing','global')
setprotect('aip2CCaret','set',32768,'global')

exists('aipProfileDataCoordsEndY','parameter','global'):$e
if $e<0.5 then
  create('aipProfileDataCoordsEndY','integer','global')
endif
setgroup('aipProfileDataCoordsEndY','processing','global')
setprotect('aipProfileDataCoordsEndY','set',32768,'global')

exists('aipProfileDataCoordsEndX','parameter','global'):$e
if $e<0.5 then
  create('aipProfileDataCoordsEndX','integer','global')
endif
setgroup('aipProfileDataCoordsEndX','processing','global')
setprotect('aipProfileDataCoordsEndX','set',32768,'global')

exists('enableExtractPanel','parameter','global'):$e
if $e<0.5 then
  create('enableExtractPanel','integer','global')
endif
setgroup('enableExtractPanel','processing','global')
setprotect('enableExtractPanel','set',32768,'global')

exists('showObliquePlanesPanel','parameter','global'):$e
if $e<0.5 then
  create('showObliquePlanesPanel','integer','global')
endif
setgroup('showObliquePlanesPanel','processing','global')
setprotect('showObliquePlanesPanel','set',32768,'global')

exists('aipOrient','parameter','global'):$e
if $e<0.5 then
  create('aipOrient','string','global')
endif
setgroup('aipOrient','processing','global')
setprotect('aipOrient','set',32768,'global')

exists('aipXYfirst','parameter','global'):$e
if $e<0.5 then
  create('aipXYfirst','integer','global')
endif
setgroup('aipXYfirst','processing','global')
setprotect('aipXYfirst','set',32768,'global')

exists('aipXZfirst','parameter','global'):$e
if $e<0.5 then
  create('aipXZfirst','integer','global')
endif
setgroup('aipXZfirst','processing','global')
setprotect('aipXZfirst','set',32768,'global')

exists('aipYZfirst','parameter','global'):$e
if $e<0.5 then
  create('aipYZfirst','integer','global')
endif
setgroup('aipYZfirst','processing','global')
setprotect('aipYZfirst','set',32768,'global')

exists('aipXYlast','parameter','global'):$e
if $e<0.5 then
  create('aipXYlast','integer','global')
endif
setgroup('aipXYlast','processing','global')
setprotect('aipXYlast','set',32768,'global')

exists('aipXZlast','parameter','global'):$e
if $e<0.5 then
  create('aipXZlast','integer','global')
endif
setgroup('aipXZlast','processing','global')
setprotect('aipXZlast','set',32768,'global')

exists('aipYZlast','parameter','global'):$e
if $e<0.5 then
  create('aipYZlast','integer','global')
endif
setgroup('aipYZlast','processing','global')
setprotect('aipYZlast','set',32768,'global')

exists('aipXYincr','parameter','global'):$e
if $e<0.5 then
  create('aipXYincr','integer','global')
  aipXYincr=1
endif
setgroup('aipXYincr','processing','global')
setprotect('aipXYincr','set',32768,'global')

exists('aipXZincr','parameter','global'):$e
if $e<0.5 then
  create('aipXZincr','integer','global')
  aipXZincr=1
endif
setgroup('aipXZincr','processing','global')
setprotect('aipXZincr','set',32768,'global')

exists('aipYZincr','parameter','global'):$e
if $e<0.5 then
  create('aipYZincr','integer','global')
  aipYZincr=1
endif
setgroup('aipYZincr','processing','global')
setprotect('aipYZincr','set',32768,'global')

exists('aipStatNumRois','parameter','global'):$e
if (not $e) then
    create('aipStatNumRois','real','global')
    aipStatNumRois=0
endif
setgroup('aipStatNumRois','processing','global')
setprotect('aipStatNumRois','set',32768,'global')

exists('aipPrevMode','parameter','global'):$e
if (not $e) then
    create('aipPrevMode','real','global')
    aipPrevMode=1
endif
setgroup('aipPrevMode','processing','global')
setprotect('aipPrevMode','set',32768,'global')

exists('aipRoiBind','parameter','global'):$e
if (not $e) then
    create('aipRoiBind','real','global')
    aipRoiBind=1
endif
setgroup('aipRoiBind','processing','global')
setprotect('aipRoiBind','set',32768,'global')

exists('aipRoiSelectSlavesOnCreation','parameter','global'):$e
if (not $e) then
    create('aipRoiSelectSlavesOnCreation','real','global')
    aipRoiSelectSlavesOnCreation=1
endif
setgroup('aipRoiSelectSlavesOnCreation','processing','global')
setprotect('aipRoiSelectSlavesOnCreation','set',32768,'global')

exists('aipRotationPolicy','parameter','global'):$e
if (not $e) then
    create('aipRotationPolicy','string','global')
    aipRotationPolicy='neurological'
endif
setgroup('aipRotationPolicy','processing','global')
setprotect('aipRotationPolicy','set',32768,'global')

exists('aipDisplay','parameter','global'):$e
if (not $e) then
    create('aipDisplay','real','global')
    setgroup('aipDisplay','processing','global')
endif
if (size('aipDisplay') < 3) then 
    $i=0 $s=''
    repeat
      $i=$i+1
      format($i,1,0):$s
      $cmd='VP '+$s+' aipDisplay[1]=1 aipDisplay[2]=0 aipDisplay[3]=1'
      vnmrjcmd($cmd)
    until ($i >= jviewports[1])
endif
setgroup('aipDisplay','processing','global')
setprotect('aipDisplay','set',32768,'global')

exists('aipWindowSplit','parameter','global'):$e
if (not $e) then
    create('aipWindowSplit','real','global')
    setgroup('aipWindowSplit','processing','global')
endif
if (size('aipWindowSplit') < 2) then 
    $i=0 $s=''
    repeat
      $i=$i+1
      format($i,1,0):$s
      $cmd='VP '+$s+' aipWindowSplit[1]=0 aipWindowSplit[2]=0'
      vnmrjcmd($cmd)
    until ($i >= jviewports[1])
endif
setgroup('aipWindowSplit','processing','global')
setprotect('aipWindowSplit','set',32768,'global')

exists('aipFrameResplitOnResize','parameter','global'):$e
if (not $e) then
    create('aipFrameResplitOnResize','real','global')
    aipFrameResplitOnResize=0
endif
setgroup('aipFrameResplitOnResize','processing','global')
setprotect('aipFrameResplitOnResize','set',32768,'global')

exists('aipPointDataCoordsMsg','parameter','global'):$e
if (not $e) then
    create('aipPointDataCoordsMsg','string','global')
    aipPointDataCoordsMsg=''
endif
setgroup('aipPointDataCoordsMsg','processing','global')
setprotect('aipPointDataCoordsMsg','set',32768,'global')

exists('aipStatUpdateCount','parameter','global'):$e
if (not $e) then
    create('aipStatUpdateCount','real','global')
endif
setgroup('aipStatUpdateCount','processing','global')
setprotect('aipStatUpdateCount','set',32768,'global')

exists('aipUserProfileFile','parameter','global'):$e
if (not $e) then
    create('aipUserProfileFile','string','global')
    aipUserProfileFile='lineProfile'
endif
setgroup('aipUserProfileFile','processing','global')
setprotect('aipUserProfileFile','set',32768,'global')

exists('aipUserStatGraphFile','parameter','global'):$e
if (not $e) then
    create('aipUserStatGraphFile','string','global')
    aipUserStatGraphFile='statGraph'
endif
setgroup('aipUserStatGraphFile','processing','global')
setprotect('aipUserStatGraphFile','set',32768,'global')

exists('aipUserStatListFile','parameter','global'):$e
if (not $e) then
    create('aipUserStatListFile','string','global')
    aipUserStatListFile='statList'
endif
setgroup('aipUserStatListFile','processing','global')
setprotect('aipUserStatListFile','set',32768,'global')

exists('aipInterpolationQuality','parameter','global'):$e
if (not $e) then
    create('aipInterpolationQuality','real','global')
    aipInterpolationQuality=0
endif
setgroup('aipInterpolationQuality','processing','global')
setprotect('aipInterpolationQuality','set',32768,'global')

exists('aipVsBindOnLoad','parameter','global'):$e
if (not $e) then
    create('aipVsBindOnLoad','real','global')
    aipVsBindOnLoad=1
endif
setgroup('aipVsBindOnLoad','processing','global')
setprotect('aipVsBindOnLoad','set',32768,'global')

exists('aipGrayFilename','parameter','global'):$e
if (not $e) then
    create('aipGrayFilename','string','global')
    aipGrayFilename='/tmp/VjComm'
endif
setgroup('aipGrayFilename','processing','global')
setprotect('aipGrayFilename','set',32768,'global')

exists('aipVsDynamicBinding','parameter','global'):$e
if (not $e) then
    create('aipVsDynamicBinding','real','global')
    aipVsDynamicBinding=1
endif
setgroup('aipVsDynamicBinding','processing','global')
setprotect('aipVsDynamicBinding','set',32768,'global')

exists('aipVsViewportBinding','parameter','global'):$e
if (not $e) then
    create('aipVsViewportBinding','real','global')
    aipVsViewportBinding=1
endif
setgroup('aipVsViewportBinding','processing','global')

exists('aipZoomViewportBinding','parameter','global'):$e
if (not $e) then
    create('aipZoomViewportBinding','real','global')
    aipZoomViewportBinding=1
endif
setgroup('aipZoomViewportBinding','processing','global')

exists('aipProfileShowZero','parameter','global'):$e
if (not $e) then
    create('aipProfileShowZero','string','global')
    aipProfileShowZero='y'
endif
setgroup('aipProfileShowZero','processing','global')
setprotect('aipProfileShowZero','set',32768,'global')

exists('aipStatCursEnable','parameter','global'):$e
if (not $e) then
    create('aipStatCursEnable','real','global')
    aipStatCursEnable=0
endif
setgroup('aipStatCursEnable','processing','global')
setprotect('aipStatCursEnable','set',32768,'global')

exists('aipSegmentationType','parameter','global'):$e
if (not $e) then
    create('aipSegmentationType','string','global')
    aipSegmentationType='r'
endif
setgroup('aipSegmentationType','processing','global')
setprotect('aipSegmentationType','set',32768,'global')

exists('aipNumberFrames','parameter','global'):$e
if (not $e) then
    create('aipNumberFrames','real','global')
endif
setgroup('aipNumberFrames','processing','global')
setprotect('aipNumberFrames','set',32768,'global')
aipNumberFrames=0

exists('aipNameFrames','parameter','global'):$e
if (not $e) then
    create('aipNameFrames','real','global')
endif
setgroup('aipNameFrames','processing','global')
setprotect('aipNameFrames','set',32768,'global')
aipNameFrames=2

exists('aipNumberRois','parameter','global'):$e
if (not $e) then
    create('aipNumberRois','real','global')
endif
setgroup('aipNumberRois','processing','global')
setprotect('aipNumberRois','set',32768,'global')
aipNumberRois=0

exists('aipPointInfoNumber','parameter','global'):$e
if (not $e) then
    create('aipPointInfoNumber','real','global')
    setgroup('aipPointInfoNumber','processing','global')
    aipPointInfoNumber=0,0
endif
setgroup('aipPointInfoNumber','processing','global')
setprotect('aipPointInfoNumber','set',32768,'global')

exists('aipLineInfoNumber','parameter','global'):$e
if (not $e) then
    create('aipLineInfoNumber','real','global')
    aipLineInfoNumber=0
endif
setgroup('aipLineInfoNumber','processing','global')
setprotect('aipLineInfoNumber','set',32768,'global')

exists('aipAnnotation','parameter','global'):$e
if (not $e) then
    create('aipAnnotation','string','global')
    aipAnnotation=''
endif
setgroup('aipAnnotation','processing','global')
setprotect('aipAnnotation','set',32768,'global')

exists('aipClickedFrame','parameter','global'):$e
if (not $e) then
    create('aipClickedFrame','string','global')
    aipClickedFrame=''
endif
setgroup('aipClickedFrame','processing','global')
setprotect('aipClickedFrame','set',32768,'global')

exists('aipCurrentKey','parameter','global'):$e
if (not $e) then
    create('aipCurrentKey','string','global')
    aipCurrentKey=''
endif
setgroup('aipCurrentKey','processing','global')
setprotect('aipCurrentKey','set',32768,'global')

exists('aipMoviePath','parameter','global'):$e
if (not $e) then
    create('aipMoviePath','string','global')
    setgroup('aipMoviePath','processing','global')
    aipMoviePath=userdir+'/data/images.mov'
endif
exists('aipMovieSpec','parameter','global'):$e
if (not $e) then
    create('aipMovieSpec','string','global')
    setgroup('aipMovieSpec','processing','global')
    aipMovieSpec='50'
endif
exists('aipMovieSettings','parameter','global'):$e
if (not $e) then
    create('aipMovieSettings','real','global')
    setgroup('aipMovieSettings','processing','global')
endif
if (size('aipMovieSettings') < 5) then 
    $i=0 $s=''
    repeat
      $i=$i+1
      format($i,1,0):$s
      $cmd='VP '+$s+' aipMovieSettings[1]=1 aipMovieSettings[2]=1 aipMovieSettings[3]=1 aipMovieSettings[4]=100 aipMovieSettings[5]=100'
      vnmrjcmd($cmd)
    until ($i >= jviewports[1])
endif
setgroup('aipMovieSettings','processing','global')
setprotect('aipMovieSettings','set',32768,'global')

    exists('aipAutoLayout','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipAutoLayout','real','global')
       aipAutoLayout = 1
    endif
    setgroup('aipAutoLayout','processing','global')
    setprotect('aipAutoLayout','set',32768,'global')

    exists('aipDisplayMode','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipDisplayMode','real','global')
       aipDisplayMode = 1
    endif
    setgroup('aipDisplayMode','processing','global')
    setprotect('aipDisplayMode','set',32768,'global')

    exists('aipMovieMode','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipMovieMode','real','global')
       aipMovieMode = 1
    endif
    setgroup('aipMovieMode','processing','global')
    setprotect('aipMovieMode','set',32768,'global')

    exists('framelayoutName','parameter', 'global'):$e
    if $e < 0.5 then
       create('framelayoutName','string','global')
       setvalue('framelayoutName','','global')
    endif
    setgroup('framelayoutName','processing','global')
    setprotect('framelayoutName','set',32768,'global')

    exists('framelayout','parameter', 'global'):$e
    if $e < 0.5 then
       create('framelayout','string','global')
       setvalue('framelayout','','global')
    endif
    setgroup('framelayout','processing','global')
    setprotect('framelayout','set',32768,'global')

    exists('aipBatch','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipBatch','real','global')
       aipBatch = 1
    endif
    setgroup('aipBatch','processing','global')
    setprotect('aipBatch','set',32768,'global')

    exists('aipBatches','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipBatches','real','global')
       aipBatches = 0
    endif
    setgroup('aipBatches','processing','global')
    setprotect('aipBatches','set',32768,'global')

    exists('rqsort','parameter', 'global'):$e
    if $e < 0.5 then
       create('rqsort','real','global')
       rqsort = 0
    endif
    setgroup('rqsort','processing','global')
    setprotect('rqsort','set',32768,'global')

    exists('rqsort2','parameter', 'global'):$e
    if $e < 0.5 then
       create('rqsort2','real','global')
       rqsort2 = 1
    endif
    setgroup('rqsort2','processing','global')
    setprotect('rqsort2','set',32768,'global')

    exists('rqfull','parameter', 'global'):$e
    if $e < 0.5 then
       create('rqfull','real','global')
       rqfull = 0
    endif
    setgroup('rqfull','processing','global')
    setprotect('rqfull','set',32768,'global')

    exists('userselection','parameter', 'global'):$e
    if $e < 0.5 then
       create('userselection','string','global')
       setvalue('userselection','','global')
    endif
    setgroup('userselection','processing','global')
    setprotect('userselection','set',32768,'global')

    exists('aipIOMode','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipIOMode','real','global')
       aipIOMode = 1
    endif
    setgroup('aipIOMode','processing','global')
    setprotect('aipIOMode','set',32768,'global')

    exists('aipROIname_sel','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipROIname_sel','string','global')
       setvalue('aipROIname_sel','','global')
    endif
    setgroup('aipROIname_sel','processing','global')
    setprotect('aipROIname_sel','set',32768,'global')

    exists('aipROIname','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipROIname','string','global')
       setvalue('aipROIname','','global')
    endif
    setgroup('aipROIname','processing','global')
    setprotect('aipROIname','set',32768,'global')

    exists('aipROIpath','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipROIpath','string','global')
       setvalue('aipROIpath','','global')
    endif
    setgroup('aipROIpath','processing','global')
    setprotect('aipROIpath','set',32768,'global')

    exists('reconIn','parameter', 'global'):$e
    if $e < 0.5 then
       create('reconIn','string','global')
       setvalue('reconIn','','global')
    endif
    setgroup('reconIn','processing','global')
    setprotect('reconIn','set',32768,'global')

    exists('reconOut','parameter', 'global'):$e
    if $e < 0.5 then
       create('reconOut','string','global')
       setvalue('reconOut','','global')
    endif
    setgroup('reconOut','processing','global')
    setprotect('reconOut','set',32768,'global')

    exists('reconMode','parameter', 'global'):$e
    if $e < 0.5 then
       create('reconMode','real','global')
       setvalue('reconMode',1,'global')
    endif
    setgroup('reconMode','processing','global')
    setprotect('reconMode','set',32768,'global')

    exists('rqImageNodes','parameter', 'global'):$e
    if $e < 0.5 then
       create('rqImageNodes','real','global')
       setvalue('rqImageNodes',100,'global')
    endif
    setgroup('rqImageNodes','processing','global')
    setprotect('rqImageNodes','set',32768,'global')

    exists('aipShowFOV','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipShowFOV','real','global')
    endif
    setgroup('aipShowFOV','processing','global')
    setprotect('aipShowFOV','set',32768,'global')
    aipShowFOV = 0

    exists('aipLayerSel','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipLayerSel','real','global')
       aipLayerSel = 0
    endif
    setgroup('aipLayerSel','processing','global')
    setprotect('aipLayerSel','set',32768,'global')

    exists('aipShowPosition','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipShowPosition','real','global')
       setgroup('aipShowPosition','processing','global')
       setprotect('aipShowPosition','set',32768,'global')
    endif
    setvalue('aipShowPosition',1,'global')

    exists('aipShowROIPos','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipShowROIPos','real','global')
       setgroup('aipShowROIPos','processing','global')
       setprotect('aipShowROIPos','set',32768,'global')
    endif
    setvalue('aipShowROIPos',0,'global')

    exists('aipShowCenter','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipShowCenter','real','global')
       setgroup('aipShowCenter','processing','global')
       setprotect('aipShowCenter','set',32768,'global')
    endif
    setvalue('aipShowCenter',0,'global')

    exists('aipAxis','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipAxis','real','global')
       setgroup('aipAxis','processing','global')
       setprotect('aipAxis','set',32768,'global')
    endif
    aipAxis = 0,1,1,1,1,0,1,1

    exists('aipAxisGeom','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipAxisGeom','real','global')
       setgroup('aipAxisGeom','processing','global')
       setprotect('aipAxisGeom','set',32768,'global')
    endif
    aipAxisGeom = 1,1,0,0,0,0,0,0,0,0

    exists('aipAxisTransparency','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipAxisTransparency','real','global')
       setgroup('aipAxisTransparency','processing','global')
       setprotect('aipAxisTransparency','set',32768,'global')
    endif
    setvalue('aipAxisTransparency',0.0,'global')

    exists('aipUnits','parameter', 'global'):$e
    if $e < 0.5 then
       create('aipUnits','string','global')
       setgroup('aipUnits','processing','global')
       setprotect('aipUnits','set',32768,'global')
    endif
    setvalue('aipUnits','mm','global')

    exists('aipDefaultWindowSplit','parameter','global'):$e
    if (not $e) then
      create('aipDefaultWindowSplit','real','global')
      setgroup('aipDefaultWindowSplit','processing','global')
      setprotect('aipDefaultWindowSplit','set',32768,'global')
      aipDefaultWindowSplit=1,1
    endif

    exists('aipAxisRef','parameter','global'):$e
    if (not $e) then
      create('aipAxisRef','string','global')
      setgroup('aipAxisRef','processing','global')
      setprotect('aipAxisRef','set',32768,'global')
    endif
    aipAxisRef='logical'

    exists('aipPositionInfo','parameter','global'):$e
    if (not $e) then
      create('aipPositionInfo','string','global')
      setgroup('aipPositionInfo','processing','global')
      setprotect('aipPositionInfo','set',32768,'global')
    endif

    exists('aipShowROIOpt','parameter','global'):$e
    if (not $e) then
      create('aipShowROIOpt','real','global')
      setgroup('aipShowROIOpt','processing','global')
      setprotect('aipShowROIOpt','set',32768,'global')
    endif
    aipShowROIOpt=0

    exists('planDecimal','parameter', 'global'):$e
    if $e < 0.5 then
       create('planDecimal','real','global')
       planDecimal = 3
    endif

    exists('aipMaxImages','parameter','global'):$e
    if (not $e) then
      create('aipMaxImages','real','global')
      setgroup('aipMaxImages','processing','global')
      setprotect('aipMaxImages','set',32768,'global')
    endif
    aipMaxImages=128

    exists('aipOverlayThk','parameter','global'):$e
    if (not $e) then
      create('aipOverlayThk','real','global')
      setgroup('aipOverlayThk','processing','global')
      setprotect('aipOverlayThk','set',32768,'global')
    endif
    aipOverlayThk=2.0,1.5

aipStatUpdateCount=0
aipMode=1
