"macro asppars"

exists('aspMode','parameter','global'):$e
if (not $e) then
    create('aspMode','real','global')
    aspMode=0
    setgroup('aspMode','processing','global')
    setprotect('aspMode','set',32768,'global')
endif

// element 1: color, 2: opaque, 3: height of roi band
exists('aspPref','parameter','global'):$e
if (not $e) then
    create('aspPref','real','global')
    aspPref=-1,20,70
    setgroup('aspPref','processing','global')
    setprotect('aspPref','set',32768,'global')
endif
if(size('aspPref')<4) then
    aspPref=-1,20,70,0.4,0.08,3.0
endif

exists('aspRoiFile','parameter','global'):$e
if (not $e) then
    create('aspRoiFile','string','global')
    aspRoiFile=userdir+'/ROIs/roi1'
    setgroup('aspRoiFile','processing','global')
    setprotect('aspRoiFile','set',32768,'global')
endif

// 1 fdf data path, 
// 2 asp1D trace selection, e.g. `1-30:2`
// 3 cell layout, e.g. `2x3`
exists('aspSelection','parameter','global'):$e
if (not $e) then
    create('aspSelection','string','global')
    aspSelection='','','',''
    setgroup('aspSelection','processing','global')
    setprotect('aspSelection','set',32768,'global')
endif
if(size('aspSelection')<4) then
  aspSelection[4]=''
endif

exists('aspSel','parameter','global'):$e
if (not $e) then
    create('aspSel','real','global')
    aspSel=0,0
    setgroup('aspSel','processing','global')
    setprotect('aspSel','set',32768,'global')
endif

// 1, display mode, such as 'ds','dss','dssh','nxm'
exists('aspStrInfo','parameter','global'):$e
if (not $e) then
    create('aspStrInfo','string','global')
    aspStrInfo='','',''
    setgroup('aspStrInfo','processing','global')
    setprotect('aspStrInfo','set',32768,'global')
endif

exists('annoPath','parameter','global'):$e
if (not $e) then
    create('annoPath','string','global')
    annoPath=userdir+'/Annotations',''
    setgroup('annoPath','processing','global')
    setprotect('annoPath','set',32768,'global')
endif

exists('aspProperty','parameter','global'):$e
if (not $e) then
    create('aspProperty','string','global')
    aspProperty='','','','','','','','','','','','','','','','','','','',''
    setgroup('aspProperty','processing','global')
    setprotect('aspProperty','set',32768,'global')
endif

exists('peakProperty','parameter','global'):$e
if (not $e) then
    create('peakProperty','string','global')
    peakProperty='%ppm%','','','','','','','','',''
    setgroup('peakProperty','processing','global')
    setprotect('peakProperty','set',32768,'global')
endif

exists('integProperty','parameter','global'):$e
if (not $e) then
    create('integProperty','string','global')
    integProperty='%nm%','','','','','','','','',''
    setgroup('integProperty','processing','global')
    setprotect('integProperty','set',32768,'global')
endif

//1, # of total traces
//2, # of displayed traces
exists('aspInfo','parameter','global'):$e
if (not $e) then
    create('aspInfo','real','global')
    aspInfo=0,0,0
    setgroup('aspInfo','processing','global')
    setprotect('aspInfo','set',32768,'global')
endif
