"macro bsEXSIDE_setup"

exists('selsw1','parameter'):$e
if not $e then create('selsw1','real') endif
exists('seldof','parameter'):$e
if not $e then create('seldof','real') endif

seltype='dpfgseF1'
wds=''
wstart='setF1selshp'

$wds='suselfrq setF1selshp'  "Create H1 selection pulses if needed"
$parlibshape=selshapeA[1]
getfilepath(pslabel,'parlib'):$ppex,$ppath
if ($ppex) then
  rtv($ppath,'noabort','selshapeA'):$parlibshape
endif
if ($parlibshape=selshapeA[1]) then
  wds='setF1selshp'
endif

if procdim=2 then wds='suselfrq suselfrq1' elseif procdim=1 then wds=$wds endif
setsw1(dn,225,-10)
create('diffsw1','string')
