"macro catfp"
"********************************************************"
"catfp - Display contents of fp.out                      "
"********************************************************"

isvnmrj:$isvj
if ($isvj > 0.5) then // not vnmrbg, switch to Text Output panel
   vnmrjcmd('toolpanel','Parameter','open')
   vnmrjcmd('setpage','Process')
   vnmrjcmd('setpage','Process','Text Output')
   shell('sleep 0.5') // doesn't always work the first time
   vnmrjcmd('toolpanel','Parameter','open')
   vnmrjcmd('setpage','Process')
   vnmrjcmd('setpage','Process','Text Output')
endif
clear(4)
cat(curexp+'/fp.out')
