// Chempacker macro

$DMG='ph'
if dmg='av' or dmg1='av1' then $DMG='av' endif

if ($# < 1) then if $DMG<>'av' then $1='crftaph' else $1='crft' endif endif
if $1='y' then $1='aph' endif

if $1=curexp then
    if $# > 1 then
	write('line3','%s/exp%d',userdir,$2):$filedir
    else
    	$filedir=curexp
    endif
else
    $d='' $b='' $e=''
    substr(file,'dirname','.fid .vfs'):$d,$b,$e
    if $e<>'' then
    	$filedir=file
    else
    	$filedir=file+'.fid'
    endif
endif

$fidf1=$filedir+'/fidf1r'
$imgf1=$filedir+'/fidf1i'

exists($fidf1,'file'):$fex
if $fex then
    exists('readf1','command'):$fex
endif

// Back compatibility
exists($fidf1+'_crft_aph','file'):$ex2
if $ex2 then rename($fidf1+'_crft_aph',$fidf1+'_crftaph'):$dum endif
// Done

if $1<>curexp and $1<>'' then
    exists($fidf1+'_'+$1,'file'):$fex1
    if $fex1 then 
	$fidf1=$fidf1+'_'+$1 
	$imgf1=$imgf1+'_'+$1 
    endif
endif

if $fex then
    exists('readheader','command'):$fex
endif

if ni>1 then $ftarg='ni' else $ftarg='ni2' endif

if $fex then
    readheader($fidf1):$f1np,$f2np
    if $imgf1<>'' then
	exists($imgf1,'file'):$imgex
	if not $imgex then $imgf1='' endif
    endif
    if $imgf1<>'' then
	readheader($imgf1):$f1npimg,$f2npimg
	if $f1npimg<>$f1np or $f2npimg<>$f2np then
	    $imgf1=''
	endif
    endif

    $f2np=2*$f2np
    if fn<>$f2np then
	write('line3','Warning: fn (%d) mismatch with the dimension (%d) of fidf1. fn reset to %d',fn,$f2np,$f2np)
	fn=$f2np
    endif
    if $filedir<>curexp then
    	copy($fidf1,curexp+'/fidf1r'):$dum
	if $imgf1<>'' then
	    copy($imgf1,curexp+'/fidf1i'):$dum
	endif
    endif
    $origni={$ftarg}
    readheader(curexp+'/acqfil/fid'):$np,$origdim
    $mult=$origdim/$origni
    if $imgf1<>'' then
	pmode='full'
    else
        pmode='partial'
    endif
    if $1<>curexp then
	if $ftarg='ni' then setLP1(0) else setLP2(0) endif
    endif
    $nus=0
    is_NUS2d:$nus
    if $nus then
	$ni={$ftarg}
	if $ftarg='ni' then 
	    $psize=size('phase')
	else
	    $psize=size('phase2')
	endif
	$mult=$psize
	{$ftarg}=$origdim/$psize
	setvalue($ftarg,{$ftarg},'processed')
	setvalue('arraydim',$origdim)
	setvalue('arraydim',$origdim,'processed')
	wft1da($ftarg)
	{$ftarg}=$ni
        setvalue($ftarg,{$ftarg},'processed')
	setvalue('arraydim',$origdim,'processed')
	setvalue('arraydim',$origdim,'processed')
    else
    	wft1da($ftarg)
    endif
    if $ftarg='ni' then $fn1=fn1 else $fn1=fn2 endif

    if $fn1<$f1np then
	downsizefid($fn1,curexp+'/fidf1r')
	if $imgf1<>'' then
	    downsizefid($fn1,curexp+'/fidf1i')
	endif
    elseif $fn1>$f1np then
	zerofillfid($fn1,curexp+'/fidf1r')
	if $imgf1<>'' then
	    zerofillfid($fn1,curexp+'/fidf1i')
	endif
    endif
    readf1
    {$ftarg}=$f1np/2
    setvalue($ftarg,{$ftarg},'processed')
    setvalue('arraydim',{$ftarg}*$mult)
    setvalue('arraydim',{$ftarg}*$mult,'processed')
    if $0='cft1da' then return endif
    lp1=0 rp1=0
    wft2da($ftarg)
    {$ftarg}=$origni
    setvalue($ftarg,{$ftarg},'processed')
    setvalue('arraydim',$origdim)
    setvalue('arraydim',$origdim,'processed')
    if $1<>curexp then
        rm('-f',curexp+'/fidf1r'):$dum
	if $imgf1<>'' then
	    rm('-f',curexp+'/fidf1i'):$dum
	endif
    endif
else
    wft2da($ftarg)
endif

