"macro cpfixpar"
"  this macro is called by cpsetup "

// For now only gain limits are taken care of
// Other sections can be turned on if need be.

//setenumeral('dmm',9,'c','f','g','p','m','r','u','w','x')
//setenumeral('dmm',9,'c','f','g','p','m','r','u','w','x','processed')

if (Console = 'mercury') then
  setlimit('gain',38,0,2)
  setlimit('gain',38,0,2,'processed')
else
  setlimit('gain',60,0,2)
//  setlimit('gain',60,0,2,'processed')
endif

if (Console='mercury') then
  if (gain>38) then
    setvalue('gain',38)
  endif
  setvalue('gain',gain,'processed')
/*
  setlimit('fb',55000,1000,200)
  setlimit('fb',55000,1000,200,'processed')
  dp='y'
  setenumeral('alock',5,'a','n','s','u','y')
  exists('tpwrm','parameter'):$e
  if ($e > 0.5) then
     if (tpwrm > 255) then
        tpwrm=255
     endif
     setlimit('tpwrm',255,0,1)
  endif
  exists('dpwrm','parameter'):$e
  if ($e > 0.5) then
     if (dpwrm > 255) then
        dpwrm=255
     endif
     setlimit('dpwrm',255,0,1)
  endif
  exists('tpwrf','parameter'):$e
  if ($e > 0.5) then
     if (tpwrf > 255) then
        tpwrf=255
     endif
     setlimit('tpwrf',255,0,1)
  endif

  exists('dpwrf','parameter'):$e
  if ($e > 0.5) then
     if (dpwrf > 255) then
        dpwrf=255
     endif
     setlimit('dpwrf',255,0,1)
  endif
*/
endif
