"macro cqinitCP"
"globalauto, autodir, sqdir - study queue directories"
"sqname - basename for data storage"
"studyid=basename of study queue directory"
"activestudy=basename of active study directory"
"actionid=node id of the current set of parameters and or data"

$exp=''
jexp:$exp
globalauto=userdir+'/studies/exp'+$exp

$dir=globalauto
exists($dir,'file'):$e
if $e<0.5 then
  shell('mkdir -p ' +$dir):$e
  exists($dir,'file'):$e
  if $e < 0.5 then
     write('error','Cannot create directory %s.',$dir)
     return
  endif
endif

exists('actionid','parameter'):$e
if ($e < 0.5) then
  cqpars
endif

$sqname='tmpstudy%R0%'
$sqname=$dir+'/'+$sqname
Svfname($sqname, ''):$sqdir
studyid='tmpstudy'
sqdir=$sqdir "tmp location if auto"

copyid = 'null','null'
shell('rm -rf '+$sqdir):$dum

exists($sqdir+'/info','file'):$e
if ($e < 0.5) then
  shell('mkdir -p '+$sqdir+'/info'):$dum
endif
exists($sqdir+'/data','file'):$e
if ($e < 0.5) then
  shell('mkdir -p '+$sqdir+'/data'):$dum
endif
sqval='' sqattr=''
vnmrjcmd('SQ delete tmpstudy')
