"macro dlititle"
"dlititle macro - display title for list of integrals"

$title=''
$nsize=size('liamp')

if $nsize>0.5 then

  "set regions"
  if $nsize<1.5 then
    $regions='n'
  else
    if intmod='partial' then
      $regions='y'
    else
      if intmod='full' then
        $regions='n'
      else "intmod='off'"
        on('lifrq'):$on
        if $on>0.5 then
          $regions='y'
        else
          $regions='n'
        endif
      endif
    endif
  endif

  "title"
  if $regions='y' then
    if axis='p' then
      $title='region   start(ppm)   end      integral'
    else
      $title='region   start(Hz)    end      integral'
    endif
  else
    if axis='p' then
      $title='index   freq(ppm)      intensity'
    else
      $title='index   freq(Hz)       intensity'
    endif
  endif

endif
return($title)
