"macro dshim"

"dshim - display a shim 'method' string" 

if $# = 0 then 
    write('alpha',' ')
    write('alpha','TO DISPLAY A \'method\' FILE, TYPE: dshim(\'methodname\')')
    write('alpha','    Vnmr shimmethods:')
    lf(systemdir+'/shimmethods')
    exists(userdir+'/shimmethods','file'):$e
    if ($e > 0.5) then
       write('alpha',' ')
       write('alpha','    User shimmethods:')
       lf(userdir+'/shimmethods')
    endif
else
    $filepath = userdir+'/shimmethods/'+$1
    exists($filepath,'file'):$e
    if ($e=0) then
	$filepath=systemdir+'/shimmethods/'+$1
        exists($filepath,'file'):$e
        if ($e=0) then
	        write('line3','shim \'method\' %s not found',$1)
	        return
	endif
    endif
    write('alpha',' ')
    write('alpha','Shim \'method\':  %s:',$1)
    cat($filepath)
endif
