"macro gHMBCmeAD_setup"
"*********************"
"    gHMBCmeAD_setup    "
"*********************"

$g=''
substr(gradtype,3,1):$g
if ($g='l') then fixgrd(9):gzlvlE endif

if (dn='C13') then setsw1(dn,225,-15) endif
sqsinebell('acq') gaussian('f1')

// Adjust gtE
//  This really adds no value in this macro, except for
//   dps.  gtE will be readjusted by the go_gHMBCmeAD macro

   $pwx180r=pwx180r*1e-6
   $pwx180=pwx180*1e-6
   exists('bipflg','parameter'):$bipex
   if ($bipex) then
        $bip='n'
        substr(bipflg,2,1):$bip
        if ($bip='n') then $bipex=0 endif
   endif
   if ($bipex) then
        $pwx180=dnbippw*1e-6
   endif
   $taug=1/(j1max + j1min) 
   $maxgtE=$taug/2 + ($pwx180r-$pwx180)/2 - gstab + 20e-6
   if gtE > $maxgtE-0.00005 then
        $gtE=trunc(($maxgtE*10000)-0.5)
        gtE=$gtE/10000
   endif

