"macro getIDinfo"
" return a string containing data identification info "
" of the format:                                      "
" time_run:username:console:samplename:fid_filename   "

$info = ''
$runtime = 'time_run?'
$uname = 'user?'
$cname = 'console?'
$sname = 'sample?'
$name = 'fid_name?'

length(time_run):$len
if($len > 0) then $runtime = time_run endif

length(username):$len
if($len > 0) then $uname = username endif

length(console):$len
if($len > 0) then $cname = console endif

length(samplename):$len
if($len > 0) then $sname = samplename endif

getFidName:$name
length($name):$len
if($len <= 0) then $nam4 = 'fid_name?' endif

$info = $runtime+':'+$uname+':'+$cname+':'+$sname +':'+$name

return($info)
