"macro getadminfo"

if ($# < 2) then
    getfilepath('automation.conf','adm/walkupadm'):$admex,$admin
    if ($admex=0) then
   	getfilepath('ADMIN','adm/walkupadm'):$admex,$admin
   	$filetype='ADMIN'
    else
   	$filetype='conf'
    endif
    if ($1 = 'isthere') then
  	return($admex)
    endif
    if ($admex = 0) then return endif
    if ($filetype='conf') then
        exists('personaType','parameter','global'):$parex
	if ($parex) then if (personaType='') then $parex=0 endif endif
        if ($parex) then
	    exists('PrefConfig_'+personaType+'.txt','personalib/'+personaType+'/adm'):$pex,$padm
            if ($pex) then
//    loopback call with PrefConfig file
                getadminfo($1,$padm):$ok,$val
                if ($ok) then return($val) endif
            endif
        endif
    endif
else
//    This is the loopback call
    $admin=$2 $admex=1 $filetype='conf'
endif

$entry='' $field='NONE'
if ($1 = 'plotformat') then
	$admval='pcx'
	$field='PLOT_FORMAT:'
endif
if ($1 = 'multisubmit') then
	$admval='no'
	$field='MULTI_SUBMIT:'
endif
if ($1 = 'samplechangetime') then
	$admval=0
	$field='SAMPLE_CHANGE_TIME:'
endif
if ($1 = 'prioritytotal') then
	$admval=0
	$field='PRIORITY_TOTAL:'
endif
if ($1 = 'alwaysmimic') then
        $admval='no'
        $field='ALWAYS_MIMIC_MODE:'
endif
if ($1 = 'autonight') then
	$admval='no'
	$field='AUTONIGHTQ:'
endif
if ($1='onenmr4probedefault') then
	$admval='performance'
	$field='OneNMR4probe_DEFAULT:'
endif
if ($1='nusdefault') then
	$admval='no'
	$field='NUS_DEFAULT:'
endif
if ($1='nusprocdefault') then
	$admval='CLEAN'
	$field='NUSproc_DEFAULT:'
endif
if ($1='unassignedprotocols') then
	$admval='true'
	$field='UNASSIGNEDPROTOCOLS:'
endif
if ($1 = 'defaultexp') then
	$admval=''
	$field='DEFAULTEXP:'
endif
if ($1 = 'emessage') then
	$admval='n'
	$field='EMESSAGE:'
endif
if ($1 = 'prioritysampleatnight') THEN
	$admval='no'
	$field='PRIORITY_SAMPLE_AT_NIGHT:'
endif
if ($1 = 'emailwhen') then
	$admval=''
	$field='EMAILWHEN:'
endif
if ($1 = 'autosqdisplay') then
	$admval='ACPEQ'
	$field='AUTOSQ_DISPLAY:'
endif
if ($1 = 'parstyle') then
	$admval='ppa'
	$field='PARSTYLE:'
endif
if ($1 = 'autosqdispchron') then
        $admval=''
        $field='AUTOSQ_DISPLAY_CHRON:'
endif
if ($1 = 'autoresubmiterror') then
        $admval='no'
        $field='AUTO_RESUBMIT_ERROR:'
endif
if ($1 = 'autolockshim') then
	$admval='NewContinue'
	$field='AUTO_LOCKSHIM:'
endif
if ($1 = 'reuseerrorloc') then
	$admval='no'
	$field='REUSE_ERROR_LOC:'
endif
if ($1 = 'reusecompletedloc') then
        $admval='yes'
        $field='REUSE_COMPLETED_LOC:'
endif
if ($1 = 'defaultrack') then
	$admval=vrack
	$field='DEFAULT_RACK:'
endif
if ($1 = 'defaultzone') then
        $admval=vzone
        $field='DEFAULT_ZONE:'
endif
if ($1 = 'smslocation') then
	$admval='random'
	$field='SMS_LOCATION:'
endif
if ($1 = 'loadlkphase') then
	$admval='no'
	$field='LOAD_LOCKPHASE:'
endif
if ($1 = 'loadshims') then
	$admval='no'
	$field='LOAD_SHIMS:'
endif
if ($1 = 'abortpterror') then
	$admval='no'
	$field='ABORT_PTUNE_ERROR:'
endif
if ($1 = 'pauseatexp') then
	$admval='no'
	$field='PAUSE_EACH_ACQ:'
endif
if ($1 = 'editqatpause') then
	$admval='no'
	$field='EDITQ_AT_PAUSE:'
endif
if ($1 = 'wqwhere') then
	$admval='curexp'
	$field='WQACQ_WHERE:'
endif
if ($1 = 'defaultqueue') then
	$admval=''
	$field='DEFAULT_QUEUE:'
endif
if ($1 = 'submitoption') then
	$admval='fgbgauto'
	$field='SUBMIT_OPTION:'
endif
if ($1 = 'fidzip') then
	$admval='no'
	$field='FID_MIRROR_ZIP:'
endif
if ($1 = 'plotzip') then
        $admval='no'
        $field='PLOT_MIRROR_ZIP:'
endif
if ($1 = 'spectrumzip') then
        $admval='no'
        $field='DX_MIRROR_ZIP:'
endif
if ($1 = 'dxformat') then
	$admval='std'
	$field='DX_FORMAT:'
endif
if ($1 = 'datamirror') then
	$admval='no'
	$field='DATA_MIRROR:'
endif
if ($1 = 'protuneatstart') then
	$admval='no'
	$field='PROTUNE_SAMPLE:'
endif
if ($1 = 'autotemp') then
	$admval=''
	$field='AUTO_TEMP:'
endif
if ($1 = 'showscoutfid') then
	$admval='no'
	$field='SHOW_SCOUTFIDS:'
endif
if ($1 = 'showerrnodes') then
        $admval='yes'
        $field='SHOW_ERRORNODES:'
endif
if ($1 = 'editq') then
	$admval='yes'
	$field='EDITQ:'
endif
if ($1 = 'walkuplogin') then
	$admval='none'
	$field='WALKUP_LOGIN:'
endif
if ($1 = 'aftersubmit') then
        $admval='none'
        $field='AFTER_SUBMIT:'
endif
if ($1 = 'lastsample') then
	$admval='current'
	$field='LAST_SAMPLE:'
endif
if ($1 = 'newautodir') then
	$admval='current'
	$field='NEW_AUTODIR:'
endif
if ($1 = 'shorttotal') then
        $admval=0
	$field='SHORTEXP_TOTAL:'
endif
if ($1 = 'longtotal') then
        $admval=0
	$field='LONGEXP_TOTAL:'
endif
if ($1 = 'sortflag') then
	$admval='never'
	$field='SORT_FLAG:'
endif
if ($1 = 'audittrail') then
	$admval='no'
	$field='AUDIT_TRAIL:'
endif
if ($1 = 'prpltime') then
	$admval=60
	$field='PROCPLOT_TIME:'
endif
if ($1 = 'secureadmin') then
	$admval='none'
	$field='SECURE_ADMIN:'
endif
if ($1 = 'autosavedx') then
	$admval='none'
	$field='AUTOSAVEDX:'
endif
if ($1 = 'autosaveplot') then
	$admval='plot'
	$field='AUTOSAVEPLOT:'
endif
if ($1 = 'autosavespec') then
        $admval='no'
        $field='AUTOSAVESPECTRUM:'
endif
if ($1 = 'specformat') then
        $admval='complex'
        $field='SPECFORMAT:'
endif
if ($1 = 'emailfid') then
        $admval='no'
        $field='EMAIL_FID:'
endif
if ($1 = 'maxdaysamples') then
	$admval=-1
	$field='MAX_DAYQ_SAMPLES:'
endif
if ($1 = 'maxnightsamples') then
        $admval=-1
        $field='MAX_NIGHTQ_SAMPLES:'
endif
if ($1 = 'maxdaytime') then
        $admval=-1
        $field='MAX_DAYQ_TIME:'
endif
if ($1 = 'maxnighttime') then
        $admval=-1
        $field='MAX_NIGHTQ_TIME:'
endif

if ($field='NONE') then
   if ($#<2) then return else return(0) endif
endif

$s1='' $s2='' $ret=0
if ($filetype='ADMIN') then
   readfile($admin,'$s1','$s2',$field,'local'):$ret
else
   readfile($admin,'$s1','$s2','cppref_'+$field,'local'):$ret
endif
if ($ret>0) then
    if (typeof('$admval')) then
    	string2array($s2[$ret]):$admval
    	array2string($admval):$admval
    else
	substr($s2[$ret],1):$admval
    endif
elseif ($# > 1) then
    return(0)
endif
if ($# < 2) then return($admval) else return(1,$admval) endif
