"macro getmacropath"
"  A generic macro to return macro path based on exists"

	is_postvj22b:$newexists

          $macpath='' $ret=0
		"The following assumes that exists returns a 2nd value"
          exists($1,'maclib'):$ret,$macpath
	  if ($newexists=0) then
            if ($ret=1) then
                $macpath=userdir+'/maclib/'+$1
            elseif ($ret=2) then
                $macpath=maclibpath+'/'+$1
            elseif ($ret=3) then
                $macpath=sysmaclibpath+'/'+$1
            elseif ($ret=4) then
                $macpath=systemdir+'/maclib/'+$1
	    else
		$macpath=''
            endif
	  endif
	  return($ret,$macpath)
