"macro getprobesolids1d"

getProbePath:$e2,$probefile
if ($e2<0.5) then
   write('error', 'Probefile is missing from probe directory')
   abort
endif

getparam('gradient','Probe'):width
getparam('gcal','Probe'):curve
getparam('lkmap','Probe'):vacpflag  
getparam('H1map','Probe'):chnlflag 
getparam('hsmap','Probe'):cntct 

if ((tn = 'H1') or (tn = 'F19')) then 
   getparam('tpwr',tn):tpwr  
   getparam('pplvl',tn):tpwrm
   getparam('pp',tn):pwx  
else
   getparam('tpwr',tn):tpwr  
   getparam('pwxlvl',tn):tpwrm
   getparam('pwx',tn):pwx
endif

if ((dn = 'H1') or (dn = 'F19')) then
   getparam('tpwr',dn):dpwr
   getparam('pplvl',dn):dpwrm
   getparam('pp',dn):pw
   getparam('tpwr_cf',dn):crossp
   getparam('pw90',dn):dipolr   
   getparam('dmm',dn):dmm
   getparam('dseq',dn):dseq
   getparam('dres',dn):dres
   getparam('dmf',dn):dmf 
endif 


 
