"macro go_gHSQCAD_PS"
if (dn = 'C13') and (mult > 1) then
  setref(dn):$rfl,$rfp,$reffrq
  $center=(dof+$rfp-$rfl)/$reffrq
  mkpar('delay','tauC',0)
  setlimit('tauC',8190,-8190,1.25e-8)
  tauC = 0.0007*(90-$center)/90
   if (tauC < 0) then
      tauC = (trunc((tauC*1e6)-0.5))/1e6
   else
      tauC = (trunc((tauC*1e6)+0.5))/1e6
   endif
   if (tauC < -1.0*pwx180r/1e6) or (tauC > pwx180r/1e6) then
      write('error','tauC exceeds the length of pwx180r. aborted')
      abort
   endif
endif

// Be sure that npoints is an integer multiple of np
$cycles=trunc((np/npoints)+0.5)
np=npoints*$cycles
fn=np
