"macro homhom3D"
IF ($1 = 'setup') THEN

	"The following are REQUIRED modules for homo2D"
  $reqmodules='presat wet gradient cpmg'
  $reqmodules=$reqmodules+' par2D par3D homo2D'
  module('combine',$reqmodules,newmodules):newmodules
  module($1)

return
"**********************************************"
ELSEIF ($1 = 'acquisition') THEN
"Acquisition parameters"

homo2D('acquisition')
resource2='sfrq'

	"It is assumed that the gradient coherence "
	"  selection is for the hetero pathway"
	"  May be reset by pslabel_setup macro"
d3=0
ni=64 ni2=64 at=0.05
if (np > 1024) then np=1024 endif
sw=sw sw1=sw sw2=sw
phase2=1,2 	
	"If needed, phase2 will be reset by rtx or pslabel_setup macro"

        "**************************************************"
        "   Module specific parameter setup   "
if (apptype = $0) then module($1) endif
        "**************************************************"

"**********************************************"
ELSEIF ($1 = 'process') THEN
"Processing parameters"

homo2D('process')
        "**************************************************"
        "   Module specific parameter setup   "
if (apptype = $0) then module($1) endif
        "**************************************************"
    module('add','parlp parlp1 parlp2','basic')

refsource2='sfrq'
f2coef='1 0 0 0 0 0 -1 0'
	"f2coef will be, if needed, reset by rtx or pslabel_setup macro"
fn=512 fn1=128 fn2=128
ph ph1 ph2
	"The following is needed because ni was reset"
setLP1
setLP2
gaussian

"**********************************************"
ELSEIF ($1 = 'display') THEN
"Display parameters"

homo2D('display')
        "**************************************************"
        "   Module specific parameter setup   "
if (apptype = $0) then module($1) endif
        "**************************************************"

axis='ppp'
full
rp2=0 lp2=0
rfl2=rfl rfp2=rfp
wp2=wp sp2=sp 

ENDIF
"**********************************************"

