"macro inadqt"
"*********************************************************"
" inadqt - convert parameter set to Inadequate experiment "
"*********************************************************"
par2D
psgset('inadqt','jcc','dg','ap','dgs','d1','ss','phase','array')
psgset('inadqt','ni','sw1')
np=sw*(2048/(150*sfrq))  ai  ph
set2D
gf1=gf1*sw1/(ni-1)
sw1=2*sw  fn1=sw1/40  ni=fn1/4
gf1=gf1*(ni-1)/sw1
getparam('tpwr','C13'):tpwr
getparam('pw90','C13'):pw90
pw=pw90  nt=nt/1024
if (nt = 0) then nt=1 endif
nt=256*nt  axis='ph'  rp1=0  lp1=0  rp=rp+90
rfp1=2*rfp  rfl1=2*rfl  sp1=rfp1-rfl1  wp1=sw1
gain='y'  il='n'  in='n'  bs='n'
man('inadqt')
