"macro loginCPprefs"
bgmode_is:$bgmod
if ((auto<>'y') and
    ($bgmod=0)) then
  Gmaplist:$dum
  traydisplay='y'
  if ((appmode='walkup') and
    (traymax<>1)) then
        $wkuplogin='none'
        getadminfo('walkuplogin'):$wkuplogin
        if ($wkuplogin<>'none') then
                walkupQ('logout')
	endif
	if ($wkuplogin='newsample') then
	  	newsample
	elseif ($wkuplogin='showtray') then
                if (system='datastation') and (globalenter<>'') then
                        showtray('enter')
                elseif (system='spectrometer') and (autodir<>'') then
                        showtray('auto') SQDisplay('tray')
                endif
	elseif ($wkuplogin='closetray') then
		showtray('close')
	endif
  endif
endif

