// Chempacker macro

   $iswave=0
   shell('(ls -1 '+systemdir+'/wavelib/*/'+selwavePS+' | wc -l)'):$iswave
   if ($iswave=0) then
      getfilepath(pslabel,'parlib'):$parex,$parpath
      if ($parex) then
        rtv($parpath,'selwavePS'):selwavePS
        if (selwavePS='') then selwavePS='rsnob' endif
        shell('(ls -1 '+systemdir+'/wavelib/*/'+selwavePS+' | wc -l)'):$iswave
      endif
   endif
   if ($iswave=0) then selwavePS='rsnob' endif
   if (selshapePS=selwavePS) then
        assignshapename(pslabel):selshapePS
   endif
   opx(selshapePS+'.RF')
   putwave(selwavePS,selbwPS)
   cpx(pw90*tpwr_cf,tpwr):$dum
   pbox_pwr(selshapePS+'.RF'):selpwrPS
   pbox_pw(selshapePS+'.RF'):selpwPS

