"macro mkfirstexpWQacq"

$explist=''
$macdir=archivedir+'/'+sample+'/dirinfo/macdir'
cpexplist('next',$macdir):$explist
$explist=$explist[1]

if ($explist<>'') then
      $firstacqpar=$macdir+'/'+$explist+'acqpars'
//      $firstWQacqpar=$macdir+'/'+$explist+'_walkupQacqpars'
      $firstWQacqpar=$macdir+'/firstNode_walkupQacqpars'
      write('reset',$firstWQacqpar)
      exists($firstacqpar,'file'):$filex
      if $filex then
        $list=''
        module('arraylist','cpQdefaults'):$list
        fread('','usertree')
        fread($firstacqpar,'usertree')
        writeparam($firstWQacqpar,'$list','usertree')
        fread('','usertree')
      endif
endif
