"macro mmpars"
" global parameters. should be called in bootup "

exists('mcoils','parameter','global'):$e
if (not $e) then
    create('mcoils','real','global')
    mcoils=1
endif
setgroup('mcoils','processing','global')
setprotect('mcoils','set',65808,'global')

exists('mshift','parameter','global'):$e
if (not $e) then
    create('mshift','real','global')
    mshift=0
endif
setgroup('mshift','processing','global')
setprotect('mshift','set',65808,'global')

exists('moriginx','parameter','global'):$e
if (not $e) then
    create('moriginx','real','global')
    moriginx=0
endif
setgroup('moriginx','processing','global')
setprotect('moriginx','set',65808,'global')

exists('moriginy','parameter','global'):$e
if (not $e) then
    create('moriginy','real','global')
    moriginy=0
endif
setgroup('moriginy','processing','global')
setprotect('moriginy','set',65808,'global')

exists('moriginz','parameter','global'):$e
if (not $e) then
    create('moriginz','real','global')
    moriginz=0
endif
setgroup('moriginz','processing','global')
setprotect('moriginz','set',65808,'global')

"mgradient = 1 if gradient coils are shared "
exists('mgradient','parameter','global'):$e
if (not $e) then
    create('mgradient','real','global')
    mgradient=1
endif
setgroup('mgradient','processing','global')
setprotect('mgradient','set',65808,'global')

"mshowoffset = 0 show offset to magnet center "
"mshowoffset = 1 show offset to coil center "
exists('mshowoffset','parameter','global'):$e
if (not $e) then
    create('mshowoffset','real','global')
    mshowoffset=0
endif
setgroup('mshowoffset','processing','global')

"mselect = 0 to show scout of all channels"
"mselect = 1, 2, 3, 4 to show scout of channel 1...4"
exists('mselect','parameter','global'):$e
if (not $e) then
    create('mselect','string','global')
    mselect='all'
endif
setgroup('mselect','processing','global')

"mshowoverlap = 1 to show prescription of other coils "
"mshowoverlap = 0 not to show prescription of other coils "
exists('mshowoverlap','parameter','global'):$e
if (not $e) then
    create('mshowoverlap','real','global')
    mshowoverlap=1
endif
setgroup('mshowoverlap','processing','global')
