"macro nactivercvrs"
" ******************************************************
" Returns the number of active receivers according to the 'rcvrs' parameter.
" 'rcvrs' parameter is something like 'yyny'--upper or lower case.
" ******************************************************

$nactive = 1
exists('rcvrs','parameter'):$isrcvrs
if ($isrcvrs) then
    length(rcvrs):$numrcvrs
    $nactive=0
    $ifon=''
    $i=1
    while ($i <= $numrcvrs) do
        substr(rcvrs,$i,1):$ifon
        if ($ifon = 'y') or ($ifon = 'Y') then
            $nactive = $nactive + 1
        endif
        $i = $i + 1
    endwhile
endif
return($nactive)
