"macro pboxpar"
" ************************************************************* "
" ***                       pboxpar                         *** "
" ***         add Pbox parameter to Pbox.inp file           *** "
" ***                    Eriks Kupce                        *** "
" ***                 Pbox 5.2 01/08/96                     *** "
" ************************************************************* "
" usage : pboxpar(name,value<,units>)                           "

$filepath = userdir+'/shapelib/Pbox.inp'
$val = ''

if $#<1 then 
  write('error','Usage : pboxpar(name,value<,units>)')
  return
endif

if not typeof('$1') then 
  write('error','Usage : pboxpar(name,value<,units>)')
  return
endif

if $#<2 then
  input('value : '):$val
else 
  if not typeof('$2') then 
    format($2,3,6):$val 
  else
    $val=$2 
  endif
endif

if ($val = '') or ($val = ' ') then
  write('error','Usage : pboxpar(name,value<,units>)')
  return
endif

if $#>2 then
  if not typeof('$3') then 
    write('error','Usage : pboxpar(name, value<, units>)')
    return
  else
    write('file',$filepath,' %10s        = %s%s', $1, $val, $3) 
  endif
else
    write('file',$filepath,' %10s        = %s', $1, $val) 
endif


