"macro planpars"
" current parameters. should be called in fixpar "

exists('mpro','parameter'):$e
if (not $e) then
    create('mpro','real')
endif
setprotect('mpro','on',256,'current')

exists('mppe','parameter'):$e
if (not $e) then
    create('mppe','real')
endif
setprotect('mppe','on',256,'current')

exists('mpss','parameter'):$e
if($e > 0.5) then
   if(typeof('mpss') > 0.5) then
      destroy('mpss')
      $e = 0
   endif
endif
if ($e < 0.5) then
    create('mpss','real')
endif
setprotect('mpss','on',256,'current')

exists('mtheta','parameter'):$e
if (not $e) then
    create('mtheta','string')
endif
setgroup('mtheta','display')

exists('mpsi','parameter'):$e
if (not $e) then
    create('mpsi','string')
endif
setgroup('mpsi','display')

exists('mphi','parameter'):$e
if (not $e) then
    create('mphi','string')
endif
setgroup('mphi','display')

exists('mthk','parameter'):$e
if (not $e) then
    create('mthk','real')
endif
setgroup('mthk','display')

exists('mlro','parameter'):$e
if (not $e) then
    create('mlro','real')
endif
setgroup('mlro','display')

exists('mlpe','parameter'):$e
if (not $e) then
    create('mlpe','real')
endif
setgroup('mlpe','display')

exists('mlpe2','parameter'):$e
if (not $e) then
    create('mlpe2','real')
endif
setgroup('mlpe2','display')

$i=0
while($i < mcoils) do

    $i = $i + 1
    mlpe2[$i]=0
    mlpe[$i]=0
    mlro[$i]=0
    mthk[$i]=0
    mphi[$i]=''
    mpsi[$i]=''
    mtheta[$i]=''
    mpss[$i]=0
    mppe[$i]=0
    mpro[$i]=0

endwhile

"mcoil is coil D of active scout "
exists('mcoil','parameter'):$e
if (not $e) then
    create('mcoil','real')
    mcoil=1
endif
setgroup('mcoil','display')

"mstack is ID of active stack (overlay) "
exists('mstack','parameter'):$e
if (not $e) then
    create('mstack','real')
    mstack=0
endif
setgroup('mstack','display')
