"macro plotHT"
" plotHT - process and plot routines for autoHT "
" Eriks Kupce, Varian R&D, Oxford, 2009"

if($1='inset') then
  wft(`nods`, 1) dc vp=0.8*wc2max wc=0.25*wcmax sc=0.74*wcmax vsadj(wc2max/4) dsshn(1) 
elseif($1='2D') then
  vp=10 f sc=10 wc=wcmax-20 sc2=0 wc2=wc2max-10 trace='f2'
  if(HTplot='d') then
    autoscaleHT
    if(HTn=4) or (HTn=5) then 
      dconi('dpcon',20,1.4) 
    else
      dconi('dpcon','pos',20,1.4) 
    endif
  elseif(HTplot='y') then
    autoscaleHT
    wc=0.7*wcmax sc=0 pcon('pos',20,1.4) 
    if(HTn=4) or (HTn=5) or (HTn=8) then 
      pcon('neg',20,1.4) 
    endif
    pap
    page
    vp=10 f sc=10 wc=wcmax-20 sc2=0 wc2=wc2max-10
  endif
endif
