"macro ppcal"
" ********************************************* "
" ppcal - set up a decoupler pulse calibration  "
" ********************************************* "

psgset('ppcal','dg','ap','dgs','dm', 'pp', 'pplvl')
dp='y'
if (waltz) then	                      "set decoupling modes"
   dmm='wcw'
else
   dmm='fcf'
endif

nt=1  ss=1  gain='y'
pw=pw90  p1=2*pw90
d1=10  d2=1/(2*142)                   "set key acquisition parameters"

pp=0,10,20,30,40,50,60,70,80  ai      "create pp array"

dof=dof-2.5*dfrq                      "move decoupler from 5 to 2.5 ppm"
wexp='wft dssh'  vp=wc2max/2
rp=rp+180
man('ppcal')
