"macro quantpars"
"quantpars - called by display of Quantitation panel "

"Check for, and create if missing, the parameters necessary for quantitation of 1D spectra"

exists('probe_','parameter'):$exprobe
if not $exprobe then
        create('probe_','string')
        probe_=probe
endif

exists('concC','parameter'):$ex_concC
if not $ex_concC then
	create('concC')
endif
exists('intC','parameter'):$ex_intC
if not $ex_intC then
	create('intC')
endif
exists('startintC','parameter'):$ex_startintC
if not $ex_startintC then
	create('startintC')
endif
exists('endintC','parameter'):$ex_endintC
if not $ex_endintC then
	create('endintC')
endif
exists('stoichC','parameter'):$ex_stoichC
if not $ex_stoichC then
	create('stoichC')
endif
exists('concA1','parameter'):$ex_concA1
if not $ex_concA1 then
	create('concA1')
endif
exists('intA1','parameter'):$ex_intA1
if not $ex_intA1 then
	create('intA1')
endif
exists('relintA1','parameter'):$ex_relintA1
if not $ex_relintA1 then
	create('relintA1')
endif
exists('percentA1','parameter'):$ex_percentA1
if not $ex_percentA1 then
	create('percentA1')
endif
exists('startintA1','parameter'):$ex_startintA1
if not $ex_startintA1 then
	create('startintA1')
endif
exists('endintA1','parameter'):$ex_endintA1
if not $ex_endintA1 then
	create('endintA1')
endif
exists('stoichA1','parameter'):$ex_stoichA1
if not $ex_stoichA1 then
	create('stoichA1')
endif
exists('ignoreA1','parameter'):$ex_ignoreA1
if not $ex_ignoreA1 then
	create('ignoreA1','flag')
	ignoreA1='n'
endif
exists('concA2','parameter'):$ex_concA2
if not $ex_concA2 then
	create('concA2')
endif
exists('intA2','parameter'):$ex_intA2
if not $ex_intA2 then
	create('intA2')
endif
exists('relintA2','parameter'):$ex_relintA2
if not $ex_relintA2 then
	create('relintA2')
endif
exists('percentA2','parameter'):$ex_percentA2
if not $ex_percentA2 then
	create('percentA2')
endif
exists('startintA2','parameter'):$ex_startintA2
if not $ex_startintA2 then
	create('startintA2')
endif
exists('endintA2','parameter'):$ex_endintA2
if not $ex_endintA2 then
	create('endintA2')
endif
exists('stoichA2','parameter'):$ex_stoichA2
if not $ex_stoichA2 then
	create('stoichA2')
endif
exists('ignoreA2','parameter'):$ex_ignoreA2
if not $ex_ignoreA2 then
	create('ignoreA2','flag')
	ignoreA2='n'
endif
exists('concA3','parameter'):$ex_concA3
if not $ex_concA3 then
	create('concA3')
endif
exists('intA3','parameter'):$ex_intA3
if not $ex_intA3 then
	create('intA3')
endif
exists('relintA3','parameter'):$ex_relintA3
if not $ex_relintA3 then
	create('relintA3')
endif
exists('percentA3','parameter'):$ex_percentA3
if not $ex_percentA3 then
	create('percentA3')
endif
exists('startintA3','parameter'):$ex_startintA3
if not $ex_startintA3 then
	create('startintA3')
endif
exists('endintA3','parameter'):$ex_endintA3
if not $ex_endintA3 then
	create('endintA3')
endif
exists('stoichA3','parameter'):$ex_stoichA3
if not $ex_stoichA3 then
	create('stoichA3')
endif
exists('ignoreA3','parameter'):$ex_ignoreA3
if not $ex_ignoreA3 then
	create('ignoreA3','flag')
	ignoreA3='n'
endif
exists('concA4','parameter'):$ex_concA4
if not $ex_concA4 then
	create('concA4')
endif
exists('intA4','parameter'):$ex_intA4
if not $ex_intA4 then
	create('intA4')
endif
exists('relintA4','parameter'):$ex_relintA4
if not $ex_relintA4 then
	create('relintA4')
endif
exists('percentA4','parameter'):$ex_percentA4
if not $ex_percentA4 then
	create('percentA4')
endif
exists('startintA4','parameter'):$ex_startintA4
if not $ex_startintA4 then
	create('startintA4')
endif
exists('endintA4','parameter'):$ex_endintA4
if not $ex_endintA4 then
	create('endintA4')
endif
exists('stoichA4','parameter'):$ex_stoichA4
if not $ex_stoichA4 then
	create('stoichA4')
endif
exists('ignoreA4','parameter'):$ex_ignoreA4
if not $ex_ignoreA4 then
	create('ignoreA4','flag')
	ignoreA4='n'
endif
exists('concA5','parameter'):$ex_concA5
if not $ex_concA5 then
	create('concA5')
endif
exists('intA5','parameter'):$ex_intA5
if not $ex_intA5 then
	create('intA5')
endif
exists('relintA5','parameter'):$ex_relintA5
if not $ex_relintA5 then
	create('relintA5')
endif
exists('percentA5','parameter'):$ex_percentA5
if not $ex_percentA5 then
	create('percentA5')
endif
exists('startintA5','parameter'):$ex_startintA5
if not $ex_startintA5 then
	create('startintA5')
endif
exists('endintA5','parameter'):$ex_endintA5
if not $ex_endintA5 then
	create('endintA5')
endif
exists('stoichA5','parameter'):$ex_stoichA5
if not $ex_stoichA5 then
	create('stoichA5')
endif
exists('ignoreA5','parameter'):$ex_ignoreA5
if not $ex_ignoreA5 then
	create('ignoreA5','flag')
	ignoreA5='n'
endif
exists('quantsavefile','parameter'):$ex_quantsavefile
if not $ex_quantsavefile then
	create('quantsavefile','string')
	quantsavefile='Quantitate'
endif
exists('quantflag','parameter'):$ex_quantflag
if not $ex_quantflag then
	create('quantflag','string')
	quantflag='c'
endif
exists('stoichflag','parameter'):$ex_stoichflag
if not $ex_stoichflag then
	create('stoichflag','string')
	stoichflag='y'
endif

if $#>0 then
	if $1='initA1' then
		stoichA1=0 intA1=0 startintA1=0 endintA1=0 concA1=0 relintA1=0 percentA1=0
	elseif $1='initA2' then
		stoichA2=0 intA2=0 startintA2=0 endintA2=0 concA2=0 relintA2=0 percentA2=0
	elseif $1='initA3' then
		stoichA3=0 intA3=0 startintA3=0 endintA3=0 concA3=0 relintA3=0 percentA3=0
	elseif $1='initA4' then
		stoichA4=0 intA4=0 startintA4=0 endintA4=0 concA4=0 relintA4=0 percentA4=0
	elseif $1='initA5' then
		stoichA5=0 intA5=0 startintA5=0 endintA5=0 concA5=0 relintA5=0 percentA1=0
	endif
endif

