ln -s addarray spaddarray
ln -s autocalibration AutoTest_calibration
ln -s autocalibration AutoTestN15_calibration
ln -s autocalibration Benzamide_calibration
ln -s autocalibration CH3I_calibration
ln -s autocalibration ch3iP_calibration
ln -s autocalibration F19_calibration
ln -s autocalibration LKgmapz0_calibration
ln -s autocalibration P31_calibration
ln -s bootup sysbootup
ln -s cptmp svtmp
ln -s cft2da cft1da
ln -s dmfadj dmf2adj
ln -s dmfadj dmf3adj
ln -s dmfadj dmf4adj
ln -s dpiv dpivn
ln -s dpiv piv
ln -s dpiv pivn
ln -s dssl pssl
ln -s fixpar sysfixpar
ln -s ft1da ft2da
ln -s ft1da wft1da
ln -s ft1da wft2da
ln -s getautoinfo getenterinfo
ln -s go au
ln -s go ga
ln -s hightemp plhightemp
ln -s hightemp lowtemp
ln -s hightemp pllowtemp
ln -s isadj isadj2
ln -s jexp1 jexp2
ln -s jexp1 jexp3
ln -s jexp1 jexp4
ln -s jexp1 jexp5
ln -s jexp1 jexp6
ln -s jexp1 jexp7
ln -s jexp1 jexp8
ln -s jexp1 jexp9
ln -s moveswwater_ES moveswSTD_ES
ln -s moveswwater_ES moveswwater_WG
ln -s moveswwater_ES moveswwLOGSY_ES
ln -s night2day day2night
ln -s nuctable restorenuctable
ln -s oldapptype hcmult
ln -s oldapptype hetero2d
ln -s oldapptype homo2d
ln -s oldapptype sel1d
ln -s operightsManager operightsManagerAdm
ln -s PersonaBuilder PersonaBuilderAdm
ln -s PersonaManager PersonaManagerAdm
ln -s pi3ssb pi3ssbsq
ln -s pi4ssb pi4ssbsq
ln -s pi6ssb pi6ssbsq
ln -s piNssb piNssbsq
ln -s procsaveplot procsave
ln -s ProtocolManager ProtocolManagerAdm
ln -s protune protunegui
ln -s protune ptcal
ln -s psgset Autopsgset
ln -s QuickSubmit QuickSubmit_EditStudy
ln -s QuickSubmit QuickSubmit_submit
ln -s reff1 reff2
ln -s sda sd2a
ln -s sda sd3a
ln -s sd sd2
ln -s sd sd3
ln -s setpwx180ad setpw180ad
ln -s setrc setddrtc
ln -s setsw setsw1
ln -s setsw setsw2
ln -s svfj svllj
ln -s svfj svlsj
ln -s svfj svsj
ln -s svfj svxyj
ln -s _vch1 _vch2
ln -s _vch1 _vch3
ln -s _vch1 _vch4
ln -s _vch1 _vch5
ln -s _vch1 _vch6
ln -s _vch1 _vch7
ln -s vjeditQ submitagain
ln -s walkupQ_setup walkupQ_mimic
ln -s walkupQ_setup walkupQ_testacquire
ln -s writetrace writejxy
ln -s writetrace writexy
ln -s xmhaha_buildSQ xmhaha_dataQ
ln -s xmhaha_TrayAction copy2ClipBoard
ln -s xmhaha_TrayAction editSampleInfo
ln -s xmhaha_TrayAction ExpressSubmit
ln -s xmhaha_TrayAction pasteClipBoard
ln -s xmhaha_TrayAction showLocLog
