"macro sequencehelp"
"sequencehelp - macro to display simple text man pages in a popup"


if $#=0 then
  if appmode = 'imaging' then
    exists('protocol','parameter'):$x
    if ($x>0.5) then
      if (protocol <> '') then
        seqmanual=protocol
      else
        if pslabel <> '' then
          seqmanual=pslabel
        else
          seqmanual=seqfil
        endif
      endif
    else
      if pslabel <> '' then
        seqmanual=pslabel
      else
        seqmanual=seqfil
      endif
    endif
  else
    if pslabel <> '' then
       seqmanual=pslabel
    else
       seqmanual=seqfil
    endif
  endif
else
  seqmanual=$1
endif

vnmrjcmd('seqhelp', seqmanual)




