/* macro setplLogo */
// Set and plot the logo in spectrum
// Called by catPlot
// Instructions
// Have the logo in GIF format and name it as mylogo.gif
// Place the logo in /vnmr/iconlib
// 2018_07_05 | Hari, N.; SASTRA University

exists('plmylogo','parameter','global'):$el
exists('plmylogox','parameter','global'):$ex
exists('plmylogoy','parameter','global'):$ey

if not $el then
 create('plmylogo','string','global')
endif

if not $ex then
 create('plmylogox','real','global')
 plmylogox=wcmax-15
endif

if not $ey then
 create('plmylogoy','real','global')
 plmylogoy=wc2max-5
endif

if plmylogo='' then
 plmylogo='mylogo.gif'
 plmylogox=wcmax-15
 plmylogoy=wc2max-5
endif

exists(plmylogo,'iconlib'):$i,$path
if ($i) then
  imagefile('plot',$path,plmylogox,plmylogoy,30,20)
endif
