"macro svpdp"
//  A return argument suppress messages

$dum='' $devnull=''
is_submitmode:$submit
if $submit then return endif

if ($#<1) then $1='log' endif
if ($1='nolog') then
    exists('sampling','parameter'):$samplingex
    if $samplingex then
	if sampling='sparse' then return endif
    endif
endif

isnewexp:$isnew
canWrite(file):$e
// if (auto='y') then $isnew=1 endif
if (($isnew or $e<0.5) and ($1<>'nolog') and ($##<1)) then
  write('line3','Cannot save parameters to file \'%s\'',file)
  return
endif

if ((studyowner<>operator) and 
    (operator<>owner) and 
    ($1<>'nolog') and 
    (auto<>'y')) then
    $ok2edit=1
    operights('editallopstudies'):$ok2edit
    if ($ok2edit<0.5) then
	write('error','Study owned by %s.  %s does not have rights to update',studyowner,operator)
	return
    endif
endif

isFDAdata:$p11
if($p11>0 and $isnew=0 and procdim>0) then
  // save changes with svr command
  CPdndfid_process
  saveREC
endif

$archsamp='' $name=''
substr(file,'dirname'):$archsamp,$name,$ext

exists($archsamp+'/'+$name+'.fid','directory'):$fidex
if ($fidex=0) then return endif

$listparam='' $lex=0
getbinpath('listparam'):$lex,$listparam
if ($lex=0) then return endif

pwd:$curdir
cd($archsamp):$dum

flush
$file=file
substr(curexp,'basename'):$tmpdir
string2array(vnmraddr):$vnmraddr
array2strsv($vnmraddr,'_'):$tmpdir
$tmpdir=userdir+'/persistence/'+$0+'_'+$tmpdir
exists($tmpdir,'file'):$tmpex
if $tmpex then rm('-rf',$tmpdir):$dum endif
mkdir('-p',$tmpdir):$dum

svf($tmpdir+'/'+$name,'nodb','force'):$dum

file=$file
write('reset',$tmpdir+'/diffpars')
write('reset',$tmpdir+'/procpars')
write('reset',$tmpdir+'/disppars')
write('reset',$tmpdir+'/newpars')
write('reset',$tmpdir+'/newpars2')
write('reset',$tmpdir+'/newpars3')

	"The there are too many parameters different,then -list option may cause problem"
	"   So, do it 10 parameters at a time"

$parlist='' $s2='' $proclist='' $displist=''
shell('diffparams '+$tmpdir+'/'+$name+'.fid '+$name+'.fid > '+$tmpdir+'/diffpars'):$devnull
shell('diffparams -active '+$tmpdir+'/'+$name+'.fid '+$name+'.fid >> '+$tmpdir+'/diffpars'):$devnull

shell('(cat '+$tmpdir+'/diffpars | grep -vw "undefined" | grep -v "^file" > '+$tmpdir+'/diffpars2)'):$devnull
rename($tmpdir+'/diffpars2',$tmpdir+'/diffpars'):$dum

shell('(cat '+$tmpdir+'/diffpars | grep -v "^time_" > '+$tmpdir+'/diffpars2)'):$devnull
rename($tmpdir+'/diffpars2',$tmpdir+'/diffpars'):$dum

shell('(cat '+$tmpdir+'/diffpars | grep -vw "inactive" > '+$tmpdir+'/diffpars2)'):$devnull
rename($tmpdir+'/diffpars2',$tmpdir+'/diffpars'):$dum

readfile($tmpdir+'/diffpars','$parlist','$s2','','local')
rm('-f',$tmpdir+'/diffpars'):$dum 

shell('('+$listparam+' '+$name+'.fid/procpar processing | sed -e \'s|\\[| |g\' > '+$tmpdir+'/procpars)'):$devnull
readfile($tmpdir+'/procpars','$proclist','$s2','','local')
rm('-f',$tmpdir+'/procpars'):$dum

shell('('+$listparam+' '+$name+'.fid/procpar display | sed -e \'s|\\[| |g\' > '+$tmpdir+'/disppars)'):$devnull
readfile($tmpdir+'/disppars','$displist','$s2','','local')
rm('-f',$tmpdir+'/disppars'):$dum

$procdisplist=$proclist,$displist
        "Exclude any specific parameters - more parameters can be added"
teststr('$parlist','text_string','local'):$istxt
$exclude='text_string','apptype','execprocess','execplot','f1coef'
if ($parlist[1]<>'') then
   $parlisttotal=size('$parlist')
   $i=1 $i2=1 $parlist2=''
   repeat
	$ispd=0
	teststr('$procdisplist',$parlist[$i],'local'):$ispd
	teststr('$exclude',$parlist[$i],'local'):$isex
	if ($ispd>0) and not $isex then $parlist2[$i2]=$parlist[$i] $i2=$i2+1 endif
	$i=$i+1
   until $i>$parlisttotal
   $parlist=$parlist2
endif
"*************************************************************************"
if ($parlist[1]<>'') then
   writeparam($name+'.fid/procpar','$parlist','current','add')
   writeparam($tmpdir+'/newpars3','$parlist','current','add')
   if ($##<1) then
   	write('line3','%s is updated.',$archsamp+'/'+$name+'.fid/procpar')
   endif

	$parlist3=''
	shell('diffparams -list -active '+$tmpdir+'/'+$name+'.fid '+$name+'.fid'):$parlist3
	string2array($parlist3):$parlist3
	write('file',$tmpdir+'/newpars','Parameter values before update:')
	shell('diffparams '+$tmpdir+'/newpars3 '+$tmpdir+'/newpars2 | sed -e \'s|undefined||g\' >> '+$tmpdir+'/newpars'):$devnull
	$parlist4='' $s2=''
	readfile($tmpdir+'/newpars','$parlist4','$s2','','local'):$ntot
	if ($ntot>0) and ($parlist3[1]<>'') then
	   $i=1
	   repeat
		teststr('$parlist3',$parlist4[$i],'local'):$ret
		if ($ret) then
		    on($parlist4[$i]):$ison
		    if ($ison) then
			write('file',$tmpdir+'/newpars','%s\t\tinactive',$parlist4[$i])
		    else
			write('file',$tmpdir+'/newpars','%s\t\tactive',$parlist4[$i])
		    endif
		endif
		$i=$i+1
	   until $i > $ntot
	endif

else
   if ($## < 1) then
        write('line3','%s is up to date.',$archsamp+'/'+$name+'.fid/procpar')
   endif
endif

if ($istxt) then
	write('file',$tmpdir+'/newpars','Text changed from:')
	shell('(cat '+$name+'.fid/text >> '+$tmpdir+'/newpars)'):$devnull
        puttxt($name+'.fid')
endif
if ($parlist[1]<>'') or ($istxt) then
    if ($1<>'nolog') then
        cplog($name,'parud',$tmpdir+'/newpars')
    endif
    isFDAsystem:$p11
    if($p11) then
      samplemirror
    else
      $mirror='no'
      getadminfo('datamirror'):$mirror
      exists('adir2tmplt','parameter'):$ad2ex
      if ($ad2ex) then 
        if (adir2tmplt='') then $ad2ex=0 endif
      endif
      if ($ad2ex) and ($mirror='yes') then
	samplemirror
      endif
    endif
endif

rm ('-rf',$tmpdir):$dum
//rm('-rf','$tmpdir/'+$name+'.fid'):$dum
//rm('-f','$tmpdir/newpars'):$dum
//rm('-f','$tmpdir/newpars1'):$dum
//rm('-f','$tmpdir/newpars2'):$dum
//rm('-f','$tmpdir/newpars3'):$dum

cd($curdir):$dum

