"macro viewmacro"
/*  Display a macro.

    viewmacro<(macro)>
    E. Alvarado, U of Michigan, 02/05/10
*/

if $#>0 then
  $filename=$1
else
  write('error','%s: a macro name must by supplied',$0)
  return
endif

exists($filename, 'maclib'):$found, $pathfile
if (not $found) then
  write('error', '%s: macro %s not found',$0,$1)
  return
endif

//GTK version.
shell('zenity --title=' +$pathfile+ ' --width=800 --height=600 --text-info --filename ' +$pathfile+ ' &')

//KDE version.
//See tutorial: http://techbase.kde.org/Development/Tutorials/Shell_Scripting_with_KDE_Dialogs
//shell('kdialog --title ' +$pathfile+ ' --textbox ' +$pathfile+ ' 800 600 &')

