
CIGARAD: Improved CIGAR, adiabatic version

FEATURES

 - F1 Axial Displacement
 - Randomization of Magnetization prior to relaxation delay with G-90-G
   [selected by sspul flag]
 - Includes a 2-stage J filter and BIRD based one-bond correlation suppression
 - Introduces a Varaible J Scale for JHH skewing
 - Uniform skewing or "differential" skewing

PARAMETERS

  sspul   :  Selects magnetization randomization option
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/decode ratio
  jnxh    :  Multiple bond XH coupling constant
  j1min   :  Minimum J1xh value
  j1max   :  Maximum J1xh value
  jfilter :  Selects 2-step jfilter
  gzlvl0  :  Gradients used for echos
  gt0     :  Time for echo gradients
  gstab   :  Recovery delay
  jscaleU :  Uniform scaling factor for JHH skewing [typically 0]
  jscaleD :  Differential scaling factor for 2JHH and 3JHH
             [used to differentiate 2bond vs 3bond correlations to protonated carbons]
