
COSY: COSY with coherence selection by phase cycling

Information Conveyed: Homonuclear Coupling pathways

FEATURES

 - F1 Axial displacement Randomization of Magnetization prior to relaxation delay
   with G-90-G [selected by sspul flag]
 - Option for tip angle selection of 2nd pulse

PARAMETERS

  sspul : y - selects magnetization randomization option
  hsglvl: Homospoil gradient level (DAC units)
  hsgt	: Homospoil gradient time
  pw	: First pulse width
  cmult : Multiplier for 2nd pulse width
  d1	: Relaxation delay
  d2	: Evolution delay
  ni	: Number of t1 increments
  sw1	: Spectral width in F1 dimension (typically same as sw)
