
DEPT: distortionless enhancement by polarization transfer including quaternary carbons

REFERENCES

  Peter Bigler, POSTER, EENC 1998. Bled, Slovenia

PARAMETERS

  pp     : Proton 90 degree pulse length
  pplvl  : Power level for decoupler proton pulses
  pw     : x 90 degree pulse length
  tpwr   : Power level for transmitter x pulses
  j1xh   : X-H coupling constant (in hz)
  mult   : proton flip angle theta is mult*pp
  satdly : optional saturation delay (ca. 0.05 sec)
  q_flag : Flag for quaternary carbon selection
  nt     : (min):  multiple of 4
           (max):  multiple of 32
           (suggested): multiple of 16


For 13c spectral editing use mult = 0.5, 1.0, 1.0, 1.5:

Procedure for editing Cq/CHn: Perform two subexperiments A and B
  (setting A_flag to 'y' and 'n')
  - q_flag='y' gives antiphase quaternary carbons
    q_flag='n' gives in-phase quaternary carbons
  - Add the FIDs of A and B to get CHn;
  - Substract A from B to get Cq;
  - Do this for each "mult*pp" value
