
DQCOSY:  Double-quantum filtered COSY (phase sensitive)

Information conveyed: Homonuclear coupling pathways

FEATURES

 - F1 Axial displacement
 - Randomization of Magnetization prior to relaxation delay
   trim(x)-trim(y) - if no PFG
   G-90-G	   - with PFG
   [selected by sspul and PFGflg flags]
 - Solvent suppression during relaxation delay
   [selected by satmode flag]
		
PARAMETERS

  sspul  : y - selects magnetization randomization option
  PFGflg : y - selects G-90-G method for magnetization
	       randomization. 
  hsglvl : Homospoil gradient level (DAC units)
  hsgt	 : Homospoil gradient time
  satmode: y - selects presaturation option
  satfrq : Presaturation frequency
  satdly : Presaturation delay
  satpwr : Presaturation power
  pw	 : First and second pulse widths
  d1	 : Relaxation delay
  d2	 : Evolution delay
  phase  : 1,2 for Hypercomplex mode
  ni	 : Number of t1 increments
  sw1	 : Spectral width in F1 dimension (typically same as sw)

