
FH_gHETCOR: Gradient selected F-H / H-F HETCOR (absolute value)

PARAMETERS

  sspul   :  y - selects magnetization randomization option
  hsglvl  :  Homospoil gradient level (DAC units)
  hsgt	  :  Homospoil gradient time
  gzlvl1  :  Coherence defocusing gradient level
  gt1	  :  Gradient time for gzlvl1
  gzlvl3  :  Coherence refocusing gradient level
  gt3     :  Gradient time for gzlvl3
  gstab	  :  Recovery delay
  pw	  :  90 deg. observe pulses (chan 1)
  tpwr    :  Power level for pw (chan 1)
  pwx     :  90 deg. decoupler pulses (chan 2)
  pwxlvl  :  Power level for pwx (chan 2)
  jFH     :  Magnitude of the F-H coupling used for polarization transfer
  d1	  :  Relaxation delay
  d2	  :  Evolution delay
  satmode :  Flag for optional solvent presaturation
  satpwr  :  Saturation power level
  satfrq  :  Presaturation frequency
  satdly  :  Presaturation delay (part of d1)
  f1coef  :  1 0 0 -1 (for gradients with opposite sign)

  gzlvl3/gzlvl1 ratio = 1.06291 : 1 for F19 observe
                      = 0.94081 : 1 for 1H observe

Note: The sequence uses a dec. 180 deg. pulse in the middle
      of the evolution period to do F1 decoupling.
      F2 decoupling during acquisition is optional via dm='nny'
      but may NOT be generally recommended.
      1) As the XMTR and te DCPLR shares the same amplifier band
         the receiver and the decoupler is time shared during
         acquisition - this causes sensitivity losses (60% by default)
      2) In extended 1H and 19F coupling networks refocussing all
         possible couplings may not be possible resulting in 
         unintended signal cancellation.

