
HMBC: Heteronuclear Multiple Bond Correlation 

FEATURES
 - State-TPPI in F1
 - Randomization of Magnetization prior to relaxation delay
   trim(x)-trim(y) - if no PFG
   G-90-G	   - with PFG
   selected by sspul and PFGflg flags]
 - J-filter to suppress one-bond correlations
 - Solvent suppression during relaxation  delay
   [selected by satmode flag]
		
PARAMETERS

  sspul   :  y - selects magnetization randomization option
  PFGflg  :  y - selects G-90-G method for magnetization randomization. 
  hsglvl  :  Homospoil gradient level (DAC units)
  hsgt	  :  Homospoil gradient time
  satmode :  y - selects presaturation option during relax delay
  satfrq  :  Presaturation frequency
  satdly  :  Presaturation delay
  satpwr  :  Presaturation power
  j1xh	  :  One-bond XH coupling constant
  jnxh    :  Multiple bond XH coupling constant
  pwxlvl  :  X-nucleus pulse power
  pwx	  :  X-nucleus 90 deg pulse width
  d1	  :  Relaxation delay
  d2	  :  Evolution delay

