
HSQC: Heteronuclear Single Quantum Coherence

See the J1CHTab entry for more information.

FEATURES

 - States-TPPI detect in F1 to move axial peaks to edge.
 - Randomization of Magnetization prior to relaxation delay
 - TANGO-Gradient option to suppress C12 protons with PFG [selected by nullflg]
 - BIRD-null option to suppress C12 protons without PFG [selected by non-zero null]
 - Solvent suppression during relaxation and null delays [selected by satmode flag]
 - ZZ gradients during H-C and C-H polarization transfers
 - Multiplicity phase editing.

PARAMETERS

  mult    : 2 - selects multiplicity-editing option. Value of 0 deselects
  sspul   : y - selects magnetization randomization option
  PFGflg  : y - selects G-90-G method for magnetization randomization and ZZ gradients
            during Polarization transfers
  nullflg : y - selects TANGO-Gradient option if PFGflg=y
  null    : Bird Null delay
  hsglvl  : Homospoil gradient level (DAC units)
  hsgt    : Homospoil gradient time
  satmode : y - selects presaturation option during relax and null delays
  satfrq  : Presaturation frequency
  satdly  : Presaturation delay
  satpwr  : Presaturation power
  j1xh    : One-bond XH coupling constant
  pwxlvl  : X-nucleus pulse power
  pwx     : X-nucleus 90 deg pulse width
  d1      : Relaxation delay
  d2      : Evolution delay
