
HSQCTOCSY: Heteronuclear Single Quantum Coherence followed by MLEV17c spinlock

FEATURES

 - States-TPPI in F1
 - Randomization of Magnetization prior to relaxation delay
   trim(x)-trim(y) - if no PFG
   G-90-G	   - with PFG
   [selected by sspul and PFGflg flags]
 - TANGO-Gradient option to suppress C12 protons
   With PFG [selected by nullflg]
 - BIRD-null option to suppress C12 protons
   Without PFG [selected by non-zero null]
 - Solvent suppression during relaxation and null delays
   [selected by satmode flag]
 - ZZ - gradients during H-C and C-H polarization transfers (with PFG)
 - Option to invert direct 1H-13C correlation
	
PARAMETERS

  sspul  :  y - selects magnetization randomization option
  PFGflg :  y - selects G-90-G method for magnetization randomization. 
  nullflg:  y - selects TANGO-Gradient option if PFGflg=y
  null   :  Bird Null delay
  hsglvl :  Homospoil gradient level (DAC units)
  hsgt	 :  Homospoil gradient time
  satmode:  y - selects presaturation option during relax and null delays
  satfrq :  Presaturation frequency
  satdly :  Presaturation delay
  satpwr :  Presaturation power
  mixT	 :  TOCSY (MLEV17) spinlock mixing time
  trim	 :  Trim pulse preceeding spinlock
  mult   :  0 - all signals have same phase, 2 - invert direct H-C signals
  slpwr	 :  Spin-lock power level
  slpw	 :  90 deg pulse width for spinlock
  j1xh	 :  One-bond XH coupling constant
  pwxlvl :  X-nucleus pulse power
  pwx	 :  X-nucleus 90 deg pulse width
  d1	 :  Relaxation delay
  d2	 :  Evolution delay
