 NOESY1D_ES - DPFGSENOE experiment experiment with water suppression 
           by gradient echo.

Literature reference:
        T.L. Hwang and A.J. Shaka; JMR A112, 275-279 (1995) Excitation Sculpting
        C. Dalvit; J. Biol. NMR, 11, 437-444 (1998) Excitation Sculpting
        M.J. Trippleton and J. Keeler;
             Angew. Chem. Int. Ed. 2003, 42 3938-3941. ZQ suppression

Parameters:
        sspul       - flag for optional GRD-90-GRD steady-state sequence
        mixN        - NOESY mixing time
        Gzqfilt     - flag for optional ZQ artifact suppression
        zqfpw1      - pulse width for the ZQ filter
        zqfpwr1     - power level for the ZQ filter
        gzlvlzq1    - gradient amplitude for the ZQ filter
        zqfpat1     - shape pattern for the ZQ filter
        gzlvl1      - homospoil gradient amplitude
        gt1         - homospoil gradient duration
        gstab       - gradient stabilization delay
        flipback    - flag for an optional selective 90 flipback pulse
                                on the solvent to keep it along z all time
        flipshape   - shape of the selective pulse for flipback='y'
        flippw      - pulse width of the selective pulse for flipback='y'
        flippwr     - power level of the selective pulse for flipback='y'
        flippwrf    - fine power for flipshape by default it is 2048
                        may need optimization with fixed flippw and flippwr
        phincr1     - small angle phase shift between the hard and the
                            selective pulse for flipback='y' (1 deg. steps)
                            to be optimized for best result
        esshape     - shape file of the 180 deg. selective refocussing pulse
                        on the solvent (may be convoluted for multiple solvents)
        essoftpw    - pulse width for esshape (as given by Pbox)
        essoftpwr   - power level for esshape (as given by Pbox)        
        essoftpwrf  - fine power for esshape by default it is 2048
                        needs optimization for multiple solvent suppression only
                                with fixed esoftpw 
        esgzlvl     - gradient power for the solvent suppression echo
        esgt        - gradient duration for the solvent suppression echo
        alt_grd     - alternate gradient sign(s) in dpfgse on even transients
        lkgate_flg  - lock gating option (on during d1 off during the seq. and at) 
        selshapeA, selpwrA, selpwA, gzlvlA, gtA -
                    - shape, power, pulse, level and time for first PFG echo
        selshapeB, selpwrB, selpwB, gzlvlB, gtB -
                    - shape, power, pulse, level and time for 2nd PFG echo
        selfrq      - Selective frequency (for selective 180)
        sweeppw     - sech180 pulse width
        sweeppwr    - sech180 pulse power
        sweepshp    - sech180 pulse shape
        gzlvlC      - Gradient level during mixing
        gtC         - Gradient time during mixing

KrishK - includes purge option : Aug. 2006
PeterS - Excitation Sculpting added 2012

The water refocusing shape and the water flipback shape can be created/updated
using the "make_es_shape" and "make_es_flipshape" macros, respectively. For
multiple frequency solvent suppression the esshape file needs to be created
manually.

