********************************************************************************
 Pxsim - simulate Bloch profile for a shaped pulse (UNIX)
********************************************************************************

      Syntax: Pxspy shapefile.ext <simtime <#steps <add/sub>>>

 Description: Pxsim is used by dprofile macro to simulate Bloch profile for 
              a shaped pulse (*.RF or *.DEC).

   Arguments: Pxspy expects the name of a shape or pattern file (*.RF, *.DEC)
	      as argument. The name must include the extension. The file is
	      first looked up in the user's shapelib (~/vnmrsys/shapelib),
	      then (if not found) in the system shapelib (/vnmr/shapelib).
              Pxsim extracts the information neccessary for simulation from 
              the shape header. Only shapefiles containing this information
              can be processed.
              simtime - maximum simulation time (in sec) can be provided;
              #steps - number of steps in the profile;
              add/sub - add (a) or subtarct (s) from the previous simulation.

    Examples: Pxspy myshape.RF

    See also: E.Kupce & R.Freeman, J.Magn.Reson.(A) 105 (1993), 234.
	      E.Kupce, J.Boyd & I.Campbell,  JMR 110A (1994), 109.

     Related: dshape - display pulse shape or modulation pattern (M)
	      dshapei - display pulse shape interactively (M)
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
	      pshape - plot pulse shape or modulation pattern (M)
