************************************************************************
acqcomm  - script to start and stop the acquisition communication system
************************************************************************


acqcomm will start and stop the acquisition communication system.
It replaces the previous "su acqproc" method.
It needs to be run from a terminal window, not the OpenVnmrJ command line.

Options:

    acqcomm
       will start the acquisition communication system if
       it is not running and stop it if it is running

    acqcomm start
       will start the acqisition communication system

    acqcomm stop
       will stop the acqisition communication system

    acqcomm status
       will display whether the acqisition communication system
       is stopped or started

    acqcomm help
       will display this help message
