***************************************************************************
addprobe 	create a new probe directory and probe file(M)
***************************************************************************
Syntax:		addprobe(probename<,'system' or 'stdpar'>,<'stdpar'>)

Description: 	Probe directories are created with the name probename 
		containing a file with the same name.  Default nuclei included 
		in the probe file are 1H, 19F, 13C, 31P and 15N.  
		The information is saved in a user's vnmrsys/probes directory.  
		Optional second and thrid arguments
                may be supplied.  If the 2nd argument is the keyword 'system',
                and the user has write permission into the vnmr system
                directory probes, (typically /vnmr/probes), then a system
                level probe directory will be made.  If the 2nd argument [or 3rd
                argument with the 2nd argument being 'system'] is the keyword
                'stdpar', calibration values from the standard parameter sets
                [stdpar/H1.par, stdpar/C13.par, etc.] will be read and written
                into the probe file.   Otherwise, the probe file is 
		created with all parameters initialized to zero.
                

Related:	addnucleus

Example:	addprobe('idpfg')
		addprobe('idpfg','stdpar')
		addprobe('idpfg','system','stdpar')
