******************************************************************************
aipRQcommand('read'/'loadImage'/'load'/....) - load and display images.
******************************************************************************

Examples:

aipRQcommand('load', fullpath) - load images in a given fullpath (a directory or a fdf file). Do not display images.

aipRQcommand('load', fullpath, frameID) - load images in a given fullpath, and display images according to frameID. If fullpath is an image file, display the image in the frame specified by frameID. If there is already an image in the frame, the new image will be overlaid on existing image. If fullpath is a directory and frameID < 0, then currently displayed images will be cleared, and new images will be display starting from frame 1. If frameID > 0, then new images will be appended to currently displayed images (enough frames will be laid out to display all images).

aipRQcommand('load', fullpath, '', x, y) - same as aipRQcommand('load', fullpath, frameID), but frameID will be determined by dropping location x,y (dropping to the graphics area). This command appends images because frameID is always > 0. 

aipRQcommand('loadImage', fullpath<, frameID>) - same as aipRQcommand('load', fullpath<, frameID>), but fullpath is an image file, and images will be displayed in frame 1 if frameID is not specified.  

aipRQcommand('display',path<,frameID>) - same as aipRQcommand('load', fullpath<, frameID>), but images will be display even when frameID is not supplied.

aipRQcommand('display'<,selection<,sortOption<,layoutOption>>>) - display selected images.
selection=1,2,3,4,or 5 for "all","group","selected in RQ","selected frames", or "select...". Or selection='all','group','rq','frames', or 'images'. If selection is not given, parameter aipDisplayMode will be used.
sortOption is meaningful only if images of multiple scans are loaded. Images will be sorted by scan if sortOption=0 or 1, and sorted by slices if sortOption=2.
layoutOption = 0 to use current layout, 1 to do auto layout.

aipRQcommand('display',key<,sortOption<,layoutOption>>) - similar to aipRQcommand('display'<,selection<,sortOption<,layoutOption>>>), but images are selected by key (key=parentDir+' '+name+'0', where name can be a directory name or file name). 

aipRQcommand('displayBatch'<,'first'/'next'/'prev'/'last') - similar to aipDisplay('batch','first'/'next'/'previous'/'last'). Display current batch if the second argument is not given.

aipRQcommand('unselectDisplay') - unselect groups in RQ.

aipRQcommand('delete','all'/$path/$key) - delete image data specified by the second argument. This command does not remove images from Review Queue. 

aipRQcommand('remove','all'/$path/$key) - delete image data specified by the second argument.
This command also removes images from Review Queue. 

aipRQcommand('reload'<,selection>) - reload selected images. selection can be 1,2,3,4,5 for "all","group","selected in RQ","selected frames","select...". If selection is not supplied, parameter reconMode will be used.

aipRQcommand('read',xmlfile) - build "Review Queue" by reading a xml file (see userdir+'/persistence/RQtree3.xml' for example).

aipRQcommand('set',key,columnName,value) - set value for a RQ node specified by the key.  
aipRQcommand('get',key,columnName):value - get value for a RQ node specified by the key.  

aipRQcommand('setvalue',key,columnName,value) - similar to 'set', but will not notify UI (java code) to update.

aipRQcommand('move',key1,key2) - move node1 (key1) above node2 (key2).
aipRQcommand('copy',key1,key2) - copy node1 (key1) and insert above node2 (key2).
