******************************************************************************
aipShowCSIData(key/comboKey<,'grid'<,'num'<,'frame:n'<'slice:i'>>>>>) - display CSI spectral data in grid layout.
******************************************************************************

Argument:

key - a name given when loading the spectra. The following are special keys reserved for data already in vnmrbg memory:
  'FID' - data in vnmrbg fid buffer,
  'SPEC' - data in vnmrbg phasefile buffer,
  'BASE' - data in vnmrbg baseline buffer.
comboKey - a string to combine (add/subtract/scale) spectra. 

For examples:
key1='SPEC'
key2='spec'
comboKey1='spec1-spec2'
comboKey2='spec1*0.5'

'grid' - keyword to display grid
'3dgrid' - keyword to display 3D grid 
'num' - keyword to display index
'frame:n' - display spectra in frame n. Default is to display in first frame or frame(s) selected by mouse.
'frame:all' - display spectra in all frames.
'slice:i' - display ith slice or ith xy-plane of 3D data. Default is to display first slice (index starts from 1).

This command is implement for visualizing CSI data with the following features:

1. always in grid layout defined by fnv,fnv2,fnv3 parameters (see savefdfspec command for more info about fnv,fnv2,fnv3).

2. if base image is loaded, the position, size, orientation are properly adjusted based on the base image. Grid and data will be displayed only if CSI data intersects with the base image. The slice selection (by 'slice:n') is ignored if base image is displayed. 

3. '3dgrid' option can be used to show grid when CSI data not intersecting base image.

4. if base image is not displayed, nv,nv2 plane will be displayed, grid will occupy max area while maintaining aspect ratio defined by lpe and lpe2.

5. if ROIs of type box, oval, polygon, polyline are defined (displayed), spectral data n ROIs will be shown. But spectral data outside the ROIs will not be shown.

To enter interactive mode, use jFunc(88,1) aipSetSate(11) commands
To exit interactive mode, use jFunc(88,0) aipSetSate(1).

