******************************************************************************
aipShowSpec(key/comboKey<,'grid/vert/horiz'<,'rows:n','cols:n'<,'num'<,'frame:n'<,'sel'>>>>>) - display spectra specified by key(s), in specified layout.
******************************************************************************

aipShowSpec is an "alias" of aipShowCSIData command (or vice versa). It differs from aipShowCSIData by not imposing features specific for CSI data (see manual for aipShowCSIData), and it supports horizontal and vertical layout in addition to grid layout. It also has an option to select traces with "dsSelect" parameter.

This command requires to run aippars macro to create necessary parameters. 
To enter interactive mode, use jFunc(88,1) aipSetState(11) commands
To exit interactive mode, use jFunc(88,0) aipSetState(1).

Arguments:

key - a name given when loading the spectra. The following are special keys reserved for data already in vnmrbg memory:
  'FID' - data in vnmrbg fid buffer,
  'SPEC' - data in vnmrbg phasefile buffer,
  'BASE' - data in vnmrbg baseline buffer.
comboKey - a string to combine (add/subtract/scale) spectra.

For examples:
key1='SPEC'
key2='spec'
comboKey1='spec1-spec2'
comboKey2='spec1*0.5'

'grid' - keyword to display grid
'vert' - keyword for vertical layout
'horiz' - keyword for horizontal layout
'rows:n' - rows for grid layout
'cols:n' - columns for grid layout
'num' - keyword to display index
'frame:n' - display spectra in frame n. Default is to display in first frame or frame(s) selected by mouse.
'frame:all' - display spectra in all frames.
'sel' - to display traces specified by "dsSelect" parameter.

Examples:
aipShowSpec('SPEC','vert')
aipLoadSpec('....','spec') aipShowSpec('spec','rows:3','cols:4')
