******************************************************************************
aippars - create parameters for imaging browser.
******************************************************************************

aippars is a macro that creates global parameters used by imaging browser. 
These parameters may have different values in different viewport (parameter 
value is not shared by viewports, but is shared by all data in a viewport).
 
Parameters:

aipLayoutPolicy - 0 no effect, 
		  1 rows=array_dim, cols=slices, 
		  2 rows=slices, cols=array_dim.
	          where array_dim and slices are from fdf header. 
aipStatUserVar - user selected variable for X-axis of ROI scatterplot. 
		 Default is ''.
aipVsHistFile=''  
aipVsFunctionFile='/tmp/VjCltFunction'
aipVsFunction=''
aipWriteFmtConvert='FDF'
aipProfileLengthMsg=''
aipProfileFile=''
aipProfileMaxMsg=''
aipPointIntensityMsg=''
aipPointLabCoordsMsg=''
aipPointSeparationMsg=''
aipPointProjSeparationMsg=''
aipProfileDataCoordsStartMsg=''
aipProfileDataCoordsEndMsg=''
aipStatMinMsg=''
aipStatMaxMsg=''
aipStatAreaMsg=''
aipStatMeanMsg=''
aipStatMedianMsg=''
aipStatSdvMsg=''
aipStatVolumeMsg=''
aipStatClipped=''
aipStatGraphFile=''
aipFrameDefaultMax=3
aipVsBind=0
aipVsMode='individual'
aipZoomBind=0
aipZoomBindOnDrag=0
aipPrintScale=100
aipInfoUpdateOnMove=0
aipProfileMIP=0
aipZoomFactor=1.41421356
aipRoiMaxActiveSlaves=-1
aipRoiSelectOnCreation=1
aipStatNumBins=100
aipStatHistRangeType=0
aipStatUpdateOnMove=0
aipStatCursMin=0
aipStatCursMax=1
aipStatHistMin=0
aipStatHistMax=1
aipStatOrdinate=0
aipStatAbscissa=0
aipVsDataMin=0
aipVsDataMax=0.01
aipVsTailPercentile=0.1
aipWriteFmtBits=32
aipWriteFmtFloat=1
aipMode=1
aipMovieRate=2
aipMselect=''
aip2JExp=''
aip2CExp=''
aip2JCaret=0
aip2CCaret=0
aipProfileDataCoordsEndY=0
aipProfileDataCoordsEndX=0
enableExtractPanel=0
showObliquePlanesPanel=0
aipOrient=''
aipXYfirst
aipXZfirst
aipYZfirst
aipXYlast
aipXZlast
aipYZlast
aipXYincr
aipXZincr
aipYZincr
aipStatNumRois=0
aipPrevMode=1
aipRoiBind=1
aipRoiSelectSlavesOnCreation=1
aipRotationPolicy='neurological'
aipDisplay[1]=1 aipDisplay[2]=0 aipDisplay[3]=1
aipWindowSplit[1]=0 aipWindowSplit[2]=0
aipFrameResplitOnResize=0
aipPointDataCoordsMsg=''
aipStatUpdateCount=0
aipUserProfileFile='lineProfile'
aipUserStatGraphFile='statGraph'
aipUserStatListFile='statList'
aipInterpolationQuality=0
aipVsBindOnLoad=1
aipGrayFilename='/tmp/VjComm'
aipVsDynamicBinding=1
aipVsViewportBinding=1
aipZoomViewportBinding=1
aipProfileShowZero='y'
aipStatCursEnable=0
aipSegmentationType='r'
aipNumberFrames=0
aipNameFrames=2
aipNumberRois=0
aipPointInfoNumber=0,0
aipLineInfoNumber=0
aipAnnotation=''
aipClickedFrame=''
aipCurrentKey=''
aipMoviePath=userdir+'/data/images.mov'
aipMovieSpec='50'
aipMovieSettings[1]=1 
aipMovieSettings[2]=1 
aipMovieSettings[3]=1 
aipMovieSettings[4]=100 
aipMovieSettings[5]=100
aipAutoLayout = 1
aipDisplayMode = 1
aipMovieMode = 1
framelayoutName
framelayout
aipBatch = 1
aipBatches = 0
rqsort = 0
rqsort2 = 1
rqfull = 0
userselection=''
aipIOMode = 1
aipROIname_sel=''
aipROIname=''
aipROIpath=''
reconIn=''
reconOut=''
reconMode=1
rqImageNodes=100
aipShowFOV = 0 not to show border of FOV when image is displayed, 
	     1 show border of FOV.
aipLayerSel = 0 base image is selected, 
	      1 first overlaid image is selected, ...  
aipShowPosition = 0 not to display position, distance, or intensity 
		  1 show display position, distance or intensity 
		    according to aipShowROIOpt.
aipShowROIPos= 0 show position, distance, or intensity when cursor is over ROI.
	       1 show position, distance, or intensity statically.
aipShowROIOpt= 0 show position or distance
	       1 show mean intensity.
	       2 show sum of intensity.
aipShowCenter=  0 hide center lines
		1 show center of magnet
		2 show center of FOV
aipAxis = 0,1,1,1,1,0,1,1 (default)
   aipAxis[1] = 0 or 1, hide or show axises. 
		If 0, the rest of aipAxis values are ignored.
   aipAxis[2] = 0 or 1, hide or show axis on west
   aipAxis[3] = 0 or 1, hide or show axis on east 
   aipAxis[4] = 0 or 1, hide or show axis on south 
   aipAxis[5] = 0 or 1, hide or show axis on north 
   aipAxis[6] = 0 or 1, ticks in or out
   aipAxis[7] = 0 or 1, show or hide crosshair in Point mode. 
   aipAxis[8] = 0 use frame borders as boundary, 1 use image FOV as boundary
aipAxisGeom = 1,1,0,0,0,0,0,0,0,0 (default)
   aipAxisGeom[1] = 0.0 to 1.0, fraction of image or frame width as size of horizontal axis. 
   aipAxisGeom[2] = 0.0 to 1.0, fraction of image or frame height as size of vertical axis. 
   aipAxisGeom[3] = 0.0 to 1.0, fraction of image or frame width as X offset of west axis
   aipAxisGeom[4] = 0.0 to 1.0, fraction of image or frame height as Y offset of west axis
   aipAxisGeom[5] = 0.0 to 1.0, fraction of image or frame width as X offset of east axis
   aipAxisGeom[6] = 0.0 to 1.0, fraction of image or frame height as Y offset of east axis
   aipAxisGeom[7] = 0.0 to 1.0, fraction of image or frame width as X offset of south axis
   aipAxisGeom[8] = 0.0 to 1.0, fraction of image or frame height as Y offset of south axis
   aipAxisGeom[9] = 0.0 to 1.0, fraction of image or frame width as X offset of north axis
   aipAxisGeom[10] = 0.0 to 1.0, fraction of image or frame height as Y offset of north axis
aipAxisTransparency=0.0 total opaque for axis, and other text display, 
		    1.0 total transparent.
aipUnits='mm','cm', or 'pix' 
aipDefaultWindowSplit=1,1
aipAxisRef='logical'
planDecimal = 3

csiSpecVS - csi map scaling.
