**************************************************************************
array    allow easy entry of linearly spaced array values
**************************************************************************
Syntax:	 array<('parametername' <, #steps, start, stepsize> )>

Description: array by itself enters an interactive mode in which you
             are asked for the name of the parameter to be arrayed,
             the number of values of the parameter,  the starting
             value,  and the magnitude of the difference between
             elements in the array.  Only numeric parameters can be
             arrayed using this macro,  and all values of the array
             will satisfy the limits of the parameter.
             array('parametername') also enters an interactive mode but
             does not ask for the parameter name.  Providing all
             information (parameter name,  number of steps,  starting
             value,  and stepsize) bypasses the interactive mode
             completely.

Examples: array                    - interactively array a parameter
          array('pw')              - interactively array the 'pw' parameter
          array('tof',40,1400,-50) - set the 'tof' parameter to have 40
                                     elements with the values in the order
                                     1400, 1350, 1300, 1250, 1200, ... .
