
****************************************************************************
  banner -- display a message in large-size characters on the vnmr graphics  
            window
****************************************************************************

usage: banner('message' <,'color'> )

The banner command can display multi-line message on the vnmr graphics window.
For multi-line display, two backslashes ('\\') must be inserted between lines.
The single quotation mark ('), should be preceeded by one backslash (\').
An optional color or pen number can be supplied to banner.  The
available colors and pens are:
'red','green','blue','cyan','magenta','yellow','orange','black','white'
'cursor','integral','threshold','scale','fid','spectrum','imaginary','parameter'
'pen1','pen2','pen3','pen4','pen5','pen6','pen7','pen8'
This list includes eight symbolic color names (cursor, integral, etc). The
actual colors associated with the symbolic names may be set with the
"Display options..." tool in the Edit menu. The advantage of using the
symbolic names is that they are probably adjusted to look good with the
chosen background color. For example, using the color white for drawing
on the graphics screen may look fine with a dark background, but will be
invisible if the background is white.  Using the color 'parameter' will
probably look good for both light and dark backgrounds.  The default
color is 'parameter'.  The color option must follow the banner message.


Examples:
   	input:  banner('banner sample')
	output:        banner sample     (in 'parameter' color)

	input:  banner('banner\\sample', 'RED')
        output:           banner
                          sample         (in red color)  

	input:  banner('Don\'t Touch', 'red')
	output:       Don't Touch        (in red color)

