*********************************
*				*
*	   compressfid		*
*				*
*********************************

compressfid:	compression of double-precision VNMR FID data

       Syntax:	compressfid(<'inputFIDdir'>,outputFIDdir)		VNMR
		compressfid -i inputFIDdir -o outputFIDdir -f		UNIX
		compressfid -e exp_no -o outputFIDdir -f		UNIX

  Description:	compressfid compresses double-precision VNMR FID data
		to single-precision and updates the parameter 'dp' in
		procpar.  compressfid can be run through a macro inter-
		face in VNMR or directly at the UNIX level.

    Arguments:	inputFIDdir is an optional argument and specifies the
		double-precision FID directory which is to be compressed.
		inputFIDdir should not contain the .fid directory exten-
		sion.  If inputFIDdir is not entered, the default FID
		directory is curexp/acqfil.  outputFIDdir is a mandatory
		argument and also should not contain the .fid directory
		extension.  At the UNIX level, the -i option is used to
		specify the input FID directory; the -o option, to specify
		the output FID directory; the -e option, to specify the
		experiment which contains the input FID data; and the -f
		option, to specify that any existing directory that has
		that name outputFIDdir.fid is to be overwritten.  The
		-e option and the -i option are mutually exclusive.  Note
		that the macro interface in VNMR always overwrites any
		pre-existing directory with the name outputFIDdir.fid.

     Examples:	compressfid('/vnmr/fidlib/fid1d','testfid1d')		VNMR
		compressfid('testfid1d')				VNMR
		compressfid -e 5 -o testfid1d -f			UNIX
		compressfid -i /vnmr/fidlib/fid1d -o testfid1d -f	UNIX
