
******************************************************************************
dg	-  Display Parameter Groups (Acquisition/Processing)
dg1	-  Display Parameter Groups (Display)
dg2	-  Display Parameter Groups (3rd RF channel/3D)
dgs	-  Display Parameter Groups (Special/Automation)
dglp	-  Display Parameter Groups (Linear Prediction)
da	-  Display Acquisition parameter array(s) 
******************************************************************************

The commands "dg", "dg1", "dg2", "dgs", and "dglp" are used to display
the various groups of parameters. "dg" displays the acquisition and
1D/2D processing parameters; "dg1", the display parameters.  For systems
with a second decoupler channel, "dg2" displays the parameters associated
therewith.  "dg2" also displays parameters associated with selective 2D
processing of 3D data sets.  "dgs" displays the special and automation
parameters.  "dglp" displays the parameters associated with Linear
Prediction.

Parameters do not have to be displayed in order to be entered or changed.
The values of individual parameters can be displayed by entering the
name of the parameter followed by a question mark, e.g. by typing

  			sw?

The string parameters "dg", "dg1", "dg2" and "dgs" control the display of the
commands with the same name. They can be modified with the command 

			paramvi(paramname)

"da" without arguments will display all arrayed acquisition parameters
"da('parametername'<,'parametername'>)" will display only the specified
parameter(s).

The "dg" command can accept an argument, the name of the template parameter.
The default template is "dg".  Commands such as "dg1", "dg2",  and "dgs"
(but not "da") are actually macros which activate "dg" with the appropriate
template argument, "dg1", "dg2", or "dgs"

You can reference your own template by providing its name as the argument to
"dg".  Section 4.3 of the User Programming Manual describes the rules for
constructing a template.

The "dg" command can accept a second argument, the name of a file to write
the parameters to. The template name must be the first argument.  For example,
dg('dg','dgout') will write the dg parameters into the dgout file.
