
*****************************************************************************
 diffparam - report differences between parameter sets (UNIX)
*****************************************************************************

      Syntax: diffparam file1 file2 <parametergroup>

 Description: reports differences between VNMR parameter sets, based on the
	      output of the listparam command.

   Arguments: file1 and file2 are VNMR parameter files, like
                     $HOME/vnmrsys/exp1/procpar
                     $HOME/vnmrsys/exp1/curpar
                     $HOME/vnmrsys/global
                     /vnmr/conpar
                     xyz.fid/procpar
		file1 and file2 can also be directories (xyz.fid or xyz.par,
		or a local experiment like ~/vnmrsys/exp1); in this case
		diffpar will look for a subfile procpar in these directories.
              parametergroup is an optional argument that permits
                specifying the parameter type. By default, only acquisition
                parameters are compared. The following options exist (only
                the first two characters are relevant):
                     acquisition - compare acquisition parameters (default)
                     processing - compare processing parameters only
                     display - compare display parameters only
                     spsim - compare spin simulation parameters only
                     sample - compare sample parameters only
                     all - compare ALL parameters (output indicates group for)
                        for each parameter
                     JCAMP - compare acquisition and processing parameters in
                        JCAMP-DX compatible format. Inactive parameters are
                        suppressed.

    Examples: diffparam abc.fid xyz.fid
	      diffparam ~/vnmrsys/exp[13] processing
	      diffparam ~/vnmrsys/exp[12]/curpar

     Related: listparam - list parameters in simple format (UNIX)
	      vnmr2jcamp - create JCAMP parameters from VNMR parameters (UNIX)
