
*******************************************************************************
                                     Macro
*******************************************************************************
 fp2csv - Save peak frequencies and amplitudes to a comma-separated file
*******************************************************************************

Requirements: awk (*nix package)

      Syntax: fp2csv<('array', 'filepath')>
              
 Description: Export the peak frequencies (Hz) and amplitudes (AU) to a
              comma-separated file. 

              Before running, first pick peaks

   Arguments: 'array'
                  - Variable name to use as x-axis
                    Default: first variable listed in the array parameter
                             - If part of a joint array, fp2csv will prompt
                               for array variable on the command line.

              'filepath'
                  - File path to output .csv file location
                    Default: curexp+'/fp.csv'

    Examples: fp2csv('d1', '/tmp/myfile.csv')

              fp2csv('/home/vnmr1/peaks', 'nt')

              fp2csv('d2')

              fp2csv(userdir+'/fp.csv')

     Related: fp - Find peak heights or phases
              nll - Find line frequencies and intensities
              markll - Use 1D marks as line list

   Changelog: 2017.09.15 - Jessi A. Baughman - Created
              2024.03.04 - Jessi A. Baughman - Set default array parameter
