
gH2BCAD: Gradient selected two-bond coupling (H2BC), adiabatic version

REFERENCES
  Nyberg N.T., Duus J.O., and Sorensen O. W., JACS 127 (2005) 6154-6155.

FEATURES

 - Pure absorptive peak shape in F1
 - 3-step J-filter to suppress one-bond correlations

PARAMETERS

  sspul   :  Selects magnetization randomization option
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/decode ratio
  j1min   :  Minimum J1xh value
  j1max   :  Maximum J1xh value
  nullflg :  Selects TANGO-Gradient option for 1H-12C suppression
  BigT	  :  Constant time (~20 ms)
  dmfct   :  Set to 20000 for garp1 decoupling during BigT-d2
  dpwrct  :  Power for garp1 decoupling during BigT-d2
