
gHMBC: Gradient Selected aboslute value HMBC

FEATURES

 - F1 Axial Displacement
 - Randomization of Magnetization prior to relaxation delay with G-90-G
   [selected by sspul flag]
 - J-filter to suppress one-bond correlations
 - Solvent suppression during relaxation delay [selected by satmode flag]

PARAMETERS

  sspul   :  y - selects magnetization randomization option
  hsglvl  :  Homospoil gradient level (DAC units)
  hsgt	  :  Homospoil gradient time
  gzlvlE  :  Encoding gradient level
  gtE	  :  Encoding gradient time
  EDratio :  Encoding/Decoding gradient ratio (gyromagnetic ratio)
  gstab	  :  Recovery delay
  satmode :  y - selects presaturation option during relax delay
  satfrq  :  Presaturation frequency
  satdly  :  Presaturation delay
  satpwr  :  Presaturation power
  j1xh	  :  One-bond XH coupling constant
  jnxh    :  Multiple bond XH coupling constant
  pwxlvl  :  X-nucleus pulse power
  pwx	  :  X-nucleus 90 deg pulse width
  d1	  :  Relaxation delay
  d2	  :  Evolution delay
