
gc2h2bcme: multiplicity-edited gradient selected C2H2BC, adiabatic/BIP version
           for both nuclei

FEATURES

 - Pure absorptive peak shape in F1
 - 3-step J-filter to suppress one-bond correlations

PARAMETERS

  sspul   :  Selects magnetization randomization option
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/decode ratio
  j1min   :  Minimum J1xh value
  j1max   :  Maximum J1xh value
  nullflg :  Selects TANGO-Gradient option for 1H-12C suppression
  BigT	  :  Constant time (~20 ms)
  mult    :  Multiplicty editing (mult = 0, 2; array = 'mult,phase')
