
gc2hmbc: Gradient Selected C2HMBC, adiabatic/BIP version for both nuclei

FEATURES

 - Pure absorptive peak shape in F1
 - 2-step J-filter to suppress one-bond correlations
   [controlled by jfilter flag]
 - Includes IMPRESS option

PARAMETERS

  sspul   :  Selects magnetization randomization option
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/decode ratio
  jnxh    :  Multiple bond XH coupling constant
  j1min   :  Minimum J1xh value
  j1max   :  Maximum J1xh value
  jfilter :  Selects 2-step jfilter

  imphase :  Selects impress option
	     0 - uses pwxlvl180, pwx180, pwx180ad
	     for shape1 and shape2
	     1-4 uses imppw1,imppwr1,impshp1 for shape1
	     1 - uses imppw1,imppwr1,impshp1 for shape2 
	     2 - uses imppw2,imppwr2,impshp2 for shape2
	     3 - uses imppw3,imppwr3,impshp3 for shape2
	     4 - user imppw4,imppwr4,impshp4 for shape2
