
gc2hmbcme: Multiplicity-edited Gradient Selected C2HMBC, adiabatic/BIP version
           for both nuclei

FEATURES

 - Pure absorptive peak shape in F1
 - 2-step J-filter to suppress one-bond correlations
   [controlled by jfilter flag]

PARAMETERS

  sspul   :  Selects magnetization randomization option
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/decode ratio
  jnxh    :  Multiple bond XH coupling constant
  j1min   :  Minimum J1xh value
  j1max   :  Maximum J1xh value
  jfilter :  Selects 2-step jfilter
  mult    :  Multiplicty editing (mult = 0, 2; array = 'mult,phase')
