
gc2hsqc: Gradient Selected phase-sensitive C2HSQC BIP/Adiabatic Version for both nuclei

FEATURES

 - Multiplicity editing
 - F1 Axial Displacement

PARAMETERS

  sspul   :  Selects magnetization randomization option
  nullflg :  Selects TANGO-Gradient option
  hsglvl  :  Homospoil gradient level (DAC units)
  hsgt    :  Homospoil gradient time
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/Decode ratio
  gstab   :  Recovery delay
  j1xh    :  One-bond XH coupling constant
  mult    :  Multiplicity editing: 0 = no editing, 1 = XH only, 2 = Full editing
