
gc2hsqcse: Gradient Selected sensitivity-enhanced phase-sensitive C2HSQC BIP version

FEATURES

 - Multiplicity editing
 - F1 Axial Displacement

PARAMETERS

  sspul   :  Selects magnetization randomization option
  nullflg :  Selects TANGO-Gradient option
  hsglvl  :  Homospoil gradient level (DAC units)
  hsgt    :  Homospoil gradient time
  gzlvlE  :  Encoding Gradient level
  gtE     :  Encoding gradient time
  EDratio :  Encode/Decode ratio
  gstab   :  Recovery delay
  j1xh    :  One-bond XH coupling constant
  tau1    :  Set to 1/(4*j1xh) for optimal sensitivity for CH (1.4 for CH,
             0.7 for CH2 and CH3), or 1/(8*j1xh) for optimal sensitivity for
	     all (1.2 for CH, 1 for CH2, and 0.85 for CH3)
