getmodule
usage: getmodule('modulename'<,dirpath<,tree<,parameter>>>)<:$retvalue>
arg1 - modulename
arg2 - (optional) pathname where the module should be read from
        default is studydir/dirinfo/modules
        if arg2 is an empty string, it is set to default
        arg2='cp' is a keyword for curexp (auto='n') or autodir (auto='y')
arg3 - (optional) (read to which) tree (default is current)
arg4 - (optional) specific parameter  - in this case the value
         of the parameter is read into the tree or returned
         the calling macro, but not both.  Consequently, if a return
         argument is supplied arg3 is ignored.
