*****************************************************************
*
*	gmqcosy:  sets up a gmqcosy parameter set.
*	Syntax:	gmqcosy  (no arguments)	
*
*****************************************************************

   Description:	This macro converts a 1D-s2pul parameter set into a parameter
		set ready to run a PFG AV MQFCOSY experiment.	

  PARAMETERS:	
        gzlvl1 = gradient amplitude
 		(use 10000 for Performa II, since it is multipled by qlvl+1)
 		(use   650 for Performa I,  since it is multipled by qlvl+1)
        gt1    = gradient duration in seconds (0.001 for Performa II)
                                              (0.003 for Performa I)
        grise  = gradient rise and fall time (in seconds; 0.00001)
        qlvl   = 2 (quantum selection level for DQF COSY)
        gstab  = optional delay for stability
        phase  = 1 (selects echo N-type coherence selection; default)
               = 2 (selects antiecho P-type coherence selection)

  GRADIENT LEVELS:
					Performa II	Performa I
           for working with organic	gt1=0.003	gt1=0.009
           samples try			gzlvl1=10000    gzlvl1=650

           for working with H2O		gt1=0.008	gt1=0.024
	    samples try			gzlvl1=10000    gzlvl1=650

  PROCESSING:
        process N-type data with wft2d(1,0,0,1)
        process P-type data with wft2d(1,0,0,-1)
                   the ('t2dc') argument to wft2d may be useful
