
*******************************************************************************
                                     Macro
*******************************************************************************
 hightemp   - Process data and display temperature for ethylene glycol
              temperature calibration sample

 plhightemp - Plot processed hightemp spectrum, scale, and temperature text

 lowtemp    - Process data and display temperature for MeOH
              temperature calibration sample

 pllowtemp  - Plot processed lowtemp spectrum, scale, and temperature text

*******************************************************************************

Requirements: tempcal (Built-in OpenVnmrJ command)

      Syntax: hightemp<(arguments)><:temp,delta>
              plhightemp<(arguments)><:temp,delta>
	
              lowtemp<(arguments)><:temp,delta>
              pllowtemp<(arguments)><:temp,delta>
              
 Description: Process 1D PROTON spectrum of ethylene glycol or MeOH and report 
              the calculated temperature based on the chemical shift separation
              of the two main resonances (see tempcal).

   Arguments: Supports two auto-phasing arguments 'peakmax' and 'noph'
              'peakmax' - optimize rp to maximize the height of the largest peak
              'noph'    - do not perform automatic phasing

    Examples: hightemp('peakmax'):$temp
                  - Display processed glycol data using aph0('peakmax') and 
                    set $temp to calculated temperature
              lowtemp:$temp,$delta
                  - Display processed methanol data, set $temp to calculated 
		    temperature, and set $delta to peak delta
              plhightemp('noph')
                  - Display processed glycol data without auto-phasing and 
                    send spectrum, scale and text to the plotter

      Output: Request for variable output will suppress Line 3 output
	       temp - [REAL] : calculated temperature
	      delta - [REAL] : peak delta

     Related: tempcal - Temperature Calculation
              aph0    - Automatic Phase Zero-Order Term ("rp" only)

   Changelog: 2020.12.10 - Jessi A. Baughman - Created
              2023.03.06 - Jessi A. Baughman - Cleaned up code, added plot 
                                          support, combined high and low macros
              2023.04.14 - Jessi A. Baughman - Added prompt to check if 
                                          high/low macro choice doesn't match 
                                          experiment temp
