
*****************************************************************************
 listparam - list parameters in simple format (UNIX)
*****************************************************************************

      Syntax: listparam filename <parametergroup>

 Description: lists parameters from a VNMR paramater file in a simple
              format using one line per parameter value. One application of
              listparam is for comparison purposes, in which case one would
              typically sort the output using the 'sort' command, see below.
              listparam can also be used togenerate JCAMP-DX style parameter
              output.

   Arguments: filename is a VNMR parameter file, like
                     $HOME/vnmrsys/exp1/procpar
                     $HOME/vnmrsys/exp1/curpar
                     $HOME/vnmrsys/global
                     /vnmr/conpar
                     xyz.fid/procpar
              parametergroup is an optional argument that permits
                specifying the parameter type. By default, only acquisition
                parameters are dumped. The following options exist (only
                the first two characters are relevant):
                     acquisition - list acquisition parameters (default)
                     processing - list processing parameters only
                     display - list display parameters only
                     spsim - list spin simulation parameters only
                     sample - list sample parameters only
                     all - list ALL parameters (output indicates group for
			each parameter)
                     JCAMP - list acquisition parameters in JCAMP-DX format.
			Inactive parameters are suppressed, for FID saving
                     JS - list acquisition, sample & processing parameters
			in JCAMP-DX format (for saving with spectra)
                     JP - list acquisition, sample & processing parameters,
			plus parameters without Ggroup assignment in JCAMP-DX
			format (for saving with parameters)

    Examples: Using listparam on single files:
                listparam vnmrsys/exp1/procpar | sort
                listparam vnmrsys/exp1/curpar all
                listparam xyz.fid/procpar JCAMP | sort
              Using listparam to compare parameters:
                listparam xyz.fid/procpar | sort > xyz.pars
                listparam abc.fid/procpar | sort > abc.pars
                diff xyz.pars abc.pars

     Related: diffparam - report differences between parameter sets (UNIX)
              vnmr2jcamp - create JCAMP parameters from VNMR parameters (UNIX)
	      svfj - save FID in JCAMP-DX format
