******************************************************************************
llMMap(cs<,fullpath<,nearestPeak>) - calculate csi map of peak height for a peak defined by cs. 
******************************************************************************

Peak is specified by chemical shift cs, which can be specified by cr (cursor).

map is saved in fdf format, in identical format as images.

Default map path is xxx.csi/maps/ll_<chem_shift_ppm>. User specified map path should be fullpath with map name, but without suffix .fdf. 

A third argument can be given to specify whether to optimize cs to the nearest peak max. Default is yes.
 
Multiple fdf maps will be created for multi-sllce csi data, with default naming xxx.csi/maps/ll_<chem_shift_ppm>_n.fdf, where n is slice index.

A single 3D fdf map will be created for 3D csi data. 
