****************************************************************************
makefid( input text file <, element number, format, 'add', 'rev' > )
	-  make a FID element using numeric text input
makefid( input line info, 'calc'  <,element number, 'add', 'sub' > <, fidargs> )
	-  calculate a FID element
makefid( input line info, 'calcIndex'  <,element number, 'add', 'sub',
         <'indexOffset', offset> > <, fidargs > )
makefid( 'calcstr','freq amp decay phase'  <,element number, 'add', 'sub' >
        <, fidargs > )
	-  calculate a FID element
	-  calculate a FID element with indexed input
makefid( input line info, '2d')
	-  calculate a 2D FID data set
makefid( 'noise', noiseLevel <,element number, 'add'>)
	-  calculate and add noise to a data set
writefid( output text file <, element number > )
	-  write numeric text file using a FID element.
****************************************************************************

The makefid command lets you introduce computed data into your experiment.
It has several options for defining the data. 

One option is a text file containing numeric values, 2 per line.  The first value is
assigned to the X (or real) channel; the second value on the line is
assigned to the Y (or imaginary) channel.

The first argument, which is required, is the name of the file containing
input.  Additional optional arguments specify the element number of the new FID,
the format of the data,  whether to 'add' the data to an existing element, as opposed 
to replacing that element, and whether to reverse the frequency axis ('rev') by
negating the imagingary values. These options are describe below. They can be entered
in any order after the file name.. 

The element number is any integer greater than or equal to 0.  If 0 is passed,
the existing FID file is deleted and element 1 will be added. If the element
number is greater than 0, then that element will be added.  If that element
already exists in your FID file, the program will overwrite the old data
unless the optional 'add' argument is given.
If the 'add' argument is given, the FID will be added to the existing data.
If the 'rev' argument is given, the imaginary channel of the FID will negated,
thereby reversing the frequency axis of the spectrum.
If element number is not entered, the default is 1.
If the element number is larger than the existing number of elements,
a new element is added at the specified element number. If the specified
element number is greater the 1 more than the existing number of elements,
the intervening elements will be zero filled.  Whenever a new element is created,
the 'add' option can be given or not. 

The format argument lets you select between single precision integer, double
precision integer, or floating point data in the resulting FID file.
Use one of the following character strings to specify the format:

	'dp=n'			single precision (16-bit) data
	'dp=y'			double precision (32-bit) data
	'16-bit'		single precision (16-bit) data
	'32-bit'		double precision (32-bit) data
	'float'		        floating point   (32-bit) data

The number of points comes from the number of numeric values read from the
file.  makefid reads only 2 values per line.

If the current experiment already contains a FID, you will not be able to
change either the format or the number of points from that present in the
FID file.  As noted above, you can use an index of zero to delete the
existing FID file.

Be aware that makefid does not look at parameter values when establishing
the format of the data or the number of points in an element.  Thus if the
FID file is not present it is possible for makefid to write a FID file
with a header that does not match the value of dp or np.  Since the
active value is in the processed tree, you will need to use the setvalue
command if any changes are needed.

If the target FID is a link to another file, the links will be removed so
that the previously linked FID file is not modified.

Three forms of makefid calculate an FID based on the frequency,
amplitude, decay rate, and phase of a spectral line. These are selected with
the 'calc', 'calcIndex', and 'calcstr' keywords. The 'calc' and 'calcIndex'
forms require a file that contains the information used to calculate the
FID. The 'calcstr' form provides the information as an argument to makefid.

For the 'calc' form, the first argument, which is required, is the name
of the file containing input.  Other arguments specifying the element number,
the keyword 'calc', and the 'add' or 'sub' option may be entered
in any order. The 'calc' keyword is not optional. The element number
is optional. The default is element 1. With the 'calc' option, the data
format will be the same as any pre-existing data. If no pre-existing data
exists, either because the fid file was removed or because a 0 was supplied
as the element number, the data format will be float.

For these three forms of makefid, one can also provide "fidargs", which will
modify the freq, amplitude, and phase of the calculated FID. These can be
supplied in any order. Each is a keyword followed by a value. The keywords,
which are case-insensitive, are:
   fidFreq:  which adds to the frequency in Hz (default is 0.0) 
   fidAmp : which multiplies the amplitude value (default is 1.0)
   fidPhase: which adds to the FID phase in degrees (default is 0.0)

As above, using an element number of 0 will delete the current
FID file before adding element 1. If the element number is larger than
the existing number of elements, a new element is added at the specified
element number. If the specified element number is greater than 1 more
than the existing number of elements, the intervening elements will be
zero filled. An optional 'add' or 'sub' will
add the FID to the existing FID as opposed to replacing it.  Whenever a
new element is created, the 'add' option can be given or not. The 'sub'
argument is the same as 'add' except the phase of the line is inverted
by adding 180 deg.

Another form of makefid uses the '2d' keyword. The first input argument,
which is required, is the name of the file containing input. Each line of
input has seven values. These are the f2 offset, f2 decay rate, f2 phase,
f1 offset, f1 decay rate, f1 phase, and amplitude of each of the peaks
in the 2D spectrum. The current experiment must have the parameters np, sw,
ni, and sw1 set. With this information, makefid will generate a States 2D
model file.

Examples include:

makefid(curexp+'/fidlines','calc')
makefid(curexp+'/fidlines','calc',1)
makefid(curexp+'/fidlines','calc',1,'add')
makefid(curexp+'/fidlines','calc',1,'sub')
makefid(curexp+'/fidlines',1,'calc')
makefid(curexp+'/fidlines','calc','fidAmp',2)

The input file specifies the frequency, amplitude, decay rate and phase.
All four numbers must be on a single line. Multiple lines may be in the
file. Lines starting with a # are comments. Blank lines are ignored.
An example file is:

# Freq   Amp   Decay Phase
  2500.0 10.0  0.1   0.0
  0.0    20.0  0.1   0.0

If an index of 0 is given or if there is no existing FID in the
experiment, the current values of the sw and np parameters are used
to determine the dwell time and the number of points to calculate.
Otherwise, the values of np and sw from the processed tree will be used.
The frequencies range between -sw/2 and sw/2. A 0.0 frequency will give
a peak in the middle of the spectrum.

Another form of input to makefid is a text file with five entries.
These specify the FID index, the frequency, amplitude, decay rate and phase.
All five numbers must be on a single line. Multiple lines may be in the
file. Lines starting with a # are comments. Blank lines are ignored.
An example file is:

# Index Freq   Amp   Decay Phase
  1     2500.0 10.0  0.1   0.0
  1     0.0    20.0  0.1   0.0
  2     -200.0 60.0  0.1   0.0

In this case, the keyword 'calcIndex' must follow the name of the input file.
If a FID index is also provided as an argument, then the indexes in the input
file are ignored. If a FID index number is greater than 1 more
than the existing number of elements, the intervening elements will be
zero filled. An optional 'add' or 'sub' argument will
add FIDs to existing FIDs as opposed to replacing them.  Whenever a
new element is created, the 'add' option can be given or not. The 'sub'
argument is the same as 'add' except the phase of the line is inverted
by adding 180 deg.

One additional option for the 'caclIndex' case is the 'indexOffset',offset
option. The keyword 'indexOffset' must be immediately followed with the
value of the offset. This offset is then added to the index taken from the
table. For example, if the indexes in the table run from 1 to 10 but you
want them used to make elements 4 to 13, use 'indexOffset',3. The offset
may be negative but the sum of the offset and the index taken from the
file cannot be less than 1. This option is meaningless if a FID element
number is provided as an argument.

Examples:

// Ignore the indexes in the fidlines file and replace FID 2 with
// all the lines in the fidlines file
makefid(curexp+'/fidlines','calcIndex',2)

// Ignore the indexes in the fidlines file and add
// all the lines in the fidlines file to the existing FID 2.
makefid(curexp+'/fidlines','calcIndex',2,'add')

// replace existing FIDs with those in the fidlines file
makefid(curexp+'/fidlines','calcIndex')

// Add the indexed lines in the fidlines file to existing FIDs.
// If the indexed FID does not already exist, it will be added.
makefid(curexp+'/fidlines','calcIndex','add')

// Add the "index plus indexOffset value" lines in the fidlines
// file to existing FIDs.
// If the FID does not already exist, it will be added.
makefid(curexp+'/fidlines','calcIndex','add','indexOffset',3)


Another form of makefid can be called with
the keyword 'calcstr' and the  frequency, amplitude, decay rate and phase
of that line can be passed as the second argument. The second argument must
be a string of space separated list of the parameters. The optional element
number can also be passed as a following argument. The default is element 1.
With the 'calcstr' option, the data format will be the same as any
pre-existing data. If no pre-existing data exists, either because the fid
file was removed or because a 0 was supplied as the element number, the
data format will be float.

The behavior of the element number, 'add' and 'sub' arguments is the same
as for the 'calc' case.
Examples include:

makefid('calcstr','2500.0 10.0 0.1 0.0',0)  // Delete existing FID first
makefid('calcstr','2500.0 10.0 0.1 0.0',2)  // Add a second FID
makefid('calcstr','2500.0 10.0 0.1 0.0',4)  // Add a fourth FID, the third FID is added as zeros.
makefid('calcstr','2000.0 20.0 0.1 0.0',2,'add')  // Add another component to the second FID

Another form of makefid uses the 'noise' keyword. The first input argument
is the keyword 'noise'. The second required argument is the noise level. The
command uses the random function to generate values between +/- the supplied
noise level.  As above, using an element number of 0 will delete the current
FID file before adding element 1. The element number can be one larger than the
current number of elements. If no element number is supplied, then if FID data
exists in the current experiment, then all arraydim elements are selected. If
no FID data exists in the current experiment, the parameters np and arraydim are
used to decide the number of elements to use. For the 'noise' option, only the
format 'float' is allowed. It does not need to be specified. If the 'add' keyword
is used, noise is added to the existing data. If the 'add' keyword is not used,
the elements are replaced with noise.

Examples include:

makefid('noise',8.9e-5,'add')       // Add noise to all elements in the current experiment.
makefid('noise',8.9e-5)             // Replace all elements in the current experiment with noise.
                                    // If no data exists, use np and arraydim to determine the
                                    // number of elements
makefid('noise',8.9e-5,1,'add')     // Add noise to element 1 in the current experiment.
makefid('noise',8.9e-5,arraydim+1)  // Create a new arraydim+1 noise element.


writefid
--------
The writefid command writes a text file using data from the selected FID
element.  The default element number is 1.  The program writes 2 values
per line.  The first is the value from the X (or real) channel; the second
is the value from the Y (or imaginary) channel.
