*******************************************************************************
makenewparams('Sequencename') - SolidsPack macro used to create the uppercase 
            parameter file used with protocols. 
*******************************************************************************

The macro makenewparams executes Settancpx to create standard SolidsPack 
parameters and executes sequencename_pars to create a standard parameter
set for the sequence in the workspace. The parameters are automatically 
saved to ~/vnmrsys/parlib/Sequencename.par.  Note that the first character
of the parameter file is always uppercase and that the argument must also 
have an uppercase first character.   

This macro is used in the macro makeallnewparams to create parameter files 
for all the sequences of SolidsPack. 



 
