HELPEXP 	HELPEXP

-----Std1D-----
PROTON		PROTON
CARBON  	CARBON
PRESAT		PRESAT
wet1D		wet1D
FLUORINE 	FLUORINE
PHOSPHORUS 	PHOSPHORUS
INVREC		INVREC
CPMGT2		CPMGT2
APT  		APT
DEPT  		DEPT 
PureShift  	PS1D
HOMODEC  	HOMODEC
CARBONecho  	CARBONecho
BilevelDec  	BilevelDec

---(HH)Homo2D---
gCOSY		gCOSY
COSY		COSY
gDQCOSY		gDQCOSY
DQCOSY		DQCOSY
TOCSY		TOCSY
zTOCSY		zTOCSY
ROESY		ROESY
ROESYAD		ROESYAD
NOESY		NOESY
zCOSY   	zCOSY

---J1(CH)corr---
gHSQCAD		gHSQCAD
HSQCAD		HSQCAD
gHSQC		gHSQC
HSQC		HSQC
gHMQC		gHMQC
HMQC		HMQC
gHETCOR		gHETCOR
HETCOR		HETCOR
ASAPHMQC  	ASAPHMQC

---Jn(CH)corr---
gHMBCAD		gHMBCAD
gHMBC		gHMBC
gH2BCAD		gH2BCAD
gH2BC		gH2BC
CIGAR		CIGAR
CIGARAD		CIGARAD
HMBC		HMBC
gHMBCmeAD	gHMBCmeAD
gHMBCRELAY 	gHMBCRELAY

-----Sel1D-----
NOESY1D 	NOESY1D
ROESY1D		ROESY1D
TOCSY1D		TOCSY1D
zTOCSY1D	zTOCSY1D
selexcit	selexcit
stepNOESY1D	stepNOESY1D

-----Sel2D-----
bsHSQCAD	bsHSQCAD
bsgHSQCAD	bsgHSQCAD
bsgHMBC		bsgHMBC
EXSIDE		EXSIDE
bsHSQCNOESY	bsHSQCNOESY
bsHSQCROESY	bsHSQCROESY
bashdROESY	bashdROESY
bashdTOCSY	bashdTOCSY
bashdNOESY	bashdNOESY

----Crisis2D----
c2hsqc		c2hsqc
c2hsqcse	c2hsqcse
gc2hsqc		gc2hsqc
gc2hsqcse	gc2hsqcse
gc2hmbc		gc2hmbc
gc2hmbcme	gc2hmbcme
gc2h2bc		gc2h2bc
gc2h2bcme	gc2h2bcme

---HetTocsys---
HSQCADTOXY	HSQCADTOXY
gHSQCADTOXY	gHSQCADTOXY
HSQCTOXY	HSQCTOXY
gHSQCTOXY	gHSQCTOXY
HMQCTOXY	HMQCTOXY
gHMQCTOXY	gHMQCTOXY

----HF_Expts----
FH_gHETCOR	FH_gHETCOR
FH_HOESY	FH_HOESY
FHdec		FHdec

----(CC)corr----
INADEQUATE	INADEQUATE
INADEQUATEAD	INADEQUATEAD
ADEQUATEAD	ADEQUATEAD

----JSpectra----
HOMO2DJ		HOMO2DJ
HETERO2DJ	HETERO2DJ

----Hadamard----
dqcosyHT	dqcosyHT
gcosyHT		gcosyHT
hetcorHT	hetcorHT
hmbcHT		hmbcHT
hsqcHT		hsqcHT
hsqctocsyHT	hsqctocsyHT
noesyHT		noesyHT
roesyHT		roesyHT
tocsyHT		tocsyHT

-----Dosy2D-----
Dbppste		Dbppste
Dbppste_cc	Dbppste_cc
Dbppste_wg	Dbppste_wg
Dbppsteinept	Dbppsteinept
DgcsteSL	DgcsteSL
DgcsteSL_cc	DgcsteSL_cc
DgcsteSL_dpfgse	DgcsteSL_dpfgse
DgsteSL_cc	DgsteSL_cc
Doneshot	Doneshot
Dpfgdste	Dpfgdste
Doneshot_nugmap	Doneshot_nugmap

-----Dosy3D-----
Dbppste_ghsqcse	Dbppste_ghsqcse
Dcosyidosy	Dcosyidosy
Dgcstecosy	Dgcstecosy
Dgcstehmqc_ps	Dgcstehmqc_ps
Dgcstehmqc	Dgcstehmqc
Dghmqcidosy	Dghmqcidosy
Dhom2djidosy	Dhom2djidosy

-----Solids-----
binom		binom
br24q		br24q
c7inad2d	c7inad2d
hetcorlgcp2d	hetcorlgcp2d
lgcp		lgcp
mqmas3qzf2d	mqmas3qzf2d
mqmas5qzf2d	mqmas5qzf2d
mrev8q		mrev8q
mrseq		mrseq
mrsim		mrsim
onepul		onepul
onepultoss	onepultoss
pge		pge
pgeramp		pgeramp
pisema2d	pisema2d
redor1onepul	redor1onepul
redor1tancp	redor1tancp
redor2onepul	redor2onepul
redor2tancp	redor2tancp
ssecho1d	ssecho1d
swwhh4		swwhh4
tancpht1	tancpht1	
tancpx		tancpx
tancpxecho	tancpxecho
tancpxflip	tancpxflip
tancpxfslg	tancpxfslg
tancpxidref	tancpxidref
tancpxt1rho	tancpxt1rho
tancpxtoss	tancpxtoss
tunerp		tunerp
twopul		twopul
wisetancp2d	wisetancp2d	
wpmlg1d		wpmlg1d
wpmlg2d		wpmlg2d
xmx		xmx
xx		xx

-----Other-----
cyclenoe	cyclenoe
ECOSY		ECOSY
d2pul		d2pul
g2pul		g2pul
g2pul_ecc	g2pul_ecc
g2pulramp	g2pulramp
gmapz		gmapz
gXHCAL		gXHCAL
inept		inept
mtune		mtune
pansy1d		pansy1d
pansy_cosy	pansy_cosy
pansy_tocsy	pansy_tocsy
ppcal		ppcal
profile		profile
pwxcal		pwxcal
PWXCAL		PWXCAL
s2pul		s2pul
S2PUL		S2PUL
sh2pul		sh2pul
wfgtest		wfgtest
selexHT		selexHT
gmqcosyHT	gmqcosyHT

--Old/Obsolete--
ADEQUATE_AD11	ADEQUATE_AD11
CIGAR2j3j	CIGAR2j3j
cosyps	cosyps
gHMQC_d2	gHMQC_d2
HMQC_d2		HMQC_d2
gHSQC_d2	gHSQC_d2
HSQC_d2		HSQC_d2
ghmqcps	ghmqcps
gmqcosy	gmqcosy
gnoesy	gnoesy
gtnnoesy	gtnnoesy
gtnroesy	gtnroesy
hcchtocsy	hcchtocsy
het2dj	het2dj
hetcorps	hetcorps
HMBCRELAY	HMBCRELAY
hmqctoxy3d	hmqctoxy3d
HMQCTOXY_d2	HMQCTOXY_d2
hom2dj	hom2dj
HSQCTOXY_d2	HSQCTOXY_d2
hsqctoxySE	hsqctoxySE
inadqt	inadqt
ineptr	ineptr
jumpret	jumpret
mqcosy	mqcosy
relayh	relayh
tncosyps	tncosyps
tndqcosy	tndqcosy
tnmqcosy	tnmqcosy
tnnoesy	tnnoesy
tnroesy	tnroesy
tntocsy	tntocsy
troesy	troesy
wetdqcosy	wetdqcosy
wetgcosy	wetgcosy
wetgCOSY	wetgCOSY
wetgDQCOSY	wetgDQCOSY
wetgHMBC	wetgHMBC
wetghmqc	wetghmqc
wetgHMQC	wetgHMQC
wetghmqcps	wetghmqcps
wetghsqc	wetghsqc
wetgHSQC	wetgHSQC
wetgmqcosyps	wetgmqcosyps
wetnoesy	wetnoesy
wetNOESY	wetNOESY
wetpwxcal	wetpwxcal
wetrelayh	wetrelayh
wetROESY	wetROESY
wettntocsy	wettntocsy
wetTOCSY	wetTOCSY
