************************************************************************
*  mht    -    Move Hadamard parameters from one workspace to another  *
************************************************************************

Usage: mht( <from_exp,> to_exp )

    from_exp is the workspace number to move parameters from.  If
      not specified, the current workspace is used.  
    to_exp is the workspace number to move Hadamard parameters into. 

The mht macro moves Hadamard parameters from one workspace to another. 
It transfers the following parameters: htfrq1, htbw1, sw or sw1,
tof or dof.  

mht is used in the "Move HT pars to exp" entry box in the editht
dialog.  It may also be used from the command line.  


Parameters:
htfrq1  - Hadamard frequency list in indirect dimension, in Hz
            from center of spectrum, or ppm.
htbw1   - Hadamard band width in indirect dimension, in Hz.  It
            may be a single value or a list of values for each
            element in the htfrq1 list.
tn      - nucleus used for frequency list.
sw      - spectral width in direct dimension
sw1     - spectral width in 1st indirect dimension
tof     - frequency offset in direct dimension
dof     - frequency offset in 1st indirect dimension

See also:
ht editht HsqcHT TocsyHT
