*******************************************************************************
ovjCount:$i - return an incrementing integer to calling macro
ovjCount(max):$i -return an incrementing integer less than max
*******************************************************************************

On each call to ovjCount, it returns an integer one greater than the previous
call. The return values start at 1.
If an argument is passed, as in ovjCount(10), then the returned integer will be
less than the passed argument. For ovjCount(10), the returned values will cycle
from 1 to 9.

This can be used to construct unique file names where the returned value is used
as a version number.

$rev=''
ovjCount(10):$rev
$filename=$filename+$rev
