
*****************************************************************************
 pardiff - report differences between parameter sets (M)
*****************************************************************************

      Syntax: pardiff(set1<,set2<,parameter_group>>)

 Description: reports differences between VNMR parameter sets, based on the
	      output of the listparam command. Calls the UNIX diffparam
	      shell script.

   Arguments: set1 and set2 are VNMR directories or parameter sets, like
		experiments, parameter (*.par) or FID (*.fid) files, or
		actuall parameter text files, like curexp+'/procpar', or
		userdir+'/exp4/curpar'. Experiments can also be specified
		by giving just their number. Unless 'procpar' is specified,
		for experiments the subfile 'curpar' will be taken, for FID
		or parameter file the subfile 'procpar' is selected for the
		comparision. If only one file is specified, this is compared
		with the current experiment. The '.fid' or '.par' extension
		can be omitted if an FID or parameter file (directory) is
		soecified.
              parametergroup is an optional argument that permits specifying
		the parameter type. By default, only acquisition parameters
		are compared. The following options exist (only the first
		two characters are relevant):
                   acquisition - compare acquisition parameters (default)
                   processing - compare processing parameters only
                   display - compare display parameters only
                   spsim - compare spin simulation parameters only
                   sample - compare sample parameters only
                   all - compare ALL parameters (output indicates group for
                      for each parameter)
                   JCAMP - compare acquisition and processing parameters in
                      JCAMP-DX compatible format. Inactive parameters are
                      suppressed.

    Examples: pardiff(3)
	      pardiff(1,3,'processing')
	      pardiff('abc.fid')
	      pardiff(2,'abc.fid')
	      pardiff('abc.fid',3)
	      pardiff('xyz.par','abc.fid','all')

     Related: listparam - list parameters in simple format (UNIX)
              diffparam - report differences between parameter sets (UNIX)
