
*****************************************************************************
 parlist - list complete parameters in simple format (M)
*****************************************************************************

      Syntax: parlist<(parameter_group)>

 Description: reports differences between VNMR parameter sets, based on the
	      output of the listparam command. Calls the UNIX diffparam
	      shell script.

   Arguments: parametergroup is an optional argument that permits specifying
		the parameter type. By default, only acquisition parameters
		are listed. The following options exist (only the first two
	`	characters are relevant):
                   acquisition - list acquisition parameters (default)
                   processing - list processing parameters only
                   display - list display parameters only
                   spsim - list spin simulation parameters only
                   sample - list sample parameters only
                   all - list ALL parameters (output indicates group for
                      for each parameter)
                   JCAMP - list acquisition and processing parameters in
                      JCAMP-DX compatible format. Inactive parameters are
                      suppressed.

    Examples: parlist
	      parlist('processing')
	      parlist('JCAMP')

     Related: listparam - list parameters in simple format (UNIX)
	      pardiff - report differences between parameter sets (M)
              diffparam - report differences between parameter sets (UNIX)
