********************************************************************************
 pbox_dmf - extract dmf value from pbox.cal or Pbox shapefile (M)
********************************************************************************

  Syntax: pbox_dmf<(shapefile.DEC)>:exparam

 Description: pbox_dmf extracts the dmf value from shapefile.DEC created by
              Pbox or, if filename is not provided, from pbox.cal file 
              containing parameters of the last created Pbox shapefile.

   Arguments: shapefile.DEC - shapefile name. 
              exparam - experimental parameter (dmf).

    Examples: pbox_dmf('myfile.DEC'):mydmf
	      pbox_dmf:dmf2

     Related: pboxget - extract all calibration data from a Pbox shapefile
              pbox_dres - extract dres value from Pbox shapefile
              pbox_name - extract name of last shapefile generated by Pbox
              pbox_pw - extract pulse length from Pbox shapefile
              pbox_pwr - extract pulse power from Pbox shapefile
              pbox_pwrf - extract pulse fine power from Pbox shapefile 
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
