********************************************************************************
 pbox_pw - extract pulse length (us) from pbox.cal or Pbox shapefile (M)
********************************************************************************

  Syntax: pbox_pw<(shapefile.RF)>:exparam

 Description: pbox_pw extracts pulse length (us) from shapefile.RF 
              generated by Pbox or, if filename is not provided, from 
              pbox.cal file containing parameters of the last generated 
              Pbox shapefile.

   Arguments: shapefile.RF - shapefile name including extension. 
              exparam - experimental parameter (pulse length).

    Examples: pbox_pw('myfile.RF'):softpw
	      pbox_pw:selpw

     Related: pboxget - extract all calibration data from a Pbox shapefile
              pbox_dmf - extract dmf value from Pbox shapefile
              pbox_dres - extract dres value from Pbox shapefile
              pbox_name - extract name of last shapefile generated by Pbox
              pbox_pwr - extract pulse power from Pbox shapefile
              pbox_pwrf - extract pulse fine power from Pbox shapefile 
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
