********************************************************************************
 pbox_pwr - extract power level (dB) from pbox.cal or Pbox shapefile (M)
********************************************************************************

  Syntax: pbox_pwr<(shapefile.ext)>:exparam

 Description: pbox_pwr extracts the power level (dB) from shapefile.ext 
              generated by Pbox or, if filename is not provided, from 
              pbox.cal file containing parameters of the last generated 
              Pbox shapefile.

   Arguments: shapefile.ext - shapefile name. 
              exparam - experimental parameter (power).

    Examples: pbox_pwr('myfile.DEC'):mypwr
	      pbox_pwr:dpwr2

     Related: pboxget - extract all calibration data from a Pbox shapefile
              pbox_dmf - extract dmf value from Pbox shapefile
              pbox_dres - extract dres value from Pbox shapefile
              pbox_name - extract name of last shapefile generated by Pbox
              pbox_pw - extract pulse length from Pbox shapefile
              pbox_pwrf - extract pulse fine power from Pbox shapefile 
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
