********************************************************************************
 pbox_pwrf - extract fine power level from pbox.cal or Pbox shapefile (M)
********************************************************************************

  Syntax: pbox_pwrf<(shapefile.ext)>:exparam

 Description: pbox_pwrf extracts the fine power level from shapefile.ext 
              generated by Pbox or, if filename is not provided, from 
              pbox.cal file containing parameters of the last generated 
              Pbox shapefile.

   Arguments: shapefile.ext - shapefile name. 
              exparam - experimental parameter (fine power).

    Examples: pbox_pwrf('myfile.RF'):mypwrf
	      pbox_pwrf:tpwrf

     Related: pboxget - extract all calibration data from a Pbox shapefile
              pbox_dmf - extract dmf value from Pbox shapefile
              pbox_dres - extract dres value from Pbox shapefile
              pbox_name - extract name of last shapefile generated by Pbox
              pbox_pw - extract pulse length from Pbox shapefile
              pbox_pwr - extract pulse power level from Pbox shapefile 
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
