********************************************************************************
 pxset - assign Pbox calibration data to experimental parameters (M)
********************************************************************************

      Syntax: pxset<(shapefile.EXT)>

 Description: retrieves experimental settings from a shapefile or pbox.cal
              file (if no arguments are provided) and assigns them to 
              corresponding experimental parameters in a user friendly dialog
              form.

   Arguments: pxset takes the shape or pattern (file) name as argument. 
              If no argument is given, pxshape extracts data from the 
              pbox.cal file which contains the output data of the last 
              created waveform.

    Examples: pxset 
              pxset('Pbox.RF')

     Related: pboxget - extract all calibration data from a Pbox shapefile
              pbox_dmf - extract dmf value from Pbox shapefile
              pbox_dres - extract dres value from Pbox shapefile
              pbox_name - extract name of last shapefile generated by Pbox
              pbox_pw - extract pulse length from Pbox shapefile
              pbox_pwr - extract pulse power from Pbox shapefile 
	      pbox_pwrf - extract pulse fine power from Pbox shapefile 
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
