ln -s aa halt
ln -s aa halt2
ln -s AC1 AC9
ln -s acosy pacosy
ln -s acqi dmgf
ln -s acqi gf
ln -s add clradd
ln -s add jaddsub
ln -s add sub
ln -s adept padept
ln -s ai nm
ln -s apa hpa
ln -s aph aph0
ln -s ap pap
ln -s append appendstr
ln -s append copyf
ln -s append copystr
ln -s assign cla
ln -s atan abs
ln -s atan acos
ln -s atan asin
ln -s atan atan2
ln -s atan cos
ln -s atan exp
ln -s atan ln
ln -s atan log
ln -s atan pow
ln -s atan sin
ln -s atan sqrt
ln -s atan tan
ln -s atext ctext
ln -s atext text
ln -s autoname chkname
ln -s autoname Svfname
ln -s autora autosa
ln -s autoscale scalelimits
ln -s av1 pa1
ln -s av1 ph1
ln -s av1 pwr1
ln -s av2 ph2
ln -s av2 pwr2
ln -s averag ddf
ln -s averag ddff
ln -s averag ddfp
ln -s averag ernst
ln -s averag noise
ln -s averag p1
ln -s averag pw
ln -s av pa
ln -s av ph
ln -s av pwr
ln -s bandinfo pulseinfo
ln -s beepoff beepon
ln -s btune ctune
ln -s btune dtune
ln -s btune htune
ln -s btune tuneoff
ln -s cdc dc
ln -s center full
ln -s center fullt
ln -s center left
ln -s center right
ln -s centersw centersw1
ln -s centersw centersw2
ln -s cexp delexp
ln -s cfpmult fpmult
ln -s cfpmult fpmult1
ln -s cfpmult fpmult2
ln -s coldprobe warmprobe
ln -s copy cp
ln -s crcom delcom
ln -s crl crl1
ln -s crl crl2
ln -s crl rl
ln -s crl rl1
ln -s crl rl2
ln -s cz dli
ln -s cz dlni
ln -s cz nli
ln -s cz nlni
ln -s cz z
ln -s da dg
ln -s da dg1
ln -s da dg2
ln -s da dglp
ln -s da dgs
ln -s dcon dconn
ln -s decfrq spcfrq
ln -s delete rm
ln -s dels dll
ln -s dels fp
ln -s dels getll
ln -s dels nl
ln -s dels nll
ln -s df dfid
ln -s dfs dfsa
ln -s dfs dfsan
ln -s dfs dfsh
ln -s dfs dfshn
ln -s dfs dfsn
ln -s dfs dfww
ln -s dfs pfww
ln -s dfs plfid
ln -s dga dla
ln -s dga dlalong
ln -s dir lf
ln -s dir ls
ln -s dmg dmg1
ln -s dnuc tnuc
ln -s dpcon dpconn
ln -s dpcon pcon
ln -s dpir dpirn
ln -s dpir pir
ln -s dpir pirn
ln -s dpir ppf
ln -s dpiv dpivn
ln -s dpiv piv
ln -s dpiv pivn
ln -s dplane dproj
ln -s dps pps
ln -s draw move
ln -s draw pen
ln -s dres dsn
ln -s ds2d ds2dn
ln -s ds2d pl2d
ln -s dscale pscale
ln -s dsnmax dsnf1max
ln -s ds lvltlt
ln -s ds phasing
ln -s dss dssa
ln -s dss dssan
ln -s dss dssh
ln -s dss dsshn
ln -s dss dssl
ln -s dss dssn
ln -s dss dsww
ln -s ds select
ln -s dss pl
ln -s dss plww
ln -s dss pssl
ln -s editLog sqLog
ln -s edit macroedit
ln -s e i
ln -s eject insert
ln -s exec execexp
ln -s expl pexpl
ln -s fiddc3d ntype3d
ln -s fiddc3d ptspec3d
ln -s fiddc3d specdc3d
ln -s fiddle fiddlecf
ln -s flush flush2
ln -s foldcc foldj
ln -s foldcc foldt
ln -s foldcc rotate
ln -s fr r
ln -s fr s
ln -s ft1dac ft2dac
ln -s ft1dac wft1dac
ln -s ft1dac wft2dac
ln -s ft1da ft2da
ln -s ft1da wft1da
ln -s ft1da wft2da
ln -s ft1d ft2d
ln -s ft1d wft1d
ln -s ft1d wft2d
ln -s ft calcECC
ln -s ft fidproc
ln -s ft ftarg
ln -s ft wfidproc
ln -s ft wft
ln -s getreg numreg
ln -s getreg region
ln -s gettxt puttxt
ln -s go au
ln -s go auargs
ln -s go calcdim
ln -s go change
ln -s go ga
ln -s go lock
ln -s go ra
ln -s go sample
ln -s go shim
ln -s go spin
ln -s go su
ln -s graphis textis
ln -s grid plgrid
ln -s hightemp plhightemp
ln -s hightemp lowtemp
ln -s hightemp pllowtemp
ln -s isadj isadj2
ln -s jexp jexpn
ln -s kind kinds
ln -s kind kini
ln -s kind kinis
ln -s large small
ln -s ll2d pll2d
ln -s lsfid lsfid1
ln -s lsfid lsfid2
ln -s lsfid lsfrq
ln -s lsfid lsfrq1
ln -s lsfid lsfrq2
ln -s lsfid phfid
ln -s lsfid phfid1
ln -s lsfid phfid2
ln -s macrocp macrosyscp
ln -s macrodir macrosysdir
ln -s macrold macrosysld
ln -s macrosysvi macrovi
ln -s makefid writefid
ln -s man manvi
ln -s md mf
ln -s md mp
ln -s md mt
ln -s md mz
ln -s minsw movesw
ln -s minsw movetof
ln -s mv rename
ln -s nextpl prevpl
ln -s off on
ln -s paramvi paramedit
ln -s pards movedssw
ln -s parfidss ssfilter
ln -s parfidss ssntaps
ln -s parfidss ssorder
ln -s parll2d diagth2d
ln -s parll2d th2d
ln -s paros moveossw
ln -s peak peakmin
ln -s peak maxpeak
ln -s plane path3d
ln -s plplanes dsplanes
ln -s printoff printon
ln -s pseudo sinebell
ln -s real string
ln -s reff1 reff2
ln -s rights cmdlineOK
ln -s rt rtp
ln -s rt rtv
ln -s rts svs
ln -s scalesw scalesw1
ln -s sd2 sd2a
ln -s sd sda
ln -s seqgen seqgenupdate
ln -s setlimit getlimit
ln -s setref1 setref2
ln -s settype gettype
ln -s spadd spmax
ln -s spadd spmin
ln -s spadd spsub
ln -s spins spsm
ln -s svfj svllj
ln -s svfj svlsj
ln -s svfj svsj
ln -s svfj svxyj
ln -s t1 t1s
ln -s t1 t2
ln -s t1 t2s
ln -s t1 t1rho
ln -s t1 t1rhos
ln -s textcnv unix_vxr
ln -s textcnv vxr_unix
ln -s ultra18 ultra8
ln -s unixtime systemtime
ln -s vnmr_accounting doAcct
ln -s vnmrj sendMessage
ln -s vnmrj exitComm
ln -s wbs werr
ln -s wbs wexp
ln -s wbs wnt
ln -s writef1 readf1
ln -s writespectrum readspectrum
ln -s writetrace writejxy
ln -s writetrace writexy
ln -s wtfile wtfile1
ln -s wti wtia
