
selexcit: Selective excitation with presat option

REFERENCES

Selective excitation is based on double PFG spin-echo (aka excitation sculpting)
  Shaka, et.al  JACS, 117, 4199 (1995)

PARAMETERS

  sspul	   :  y - selects magnetization randomization option
  hsglvl   :  Homospoil gradient level (DAC units)
  hsgt	   :  Homospoil gradient time
  satmode  :  y - selects presaturation during relax delay
  satfrq   :  Presaturation frequency
  satdly   :  Presaturation delay
  satpwr   :  Presaturation power
  d1	   :  Relaxation delay
  selfrq   :  Selective frequency (for selective 180)
  selpwrA  :  Selective power first inversion
  selpwA   :  Selective 180 deg pulse width first inversion
  selpwrB  :  Selective power 2nd inversion
  selpwB   :  Selective 180 deg pulse width 2nd inversion
  selshapeA:  First Selective 180 shape
  selshapeB:  2nd Selective 180 shape
