
*****************************************************************************
 setpage - Tool to plot information 
*****************************************************************************

setpage('header','templatefile')
setpage('logo')
setpage('newpage')
setpage('minipl','command')
setpage('parameter','textfile')
setpage('integral','textfile')
setpage('peak','textfile')
setpage('text','textfile')

If the first argument is 'header', a header and optional footer will be plotted.
The second argument is the template file that defines the header and footer. The
standard template file is plotHeader.tmpl file in an appdirs templates/vnmrj/annotation
director. See the plheader macro for an example. The header template defines a Title,
a two line header and an optional one line footer. By default, the header is plotted
in the right three quarters of the page. If the first keyword in the template file is
Left:
then the header is plotted is the left three quaters of the page. If the first keyword
in the template file is
Center:
then the header is plotted across the full width of the page.

Examples:
  setpage('header','/vnmr/templates/vnmrj/annotation/plotHeader.tmpl')   // plot header

If the first argument is 'logo', a logo will be plotted. If a second argument
is passed, then it will be used as the logo file. It should be a gif, png, or jpeg file.
If a second argument is not passed, the global 'plotlogo' parameter will be used.
In either case, if an absolute path is given, it will be used. Otherwise, an "appdir"
search of iconlib directories will be used to find the file. If two additional
integer parameters are passed, they will be used to define the x and y position of
the logo on the page.  If two more integer parameters are passed, they will define the
height and width of the logo. In order to use the position and sizing integers, the 
path must be passed as the second argument.

The default position is at the left top part of the page. The default width is a quarter
of the width of the page. The default height is 3.6 times the height of a character.

Examples:
  setpage('logo')           // plot logo defined by plotlog parameter at default position and size
  setpage('logo',plotlogo)  // effectively identical to above 
  setpage('logo',plotlogo,0,wc2max)  // effectively identical to above 
  write('graphics',100,100,''):$ys   // get height of a character
  setpage('logo',plotlogo,0,wc2max,wcmax/4,$ys*1.2)  // effectively identical to above 
  
If the first argument is 'newpage', then the following plot commands will be plotted
on a second piece of paper or on the reverse side if 2-sided plotting is selected.

If the first argument is 'miniplot', then second argument must be the magical command
to generate the miniplot display. This may be different from the standard plot.
For example, the standard plot might be a spectrum and integrals which the miniplot
might omit the integrals.

Examples:
  setpage('miniplot','pl')   // Use pl command for the miniplot

If the first argument is 'parameter', 'integral', or 'peak', the second argument is a text file
containing the appropriate information. See the doplotoption macro for examples of generating 
these text files.

Examples:
  setpage('parameter',curexp+'/ap.dat')
  setpage('integral',curexp+'/dli.out')
  setpage('peak',curexp+'/dll.out')

If the first argument is 'text', the second argument is the text file to plot.

Examples:
  setpage('text',curexp+'/text')

The font and character size can be controlled with the global parameters psfont
(default is Courier-Bold), psfont2 (default is Courier), and pscharsize
(default is 32). 
