
settcldefault                   - select default display templates
settcldefault(default)          - select default display templates
settcldefault(default,sequence) - select default display templates

settcldefault selects the display templates to use as default for
a pulse sequence.  Without any arguments, settcldefault will
prompt for the name of a pulse sequence to use for the default displays
for the current pulse sequence. The current pulse sequence is defined
by the parameter seqfil.  If a single argument is given, that
is used as the name of the pulse sequence to use for the default
displays for the current pulse sequence.  If a second argument is
given, it is used in the place of seqfil to define which pulse
sequence will use the default displays of the first argument.

In general, 1D experiments do not need to define a "default" set
of templates. One already exists.  A good default set for 
glide style 2D experiments is default2d.  These experiments generally
have capital letters in their names (e.g, HSQC, NOESY).  A good
default set for older style 2D experiments is defaultold2d.  These
experiments generally do not have capital letters in their
names (e.g, mqcosy, tocsy).

Examples:

settcldefault('cosy')  - use the cosy display templates as the default
                         displays for experiments using pulse sequence
                         defined by seqfil.
settcldefault('default2d','HMQC8')  use the default2d display templates
                                    the HMQC8 experiments.
