*******************************************************************************
settype	- 	set the type of a variable
gettype	- 	get the type of a variable
*******************************************************************************

  The settype command can change the type of an existing variable.  A 'string'
  variable can have it's type set to 'string' or 'flag'. A 'real'
  variable can have it's type set to  'real', 'delay', 'frequency',
  'pulse', or 'integer'.
  The settype command can not be used to change a string variable into a
  'real' variable, or a 'real' variable into a 'string' variable.
  The variable trees are 'current', 'global'. 'processed', 'usertree',
  and 'systemglobal'.  The default is to search for the parameter in the
  'current', 'global', and 'systemglobal' trees, in that order.
  The first "name" argument is either a list of the names of the parameters
  or it is the name of an arrayed temporary $ variable.  If it is a list, it is a
  string parameter and the names can be separated either by a space or a comma.
  If it is an arrayed temporary $ varaible, each array element is a single parameter
  name.  If the variable does not exist, a warning message will be given.
  Appending the settype command with a return value will suppress warnings
  if the variable does not exist.
 
  Usage -- settype(name,type[,tree])

  Examples:

    settype('in','flag')        Change 'in' into a 'flag' variable.
    settype('p12','pulse')      Change 'p12' into a 'pulse' variable.
    settype('tpwr dpwr dpwr2 dpwr3','real'):$e Change the power parameters to type 'real'
                                               and suppress messages if any do not exist.

  The gettype command can dispaly or return the type of an existing variable.
  A 'string' variable may return type 'string' or 'flag'. A 'real'
  variable may return type 'real', 'delay', 'frequency', 'pulse', or 'integer'.
  The gettype command will return one or two values to a macro.  The first
  is an integer corresponding to the parameter type.  The second is the
  name of the parameter type.  The name can be used in commands such as
  settype and create.
  An optional "tree" argument may be given.
  The variable trees are 'current', 'global'. 'processed' and 'systemglobal'.
  The default is to search for the parameter in the 'current', 'global',
  and 'systemglobal' trees, in that order.

  The integer values and names of the parameter types are:

      0   "undefined"
      1   "real"
      2   "string"
      3   "delay"
      4   "flag"
      5   "frequency"
      6   "pulse"
      7   "integer"

  Usage -- gettype(name[,tree])<:index,name>

  Examples:

    gettype('dmm'):$int,$name     sets $int to 4 and $name to 'flag'
    gettype('pw'):$int,$name      sets $int to 6 and $name to 'pulse'
