
*******************************************************************************
setvalue	- 	set the value of any variable in a tree.
*******************************************************************************

  Usage -- setvalue(name,value [,index] [,tree])

  "setvalue" sets the value of any variable in a tree.  Note that usage
  of this command bypasses the normal range checking for parameter
  entry.  It also bypasses any action which would be invoked by the
  parameter's "protection bits".  Note that if the parameter entry
  normally causes an _parameter macro to be executed,  this too will
  be bypassed.
 
  Single elements of an arrayed parameter can be changed by suppling
  an optional "index".  "Index" defaults to 1. If an index of 0 is
  used, it will reset an arrayed parameter to have only a single
  element.
  The four variable trees are 'current', 'global' , 'processed',
  and 'systemglobal'.  The default tree is 'current'. 

  Calling setvalue on a parameter that does not exist will display an
  error and abort the calling macro. If a return value is used, as in

  setvalue('maybe',10,'processed'):$e

  then an error will not be displayed and the calling macro will
  not abort.

  

  Examples:

    setvalue('arraydim',128,'processed')
    setvalue('ni',128,'processed'):$e       // do not abort or issue message if ni is not present
                                            // in the processed tree
