********************************************************************************
 shdec - shaped observe excitation sequence with options for solvent
	 presaturation and shaped (multiselective) homodecoupling
********************************************************************************

 The "shdec" pulse sequence generates a shaped pulse on the observe
 channel using  the waveform generator. It also allows for programmed
 (e.g.: multiselective) homodecoupling, solvent presaturation using the
 observe transmitter, and an optional gradient pulse following the
 excitation pulse:

			_           ++  :.
	     satdly    / \          ||  :::.
        d1 +-------+  /   \         ||  :::::.
   --------+       +-/     \--------++--:::::::.	OBS
		      selpw   gt1   pw    at
			      +-+
			      | |
   ---------------------------+ +---------------	Z Gradient

 The shaped excitation pulse (selpw) is done with constant phase, the
 phase of the hard pulse (pw) follows the receiver phase.

 Paramaters:
    satmode	flag for presaturation using the observe transmitter
    satdly	duration of presaturation pulse; follows (but not part of)
		delay d1	
    satpwr	power level for presaturation pulse
    selpwr	power level for shaped excitation pulse
    selpw	pulse length of shaped excitation pulse
    gt1		duration of gradient pulse
    gzlvl1	power level for gradient pulse
    pw		duration of hard pulse following the gradient pulse.
    decflg	flag for programmed homodecoupling
    decseq	modulation pattern (*.DEC file in shapelib) for
		programmed homodecoupling
    decpwr	power level for programmed homodecoupling
    decres	tip angle resolution for programmed homodecoupling
    decdmf	modulation frequency (inverse 90 degrees pulse) with
		programmed homodecoupling
    dutyc	duty cycle for programmed homodecoupling during the
		acquisition time (<1.0)
