****************************************************
*                                                  *
*  sinesq   -   sinesq(<shift, npoints, domain>)   *
*                                                  *
****************************************************


This macro calculates the appropriate values either for sb and sbs
if domain='f2' or for sb1 and sbs1 if domain='f1' in order to
achieve a sine-squared window function with the following characteristics:


(1)	the starting value for the window function is given by
	sinesq(PI/shift) for shift > 0 or by 0 if shift <= 0 where
	shift is the first argument;

(2)	the second argument, npoints, specifies the number of
        real points that the window function spans; the value
	of the window function for subsequent points is 0; this
	argument must be greater than 0 and a multiple of 2; for
	'f1', MAXnpoints = 2*ni and for 'f2', MAXnpoints = np;

(3)	the third argument specifies which time domain the window
	function will act on; domain = 'f1' or 'f2';
