*******************************************************************************
spins<('key word'<,'options')>>	- Spin simulation
spsm('spinsystemname')          - Define Parameters for Spin Simulation
*******************************************************************************

spins('init')
  create all necessary parameters.

spins('system','spinsystemname') or spsm('spinsystemname')
  set up a specific spin system and create all necessary parameters.

spins or spins('calculate') or spins('calculate','options')
  calculate the energy levels and observed lines for a given spin system
  and it's parameters.

spins('iterate') or spins('iterate','options')
  iterate the spin system parameters to match the calculated spectrum to
  an experimental one. Iteration must be preceded by assignments between
  calculated transitions and measured lines. (See 'spinll', 'assign', 'dla').

spins('display') or dsp 
  calculate and display the resulting synthetic spectrum

'options'
	'transitions'	list transitions in their order
        'energy'	list energy levels
	'iteration'	list intermediate parameters during iteration

Multiple options should be enclosed in the same quotes. Example:
         spins('iterate','energy iteration')

See the Command and Reference manual for a more detailed explanation.

