
stepNOESY1D: DPFGSE-TOCSY-NOESY experiment for resonances difficult to excite
             selectively because of spectral overlap

FEATURES

  - Randomization of Magnetization prior to relaxation delay (G-90-G)
  - Solvent suppression during relaxation 
  - Windowed CLEAN-TOCSY (CLEAN-MLEV) to suppress ROESY peaks for big molecules
  - Zero quantum suppression for Z-filter

REFERENCES

  Original TOCSY sequence:
    A. Bax and D.G. Davis, J. Magn. Reson. 65, 355 (1985)
    M. Levitt, R. Freeman and T. Frenkiel, J. Magn. Reson. 47, 328 (1982)
  Windowed CLEAN MLEV17 spinlock:
    C. Griesinger, G. Otting and K. Wuethrich, J. Am. Chem. Soc. 110, 7870 (1988)
  Windowed CLEAN DIPSI2rc spinlock:
    J. Cavanagh and M. Rance, J. Magn. Reson. 96, 670 (1992)
  Zero quantum suppression:
    M.J. Trippleton and J. Keeler, Angew. Chem. Int. Ed. 42 3938-3941 (2003)

PARAMETERS

  NOE         :  y - NOE part switched on
  STEP        :  y - STEP (TOCSY) part switched on
  sspul       :  Flag for optional GRD-90-GRD steady state block
  d1          :  Relaxation delay
  hsglvl      :  Gradient power level for sspul
  hsgt        :  Gradient duration for sspul
  satmode     :  Flag for optional presaturation
  satdly      :  Presaturation delay
  satpwr      :  Presaturation power level
  satfrq      :  Presaturation frequency
  tpwr_cf     :  1H amplifier compression factor
  selfrq      :  Selective frequency (for selective 180)
  selpwrA     :  Selective power first inversion
  selpwA      :  Selective 180 deg pulse width first inversion
  selpwrB     :  Selective power 2nd inversion
  selpwB      :  Selective 180 deg pulse width 2nd inversion
  selshapeA   :  First Selective 180 shape
  selshapeB   :  2nd Selective 180 shape
  gzlvlA/B    :  Gradient levels during the DPFG echos
  gtA/B       :  Gradient times during the DPFG echos
  gstab       :  Recovery delay
  stepmix     :  Duration of the step-TOCSY mixing (the pulse width and the corresponding
               power level are internally calculated from strength and tpwr_cf)
  mixN        :  NOE mixing time
  stepslpw    :  Spin-lock pulse width
  stepslpwr   :  Spin-lock power level
  trim        :  Trim pulse preceeding xy-spinlock
  stepspinlock:  Amplitude of the B1 mixing field (Hz)
  zqfilt      :  Optional z-filter with simple ZQ suppression
