
******************************************************************************
svr_as(path) - save data in current exp as a REC data.
svr - save changes in currently loaded REC data to a new datdir inside the REC.
optionalFiles - select files to be stored in a record
******************************************************************************
  
svr_as and svr are used to save secured REC data for VnmrJ SE.

The argument path is a full path or a name, with or without the suffix .REC. 
If the argument is only a name, svfdir will be used to determine the full path.
The suffix .REC will be added if t is missing.

A REC data contains the following files (for example) 

acqfil/
acqfil/procpar
acqfil/text
acqfil/cmdHistory
acqfil/log
acqfil/curpar
acqfil/fid
acqfil/global
acqfil/checksum
acqfil/auditTrail
datdir001/
datdir001/phasefile
datdir001/procpar
datdir001/text
datdir001/cmdHistory
datdir001/curpar
datdir001/data
datdir001/global
datdir001/checksum
datdir001/auditTrail
....

The vnmrj admin interface is used to configure the default files saved in a record.
Select the Configure->Part11 Database... menu item.

The optionalFiles macro can be used to select additional files to be stored in a record.
If no processed data files are selected, then a datdir will not be saved in the record.
The "processed data" files are data, phasefile, fdf, and snapshot.
