
zCOSY: z-COSY with optional zero quantum suppression

REFERENCES

 H. Oschkinat, A. Pastore, P. Pfaendler, G. Bodenhausen;
             J.Magn. Reson. 69 559-566 (1986).
 M.J. Trippleton and J. Keeler;
             Angew. Chem. Int. Ed. 2003, 42 3938-3941.

PARAMETERS

  sspul     : Flag for optional GRD-90-GRD steady state block
  hsglvl    : Gradient power level for sspul
  hsgt      : Gradient duration for sspul
  satmode   : Flag for optional presaturation
  satdly    : Presaturation delay
  satpwr    : Presaturation power level
  flip1     : Flip angle of the 1st pulse (calculated from pw)
  flip2     : Flip angle of the 2nd and 3rd pulses (calculated from pw)
  antiz_flg : Run antiz-COSY
  gt1       : Homospoil gradient duration after mixing
  gzlvl1    : Homospoil gradient level after mixing
  Gzqfilt   : Optional flag for ZQ suppression
              The shaped pulses and gradient powers are calculated on-the-fly
  alt_grd   : Alternate gradient sign(s) in ZQ-filter on even transients

 The parameter swfactor controling the width of the frequency range to be
 refocused for the ZQ filter is defaulted to 9.0 in the pulse sequence (as
 recommended by the literature reference).
 On the other hand, for very wide spectral windows the inversion range is
 limited to 60 kHz to prevent dangerously high gradient levels to be set.
