
zTOCSY: Total correlation spectroscopy with isotropic mixing 

REFERENCES

  Original TOCSY sequence:
        A. Bax and D.G. Davis, J. Magn. Reson. 65, 355 (1985)
        M. Levitt, R. Freeman and T. Frenkiel, J. Magn. Reson. 47, 328 (1982)
  Windowed CLEAN MLEV17 spinlock:
        C. Griesinger, G. Otting and K. Wuethrich, J. Am. Chem. Soc. 110, 7870 (1988)
  Windowed CLEAN DIPSI2rc spinlock:
        J. Cavanagh and M. Rance, J. Magn. Reson. 96, 670 (1992)
  Zero quantum suppression:
        M.J. Trippleton and J. Keeler, Angew. Chem. Int. Ed. 42 3938-3941 (2003)

FEATURES

 - States-TPPI in F1
 - z-filter pulse with flipback option
 - Optional ZQ suppression (on by default)
		
PARAMETERS

  sspul  : selects magnetization randomization option
  mixT	 : TOCSY spinlock mixTing time
  slpatT : TOCSY pattern [mlev17,mlev17c,dipsi2,dipsi3]
  trim	 : Trim pulse preceeding spinlock
  slpwrT : Spin-lock power level
  slpwT	 : 90 deg pulse width for spinlock
  zfilt	 : Selects z-filter with flipback option
	   [Requires gradient and PFGflg=y]
