"macro archive_ONEPUL"
narchive_SEQUENCE4('onepul',

                   'PKM','archive_ONEPUL','dpspwHnut','dpspwHnull','dpspwXnut','dpspwXnull','dpsXref',

                   'dpsXonepul', 

                   'DpsC13adamNULL','DpsC13adamNUT','DpsC13adamREF','DpshpH1adamNULL','DpshpH1adamNUT',
                   'DpsmpH1adamNULL','DpsmpH1adamNUT',

                   'DpsXallNULL','DpsXallNUT','DpsXallREF','DpshpHallNULL','DpshpHallNUT',
                   'DpsmpHallNULL','DpsmpHallNUT',

                   'DMs1dSCANS','DpsXall1dSCANS',

                   'PKP',

                   'DpsC13adamNULL.xml','DpsC13adamNUT.xml','DpsC13adamREF.xml','DpshpH1adamNULL.xml',
                   'DpshpH1adamNUT.xml','DpsmpH1adamNULL.xml','DpsmpH1adamNULL.xml','DpsmpH1adamNUT.xml',

                   'DpsXallNULL.xml','DpsXallNUT.xml','DpsXallREF.xml','DpshpHallNULL.xml','DpshpHallNUT.xml',
                   'DpsmpHallNULL.xml','DpsmpHallNUT.xml',

                   'DMs1dSCANS.xml','DpsXall1dSCANS.xml')
