"macro makeallnewparams"
makenewparams('Babainad2d')
makenewparams('Br24q')
makenewparams('Br24')
makenewparams('C7inad2d')
makenewparams('C7inadwdumbogen2d')
makenewparams('C7inadwdumbot2d')
makenewparams('C7inadwpmlg2d')
makenewparams('Codex1d')
makenewparams('Cpcpmg1d')
makenewparams('Cpinad2d')
makenewparams('Dcp2tan3drad')
makenewparams('Dcptan3drad')
makenewparams('Dcptan3dspc5')
makenewparams('Dcptan')
makenewparams('Decorcptan2d')
makenewparams('Dipshftr12dfs')
makenewparams('Dipshftsr4dfs')
makenewparams('Exsy2d')
makenewparams('Fsredor')
makenewparams('Grad_profile')
makenewparams('Grad_rec')
makenewparams('Hahnecho1d')
makenewparams('Hahnechodfs1d')
makenewparams('Hetcordumbolgcp2d_1')
makenewparams('Hetcorlgcp2d_1')
makenewparams('Hetcorlgcp2d')
makenewparams('Hetcorlgcp2dxyr')
makenewparams('Hetcorpmlgcp2d_1')
makenewparams('Hetcorsamlgcp2d_1')
makenewparams('Hetcortancp2d')
makenewparams('Hssmall')
makenewparams('Ineptxyonepul')
makenewparams('Ineptxyrefonepul')
makenewparams('Ineptxyreftancp')
makenewparams('Ineptxytancp')
makenewparams('Jmascaco2d')
makenewparams('Jmascacoipap2d')
makenewparams('Jmascacosh2d')
makenewparams('Jmasnca2d')
makenewparams('Jmasnco2d')
makenewparams('Lgcp2d')
makenewparams('Lgcp')
makenewparams('Lgfmcp1d')
makenewparams('Masapt1d')
makenewparams('Mashmqc2d')
makenewparams('Mashsqc2d')
makenewparams('Moistlkcp')
makenewparams('Mqmas3q2d')
makenewparams('Mqmas3qdfs2d')
makenewparams('Mqmas3qdfs2spltse2d')
makenewparams('Mqmas3qdfsspltse2d')
makenewparams('Mqmas3qdfszf2d')
makenewparams('Mqmas3qfam2spltse2d')
makenewparams('Mqmas3qfamspltse2d')
makenewparams('Mqmas3qse2d')
makenewparams('Mqmas3qspltse2d')
makenewparams('Mqmas3qzf2d')
makenewparams('Mqmas5qzf2d')
makenewparams('Mqmas7qzf2d')
makenewparams('Mqmas9qzf2d')
makenewparams('Mrev8q')
makenewparams('Mrev8')
makenewparams('Onepulcpm')
makenewparams('Onepuldec2')
makenewparams('Onepuldfs')
makenewparams('Onepuldpth')
makenewparams('Onepulhspl')
makenewparams('Onepulhs')
makenewparams('Onepulref')
makenewparams('Onepulsfs')
makenewparams('Onepult1rho')
makenewparams('Onepultoss')
makenewparams('Onepul')
makenewparams('Onepulxyr')
makenewparams('Pboxonepul')
makenewparams('Phasetest')
makenewparams('Phtran')
makenewparams('Pisema2d')
makenewparams('Pisematest1')
makenewparams('Pisematest2')
makenewparams('Presto1cp')
makenewparams('Presto2cp')
makenewparams('Presto3cp')
makenewparams('Qcpmg1d')
makenewparams('Qcpmgsh1d')
makenewparams('R14inad2d')
makenewparams('R2inv1d')
makenewparams('Redor1onepul')
makenewparams('Redor1tancp')
makenewparams('Redor2onepul')
makenewparams('Redor2tancp')
makenewparams('Repdfs')
makenewparams('Rotorsynctest')
makenewparams('Sammy2d')
makenewparams('Sammymstlk2d')
makenewparams('Satrec1d')
makenewparams('Sc14inad2d')
makenewparams('Seac71d')
makenewparams('Shapedtwopul1d')
makenewparams('Spc5inad2d')
makenewparams('Spsmall')
makenewparams('Ssecho1d')
makenewparams('Stmas2d')
makenewparams('Stmasdqfse2d')
makenewparams('Stmasdqfspltse2d')
makenewparams('Stmasse2d1')
makenewparams('Stmasse2d2')
makenewparams('Stmasspltse2d1')
makenewparams('Stmasspltse2d2')
makenewparams('Stmaszf2d')
makenewparams('Super2d')
makenewparams('Swwhh4')
makenewparams('Tancp1dfprfdr')
makenewparams('Tancp1dptrfdr')
makenewparams('Tancp2drad')
makenewparams('Tancp2dspc5')
makenewparams('Tancpechocpmg1d')
makenewparams('Tancpht1rho')
makenewparams('Tancpht1')
makenewparams('Tancpxblew')
makenewparams('Tancpxcpm')
makenewparams('Tancpxdec2')
makenewparams('Tancpxdumbo')
makenewparams('Tancpxecho')
makenewparams('Tancpxedit')
makenewparams('Tancpxflip')
makenewparams('Tancpxfslg')
makenewparams('Tancpxhahnecho')
makenewparams('Tancpxidref')
makenewparams('Tancpxpips')
makenewparams('Tancpxpmlg')
makenewparams('Tancpxref')
makenewparams('Tancpxt1rho')
makenewparams('Tancpxt1')
makenewparams('Tancpxtoss5')
makenewparams('Tancpxtoss')
makenewparams('Tancpx')
makenewparams('Tancpxyr')
makenewparams('Trapdor1d')
makenewparams('Trapdorycpx')
makenewparams('Tunerp')
makenewparams('Twopul')
makenewparams('Wdumbo1d')
makenewparams('Wdumbogen1d')
makenewparams('Wdumbot1d')
makenewparams('Wdumboxmx1d')
makenewparams('Wiselgcp2d')
makenewparams('Wisetancp2d')
makenewparams('Wpmlg1d')
makenewparams('Wpmlg2d')
makenewparams('Wpmlgxmx1d1')
makenewparams('Wpmlgxmx1d')
makenewparams('Wsam1d')
makenewparams('Xmx')
makenewparams('Xx')
