"macro pboxonepul_pars"
// Set the Sequence Name

seqfil = 'pboxonepul'    
layout = seqfil
   
// Make and Replace Standard Parameters

//label1d
paramgroup('clearparamsinit')
paramgroup('params','',                                      'BPautonoisecheck','real',0.0,
                                                             'BPclassic','string','n',
                                                             'roff','frequency',0.0,
                                                             'axis','channel','p')
paramgroup('params','',                                      'chHtppm','channel','dec',
                                                             'chHspinal','channel','dec')

// Make ap and dg Displays for Standard Parameters

paramgroup('dgapinit')
paramgroup('apstring','SAMPLE','','',                        'date','string','',
                                                             'file','string','')
paramgroup('dgapstring','ACQUISTION','','',                  'sw','frequency',0,
                                                             'at','delay',0, 
                                                             'np','integer',0, 
                                                             'd1','delay',0,
                                                             'nt','integer',0,
                                                             'ct','integer',0,
                                                             'bs','integer',0,
                                                             'ss','integer',0,
                                                             'rd','pulse',0, 
                                                             'ad','pulse',0,
                                                             'ddrtc','pulse',0,
                                                             'rof3(rof3)','pulse',0,
                                                             'gain','integer',0,
                                                             'roff','frequency',0,
                                                             'temp','amplitude',0,
                                                             'srate','amplitude',0)
paramgroup('dgapstring','tppmH','(Hseq=\'tppm\')','',        'aHtppm','amplitude',2000.0,
                                                             'pwHtppm','pulse',8.0,
                                                             'phHtppm','phase',0.0)
paramgroup('dgapstring','spinalH','(Hseq=\'spinal\')','',    'aHspinal','amplitude',2000.0,
                                                             'pwHspinal','pulse',8.0,
                                                             'phHspinal','phase',0.0)

// Add New Parameters With/Without ap and dg Displays

paramgroup('params','',                                      'chAsft1','channel','obs')
paramgroup('all','sft1X','','',                              'wvAsft1','string','rsnob',                              
                                                             'aAsft1','amplitude',2000.0,
                                                             'dbAsft1','scaler',54.0,
                                                             'pwAsft1','pulse',20.0,
                                                             'tAsft1','time',100.0,
                                                             'stAsft1','scaler',0.5,
                                                             'ofAsft1','frequency',0.0,
                                                             'phAsft1','phase',0.0)

paramgroup('params','',                                      'chAsft2','channel','dec')
paramgroup('all','sft2X','','',                              'wvAsft2','string','rsnob',                              
                                                             'aAsft2','amplitude',2000.0,
                                                             'dbAsft2','scaler',54.0,
                                                             'pwAsft2','pulse',20.0,
                                                             'tAsft2','time',100.0,
                                                             'stAsft2','scaler',0.5,
                                                             'ofAsft2','frequency',0.0,
                                                             'phAsft2','phase',0.0)

paramgroup('params','',                                      'chAsft3','channel','dec2')
paramgroup('all','sft3X','','',                              'wvAsft3','string','rsnob',                              
                                                             'aAsft3','amplitude',2000.0,
                                                             'dbAsft3','scaler',54.0,
                                                             'pwAsft3','pulse',20.0,
                                                             'tAsft3','time',100.0,
                                                             'stAsft3','scaler',0.5,
                                                             'ofAsft3','frequency',0.0,
                                                             'phAsft3','phase',0.0)
// Make the dg2 Display Directly

setprotect('dg2','clear',4)
$dg2 = '1:OBSERVE:tn,sfrq:6,tof:1,tpwr:1,aX90:3,pwX90:1;'
$dg2=$dg2+'1:1D Acquisition:sw:1,np:0,at:7;'
$dg2=$dg2+'2:DECOUPLE:dn,dfrq:6,dof:1,dpwr:1,aH90:3,pwH90:1;'
$dg2=$dg2+'3:DECOUPLE2:dn2,dfrq2:6,dof2:1,dpwr2:1,aY90:3,pwY90:1;'
$dg2=$dg2+'4:DECOUPLE3:dn3,dfrq3:6,dof3:1,dpwr3:1,aZ90:3,pwZ90:1;'
dg2 = $dg2
setprotect('dg2','on',4)

// Call a Reset Macro

destroy('wrtp')
paramgroup('params','','wrtp','string','')

write('line3','Macro %s is complete\n',$0)


                                              
