Protocol: Dcptan3dspc5  Sequence: dcptan3dspc5.c  Apptype: solidseq1d

Description: 

   2D(3D) double CP with "X" f1 chemical shift (NCO/NCA), with 
   "X" SPC5 mixing, with TPPM or SPINAL decoupling. 

Parameter Groups

90H:  Module:  no
Sequence:  tancpx.c
Description:  Provides a 90-degree pulse on dec that can be used as a
              preparation pulse. Also used to store the dec calibration.
Parameters:  Channels Page
      aH90  - the amplitude of the pulse.
      pwH90 - the pulse length.

cpHY:  Module:  yes
Sequence:  dcptan.c
Description:  Implements constant, linear or tangent-ramped cross
              polarization from dec to dec2.
Parameters:  Sequence Page
       shHY - 'c', constant, 'l', linear and 't', tangent shape on the
              channel designated with
                      chHY.
       chHY - the variable-amplitude channel, 'fr' from or 'to', to.
       aHhy - median amplitude of the dec channel.
       aXhy - median amplitude of the dec2 channel.
       bHY - tangent curvature (>0 to 1.0e5).
       dHY - +/- amplitude width of the ramp. A negative width sets a
              ramp that starts high and decreases in amplitude.
       tHY - contact time.
       ofHY - overall offset on the variable channel.
       frHY = 'dec' - channel with the initial polarization (must be
              set - not shown).   
       toHY = 'dec2' - channel with the final polarization (must be set
              - not shown).
Implementation: CP hy = getcp("HY",0.0,0.0,0,1);
Underscore function: _cp_(hy,phHhx,phYhy); phHhx is the overall phase
              table for the H channel and phYhy is that for the Y channel.

cpYX:  Module:  yes
Sequence: dcptan.c
Description:  Implements constant, linear or tangent-ramped cross
              polarization from dec2 to obs.
Parameters:  Sequence Page
       shYX - 'c', constant, 'l', linear and 't', tangent shape on the
              channel designated with chYX.
       chYX - the variable-amplitude channel, 'fr' from or 'to', to.
       aYyx - median amplitude of the dec2 channel.
       aXyx - median amplitude of the obs channel.
       bYX - tangent curvature (>0 to 1.0e5).
       dYX - +/- amplitude width of the ramp. A negative width sets a
              ramp that starts high and decreases in amplitude.
       tYX - contact time.
       ofYX - overall offset on the variable channel.
       frYX = 'dec2' - channel with the initial polarization (must be
              set - not shown).
       toYX = 'obs' - channel with the final polarization (must be set
              - not shown).
Implementation: CP yx = getcp("YX",0.0,0.0,0,1);
Underscore function: _cp_(yx,phYyx,phXhx); phYyx is the overall phase
              table for the Y channel and phXhx is that for the X channel.

spc5X:  Module:  yes
Sequence:  inad2dspc5.c
Description:  Implements the SPC5 recoupling sequence on the obs
              channel.
Parameters:  Sequence Page
       aXspc5 - amplitude of obs pulses.
       pwXspc5 - 360-degree flip on obs.
       qXspc5 - SPC5 cycles represented in the .DEC file.
       ofXspc5 - overall frequency offset.
       chXspc5 = 'obs' must be set (not shown).
Implementation: MPSEQ spc5 = getspc5("spc5X",0,0.0,0.0,0,1);
Underscore functions: _MPSEQ functions.

Parameters:  Sequence Page
       tXmix - the mixing delay time. The delay may or may not be rotor
              synchronized, depending on the sequence.
       aHmix - amplitude of decoupling.

Hseq:  Module:  yes
Sequence:  tancpx.c
Description: Chooses SPINAL or TPPM decoupling on the dec channel
             during acquisition
Parameters:  Sequence Page - the Hspinal and Htppm groups overlap
       Hseq - chooses the decoupling sequence, TPPM or SPINAL.
Implementation:  DSEQ dec = getdseq("H");  The router implements
             getspinal() or gettppm().
Underscore functions: _dseqon(dec); runs _tppm(); or _spinal();_
             dseqoff(dec); runs decprgoff();

Hspinal:  Module:  yes
Sequence: tancpx.c 
Description:  Implements SPINAL decouping on the dec channel during
              acquisition.
Parameters:  Sequence Page
       aHspinal - amplitude of the dec channel.
       pwHspinal - approximate 180-degree flip angle on resonance.
       phHspinal - +/- small angle phase. SPINAL64 is implemented
              with phases = +/- 1.0, +/- 1.5 and +/-2.0 times
              phHspinal.
       chHspinal = 'dec' must be set (not shown).
Implementation: SPINAL dec = getspinal("H"); or DSEQ dec =
              getdseq("H");
Underscore functions: _spinal(dec); and decprgoff(); or
             _dseqon(dec); and _dseqoff(dec);

Htppm:  Module:  yes
Sequence:  tancpx.c
Description:  Implements TPPM decoupling on the dec channel during
              acquisition.
Parameters:  Sequence Page
       aHtppm - amplitude of the dec channel.
       pwHtppm - approximate 180-degree flip angle on resonance.
       phHtppm - +/- small angle phase. TPPM is implemented
              with phases = +/- 1.0 times phHtppm for alternating
              pulses.
       chHtppm = 'dec' must be set (not shown).
Implementation: TPPM dec = gettppm("H"); or DSEQ dec = getdseq("H");
Underscore functions: _tppmon(dec); and decprgoff(); or _dseqon(dec);
              and _dseqoff(dec);
