"macro STplotstarsj"
jexp(data_exp)
clear(2)
dtext
pltext
jexp(4)
$spplot=sp $wpplot=wp
jexp(addsubexp)
$wc=wc $sc=sc $vp=vp $sp=sp $wp=wp $intmod=intmod
intmod='off'
f full
sp=$spplot wp=$wpplot
exists('downsamp','parameter'):$downsamp
if ($downsamp>0.0) then 
   on('downsamp'):$downsampon
   if ($downsampon >0.0) then 
      sp=sp*downsamp
      wp=wp*downsamp
   endif
endif
wc=180 sc=0
vp=0
dssn dscale
pl pscale
wc=$wc sc=$sc vp=$vp sp=$sp wp=$wp intmod=$intmod
write('plotter',70,10,'SPECTRUM')
write('graphics',70,10,'SPECTRUM')
jexp(4)
$wc=wc $sc=sc $vp=vp $sp=sp $wp=wp $intmod=intmod
intmod='off'
f full
sp=$spplot wp=$wpplot
wc=180 sc=0
vp=70
dssn dscale
pl pscale
write('plotter',70,80,'SIMULATION')
write('graphics',70,80,'SIMULATION')
wc=$wc sc=$sc vp=$vp wp=$wp sp=$sp intmod=$intmod

$offsetx=5
$offsety=20

write('plotter',0+$offsetx,42+$offsety,'SIMULATION PARAMETERS')
write('plotter',0+$offsetx,39+$offsety,'viso  = %7.3f ppm', viso/sfrq)
write('plotter',0+$offsetx,36+$offsety,'csa   = %7.3f ppm', csa)
write('plotter',0+$offsetx,33+$offsety,'etas  = %7.5f', etas)
write('plotter',0+$offsetx,30+$offsety,'cq    = %7.3f MHz', cq)
write('plotter',0+$offsetx,27+$offsety,'etaq  = %7.5f', etaq)
write('plotter',0+$offsetx,24+$offsety,'            ')
write('plotter',0+$offsetx,21+$offsety,'viso2 = %7.3f ppm', viso2/sfrq)
write('plotter',0+$offsetx,18+$offsety,'csa2  = %7.3f ppm', csa2)
write('plotter',0+$offsetx,15+$offsety,'etas2 = %7.5f', etas2)
write('plotter',0+$offsetx,12+$offsety,'cq2   = %7.3f MHz', cq2)
write('plotter',0+$offsetx,9+$offsety,'etaq2 = %7.5f', etaq2)
write('plotter',0+$offsetx,6+$offsety,'            ')
write('plotter',0+$offsetx,3+$offsety,'ival  = %7.1f', ival)
write('plotter',0+$offsetx,0+$offsety,'mval  = %7.1f', mval)
write('plotter',0+$offsetx,-3+$offsety,'amp    = %7.3f', amp)
write('plotter',0+$offsetx,-6+$offsety,'amp2   = %7.3f', amp2)
write('plotter',0+$offsetx,-9+$offsety,'np     = %7.0f points', np)
write('plotter',0+$offsetx,-12+$offsety,'ant    = %7.0f angles', ant)

on('gf'):$gfon
if ($gfon>0.5) then 
   write('plotter',0+$offsetx,-15+$offsety,'gf  = %7.4f', gf)
endif
on('lb'):$lbon
if ($lbon>0.5) then 
   write('plotter',0+$offsetx,-18+$offsety,'lb  = %7.4f', lb)
endif
exists('mqf1val','parameter'):$mqf1val
if ($mqf1val>0.5) then 
   write('plotter',0+$offsetx,-21+$offsety,'isotropic shift  = %7.1f ppm', mqf1val)
endif
exists('mqf1val2','parameter'):$mqf1val
if ($mqf1val>0.5) then 
   write('plotter',0+$offsetx,-24+$offsety,'isotropic shift  = %7.1f ppm', mqf1val)
endif

write('plotter',220,170,'STARS DATA ANALYSIS')
write('line3','Plot Complete')
