"macro mvstars"
"H. Bildsoe, Aarhus Univerity, Denmark, march 1995"
"mvstars(<from_exp,>to_exp) - move stars parameters between experiments"

"get current experiment number"

length(curexp):$len
substr(curexp,$len,1):$cur
if $#=1 then
  length(curexp):$len
  substr(curexp,$len,1):$from
  $to=$1
  else if $#=2 then
  $from=$1 $to=$2
  else
  write('error','Useage: mvstars(<from_exp,>to_exp)')
  abort
  endif endif

jexp($from)
$csaon=csaon
$csa=csa $csa2=csa2 $etas=etas $etas2=etas2
$cq=cq $cq2=cq2 $etaq=etaq $etaq2=etaq2
$viso=viso $viso2=viso2
$amp=amp $amp2=amp2
$psi=psi $psi2=psi2 $chi=chi $chi2=chi2 $xi=xi $xi2=xi2
on('soqe'):$sqon on('soqe2'):$sq2on on('vi'):$vion on('vi2'):$vi2on
$soqe=soqe $soqe2=soqe2 $vi=vi $vi2=vi2
$sites=sites $spsim=spsim $swsim=swsim $rfw=rfw $ant=ant $ival=ival $mval=mval
on('lb'):$lbon on('gf'):$gfon
$lb=lb $gf=gf $theta=theta $srate=srate $np=np $fn=fn
$pulse='' $lshp='' $iter=''
$pulse=pulse $lshp=lshp $iter=iter
jexp($to)
dgstars
sites=$sites spsim=$spsim swsim=$swsim rfw=$rfw ant=$ant ival=$ival mval=$mval
csa=$csa csa2=$csa2 etas=$etas etas2=$etas2
csaon=$csaon
if (not csaon) then csa='n' csa2='n' endif
cq=$cq cq2=$cq2 etaq=$etaq etaq2=$etaq2
viso=$viso viso2=$viso2
setvalue('amp',$amp) amp2=$amp2
psi=$psi psi2=$psi2 chi=$chi chi2=$chi2 xi=$xi xi2=$xi2
soqe=$soqe soqe2=$soqe2 vi=$vi vi2=$vi2
if (not $sqon) then soqe='n' endif 
if (not $sq2on) then soqe2='n' endif 
if (not $vion) then vi='n' endif
if (not $vi2on) then vi2='n' endif
lb=$lb gf=$gf theta=$theta srate=$srate np=$np fn=$fn
if (not $lbon) then lb='n' endif
if (not $gfon) then gf='n' endif
pulse=$pulse lshp=$lshp iter=$iter

"return to original experiment"
jexp($cur)
