"macro H1_Lshp_nonspin_plot"
"Agilent H1_Lshp_nonspin_plot"
"Plotting macro for non-spinning lineshape data"

//increase vp so that logo can be plotted
if (vp<12) then vp=12 endif

//Three views of non-spinning lineshape are required
//first view
nm
full
vs=10k
sp=-125
wp=250

//First page
$plotoptions='logo','header','pl','axis','comments_page1'
doplotoption($plotoptions)

//second view
vs=150
setpage('newpage')
$plotoptions='logo','header','pl','axis','comments_page1'
doplotoption($plotoptions)

//third view
vs=160
sp=-30
wp=60
setpage('newpage')
$plotoptions='logo','header','pl','axis','comments_page1'
doplotoption($plotoptions)

//Now parameters
setpage('newpage')
$plotoptions='logo','header','miniplall','params'
doplotoption($plotoptions)

wexp:$e
if ($e) then
  page
endif
