"macro VPdefaultshims"
//Probe is writeable
getProbePath(probe_,'alert'):$e,$probepath,$rw
if ($rw<0.5) then write('error','Cannot update probe %s',probe_) endif
substr($probepath,'dirname'):$probedir
substr($probedir,'dirname'):$probedirdir
substr($probedirdir,'dirname'):$sysdir
$shimdir=$sysdir+'/shims'
exists($shimdir,'directory'):$direx
if not ($direx) then mkdir($shimdir) endif
$time=''
systemtime('%Y_%m_%d'):$date
$shimfile=probe+'_'+solvent+'_'+$date
svs($shimfile+'/'+$shimdir)
setparams('defaultshims',$shimfile,'Probe')
write('line3','Default shims in probe file %s updated to %s',probe_,$shimfile)

